#pragma once
#include "HSLStrLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLSeqLib.hsl"
#include "Hamilton DriverTools\\Hamilton DriverTools.hsl"
#include "HSLFilLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "Hamilton PH Module\\Hamilton pH Module.hsl"
#include "Hamilton PH Module\\Hamilton pH Station Washer Module.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "Hamilton PH Module\\Hamilton pH Station Dryer Module.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HAMILTON_PH_MODULE_CONTROLLER {
  sequence _seqGripper;
  variable _intTransportChannel;
  sequence _seqWasher;
  variable _intWasherModuleID;
  variable _intDryerModuleID;
  variable _fltOpenWidth;
  variable _fltGripHeight;
  variable _fltGripWidth;
  variable _intWashCycles;
  sequence _seqDryer;
  variable _strPathMeasurement;
  variable _strPathCalibration;
  variable _intDryCycles;
  variable _intDryWaitTime;
  variable _fltProbeOffsetY;
  variable _strProbePattern;
  variable _intTraceLevel(2);
  sequence _seqModule;
  variable _strSerialNumber;
  variable _strLibraryName("Hamilton pH Module Controller");
  function Calibrate( device & ML_STAR, variable i_intModuleID, sequence i_seqModule, sequence i_seqCalibrationPosition_1, sequence i_seqCalibrationPosition_2, sequence i_seqReferencePosition, variable i_intCalibrationTime, variable i_intMeasureTime, variable i_fltMeasureHeight, variable i_fltpH_Value_Calibration_Solution_1, variable i_fltpH_Value_Calibration_Solution_2, variable i_fltpH_Value_Reference_Solution, variable i_fltTemperature_Calibration_Solution_1, variable i_fltTemperature_Calibration_Solution_2, variable i_fltTemperature_Reference_Solution, variable i_blnCalibrateDynamically, variable & o_arrintCalibration_Slope_Ratios[], variable & o_arrfltpH_Values_Reference_Solution[] ) variable ;
  function Dry( device & ML_STAR, variable i_intModuleID ) variable ;
  function EnableExtendedLog(  ) void ;
  function Initialize( device & ML_STAR, variable i_intPortNumber, variable & o_fltDefaultTemperature, variable & o_intModuleID ) variable ;
  function LastUsedConfigurationLoad( variable & o_intBluetoothPort, variable & o_intNumberOfWashCycles, variable & o_intNumberOfDryCycles, variable & o_intDryTime ) void ;
  function LastUsedConfigurationSave( variable i_intBluetoothPort, variable i_intNumberOfWashCycles, variable i_intNumberOfDryCycles, variable i_intDryTime ) void ;
  function Measure( device & ML_STAR, variable i_intModuleID, sequence i_seqMeasurement, variable i_fltMeasureHeight, variable i_strProbePattern, variable i_intMeasureTime, variable i_fltTemperature, variable & o_arrfltpHValues[] ) variable ;
  function MeasureCycle( device & ML_STAR, variable i_intModuleID, sequence i_seqMeasurement, variable i_fltMeasureHeight, variable i_strProbePattern, variable i_intMeasureTime, variable i_fltTemperature, variable & o_arrfltpHValues[] ) variable ;
  function ParkModule( device & ML_STAR, variable i_intModuleID, sequence i_seqModule ) variable ;
  function PickupModule( device & ML_STAR, variable i_intModuleID, sequence & i_seqModule ) variable ;
  function RequestBatteryData( variable i_intModuleID, variable & o_strReplacementDate, variable & o_intChargeCounter, variable & o_intActualCharge ) variable ;
  function SetParameter( device & ML_STAR, sequence i_seqGripperPosition, sequence i_seqWashPosition, sequence i_seqDryPosition, variable i_intTransportChannel, variable i_intWashCycles, variable i_intDryCycles, variable i_intDryWaitTime ) variable ;
  function Terminate( variable i_intModuleID ) variable ;
  function Wash( device & ML_STAR, variable i_intModuleID ) variable ;
  private function _CreateModulePosition( device & ML_STAR, sequence i_seqTargetPosition, variable i_fltDistanceFromBottom, variable i_blnShiftPositionByProbe, variable i_strPositionName, variable i_strCallingFunctionName, sequence & o_seqModulePosition ) variable ;
  private function _Dry( device & ML_STAR ) variable ;
  private function _LoadConfiguration( variable i_intCOMPortModule, variable & o_blnSimulationModeModule, variable & o_strModuleNameWasher, variable & o_blnSimulationModeWasher, variable & o_strModuleNameDryer, variable & o_blnSimulationModeDryer, variable & o_fltDefaultTemperature, variable & o_strProbePattern, variable & o_strPathCalibration, variable & o_strPathMeasurement, variable & o_strFilename ) variable ;
  function _Measure( device & ML_STAR, variable i_intModuleID, sequence i_seqMeasurement, variable i_blnShiftPositionByProbe, variable i_fltMeasureHeight, variable i_strProbePattern, variable i_intMeasureTime, variable i_fltTemperature, variable i_strCallingFunctionName, variable & o_arrfltpHValues[] ) variable ;
  private function _RequestBatteryData( variable i_intModuleID, variable i_strCallingFunctionName, variable i_intLowerLimit, variable & o_strReplacementDate, variable & o_intChargeLevel, variable & o_intChargeCounter ) variable ;
  private function _SuccessOrMoveBack( device & ML_STAR, variable i_blnSuccess, variable i_intModuleID, variable i_strFunctionName ) variable ;
  private function _Wash( device & ML_STAR ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function MeasureCycle( device & ML_STAR, variable i_intModuleID, sequence i_seqMeasurement, variable i_fltMeasureHeight, variable i_strProbePattern, variable i_intMeasureTime, variable i_fltTemperature, variable & o_arrfltpHValues[] ) variable {
    private variable strTrace;
    private variable strFunctionName;
    private variable blnSuccess;
    private variable blnMeasureSuccess;
    private variable strError;
    o_arrfltpHValues.SetSize( 0);
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    blnSuccess = Hamilton_DriverTools::CheckFloatRange(i_fltMeasureHeight, "i_fltMeasureHeight", 0.0, 100.0, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intMeasureTime, "i_intMeasureTime", 1, 600, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat4("i_fltMeasureHeight = ", i_fltMeasureHeight, ", i_strProbePattern = ", i_strProbePattern);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    o_arrfltpHValues.SetSize(4);
    blnMeasureSuccess = _Measure(ML_STAR, i_intModuleID, i_seqMeasurement, ASWGLOBAL::BOOL::TRUE, i_fltMeasureHeight, i_strProbePattern, i_intMeasureTime, i_fltTemperature, strFunctionName, o_arrfltpHValues);
    blnSuccess = _Wash(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _Dry(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnMeasureSuccess = _SuccessOrMoveBack(ML_STAR, blnMeasureSuccess, i_intModuleID, strFunctionName);
    if (blnMeasureSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_pH_Module::GetLastError(i_intModuleID, strError);
      strTrace = StrConcat4("Module reported the following error: '", strError, "'", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    Hamilton_DriverTools::StatusTraceArray(Hamilton_DriverTools::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, o_arrfltpHValues, "o_arrfltpHValues", strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Terminate( variable i_intModuleID ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    blnSuccess = Hamilton_pH_Module::Terminate(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to terminate pH module", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _CreateModulePosition( device & ML_STAR, sequence i_seqTargetPosition, variable i_fltDistanceFromBottom, variable i_blnShiftPositionByProbe, variable i_strPositionName, variable i_strCallingFunctionName, sequence & o_seqModulePosition ) variable {
    private variable blnSuccess;
    private variable strTrace;
    private variable strLabwareID;
    private variable intSuccess;
    private variable strPositionID;
    private variable fltModulePosR;
    private variable fltModulePosX;
    private variable fltModulePosY;
    private variable fltModulePosZ;
    private sequence _seqTemporaryPosition;
    private variable strConfigFile;
    private variable strFunctionName;
    { sequence __temp; o_seqModulePosition = __temp; }
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    DevRemoveLabware(ML_STAR, i_strPositionName);
    strConfigFile = FilGetLabwarePath();
    strConfigFile = StrConcat2(strConfigFile, "\\Hamilton pH Module\\Ham_1_NB_Mod_pHModule.rck");
    intSuccess = DevAddLabware(ML_STAR, i_strPositionName, strConfigFile, 100, 100, 100, 0);
    if (intSuccess == 0)
    {
      strTrace = StrConcat4("Unable to create labware '", i_strPositionName, "' on the deck layout !", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    SeqAdd(_seqTemporaryPosition, i_strPositionName, "1");
    SeqResetSequenceIndexes(_seqTemporaryPosition);
    strLabwareID = SeqGetLabwareId(i_seqTargetPosition);
    strPositionID = SeqGetPositionId(i_seqTargetPosition);
    intSuccess = DevGetLabwarePositionEx(ML_STAR, strLabwareID, strPositionID, fltModulePosX, fltModulePosY, fltModulePosZ, fltModulePosR);
    if (intSuccess == 0)
    {
      strTrace = StrConcat4("Unable to retrieve position for labware '", strLabwareID, "' !", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    fltModulePosX = fltModulePosX - 35.5;
    fltModulePosY = fltModulePosY - 31;
    if (i_blnShiftPositionByProbe == ASWGLOBAL::BOOL::TRUE)
    {
      fltModulePosY = fltModulePosY + _fltProbeOffsetY;
    }
    fltModulePosZ = fltModulePosZ + 1.0;
    fltModulePosZ = fltModulePosZ + i_fltDistanceFromBottom;
    blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, i_strPositionName, fltModulePosX, fltModulePosY, fltModulePosZ, fltModulePosR);
    SeqCopySequence(o_seqModulePosition, _seqTemporaryPosition);
    SeqResetSequenceIndexes(o_seqModulePosition);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Calibrate( device & ML_STAR, variable i_intModuleID, sequence i_seqModule, sequence i_seqCalibrationPosition_1, sequence i_seqCalibrationPosition_2, sequence i_seqReferencePosition, variable i_intCalibrationTime, variable i_intMeasureTime, variable i_fltMeasureHeight, variable i_fltpH_Value_Calibration_Solution_1, variable i_fltpH_Value_Calibration_Solution_2, variable i_fltpH_Value_Reference_Solution, variable i_fltTemperature_Calibration_Solution_1, variable i_fltTemperature_Calibration_Solution_2, variable i_fltTemperature_Reference_Solution, variable i_blnCalibrateDynamically, variable & o_arrintCalibration_Slope_Ratios[], variable & o_arrfltpH_Values_Reference_Solution[] ) variable {
    private variable strTrace;
    private variable blnSuccess;
    private sequence trpCalibration_1;
    private sequence trpCalibration_2;
    private variable blnCalibrationSuccess;
    private variable fltCalibrationSlope;
    private variable fltCalibrationTemperature;
    private variable intLoopCounterActualProbe;
    private variable fltCalibrationOffset;
    private variable intCutPosition;
    private variable strSingleProbe;
    private file hdlCalibrationFile;
    private variable strDate;
    private variable strTime;
    private variable intMeasurementCounter_Probe_1;
    private variable intMeasurementCounter_Probe_2;
    private variable intMeasurementCounter_Probe_3;
    private variable intMeasurementCounter_Probe_4;
    private variable intCalibrationSlopeRatio;
    private variable blnMeasureSuccess;
    private timer hdlWaitForSettling;
    private variable strError;
    private variable strSheetName;
    private variable intMeasurementCounter_Probe;
    private variable intChargeLevel;
    private variable intChargeCounter;
    private variable intUserChoice;
    private dialog customDialog_1;
    private variable strProbeReplacementDate;
    private variable strBatteryReplacementDate;
    private dialog customDialog_2;
    private variable strFunctionName;
    private variable fltpHHighValue;
    private variable fltpHHighVoltage;
    private variable fltpHLowValue;
    private variable fltpHLowVoltage;
    private variable fltpHValueMeasured;
    o_arrintCalibration_Slope_Ratios.SetSize( 0);
    o_arrfltpH_Values_Reference_Solution.SetSize( 0);
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    blnSuccess = Hamilton_DriverTools::CheckFloatRange(i_fltMeasureHeight, "i_fltMeasureHeight", 0.0, 100.0, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckFloatRange(i_fltpH_Value_Reference_Solution, "i_fltpH_Value_Reference_Solution", 0.0, 14.0, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intCalibrationTime, "i_intCalibrationTime", 1, 600, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intMeasureTime, "i_intMeasureTime", 1, 600, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat12("i_intCalibrationTime = ", i_intCalibrationTime, ", i_fltMeasureHeight = ", i_fltMeasureHeight, ", i_fltpH_Value_Calibration_Solution_1 = ", i_fltpH_Value_Calibration_Solution_1, ", i_fltpH_Value_Calibration_Solution_2 = ", i_fltpH_Value_Calibration_Solution_2, ", i_fltpH_Value_Reference_Solution = ", i_fltpH_Value_Reference_Solution, ", i_fltTemperature_Calibration_Solution_1 = ", i_fltTemperature_Calibration_Solution_1);
    strTrace = StrConcat8(strTrace, ", i_fltTemperature_Calibration_Solution_2 = ", i_fltTemperature_Calibration_Solution_2, ", i_fltTemperature_Reference_Solution = ", i_fltTemperature_Reference_Solution, "", "", "");
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    o_arrfltpH_Values_Reference_Solution.SetSize(4);
    o_arrintCalibration_Slope_Ratios.SetSize(4);
    blnSuccess = _CreateModulePosition(ML_STAR, i_seqCalibrationPosition_1, i_fltMeasureHeight, ASWGLOBAL::BOOL::FALSE, "CalibrationPosition_1", strFunctionName, trpCalibration_1);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _CreateModulePosition(ML_STAR, i_seqCalibrationPosition_2, i_fltMeasureHeight, ASWGLOBAL::BOOL::FALSE, "CalibrationPosition_2", strFunctionName, trpCalibration_2);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    SeqCopySequence(_seqModule, i_seqModule);
    blnSuccess = _RequestBatteryData(i_intModuleID, strFunctionName, 3, strBatteryReplacementDate, intChargeLevel, intChargeCounter);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "textBlock1.Text", strBatteryReplacementDate );
    customDialog_2.SetCustomDialogProperty( "textBlock4.Text", intChargeCounter );
    customDialog_2.SetCustomDialogProperty( "textBlock8.Text", intChargeLevel );
    customDialog_2.ShowCustomDialog();
    intUserChoice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (intUserChoice == ASWGLOBAL::DIALOG::CANCEL)
    {
      blnSuccess = _SuccessOrMoveBack(ML_STAR, ASWGLOBAL::BOOL::FALSE, i_intModuleID, strFunctionName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    if (i_blnCalibrateDynamically == ASWGLOBAL::BOOL::FALSE)
    {
      if( 0 == hdlWaitForSettling.SetTimer(i_intCalibrationTime) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == hdlWaitForSettling.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_blnCalibrateDynamically == ASWGLOBAL::BOOL::TRUE)
    {
      blnCalibrationSuccess = Hamilton_pH_Module::CalibrateDynamically(i_intModuleID, Hamilton_pH_Module::Calibration::LowerLevel, 1, i_intCalibrationTime, i_fltpH_Value_Calibration_Solution_1, i_fltTemperature_Calibration_Solution_1, _strProbePattern);
    }
    else
    {
      blnCalibrationSuccess = Hamilton_pH_Module::Calibrate(i_intModuleID, Hamilton_pH_Module::Calibration::LowerLevel, i_fltpH_Value_Calibration_Solution_1, i_fltTemperature_Calibration_Solution_1, _strProbePattern);
    }
    Hamilton_pH_Module::Sleep(i_intModuleID);
    blnSuccess = _Wash(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _Dry(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnCalibrationSuccess = _SuccessOrMoveBack(ML_STAR, blnCalibrationSuccess, i_intModuleID, strFunctionName);
    if (blnCalibrationSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    if (i_blnCalibrateDynamically == ASWGLOBAL::BOOL::FALSE)
    {
      if( 0 == hdlWaitForSettling.SetTimer(i_intCalibrationTime) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == hdlWaitForSettling.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnCalibrationSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (i_blnCalibrateDynamically == ASWGLOBAL::BOOL::TRUE)
    {
      blnCalibrationSuccess = Hamilton_pH_Module::CalibrateDynamically(i_intModuleID, Hamilton_pH_Module::Calibration::UpperLevel, 1, i_intCalibrationTime, i_fltpH_Value_Calibration_Solution_2, i_fltTemperature_Calibration_Solution_2, _strProbePattern);
    }
    else
    {
      blnCalibrationSuccess = Hamilton_pH_Module::Calibrate(i_intModuleID, Hamilton_pH_Module::Calibration::UpperLevel, i_fltpH_Value_Calibration_Solution_2, i_fltTemperature_Calibration_Solution_2, _strProbePattern);
    }
    Hamilton_pH_Module::Sleep(i_intModuleID);
    blnSuccess = _Wash(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _Dry(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnCalibrationSuccess = _SuccessOrMoveBack(ML_STAR, blnCalibrationSuccess, i_intModuleID, strFunctionName);
    if (blnCalibrationSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnMeasureSuccess = _Measure(ML_STAR, i_intModuleID, i_seqReferencePosition, ASWGLOBAL::BOOL::FALSE, i_fltMeasureHeight, _strProbePattern, i_intMeasureTime, i_fltTemperature_Reference_Solution, strFunctionName, o_arrfltpH_Values_Reference_Solution);
    blnSuccess = _Wash(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _Dry(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnMeasureSuccess = _SuccessOrMoveBack(ML_STAR, blnMeasureSuccess, i_intModuleID, strFunctionName);
    if (blnMeasureSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_pH_Module::GetLastError(i_intModuleID, strError);
      strTrace = StrConcat4("Module reported the following error: '", strError, "'", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _RequestBatteryData(i_intModuleID, strFunctionName, 1, strBatteryReplacementDate, intChargeLevel, intChargeCounter);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    Hamilton_pH_Module::WakeUp(i_intModuleID);
    blnSuccess = Hamilton_pH_Module::RequestProbeData(i_intModuleID, strProbeReplacementDate, intMeasurementCounter_Probe_1, intMeasurementCounter_Probe_2, intMeasurementCounter_Probe_3, intMeasurementCounter_Probe_4);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to retrieve probe data", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    {
      for(intLoopCounterActualProbe = 0; intLoopCounterActualProbe < 4;)
      {
        intLoopCounterActualProbe = intLoopCounterActualProbe + 1;
        intCutPosition = intLoopCounterActualProbe - 1;
        strSingleProbe = StrMid(_strProbePattern, intCutPosition, 1);
        if (strSingleProbe == "1")
        {
          blnSuccess = Hamilton_pH_Module::RequestCalibrationValues(i_intModuleID, intLoopCounterActualProbe, fltpHLowValue, fltpHLowVoltage, fltpHHighValue, fltpHHighVoltage, fltCalibrationTemperature, fltCalibrationOffset, fltCalibrationSlope, intCalibrationSlopeRatio);
          if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to retrieve calibration values", strFunctionName, _intTraceLevel, _strLibraryName);
            return (ASWGLOBAL::BOOL::FALSE);
          }
          o_arrintCalibration_Slope_Ratios[ intLoopCounterActualProbe -1] = intCalibrationSlopeRatio;
          strSheetName = StrConcat2("Probe_", intLoopCounterActualProbe);
          fltpHValueMeasured = o_arrfltpH_Values_Reference_Solution.ElementAt( intLoopCounterActualProbe -1);
          strDate = TimGetFormattedDate("%Y.%m.%d");
          strTime = TimGetFormattedTime("");
          if(intLoopCounterActualProbe == 1) intMeasurementCounter_Probe = intMeasurementCounter_Probe_1;
          if(intLoopCounterActualProbe == 2) intMeasurementCounter_Probe = intMeasurementCounter_Probe_2;
          if(intLoopCounterActualProbe == 3) intMeasurementCounter_Probe = intMeasurementCounter_Probe_3;
          if(intLoopCounterActualProbe == 4) intMeasurementCounter_Probe = intMeasurementCounter_Probe_4;
          onerror goto errLabel_3 ;
          err.Clear();
          hdlCalibrationFile.AddField("Module_Info", _strSerialNumber, hslString, 255);
          hdlCalibrationFile.AddField("Date", strDate, hslString, 255);
          hdlCalibrationFile.AddField("Time", strTime, hslString, 255);
          hdlCalibrationFile.AddField("pH_Low", fltpHLowValue, hslFloat);
          hdlCalibrationFile.AddField("Voltage_Low", fltpHLowVoltage, hslFloat);
          hdlCalibrationFile.AddField("pH_High", fltpHHighValue, hslFloat);
          hdlCalibrationFile.AddField("Voltage_High", fltpHHighVoltage, hslFloat);
          hdlCalibrationFile.AddField("Temperature", fltCalibrationTemperature, hslFloat);
          hdlCalibrationFile.AddField("pH_Reference", i_fltpH_Value_Reference_Solution, hslFloat);
          hdlCalibrationFile.AddField("pH_Measured", fltpHValueMeasured, hslFloat);
          hdlCalibrationFile.AddField("Offset", fltCalibrationOffset, hslFloat);
          hdlCalibrationFile.AddField("Slope", fltCalibrationSlope, hslFloat);
          hdlCalibrationFile.AddField("Slope_Ratio", intCalibrationSlopeRatio, hslFloat);
          hdlCalibrationFile.AddField("Measurement_Counter", intMeasurementCounter_Probe, hslInteger);
          if( 0 == hdlCalibrationFile.Open(_strPathCalibration + " " + strSheetName, hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strPathCalibration, "HxMetEdCompCmd");
          }
          if( 0 == hdlCalibrationFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != hdlCalibrationFile.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          hdlCalibrationFile.RemoveFields();
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            strTrace = StrConcat4("Unable to write configuration values to '", _strPathCalibration, "'!", "");
            Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
            return (ASWGLOBAL::BOOL::FALSE);
          }   /* end if from skip handler if no error */
        }
      }
    }
    Hamilton_DriverTools::StatusTraceArray(TRACELEVEL::ACTION::PROGRESS, TRACE_LEVEL_DEBUG, o_arrintCalibration_Slope_Ratios, "Calibration slope ratio", strFunctionName, _intTraceLevel, _strLibraryName);
    Hamilton_DriverTools::StatusTraceArray(TRACELEVEL::ACTION::PROGRESS, TRACE_LEVEL_DEBUG, o_arrfltpH_Values_Reference_Solution, "pH value reference solution", strFunctionName, _intTraceLevel, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock1.Text", strBatteryReplacementDate );
    customDialog_1.SetCustomDialogProperty( "textBlock4.Text", intChargeCounter );
    customDialog_1.SetCustomDialogProperty( "textBlock8.Text", intChargeLevel );
    customDialog_1.ShowCustomDialog();
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function SetParameter( device & ML_STAR, sequence i_seqGripperPosition, sequence i_seqWashPosition, sequence i_seqDryPosition, variable i_intTransportChannel, variable i_intWashCycles, variable i_intDryCycles, variable i_intDryWaitTime ) variable {
    private variable strTrace;
    private variable strFunctionName;
    private variable intMaxFrontChannel;
    private variable blnSuccess;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    _intTraceLevel = TRACELEVEL::GetTraceLevel();
    intMaxFrontChannel = DevGetCfgValueWithKey(ML_STAR, 1);
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intTransportChannel, "i_intTransportChannel", 2, intMaxFrontChannel, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intDryCycles, "i_intDryCycles", 1, 5, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intDryWaitTime, "i_intDryWaitTime", 0, 5, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat8("'i_intTransportChannel = ", i_intTransportChannel, ", i_intWashCycles = ", i_intWashCycles, ", i_intDryCycles = ", i_intDryCycles, ", i_intDryWaitTime = ", i_intDryWaitTime);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    SeqCopySequence(_seqGripper, i_seqGripperPosition);
    blnSuccess = _CreateModulePosition(ML_STAR, i_seqWashPosition, 4.0, ASWGLOBAL::BOOL::FALSE, "WasherPosition", strFunctionName, _seqWasher);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = _CreateModulePosition(ML_STAR, i_seqDryPosition, 3.0, ASWGLOBAL::BOOL::FALSE, "DryerPosition", strFunctionName, _seqDryer);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _intTransportChannel = i_intTransportChannel;
    _intWashCycles = i_intWashCycles;
    _intDryCycles = i_intDryCycles;
    _intDryWaitTime = i_intDryWaitTime;
    _fltGripHeight = 39.0;
    _fltGripWidth = 81.0;
    _fltOpenWidth = 90.0;
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Initialize( device & ML_STAR, variable i_intPortNumber, variable & o_fltDefaultTemperature, variable & o_intModuleID ) variable {
    private variable strTrace;
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strConfigurationFile;
    private variable blnSimulationModeDryer;
    private variable blnSimulationModeModule;
    private variable blnSimulationModeWasher;
    private variable strModuleNameDryer;
    private variable strModuleNameWasher;
    private variable intHardwareNumber;
    private variable intPartNumber;
    private variable intRevision;
    private variable intSerialNumber;
    private variable strProbePatternErrors;
    private variable strLastProbe;
    private variable intLoopCounterCheckPattern;
    private variable intActualPosition;
    private variable blnProbePatternValid;
    private variable strSingleProbe;
    private variable strDate;
    private variable strModuleProbePattern;
    private variable blnOddNumber;
    private variable blnOffsetSet;
    private variable intProbePatternLength;
    o_fltDefaultTemperature = 0;
    o_intModuleID = 0;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    _intTraceLevel = TRACELEVEL::GetTraceLevel();
    o_intModuleID = -1;
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intPortNumber, "i_intPortNumber", 1, 256, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat2("i_intPortNumber = ", 1);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    blnSuccess = _LoadConfiguration(i_intPortNumber, blnSimulationModeModule, strModuleNameWasher, blnSimulationModeWasher, strModuleNameDryer, blnSimulationModeDryer, o_fltDefaultTemperature, strModuleProbePattern, _strPathCalibration, _strPathMeasurement, strConfigurationFile);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      strTrace = StrConcat4("Unable to load file '", strConfigurationFile, "' !", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strModuleProbePattern = "10101010";
    _strProbePattern = "";
    blnOffsetSet = ASWGLOBAL::BOOL::FALSE;
    strProbePatternErrors = "";
    strLastProbe = "";
    blnProbePatternValid = ASWGLOBAL::BOOL::TRUE;
    strProbePatternErrors = "";
    intProbePatternLength = StrGetLength(strModuleProbePattern);
    if (intProbePatternLength != 8)
    {
      strProbePatternErrors = "Invalid length of probe pattern - must be 8 characters long !";
      blnProbePatternValid = ASWGLOBAL::BOOL::FALSE;
    }
    {
      for(intLoopCounterCheckPattern = 0; intLoopCounterCheckPattern < intProbePatternLength;)
      {
        intLoopCounterCheckPattern = intLoopCounterCheckPattern + 1;
        intActualPosition = intLoopCounterCheckPattern - 1;
        strSingleProbe = StrMid(strModuleProbePattern, intActualPosition, 1);
        blnOddNumber = intLoopCounterCheckPattern % 2;
        if (blnOddNumber == ASWGLOBAL::BOOL::FALSE)
        {
          if (strSingleProbe == "0")
          {
            if (strLastProbe == "0")
            {
              _strProbePattern = StrConcat2(_strProbePattern, "0");
            }
            else
            {
              _strProbePattern = StrConcat2(_strProbePattern, "1");
            }
          }
          else
          {
            _strProbePattern = StrConcat2(_strProbePattern, "1");
          }
        }
        if (strSingleProbe == "1")
        {
          if (strLastProbe == "1")
          {
            strProbePatternErrors = StrConcat4(strProbePatternErrors, " Invalid character on position ", intLoopCounterCheckPattern, " - probes have to be separated by empty position!");
            blnProbePatternValid = ASWGLOBAL::BOOL::FALSE;
          }
          strLastProbe = "1";
          if (blnOffsetSet == ASWGLOBAL::BOOL::FALSE)
          {
            _fltProbeOffsetY = intActualPosition * 9.0;
            blnOffsetSet = ASWGLOBAL::BOOL::TRUE;
          }
        }
        else
        {
          if (strSingleProbe == "0")
          {
            strLastProbe = "0";
          }
          else
          {
            strProbePatternErrors = StrConcat4(strProbePatternErrors, " Invalid character on position ", intLoopCounterCheckPattern, " - only 0 and 1 are allowed!");
            blnProbePatternValid = ASWGLOBAL::BOOL::FALSE;
          }
        }
      }
    }
    if (_strProbePattern == "0000")
    {
      strProbePatternErrors = StrConcat2(strProbePatternErrors, " Invalid probe pattern - supply at least one position with a probe (1)!");
      blnProbePatternValid = ASWGLOBAL::BOOL::FALSE;
    }
    if (blnProbePatternValid == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strProbePatternErrors, strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat4("_strProbePattern = '", _strProbePattern, "'", "");
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::PROGRESS, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    blnSuccess = Hamilton_pH_Station_Washer_Module::Initialize(ML_STAR, 0, strModuleNameWasher, blnSimulationModeWasher, _intWasherModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to initialize washer", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Station_Dryer_Module::Initialize(ML_STAR, strModuleNameDryer, blnSimulationModeDryer, _intDryerModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to initialize dryer", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::Initialize(1, 1, o_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to initialize pH module", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::WakeUp(o_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to wake up pH module", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::RequestTechnicalData(o_intModuleID, intHardwareNumber, intPartNumber, intRevision, intSerialNumber);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to initialize pH module", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    _strSerialNumber = StrIStr(intSerialNumber);
    strDate = TimGetFormattedDate("");
    _strPathMeasurement = StrConcat4(_strPathMeasurement, "\\Measurement ", strDate, ".xls");
    _strPathCalibration = StrConcat2(_strPathCalibration, "\\Calibration.xls");
    strTrace = StrConcat4("o_fltDefaultTemperature = ", o_fltDefaultTemperature, ", o_intModuleID = ", o_intModuleID);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _SuccessOrMoveBack( device & ML_STAR, variable i_blnSuccess, variable i_intModuleID, variable i_strFunctionName ) variable {
    private variable blnSuccess;
    if (i_blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "", i_strFunctionName, _intTraceLevel, _strLibraryName);
    }
    return (i_blnSuccess);
  }

  private function _Dry( device & ML_STAR ) variable {
    private variable blnSuccess;
    private timer hdlDry;
    private variable strLabwareID;
    private variable fltPositionR;
    private variable fltPositionX;
    private variable fltPositionY;
    private variable fltPositionZ;
    private variable intLoopCounterDryCycles;
    strLabwareID = SeqGetLabwareId(_seqDryer);
    blnSuccess = HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, fltPositionZ, fltPositionR);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, 245.0, fltPositionR);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, fltPositionZ, fltPositionR);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, fltPositionZ, fltPositionR);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    {
      for(intLoopCounterDryCycles = 0; intLoopCounterDryCycles < _intDryCycles;)
      {
        intLoopCounterDryCycles = intLoopCounterDryCycles + 1;
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        blnSuccess = Hamilton_pH_Station_Dryer_Module::StartDrying(ML_STAR, _intDryerModuleID);
        if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
        if (_intDryWaitTime > 0)
        {
          if( 0 == hdlDry.SetTimer(_intDryWaitTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == hdlDry.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, 245.0, fltPositionR);
        if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
        {
          blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, fltPositionZ, fltPositionR);
          blnSuccess = Hamilton_pH_Station_Dryer_Module::StopDrying(ML_STAR, _intDryerModuleID);
          return (ASWGLOBAL::BOOL::FALSE);
        }
        ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
        blnSuccess = HSLLabwrAccess::AbsolutePositionValuesSetForLabwareID(ML_STAR, strLabwareID, fltPositionX, fltPositionY, fltPositionZ, fltPositionR);
        if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
        {
          blnSuccess = Hamilton_pH_Station_Dryer_Module::StopDrying(ML_STAR, _intDryerModuleID);
          return (ASWGLOBAL::BOOL::FALSE);
        }
        blnSuccess = Hamilton_pH_Station_Dryer_Module::StopDrying(ML_STAR, _intDryerModuleID);
        if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
        {
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    return (blnSuccess);
  }

  function RequestBatteryData( variable i_intModuleID, variable & o_strReplacementDate, variable & o_intChargeCounter, variable & o_intActualCharge ) variable {
    private variable strTrace;
    private variable strFunctionName;
    private variable blnSuccess;
    private variable intBatteryCondition;
    o_strReplacementDate = 0;
    o_intChargeCounter = 0;
    o_intActualCharge = 0;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    strTrace = StrConcat2("i_intModuleID = ", i_intModuleID);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to wake up pH module", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::RequestBatteryData(i_intModuleID, o_strReplacementDate, o_intChargeCounter, intBatteryCondition, o_intActualCharge);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to retrieve battery data from pH module", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat8("o_strReplacementDate = '", o_strReplacementDate, "', o_intChargeCounter = ", o_intChargeCounter, ", o_intActualCharge = ", o_intActualCharge, "", "");
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _LoadConfiguration( variable i_intCOMPortModule, variable & o_blnSimulationModeModule, variable & o_strModuleNameWasher, variable & o_blnSimulationModeWasher, variable & o_strModuleNameDryer, variable & o_blnSimulationModeDryer, variable & o_fltDefaultTemperature, variable & o_strProbePattern, variable & o_strPathCalibration, variable & o_strPathMeasurement, variable & o_strFilename ) variable {
    private file hdlConfigFile;
    o_blnSimulationModeModule = 0;
    o_strModuleNameWasher = 0;
    o_blnSimulationModeWasher = 0;
    o_strModuleNameDryer = 0;
    o_blnSimulationModeDryer = 0;
    o_fltDefaultTemperature = 0;
    o_strProbePattern = 0;
    o_strPathCalibration = 0;
    o_strPathMeasurement = 0;
    o_strFilename = 0;
    o_strFilename = FilGetConfigPath();
    o_strFilename = StrConcat4(o_strFilename, "\\Hamilton pH Module\\Configuration COM ", i_intCOMPortModule, ".xls");
    onerror goto errLabel_4 ;
    err.Clear();
    hdlConfigFile.AddField("SimulationModeModule", o_blnSimulationModeModule, hslInteger);
    hdlConfigFile.AddField("ModuleNameWasher", o_strModuleNameWasher, hslString, 255);
    hdlConfigFile.AddField("SimulationModeWasher", o_blnSimulationModeWasher, hslInteger);
    hdlConfigFile.AddField("ModuleNameDryer", o_strModuleNameDryer, hslString, 255);
    hdlConfigFile.AddField("SimulationModeDryer", o_blnSimulationModeDryer, hslInteger);
    hdlConfigFile.AddField("DefaultTemperature", o_fltDefaultTemperature, hslFloat);
    hdlConfigFile.AddField("ProbePattern", o_strProbePattern, hslString, 255);
    hdlConfigFile.AddField("CalibrationPath", o_strPathCalibration, hslString, 255);
    hdlConfigFile.AddField("MeasurementPath", o_strPathMeasurement, hslString, 255);
    if( 0 == hdlConfigFile.Open(o_strFilename + " " + "Configuration", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, o_strFilename, "HxMetEdCompCmd");
    }
    if( 0 == hdlConfigFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hdlConfigFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdlConfigFile.RemoveFields();
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function LastUsedConfigurationSave( variable i_intBluetoothPort, variable i_intNumberOfWashCycles, variable i_intNumberOfDryCycles, variable i_intDryTime ) void {
    private variable strFileName;
    private variable strTrace;
    private variable strFunctionName;
    private file hdlLastPort;
    private variable blnSuccess;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intBluetoothPort, "i_intBluetoothPort", 1, 256, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intNumberOfWashCycles, "i_intNumberOfWashCycles", 1, 20, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intNumberOfDryCycles, "i_intNumberOfDryCycles", 1, 5, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intDryTime, "i_intDryTime", 0, 5, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    strTrace = StrConcat8("i_intBluetoothPort = ", i_intBluetoothPort, ", i_intNumberOfWashCycles = ", i_intNumberOfWashCycles, ", i_intNumberOfDryCycles = ", i_intNumberOfDryCycles, ", i_intDryTime = ", i_intDryTime);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    strFileName = FilGetConfigPath();
    strFileName = StrConcat2(strFileName, "\\Hamilton pH Module\\Last Configuration.xls");
    onerror goto errLabel_5 ;
    err.Clear();
    hdlLastPort.AddField("BluetoothPort", i_intBluetoothPort, hslInteger);
    hdlLastPort.AddField("WashCycles", i_intNumberOfWashCycles, hslInteger);
    hdlLastPort.AddField("DryCycles", i_intNumberOfDryCycles, hslInteger);
    hdlLastPort.AddField("DryTime", i_intDryTime, hslInteger);
    if( 0 == hdlLastPort.Open(strFileName + " " + "Config", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strFileName, "HxMetEdCompCmd");
    }
    if( 0 == hdlLastPort.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hdlLastPort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdlLastPort.RemoveFields();
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      strTrace = StrConcat4("Unable to write file '", strFileName, "' !", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return;
    }   /* end if from skip handler if no error */
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
  }

  function LastUsedConfigurationLoad( variable & o_intBluetoothPort, variable & o_intNumberOfWashCycles, variable & o_intNumberOfDryCycles, variable & o_intDryTime ) void {
    private variable strFileName;
    private variable strTrace;
    private variable strFunctionName;
    private file hdlLastPort;
    o_intBluetoothPort = 0;
    o_intNumberOfWashCycles = 0;
    o_intNumberOfDryCycles = 0;
    o_intDryTime = 0;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    strFileName = FilGetConfigPath();
    strFileName = StrConcat2(strFileName, "\\Hamilton pH Module\\Last Configuration.xls");
    onerror goto errLabel_6 ;
    err.Clear();
    hdlLastPort.AddField("BluetoothPort", o_intBluetoothPort, hslInteger);
    hdlLastPort.AddField("WashCycles", o_intNumberOfWashCycles, hslInteger);
    hdlLastPort.AddField("DryCycles", o_intNumberOfDryCycles, hslInteger);
    hdlLastPort.AddField("DryTime", o_intDryTime, hslInteger);
    if( 0 == hdlLastPort.Open(strFileName + " " + "Config", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strFileName, "HxMetEdCompCmd");
    }
    if( 0 == hdlLastPort.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hdlLastPort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdlLastPort.RemoveFields();
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intBluetoothPort = 1;
      o_intNumberOfWashCycles = 1;
      o_intNumberOfDryCycles = 1;
      o_intDryTime = 1;
      strTrace = StrConcat4("Unable to read file '", strFileName, "' !", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return;
    }   /* end if from skip handler if no error */
    strTrace = StrConcat8("o_intBluetoothPort = ", o_intBluetoothPort, ", o_intNumberOfWashCycles = ", o_intNumberOfWashCycles, ", o_intNumberOfDryCycles = ", o_intNumberOfDryCycles, ", o_intDryTime = ", o_intDryTime);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
  }

  function ParkModule( device & ML_STAR, variable i_intModuleID, sequence i_seqModule ) variable {
    private variable strTrace;
    private variable strFunctionName;
    private variable blnSuccess;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    strTrace = StrConcat2("i_intModuleID = ", i_intModuleID);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PickupModule( device & ML_STAR, variable i_intModuleID, sequence & i_seqModule ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    blnSuccess = Hamilton_pH_Module::Sleep(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to activate sleep mode!", strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    SeqCopySequence(_seqModule, i_seqModule);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Dry( device & ML_STAR, variable i_intModuleID ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    blnSuccess = _Dry(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    }
    return (blnSuccess);
  }

  private function _Wash( device & ML_STAR ) variable {
    private variable blnSuccess;
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    blnSuccess = Hamilton_pH_Station_Washer_Module::Wash(ML_STAR, _intWasherModuleID, _intWashCycles);
    return (blnSuccess);
  }

  function Wash( device & ML_STAR, variable i_intModuleID ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    blnSuccess = _Wash(ML_STAR);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    }
    return (blnSuccess);
  }

  function Measure( device & ML_STAR, variable i_intModuleID, sequence i_seqMeasurement, variable i_fltMeasureHeight, variable i_strProbePattern, variable i_intMeasureTime, variable i_fltTemperature, variable & o_arrfltpHValues[] ) variable {
    private variable strTrace;
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strError;
    o_arrfltpHValues.SetSize( 0);
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    blnSuccess = Hamilton_DriverTools::CheckFloatRange(i_fltMeasureHeight, "i_fltMeasureHeight", 0.0, 100.0, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_DriverTools::CheckIntegerRange(i_intMeasureTime, "i_intMeasureTime", 1, 600, strFunctionName, _strLibraryName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat4("i_fltMeasureHeight = ", i_fltMeasureHeight, ", i_strProbePattern = ", i_strProbePattern);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
    o_arrfltpHValues.SetSize(4);
    blnSuccess = _Measure(ML_STAR, i_intModuleID, i_seqMeasurement, ASWGLOBAL::BOOL::TRUE, i_fltMeasureHeight, i_strProbePattern, i_intMeasureTime, i_fltTemperature, strFunctionName, o_arrfltpHValues);
    blnSuccess = _SuccessOrMoveBack(ML_STAR, blnSuccess, i_intModuleID, strFunctionName);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_pH_Module::GetLastError(i_intModuleID, strError);
      strTrace = StrConcat4("Module reported the following error: '", strError, "'", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, strFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    Hamilton_DriverTools::StatusTraceArray(Hamilton_DriverTools::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, o_arrfltpHValues, "o_arrfltpHValues", strFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function _Measure( device & ML_STAR, variable i_intModuleID, sequence i_seqMeasurement, variable i_blnShiftPositionByProbe, variable i_fltMeasureHeight, variable i_strProbePattern, variable i_intMeasureTime, variable i_fltTemperature, variable i_strCallingFunctionName, variable & o_arrfltpHValues[] ) variable {
    private variable blnMeasureSuccess;
    private variable blnSuccess;
    private timer hdlWaitForSettling;
    private sequence trpMeasurement;
    private variable strTrace;
    private variable strTime;
    private variable strDate;
    private file hdlMeasurementFile;
    private variable intMeasurementCounterProbe_1;
    private variable intMeasurementCounterProbe_2;
    private variable intMeasurementCounterProbe_3;
    private variable intMeasurementCounterProbe_4;
    private variable intBatteryChargeLevel;
    private variable intBatteryChargeCounter;
    private variable strBatteryReplacementDate;
    private variable strBatteryChargeLevel;
    private variable strProbeReplacementDate;
    private variable intBatteryCondition;
    private variable fltpHValueProbe_1;
    private variable fltpHValueProbe_2;
    private variable fltpHValueProbe_3;
    private variable fltpHValueProbe_4;
    o_arrfltpHValues.SetSize( 0);
    o_arrfltpHValues.SetSize(4);
    blnSuccess = _CreateModulePosition(ML_STAR, i_seqMeasurement, i_fltMeasureHeight, i_blnShiftPositionByProbe, "MeasurePosition", i_strCallingFunctionName, trpMeasurement);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
    if( 0 == hdlWaitForSettling.SetTimer(i_intMeasureTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == hdlWaitForSettling.WaitTimer(hslFalse, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::RequestBatteryData(i_intModuleID, strBatteryReplacementDate, intBatteryChargeCounter, intBatteryCondition, intBatteryChargeLevel);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::RequestProbeData(i_intModuleID, strProbeReplacementDate, intMeasurementCounterProbe_1, intMeasurementCounterProbe_2, intMeasurementCounterProbe_3, intMeasurementCounterProbe_4);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    o_arrfltpHValues.SetSize(4);
    blnMeasureSuccess = Hamilton_pH_Module::Measure(i_intModuleID, i_fltTemperature, i_strProbePattern, o_arrfltpHValues.ElementAt( 1 -1), o_arrfltpHValues.ElementAt( 2 -1), o_arrfltpHValues.ElementAt( 3 -1), o_arrfltpHValues.ElementAt( 4 -1));
    blnSuccess = Hamilton_pH_Module::Sleep(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (blnMeasureSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strDate = TimGetFormattedDate("%Y.%m.%d");
    strTime = TimGetFormattedTime("");
    strBatteryChargeLevel = StrConcat2(intBatteryChargeLevel, " %");
    fltpHValueProbe_1 = o_arrfltpHValues.ElementAt( 1 -1);
    fltpHValueProbe_2 = o_arrfltpHValues.ElementAt( 2 -1);
    fltpHValueProbe_3 = o_arrfltpHValues.ElementAt( 3 -1);
    fltpHValueProbe_4 = o_arrfltpHValues.ElementAt( 4 -1);
    onerror goto errLabel_7 ;
    err.Clear();
    hdlMeasurementFile.AddField("Module_Info", _strSerialNumber, hslString, 255);
    hdlMeasurementFile.AddField("Battery replacement date", strBatteryReplacementDate, hslString, 255);
    hdlMeasurementFile.AddField("ChargeLevel", strBatteryChargeLevel, hslString, 255);
    hdlMeasurementFile.AddField("Function", i_strCallingFunctionName, hslString, 255);
    hdlMeasurementFile.AddField("Date", strDate, hslString, 255);
    hdlMeasurementFile.AddField("Time", strTime, hslString, 255);
    hdlMeasurementFile.AddField("Temperature", i_fltTemperature, hslFloat);
    hdlMeasurementFile.AddField("pH Probe 1", fltpHValueProbe_1, hslFloat);
    hdlMeasurementFile.AddField("pH Probe 2", fltpHValueProbe_2, hslFloat);
    hdlMeasurementFile.AddField("pH Probe 3", fltpHValueProbe_3, hslFloat);
    hdlMeasurementFile.AddField("pH Probe 4", fltpHValueProbe_4, hslFloat);
    hdlMeasurementFile.AddField("Probe replacement date", strProbeReplacementDate, hslString, 255);
    hdlMeasurementFile.AddField("Count Probe 1", intMeasurementCounterProbe_1, hslInteger);
    hdlMeasurementFile.AddField("Count Probe 2", intMeasurementCounterProbe_2, hslInteger);
    hdlMeasurementFile.AddField("Count Probe 3", intMeasurementCounterProbe_3, hslInteger);
    hdlMeasurementFile.AddField("Count Probe 4", intMeasurementCounterProbe_4, hslInteger);
    if( 0 == hdlMeasurementFile.Open(_strPathMeasurement + " " + "Measurements", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strPathMeasurement, "HxMetEdCompCmd");
    }
    if( 0 == hdlMeasurementFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hdlMeasurementFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hdlMeasurementFile.RemoveFields();
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      strTrace = StrConcat4("Unable to write measurement values to '", _strPathMeasurement, "'!", "");
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, strTrace, i_strCallingFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }   /* end if from skip handler if no error */
    Hamilton_DriverTools::StatusTraceArray(Hamilton_DriverTools::ACTION::PROGRESS, TRACE_LEVEL_DEBUG, o_arrfltpHValues, "measured pH value", i_strCallingFunctionName, _intTraceLevel, _strLibraryName);
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function EnableExtendedLog(  ) void {
    private variable strFunctionName;
    Hamilton_DriverTools::ExtractFunctionName(GetFunctionName(), strFunctionName, _strLibraryName);
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::START, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
    Hamilton_pH_Module::EnableExtendedLog();
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName, _intTraceLevel, _strLibraryName);
  }

  private function _RequestBatteryData( variable i_intModuleID, variable i_strCallingFunctionName, variable i_intLowerLimit, variable & o_strReplacementDate, variable & o_intChargeLevel, variable & o_intChargeCounter ) variable {
    private variable strTrace;
    private variable blnSuccess;
    private variable intBatteryCondition;
    o_strReplacementDate = 0;
    o_intChargeLevel = 0;
    o_intChargeCounter = 0;
    blnSuccess = Hamilton_pH_Module::WakeUp(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::RequestBatteryData(i_intModuleID, o_strReplacementDate, o_intChargeCounter, intBatteryCondition, o_intChargeLevel);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Unable to request battery data", i_strCallingFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Hamilton_pH_Module::Sleep(i_intModuleID);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat4("Battery charge level is ", o_intChargeLevel, " %", "");
    Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::PROGRESS, TRACE_LEVEL_DEBUG, strTrace, i_strCallingFunctionName, _intTraceLevel, _strLibraryName);
    if (o_intChargeLevel < 25)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::PROGRESS, TRACE_LEVEL_RELEASE, "Battery charge level is below 25%!", i_strCallingFunctionName, _intTraceLevel, _strLibraryName);
    }
    if (o_intChargeLevel < i_intLowerLimit)
    {
      Hamilton_DriverTools::StatusTrace(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, TRACE_LEVEL_RELEASE, "Battery charge level is 0%!", i_strCallingFunctionName, _intTraceLevel, _strLibraryName);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
