#pragma once
#include "Hamilton Centrifuge\\Hamilton Centrifuge.hsl"
#include "HSLErrLib.hsl"
#include "BioNex HiG\\HSLHiGCentrifugeLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace STAR_OEM_HIG {
  function HiG_AbortSpin( variable & o_stepReturn ) void ;
  function HiG_CloseShield( variable & o_stepReturn ) void ;
  function HiG_Connect( variable i_strDeviceName, variable i_strAdapterDeviceID, variable i_blnSimulationMode, variable & o_FirmwareVersion, variable & o_stepReturn ) void ;
  function HiG_Disconnect( variable & o_stepReturn ) void ;
  function HiG_Home( variable & o_stepReturn ) void ;
  function HiG_IsSpinning( variable & o_blnIsSpinning, variable & o_stepReturn ) void ;
  function HiG_OpenShield( variable i_intBucketIndex, variable & o_stepReturn ) void ;
  function HiG_OverrideSimulation( variable i_intBucketIndex, variable & o_stepReturn ) void ;
  function HiG_Spin( variable i_fltRotationalGs, variable i_floatAccelPercent, variable i_floatDecelPercent, variable i_floatTimeSeconds, variable & o_stepReturn ) void ;
  function HiG_SpinAndWait( variable i_fltRotationalGs, variable i_floatAccelPercent, variable i_floatDecelPercent, variable i_floatTimeSeconds, variable & o_stepReturn ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function HiG_Connect( variable i_strDeviceName, variable i_strAdapterDeviceID, variable i_blnSimulationMode, variable & o_FirmwareVersion, variable & o_stepReturn ) void {
    o_FirmwareVersion = 0;
    o_stepReturn = 0;
    onerror goto errLabel_1 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::Connect(i_strDeviceName, i_strAdapterDeviceID, i_blnSimulationMode, o_FirmwareVersion);
    o_stepReturn = Translate("1");
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_Disconnect( variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_2 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::Disconnect();
    o_stepReturn = Translate("1");
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_Home( variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_3 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::Home();
    o_stepReturn = Translate("1");
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_Spin( variable i_fltRotationalGs, variable i_floatAccelPercent, variable i_floatDecelPercent, variable i_floatTimeSeconds, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_4 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::Spin(i_fltRotationalGs, i_floatAccelPercent, i_floatDecelPercent, o_stepReturn);
    o_stepReturn = Translate("1");
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_SpinAndWait( variable i_fltRotationalGs, variable i_floatAccelPercent, variable i_floatDecelPercent, variable i_floatTimeSeconds, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_5 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::SpinAndWait(i_floatAccelPercent, i_floatDecelPercent, i_fltRotationalGs, i_floatTimeSeconds);
    o_stepReturn = Translate("1");
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_CloseShield( variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_6 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::CloseShield();
    o_stepReturn = Translate("1");
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_OpenShield( variable i_intBucketIndex, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_7 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::OpenShield(i_intBucketIndex);
    o_stepReturn = Translate("1");
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_OverrideSimulation( variable i_intBucketIndex, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_8 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::OverrideSimulation(i_intBucketIndex);
    o_stepReturn = Translate("1");
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_AbortSpin( variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_9 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::AbortSpin();
    o_stepReturn = Translate("1");
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function HiG_IsSpinning( variable & o_blnIsSpinning, variable & o_stepReturn ) void {
    o_blnIsSpinning = 0;
    o_stepReturn = 0;
    onerror goto errLabel_10 ;
    err.Clear();
    o_stepReturn = HSLHiGCentrifugeLib::IsSpinning(o_blnIsSpinning);
    o_stepReturn = Translate("1");
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }
} // library namespace
