#pragma once
#include "Hamilton pH Module\\Hamilton pH Station Dryer Module.hsl"
#include "HSLErrLib.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace STAR_OEM_ODTC {
  function Abort( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function CloseDoor( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function Connect( variable i_strLocalIP, variable i_strDeviceIP, variable i_strDevicePort, variable i_blnSimulationMode, variable & o_intDeviceID, variable & o_strMessage, variable & o_stepReturn ) void ;
  function DownloadProtocol( variable i_intDeviceID, variable i_strLockID, variable i_strProtocolFile, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function EvaluateError( variable i_intErrorCode, variable & o_strErrorMessage, variable & o_stepReturn ) void ;
  function ExecuteMethod( variable i_intDeviceID, variable i_strLockID, variable i_strMethodName, variable i_intPriority, variable & o_intDuration, variable & o_intRequestID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function GetLastData( variable i_intDeviceID, variable i_strLockID, variable & o_strResult, variable & o_intSilLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function GetStatus( variable i_intDeviceID, variable & o_strDeviceID, variable & o_strState, variable & o_blnLocked, variable & o_strPMSId, variable & o_strCurrentTime, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function Initialize( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function OpenDoor( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function ReadActualTemperature( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_arrfltActualTemperatures[], variable & o_arrstrActualTemperatureNames[], variable & o_strTime, variable & o_stepReturn ) void ;
  function Reset( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable i_blnSimulateOnDeviceBase, variable i_intTimeToWait, variable i_strDeviceId, variable i_strPMSID, variable & o_stepReturn ) void ;
  function StopMethod( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable i_blnSimulateOnDeviceBase, variable i_intTimeToWait, variable i_strDeviceId, variable i_strPMSID, variable & o_stepReturn ) void ;
  function Terminate( variable i_intDeviceID, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function WaitForEndOfExecuteMethod( variable i_intDeviceID, variable i_intTimeOut, variable i_intRequestID, variable & o_intSilLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Abort( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_1 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::Abort(i_intDeviceID, i_strLockID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Connect( variable i_strLocalIP, variable i_strDeviceIP, variable i_strDevicePort, variable i_blnSimulationMode, variable & o_intDeviceID, variable & o_strMessage, variable & o_stepReturn ) void {
    o_intDeviceID = 0;
    o_strMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_2 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::Connect(i_strLocalIP, i_strDeviceIP, i_strDevicePort, i_blnSimulationMode, o_intDeviceID, o_strMessage);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Initialize( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_3 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::Initialize(i_intDeviceID, i_strLockID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function CloseDoor( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_4 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::CloseDoor(i_intDeviceID, i_strLockID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function DownloadProtocol( variable i_intDeviceID, variable i_strLockID, variable i_strProtocolFile, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_5 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::DownloadProtocol(i_intDeviceID, i_strLockID, i_strProtocolFile, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function EvaluateError( variable i_intErrorCode, variable & o_strErrorMessage, variable & o_stepReturn ) void {
    o_strErrorMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_6 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::EvaluateError(i_intErrorCode, o_strErrorMessage);
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function ExecuteMethod( variable i_intDeviceID, variable i_strLockID, variable i_strMethodName, variable i_intPriority, variable & o_intDuration, variable & o_intRequestID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intDuration = 0;
    o_intRequestID = 0;
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_7 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::ExecuteMethod(i_intDeviceID, i_strLockID, i_strMethodName, i_intPriority, o_intDuration, o_intRequestID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function GetStatus( variable i_intDeviceID, variable & o_strDeviceID, variable & o_strState, variable & o_blnLocked, variable & o_strPMSId, variable & o_strCurrentTime, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_strDeviceID = 0;
    o_strState = 0;
    o_blnLocked = 0;
    o_strPMSId = 0;
    o_strCurrentTime = 0;
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_8 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::GetStatus(i_intDeviceID, o_strDeviceID, o_strState, o_blnLocked, o_strPMSId, o_strCurrentTime, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function OpenDoor( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_9 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::OpenDoor(i_intDeviceID, i_strLockID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function ReadActualTemperature( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable & o_arrfltActualTemperatures[], variable & o_arrstrActualTemperatureNames[], variable & o_strTime, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_arrfltActualTemperatures.SetSize( 0);
    o_arrstrActualTemperatureNames.SetSize( 0);
    o_strTime = 0;
    o_stepReturn = 0;
    onerror goto errLabel_10 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::ReadActualTemperature(i_intDeviceID, i_strLockID, o_strTime, o_arrfltActualTemperatures, o_arrstrActualTemperatureNames, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Reset( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable i_blnSimulateOnDeviceBase, variable i_intTimeToWait, variable i_strDeviceId, variable i_strPMSID, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_11 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::Reset(i_intDeviceID, i_blnSimulateOnDeviceBase, i_intTimeToWait, i_strLockID, i_strDeviceId, i_strPMSID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function StopMethod( variable i_intDeviceID, variable i_strLockID, variable & o_intSiLAReturnValue, variable & o_strSiLAMessage, variable i_blnSimulateOnDeviceBase, variable i_intTimeToWait, variable i_strDeviceId, variable i_strPMSID, variable & o_stepReturn ) void {
    o_intSiLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_12 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::StopMethod(i_intDeviceID, i_strLockID, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_12 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Terminate( variable i_intDeviceID, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_13 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::Terminate(i_intDeviceID, o_strSiLAMessage);
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function WaitForEndOfExecuteMethod( variable i_intDeviceID, variable i_intTimeOut, variable i_intRequestID, variable & o_intSilLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    o_intSilLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_14 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_intDeviceID, i_intTimeOut, i_intRequestID, o_intSilLAReturnValue, o_strSiLAMessage);
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function GetLastData( variable i_intDeviceID, variable i_strLockID, variable & o_strResult, variable & o_intSilLAReturnValue, variable & o_strSiLAMessage, variable & o_stepReturn ) void {
    private variable o_intDuration;
    private variable i_strMethodName;
    private variable o_intSiLAReturnValue;
    private variable o_intRequestID;
    private variable i_intPriority;
    o_strResult = 0;
    o_intSilLAReturnValue = 0;
    o_strSiLAMessage = 0;
    o_stepReturn = 0;
    onerror goto errLabel_15 ;
    err.Clear();
    o_stepReturn = Inheco_ODTC::Advanced::GetLastData(i_intDeviceID, i_strLockID, o_strResult, o_intSiLAReturnValue, o_strSiLAMessage);
    errLabel_15 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }
} // library namespace
