#pragma once
#include "Hamilton Centrifuge\\Hamilton Centrifuge.hsl"
#include "HSLBarcodeReader.hsl"
#include "HSLErrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace STAR_OEM_TOOLKIT_CENTRIFUGE {
  function HamiltonCentrifuge_Centrifuge( variable i_strLabel, variable i_blnCloseCoverAtEnd, variable i_intPresentPosition, variable i_intDirection, variable & i_intArrSpeed[], variable & i_intArrAccelleration[], variable & i_intArrDuration[], variable i_intDecelleration, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_CoverClose( variable i_strLabel, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_CoverOpen( variable i_strLabel, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_GetRotationStatus( variable i_strLabel, variable & o_blnRotorDriveRunning, variable & o_int_ProfileStatus, variable & o_intTimeLeft, variable & o_blnCurrentSpeed, variable & o_blnSpeedSensorTrip, variable & o_blnGravitySensorTrip, variable & o_blnTemperatureSensorTrip, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_Initialize( variable i_strLabel, variable i_strNodeName, variable i_blnSimulationMode, variable i_blnAlwaysInitialize, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_StartCentrifuge( variable i_strLabel, variable i_intDirection, variable i_intSpeed, variable i_intAcceleration, variable i_intMaxTime, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_StopCentrifuge( variable i_strLabel, variable i_intDecelleration, variable & o_stepReturn ) void ;
  function HamiltonCentrifuge_Terminate( variable i_strLabel, variable & o_stepReturn ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function HamiltonCentrifuge_Initialize( variable i_strLabel, variable i_strNodeName, variable i_blnSimulationMode, variable i_blnAlwaysInitialize, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_1 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::Initialize(i_strLabel, i_strNodeName, i_blnSimulationMode, i_blnAlwaysInitialize);
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_Centrifuge( variable i_strLabel, variable i_blnCloseCoverAtEnd, variable i_intPresentPosition, variable i_intDirection, variable & i_intArrSpeed[], variable & i_intArrAccelleration[], variable & i_intArrDuration[], variable i_intDecelleration, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_2 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::Centrifuge(i_strLabel, i_blnCloseCoverAtEnd, i_intPresentPosition, i_intDirection, i_intArrSpeed, i_intArrAccelleration, i_intArrDuration, i_intDecelleration);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_GetRotationStatus( variable i_strLabel, variable & o_blnRotorDriveRunning, variable & o_int_ProfileStatus, variable & o_intTimeLeft, variable & o_blnCurrentSpeed, variable & o_blnSpeedSensorTrip, variable & o_blnGravitySensorTrip, variable & o_blnTemperatureSensorTrip, variable & o_stepReturn ) void {
    o_blnRotorDriveRunning = 0;
    o_int_ProfileStatus = 0;
    o_intTimeLeft = 0;
    o_blnCurrentSpeed = 0;
    o_blnSpeedSensorTrip = 0;
    o_blnGravitySensorTrip = 0;
    o_blnTemperatureSensorTrip = 0;
    o_stepReturn = 0;
    onerror goto errLabel_3 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::GetRotationDriveStatus(i_strLabel, o_blnRotorDriveRunning, o_int_ProfileStatus, o_intTimeLeft, o_blnCurrentSpeed, o_blnSpeedSensorTrip, o_blnGravitySensorTrip, o_blnTemperatureSensorTrip);
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_CoverOpen( variable i_strLabel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_4 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::CoverOpen(i_strLabel);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_CoverClose( variable i_strLabel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_5 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::CoverClose(i_strLabel);
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_StartCentrifuge( variable i_strLabel, variable i_intDirection, variable i_intSpeed, variable i_intAcceleration, variable i_intMaxTime, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_6 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::StartCentrifuge(i_strLabel, i_intDirection, i_intSpeed, i_intAcceleration, i_intMaxTime);
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_StopCentrifuge( variable i_strLabel, variable i_intDecelleration, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_7 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::StopCentrifuge(i_strLabel, i_intDecelleration);
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function HamiltonCentrifuge_Terminate( variable i_strLabel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_8 ;
    err.Clear();
    o_stepReturn = HamiltonCentrifuge::Terminate(o_stepReturn);
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }
} // library namespace
