#pragma once
#include "HSLStrLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "HSL_MethodHelper.hsl"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace FIRMWARE_PIPETTING_COMMANDS {
  function GetChannelNumber1mL( device & ML_STAR, variable & o_int_ChannelCount ) void ;
  function GetChannelNumber5mL( device & ML_STAR, variable & o_int_ChannelCount ) void ;
  function GetChannelPatternWithTips( device & ML_STAR, variable i_bln_1mL, variable & o_str_ChannelPattern ) void ;
  function GetChannelRaster1mL( device & ML_STAR, variable & o_flt_ChannelRaster ) void ;
  function GetChannelRaster5mL( device & ML_STAR, variable & o_flt_ChannelRaster ) void ;
  function GetChannelXCoordinate( device & ML_STAR, variable & o_flt_CurrentXCoord ) void ;
  function GetChannelYCoordinates( device & ML_STAR, variable i_bln_1mL, variable & o_arr_YCoords[] ) void ;
  function GetChannelZCoordinates( device & ML_STAR, variable i_bln_1mL, variable & o_arr_ZCoords[] ) void ;
  function GetChannelZCoordinatesLastLLD( device & ML_STAR, variable i_bln_1mL, variable & o_arr_ZCoords[] ) void ;
  function GetMPHExist( device & ML_STAR, variable & o_int_MPHExists ) void ;
  function Get_Tip_Volume_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function Get_Tip_Volume_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function MPH96AspirateFromFixedHeight( device & ML_STAR, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_AspHeight, variable i_flt_AspirateDistance, variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_SubmergeDepth, variable i_flt_AspirateVolume, variable i_flt_AspirateSpeed, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void ;
  function MPH96DispenseFromFixedHeight( device & ML_STAR, variable i_int_DispenseMode, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_DispHeight, variable i_flt_DispenseDistance, variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_SubmergeDepth, variable i_flt_DispenseVolume, variable i_flt_DispenseSpeed, variable i_flt_CutOffSpeed, variable i_flt_StopBackVolume, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void ;
  function MPH96GetCoordinates( device & ML_STAR, variable & o_flt_CurrentXCoord, variable & o_flt_CurrentYCoord, variable & o_flt_CurrentZCoord ) void ;
  function MPH96GetTipPresence( device & ML_STAR, variable & o_bln_TipLoaded ) void ;
  function PIPAspirateFromFixedHeight( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_AspirateDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_ContainerDepth, variable i_flt_AspirateVolume, variable i_flt_AspirateSpeed, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void ;
  function PIPAspirateFromFixedHeight_ArrayVolumes( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_AspirateDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_ContainerDepth, variable & i_arr_AspirateVolume[], variable i_flt_AspirateSpeed, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void ;
  function PIPDispenseFromFixedHeight( device & ML_STAR, variable i_str_ChannelPattern, variable i_int_DispenseMode, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_DispenseDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_DispenseVolume, variable i_flt_DispenseSpeed, variable i_flt_CutOffSpeed, variable i_flt_StopBackVolume, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance, variable i_flt_MaximumHeight ) void ;
  function PIPDispenseFromFixedHeight_ArrayVolumes( device & ML_STAR, variable i_str_ChannelPattern, variable i_int_DispenseMode, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_DispenseDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable & i_arr_DispenseVolume[], variable i_flt_DispenseSpeed, variable i_flt_CutOffSpeed, variable i_flt_StopBackVolume, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance, variable i_flt_MaximumHeight ) void ;
  function PIPFindLiquidLevel( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_LiquidSearchHeight, variable i_flt_MinimumHeight, variable i_bln_UseCLLD, variable & o_arr_LiquidHeights[] ) void ;
  function PIPMixFromFixedHeight( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_MixDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_int_MixCycles, variable i_flt_MixVolume, variable i_flt_MixSpeed ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HELPERLIBRARY::_InitLibrary();
    FW_HELPERLIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    HELPERLIBRARY::_ExitLibrary();
    FW_HELPERLIBRARY::_ExitLibrary();
  }

  function GetChannelXCoordinate( device & ML_STAR, variable & o_flt_CurrentXCoord ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ReturnValue;
    private variable str_FirmwareCMND;
    private variable bln_ParamFound;
    private variable str_Value;
    private variable int_Value;
    private variable flt_Value;
    o_flt_CurrentXCoord = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_flt_CurrentXCoord = 0.0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        str_FirmwareCMND = StrConcat4(Translate("C0RX"), Translate(""), Translate(""), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        str_FirmwareCMND = StrConcat4(Translate("A1XMRX"), Translate(""), Translate(""), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
      FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), 0.1, 5, bln_ParamFound, flt_Value);
    }
    else
    {
      bln_ParamFound = BOOLEON::FALSE;
    }
    if (bln_ParamFound == BOOLEON::TRUE)
    {
      if(0){
        int_Value = StrIVal(str_Value);
        o_flt_CurrentXCoord = int_Value / (10.0 * 1.0);
      }
      o_flt_CurrentXCoord = flt_Value;
    }
  }

  function GetChannelYCoordinates( device & ML_STAR, variable i_bln_1mL, variable & o_arr_YCoords[] ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_FirmwareCMND;
    private variable str_ReturnValue;
    private variable arr_Values[];
    private variable bln_ParamFound;
    private variable str_ParamSearch;
    o_arr_YCoords.SetSize( 0);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_arr_YCoords.SetSize(G_FW_PIP_COM_TotalChannels);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("C0RY"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("ry");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("C0UY"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("uy");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("A1PMRY"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("ry");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("A1LMRY"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("ry");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
      FW_HELPERLIBRARY::Parse_Parameter_Multiple2(str_ReturnValue, str_ParamSearch, 0.1, bln_ParamFound, arr_Values);
      if(0){
        FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, str_ParamSearch, 0.1, 5, G_FW_PIP_COM_TotalChannels, bln_ParamFound, arr_Values);
      }
    }
    else
    {
      bln_ParamFound = BOOLEON::FALSE;
    }
    if (bln_ParamFound == BOOLEON::TRUE)
    {
      o_arr_YCoords=arr_Values;
    }
  }

  function GetChannelZCoordinates( device & ML_STAR, variable i_bln_1mL, variable & o_arr_ZCoords[] ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable str_ParamSearch;
    private variable int_Count;
    private variable bln_ParamFound;
    private variable arr_Values[];
    o_arr_ZCoords.SetSize( 0);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_arr_ZCoords.SetSize(G_FW_PIP_COM_TotalChannels);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("C0RZ"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rz");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("C0UZ"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("uz");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("A1PMRZ"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rz");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("A1LMRZ"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rz");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
      if(0){
        FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, str_ParamSearch, 0.1, 5, G_FW_PIP_COM_TotalChannels, bln_ParamFound, arr_Values);
      }
      FW_HELPERLIBRARY::Parse_Parameter_Multiple2(str_ReturnValue, str_ParamSearch, 0.1, bln_ParamFound, arr_Values);
    }
    else
    {
      bln_ParamFound = BOOLEON::FALSE;
    }
    if (bln_ParamFound == BOOLEON::TRUE)
    {
      o_arr_ZCoords=arr_Values;
    }
  }

  function PIPFindLiquidLevel( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_LiquidSearchHeight, variable i_flt_MinimumHeight, variable i_bln_UseCLLD, variable & o_arr_LiquidHeights[] ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable arr_Params[];
    private variable str_Value;
    private variable str_ChPattern;
    private variable i;
    private variable str_ChannelValue;
    private variable int_Value;
    private variable int_TotalParams;
    private variable str_Params;
    private variable str_FirmwareCommand;
    private variable str_ReturnValue;
    private variable arr_ZCoords[];
    private variable int_ChannelValue;
    o_arr_LiquidHeights.SetSize( 0);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_arr_LiquidHeights.SetSize(0);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0AS");
    str_Value = StrConcat2(Translate("at"), Translate("2&"));
    arr_Params.AddAsLast(str_Value);
    str_ChPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    str_Value = Translate("tm");
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        str_ChannelValue = StrLeft(str_ChPattern, i);
        str_ChannelValue = StrRight(str_ChannelValue, 1);
        str_Value = StrConcat2(str_Value, str_ChannelValue);
        if (i < G_FW_PIP_COM_TotalChannels)
        {
          str_Value = StrConcat2(str_Value, Translate(" "));
        }
      }
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("xp"), i_arr_XCoord, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("yp"), i_arr_YCoord, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("th"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("te"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("lp"), i_flt_LiquidSearchHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zl"), 245.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("po"), 5.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zx"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ip"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("fp"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("av"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("as"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ta"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ba"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("oa"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("lm"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ll"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("de"), 15.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("wt"), 0.0, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mc"), 0, 1, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ms"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mh"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gi"), Translate("000&"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::FALSE);
      GetChannelZCoordinatesLastLLD(ML_STAR, 1, arr_ZCoords);
      {
        for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
        {
          i = i + 1;
          str_ChannelValue = StrLeft(i_str_ChannelPattern, i);
          str_ChannelValue = StrRight(str_ChannelValue, 1);
          int_ChannelValue = StrIVal(str_ChannelValue);
          if (int_ChannelValue == 1)
          {
            o_arr_LiquidHeights.AddAsLast(arr_ZCoords.ElementAt( i -1));
          }
          else
          {
            o_arr_LiquidHeights.AddAsLast(0.0);
          }
        }
      }
    }
    else
    {
      {
        for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
        {
          i = i + 1;
          o_arr_LiquidHeights.AddAsLast(0.0);
        }
      }
    }
  }

  function PIPMixFromFixedHeight( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_MixDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_int_MixCycles, variable i_flt_MixVolume, variable i_flt_MixSpeed ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable str_Params;
    private variable i;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalParams;
    private variable int_Count;
    private variable str_ChannelValue;
    private variable int_Value;
    private variable str_ChPattern;
    private variable str_Value;
    private variable arr_Params[];
    private variable flt_MixDistance;
    private variable flt_EndHeight;
    private variable arr_PullOutDistance[];
    private variable arr_LiquidFollowing[];
    private variable arr_MixDistance[];
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0AS");
    str_Value = StrConcat2(Translate("at"), Translate("2&"));
    arr_Params.AddAsLast(str_Value);
    str_ChPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    str_Value = Translate("tm");
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        str_ChannelValue = StrLeft(str_ChPattern, i);
        str_ChannelValue = StrRight(str_ChannelValue, 1);
        str_Value = StrConcat2(str_Value, str_ChannelValue);
        if (i < G_FW_PIP_COM_TotalChannels)
        {
          str_Value = StrConcat2(str_Value, Translate(" "));
        }
      }
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("xp"), i_arr_XCoord, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("yp"), i_arr_YCoord, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("th"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("te"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("lp"), 245.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("zl"), i_arr_FixedHeights, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_PullOutDistance.SetSize(0);
    FW_HELPERLIBRARY::SetParametersAll(Translate("po"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zx"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ip"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_LiquidFollowing.SetSize(0);
    FW_HELPERLIBRARY::SetParametersAll(Translate("fp"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("av"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("as"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ta"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ba"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("oa"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("lm"), Translate(""));
    int_Value = StrConcat2(0, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ll"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("de"), 15.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("wt"), 0.0, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mv"), i_flt_MixVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mc"), i_int_MixCycles, 1, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ms"), i_flt_MixSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_MixDistance.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_MixDistance = i_arr_MixDistance.ElementAt( i -1);
        flt_EndHeight = i_arr_FixedHeights.ElementAt( i -1) - flt_MixDistance;
        if (flt_EndHeight < i_flt_MinimumHeight)
        {
          flt_MixDistance = i_arr_FixedHeights.ElementAt( i -1) - i_flt_MinimumHeight;
          flt_MixDistance = flt_MixDistance - 0.5;
        }
        if (flt_MixDistance < 0.0)
        {
          flt_MixDistance = 0.0;
        }
        arr_MixDistance.AddAsLast(flt_MixDistance);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("mh"), arr_MixDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gi"), Translate("000&"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
  }

  function PIPAspirateFromFixedHeight( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_AspirateDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_ContainerDepth, variable i_flt_AspirateVolume, variable i_flt_AspirateSpeed, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable str_Params;
    private variable i;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalParams;
    private variable int_Count;
    private variable str_ChannelValue;
    private variable int_Value;
    private variable str_ChPattern;
    private variable str_Value;
    private variable arr_Params[];
    private variable flt_LiquidFollow;
    private variable flt_EndLocation;
    private variable flt_PullOut;
    private variable flt_FixHeight;
    private variable arr_PullOutDistance[];
    private variable arr_LiquidFollowing[];
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0AS");
    str_Value = StrConcat2(Translate("at"), Translate("2&"));
    arr_Params.AddAsLast(str_Value);
    str_ChPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    str_Value = Translate("tm");
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        str_ChannelValue = StrLeft(str_ChPattern, i);
        str_ChannelValue = StrRight(str_ChannelValue, 1);
        str_Value = StrConcat2(str_Value, str_ChannelValue);
        if (i < G_FW_PIP_COM_TotalChannels)
        {
          str_Value = StrConcat2(str_Value, Translate(" "));
        }
      }
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("xp"), i_arr_XCoord, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("yp"), i_arr_YCoord, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("th"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("te"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("lp"), 245.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("zl"), i_arr_FixedHeights, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_PullOutDistance.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_LiquidFollow = i_arr_AspirateDistance.ElementAt( i -1);
        flt_EndLocation = i_arr_FixedHeights.ElementAt( i -1) - 0.0;
        flt_EndLocation = flt_EndLocation - flt_LiquidFollow;
        if (flt_EndLocation < i_flt_MinimumHeight)
        {
          flt_EndLocation = i_flt_MinimumHeight + 0.5;
        }
        flt_LiquidFollow = i_arr_AspirateDistance.ElementAt( i -1) - flt_LiquidFollow;
        if (flt_LiquidFollow < 0.0)
        {
          flt_LiquidFollow = 0.0;
        }
        flt_PullOut = flt_LiquidFollow + i_flt_PullOutDistance;
        arr_PullOutDistance.AddAsLast(flt_PullOut);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("po"), arr_PullOutDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zx"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ip"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_LiquidFollowing.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_LiquidFollow = i_arr_AspirateDistance.ElementAt( i -1);
        flt_FixHeight = i_arr_FixedHeights.ElementAt( i -1) + i_flt_ZBottom;
        flt_EndLocation = flt_FixHeight - flt_LiquidFollow;
        if (flt_EndLocation < i_flt_MinimumHeight)
        {
          flt_EndLocation = i_flt_MinimumHeight + 0.0;
        }
        flt_LiquidFollow = flt_FixHeight - flt_EndLocation;
        if (flt_LiquidFollow < 0.0)
        {
          flt_LiquidFollow = 0.0;
        }
        arr_LiquidFollowing.AddAsLast(flt_LiquidFollow);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("fp"), arr_LiquidFollowing, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("av"), i_flt_AspirateVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("as"), i_flt_AspirateSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ta"), i_flt_TransportAirGap, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ba"), i_flt_BlowoutVolume, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("oa"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("lm"), Translate(""));
    int_Value = StrConcat2(0, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ll"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("de"), i_flt_SwapSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("wt"), i_int_SettlingTime, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mc"), 0, 1, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ms"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mh"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gi"), Translate("000&"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
  }

  function PIPDispenseFromFixedHeight( device & ML_STAR, variable i_str_ChannelPattern, variable i_int_DispenseMode, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_DispenseDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_DispenseVolume, variable i_flt_DispenseSpeed, variable i_flt_CutOffSpeed, variable i_flt_StopBackVolume, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance, variable i_flt_MaximumHeight ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable arr_Params[];
    private variable str_Value;
    private variable i;
    private variable str_ChannelValue;
    private variable str_ChPattern;
    private variable int_Value;
    private variable flt_EndLocation;
    private variable flt_LiquidFollow;
    private variable flt_PullOut;
    private variable str_ReturnValue;
    private variable str_Params;
    private variable int_TotalParams;
    private variable int_DispenseMode;
    private variable arr_PullOutDistance[];
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0DS");
    int_DispenseMode = 1;
    if (i_int_DispenseMode == 0)
    {
      int_DispenseMode = 0;
    }
    if (i_int_DispenseMode == 1)
    {
      int_DispenseMode = 2;
    }
    if (i_int_DispenseMode == 2)
    {
      int_DispenseMode = 0;
    }
    if (i_int_DispenseMode == 3)
    {
      int_DispenseMode = 1;
    }
    if (i_int_DispenseMode == 4)
    {
      int_DispenseMode = 2;
    }
    if (i_int_DispenseMode == 5)
    {
      int_DispenseMode = 3;
    }
    if (i_int_DispenseMode == 6)
    {
      int_DispenseMode = 4;
    }
    str_Value = StrConcat4(Translate("dm"), int_DispenseMode, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_ChPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    str_Value = Translate("tm");
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        str_ChannelValue = StrLeft(str_ChPattern, i);
        str_ChannelValue = StrRight(str_ChannelValue, 1);
        str_Value = StrConcat2(str_Value, str_ChannelValue);
        if (i < G_FW_PIP_COM_TotalChannels)
        {
          str_Value = StrConcat2(str_Value, Translate(" "));
        }
      }
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("xp"), i_arr_XCoord, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("yp"), i_arr_YCoord, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zx"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("th"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("te"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("lp"), 245.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("zl"), i_arr_FixedHeights, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_PullOutDistance.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_LiquidFollow = i_arr_DispenseDistance.ElementAt( i -1);
        flt_EndLocation = i_arr_FixedHeights.ElementAt( i -1) - 0.0;
        flt_EndLocation = flt_EndLocation + flt_LiquidFollow;
        flt_EndLocation = flt_EndLocation + i_flt_PullOutDistance;
        if (flt_EndLocation > i_flt_MaximumHeight)
        {
          flt_EndLocation = i_flt_MaximumHeight - 0.5;
        }
        flt_PullOut = flt_EndLocation + 0.0;
        flt_PullOut = flt_PullOut - flt_LiquidFollow;
        flt_PullOut = flt_PullOut - i_arr_FixedHeights.ElementAt( i -1);
        if (flt_PullOut < 0.0)
        {
          flt_PullOut = 0.0;
        }
        arr_PullOutDistance.AddAsLast(flt_PullOut);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("po"), arr_PullOutDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ip"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("fp"), i_arr_DispenseDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("dv"), i_flt_DispenseVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ds"), i_flt_DispenseSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ss"), i_flt_CutOffSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("rv"), i_flt_StopBackVolume, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ta"), i_flt_TransportAirGap, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ba"), i_flt_BlowoutVolume, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("lm"), Translate(""));
    int_Value = StrConcat2(0, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ll"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("de"), i_flt_SwapSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("wt"), i_int_SettlingTime, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mc"), 0, 1, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ms"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mh"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gi"), Translate("000&"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
    }
  }

  function GetChannelPatternWithTips( device & ML_STAR, variable i_bln_1mL, variable & o_str_ChannelPattern ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_ReturnValue;
    private variable str_FirmwareCMND;
    private variable str_ParamSearch;
    private variable bln_ParamFound;
    private variable arr_Values[];
    private variable i;
    private variable int_TotalChannels;
    o_str_ChannelPattern = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_str_ChannelPattern = Translate("");
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if (i_bln_1mL == BOOLEON::TRUE)
    {
      int_TotalChannels = G_FW_PIP_COM_TotalChannels;
    }
    else
    {
      int_TotalChannels = G_FW_XL_COM_TotalChannels;
    }
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("C0RT"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rt");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("C0UT"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("ut");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("A1PMQA"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rt");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("A1LMQA"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rt");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
      FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, str_ParamSearch, 1, 1, int_TotalChannels, bln_ParamFound, arr_Values);
    }
    else
    {
      bln_ParamFound = BOOLEON::FALSE;
    }
    if (bln_ParamFound == BOOLEON::TRUE)
    {
      {
        for(i = 0; i < int_TotalChannels;)
        {
          i = i + 1;
          o_str_ChannelPattern = StrConcat2(o_str_ChannelPattern, arr_Values.ElementAt( i -1));
        }
      }
    }
    o_str_ChannelPattern = StrFillRight(o_str_ChannelPattern, Translate("0"), int_TotalChannels);
  }

  function GetChannelNumber1mL( device & ML_STAR, variable & o_int_ChannelCount ) void {
    o_int_ChannelCount = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_int_ChannelCount = G_FW_PIP_COM_TotalChannels;
  }

  function GetChannelRaster1mL( device & ML_STAR, variable & o_flt_ChannelRaster ) void {
    o_flt_ChannelRaster = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_flt_ChannelRaster = G_FW_PIP_COM_Raster;
  }

  function MPH96AspirateFromFixedHeight( device & ML_STAR, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_AspHeight, variable i_flt_AspirateDistance, variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_SubmergeDepth, variable i_flt_AspirateVolume, variable i_flt_AspirateSpeed, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void {
    private variable int_CutNum;
    private variable int_Length;
    private variable i;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_Count;
    private variable str_Value;
    private variable arr_Params[];
    private variable str_ReturnValue;
    private variable str_Params;
    private variable int_TotalParams;
    private variable flt_AspirationHeight;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0EA");
    str_Value = StrConcat2(Translate("aa"), Translate("2"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("xs"), i_flt_XCoord, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    if (i_flt_XCoord > 0)
    {
      str_Value = StrConcat2(Translate("xd"), Translate("0"));
    }
    else
    {
      str_Value = StrConcat2(Translate("xd"), Translate("1"));
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("yh"), i_flt_YCoord, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("zh"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("ze"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("lz"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    flt_AspirationHeight = i_flt_AspHeight + i_flt_ZBottom;
    FW_HELPERLIBRARY::SetParameter(Translate("zt"), flt_AspirationHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("pp"), i_flt_PullOutDistance, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("zm"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    if(0){
      FW_HELPERLIBRARY::SetParameter(Translate("zv"), 0.0, 10.0, 4, str_Value);
      arr_Params.AddAsLast(str_Value);
      FW_HELPERLIBRARY::SetParameter(Translate("zq"), 0.0, 10.0, 5, str_Value);
      arr_Params.AddAsLast(str_Value);
    }
    FW_HELPERLIBRARY::SetParameter(Translate("iw"), i_flt_SubmergeDepth, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ix"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("fh"), i_flt_AspirateDistance, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("af"), i_flt_AspirateVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("ag"), i_flt_AspirateSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("vt"), i_flt_TransportAirGap, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("bv"), i_flt_BlowoutVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("wv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("cm"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("cs"), Translate("1"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("bs"), i_flt_SwapSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("wh"), i_int_SettlingTime, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("hv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("hc"), Translate("00"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("hp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("mj"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("hs"), 3.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("cw"), Translate("FFFFFFFFFFFFFFFFFFFFFFFF"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
  }

  function MPH96DispenseFromFixedHeight( device & ML_STAR, variable i_int_DispenseMode, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_DispHeight, variable i_flt_DispenseDistance, variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_SubmergeDepth, variable i_flt_DispenseVolume, variable i_flt_DispenseSpeed, variable i_flt_CutOffSpeed, variable i_flt_StopBackVolume, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable str_Params;
    private variable i;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalParams;
    private variable int_Count;
    private variable str_Value;
    private variable arr_Params[];
    private variable int_DispenseMode;
    private variable flt_DispenseHeight;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0ED");
    int_DispenseMode = 1;
    if (i_int_DispenseMode == 0)
    {
      int_DispenseMode = 0;
    }
    if (i_int_DispenseMode == 1)
    {
      int_DispenseMode = 2;
    }
    if (i_int_DispenseMode == 2)
    {
      int_DispenseMode = 0;
    }
    if (i_int_DispenseMode == 3)
    {
      int_DispenseMode = 1;
    }
    if (i_int_DispenseMode == 4)
    {
      int_DispenseMode = 2;
    }
    if (i_int_DispenseMode == 5)
    {
      int_DispenseMode = 3;
    }
    str_Value = StrConcat2(Translate("da"), int_DispenseMode);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("xs"), i_flt_XCoord, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    if (i_flt_XCoord > 0)
    {
      str_Value = StrConcat2(Translate("xd"), Translate("0"));
    }
    else
    {
      str_Value = StrConcat2(Translate("xd"), Translate("1"));
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("yh"), i_flt_YCoord, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("zm"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    if(0){
      FW_HELPERLIBRARY::SetParameter(Translate("zv"), 0.0, 10.0, 4, str_Value);
      arr_Params.AddAsLast(str_Value);
      FW_HELPERLIBRARY::SetParameter(Translate("zq"), 0.0, 10.0, 5, str_Value);
      arr_Params.AddAsLast(str_Value);
    }
    FW_HELPERLIBRARY::SetParameter(Translate("lz"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    flt_DispenseHeight = i_flt_DispHeight + i_flt_ZBottom;
    FW_HELPERLIBRARY::SetParameter(Translate("zt"), flt_DispenseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("pp"), i_flt_PullOutDistance, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("iw"), i_flt_SubmergeDepth, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ix"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("fh"), i_flt_DispenseDistance, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("zh"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("ze"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("df"), i_flt_DispenseVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("dg"), i_flt_DispenseSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("es"), i_flt_CutOffSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("ev"), i_flt_StopBackVolume, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("vt"), i_flt_TransportAirGap, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("bv"), i_flt_BlowoutVolume, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    if(0){
      FW_HELPERLIBRARY::SetParameter(Translate("wv"), 0.0, 10.0, 5, str_Value);
      arr_Params.AddAsLast(str_Value);
    }
    str_Value = StrConcat2(Translate("cm"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("cs"), Translate("1"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("bs"), i_flt_SwapSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("wh"), i_int_SettlingTime, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("hv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("hc"), Translate("00"));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("hp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("mj"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("hs"), 3.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("cw"), Translate("FFFFFFFFFFFFFFFFFFFFFFFF"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
  }

  function GetMPHExist( device & ML_STAR, variable & o_int_MPHExists ) void {
    o_int_MPHExists = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_int_MPHExists = G_FW_PIP_COM_MPH_Exist;
  }

  function MPH96GetTipPresence( device & ML_STAR, variable & o_bln_TipLoaded ) void {
    private variable strFW_digits;
    private variable str_ReturnValue;
    private variable str_Params;
    private variable i;
    private variable str_FirmwareCommand;
    private variable str_FirmwareCMND;
    private variable int_TotalParams;
    private variable arr_Params[];
    o_bln_TipLoaded = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_bln_TipLoaded = 0;
    arr_Params.SetSize(0);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    if (G_FW_PIP_COM_FirmwareType == 1)
    {
      str_FirmwareCommand = Translate("C0QH");
    }
    else
    {
      str_FirmwareCommand = Translate("A1HMQA");
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        str_FirmwareCMND = StrConcat4(str_FirmwareCommand, str_Params, Translate(""), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      strFW_digits = StrRight(str_ReturnValue, 1);
      strFW_digits = StrIVal(strFW_digits);
      o_bln_TipLoaded = strFW_digits;
    }
    if(o_bln_TipLoaded == 1)o_bln_TipLoaded = hslTrue;
    if(o_bln_TipLoaded == 0)o_bln_TipLoaded = hslFalse;
    TRACE::TRACE02(Translate("     MPH96 Tip Loaded:  "), o_bln_TipLoaded);
  }

  function MPH96GetCoordinates( device & ML_STAR, variable & o_flt_CurrentXCoord, variable & o_flt_CurrentYCoord, variable & o_flt_CurrentZCoord ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable int_Count;
    private variable bln_ParamFound;
    private variable str_Value;
    private variable int_XDirection;
    o_flt_CurrentXCoord = 0;
    o_flt_CurrentYCoord = 0;
    o_flt_CurrentZCoord = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_flt_CurrentXCoord = 0.0;
    o_flt_CurrentYCoord = 0.0;
    o_flt_CurrentZCoord = 0.0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        str_FirmwareCMND = StrConcat4(Translate("C0QI"), Translate(""), Translate(""), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
        FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("xs"), 0.1, 5, bln_ParamFound, o_flt_CurrentXCoord);
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("xd"), 1, 1, bln_ParamFound, str_Value);
        if (bln_ParamFound == BOOLEON::TRUE)
        {
          str_Value = StrConcat2(str_Value, Translate(""));
          HELPERLIBRARY::ConvertToInteger(str_Value, int_XDirection);
        }
        if (int_XDirection == 1)
        {
          o_flt_CurrentXCoord = o_flt_CurrentXCoord * -1;
        }
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("yh"), 0.1, 4, bln_ParamFound, o_flt_CurrentYCoord);
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("za"), 0.1, 4, bln_ParamFound, o_flt_CurrentZCoord);
      }
      else
      {
        str_FirmwareCMND = StrConcat4(Translate("A1HMQI"), Translate(""), Translate(""), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
        FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rx"), 0.1, 6, bln_ParamFound, o_flt_CurrentXCoord);
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("ry"), 0.1, 4, bln_ParamFound, o_flt_CurrentYCoord);
        FW_HELPERLIBRARY::Parse_Parameter_Single(str_ReturnValue, Translate("rz"), 0.1, 4, bln_ParamFound, o_flt_CurrentZCoord);
      }
    }
    TRACE::TRACE04(Translate("     "), Translate("X Coord:  "), o_flt_CurrentXCoord, Translate(""));
    TRACE::TRACE04(Translate("     "), Translate("Y Coord:  "), o_flt_CurrentYCoord, Translate(""));
    TRACE::TRACE04(Translate("     "), Translate("Z Coord:  "), o_flt_CurrentZCoord, Translate(""));
  }

  function Get_Tip_Volume_1mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalFound;
    private variable flt_Resolution;
    private variable int_Count;
    private variable str_Firmware;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        flt_Resolution = 0.046876;
        str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("QC"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        flt_Resolution = 0.046876;
        str_Firmware = StrConcat4(Translate("A1P"), i_int_CurrentChannel, Translate("QC"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
      FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
      int_TotalFound=arr_Values.GetSize();
      if (int_TotalFound >= 1)
      {
        if (bol_ParameterFound == 1)
        {
          o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
          FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_MaxTipVolume);
        }
      }
      if (int_TotalFound >= 2)
      {
        if (bol_ParameterFound == 1)
        {
          o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
          FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_CurrentVolumeInTip);
        }
      }
    }
    if(0){
      Trace("     ","Channel Number:  ",i_int_CurrentChannel);
      Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
      Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
    }
  }

  function GetChannelZCoordinatesLastLLD( device & ML_STAR, variable i_bln_1mL, variable & o_arr_ZCoords[] ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable str_FirmwareCMND;
    private variable str_ParamSearch;
    private variable int_Count;
    private variable bln_ParamFound;
    private variable arr_Values[];
    o_arr_ZCoords.SetSize( 0);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_arr_ZCoords.SetSize(G_FW_PIP_COM_TotalChannels);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("C0RL"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("lh");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("C0UL"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("ul");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        if (i_bln_1mL == BOOLEON::TRUE)
        {
          str_FirmwareCMND = StrConcat4(Translate("A1PMRL"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rl");
        }
        else
        {
          str_FirmwareCMND = StrConcat4(Translate("A1LMRL"), Translate(""), Translate(""), Translate(""));
          str_ParamSearch = Translate("rl");
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCMND, str_ReturnValue, BOOLEON::TRUE);
      if(0){
        FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, str_ParamSearch, 0.1, 5, G_FW_PIP_COM_TotalChannels, bln_ParamFound, arr_Values);
      }
      FW_HELPERLIBRARY::Parse_Parameter_Multiple2(str_ReturnValue, str_ParamSearch, 0.1, bln_ParamFound, arr_Values);
    }
    else
    {
      bln_ParamFound = BOOLEON::FALSE;
    }
    if (bln_ParamFound == BOOLEON::TRUE)
    {
      o_arr_ZCoords=arr_Values;
    }
  }

  function PIPAspirateFromFixedHeight_ArrayVolumes( device & ML_STAR, variable i_str_ChannelPattern, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_AspirateDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable i_flt_ContainerDepth, variable & i_arr_AspirateVolume[], variable i_flt_AspirateSpeed, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable str_Params;
    private variable flt_LiquidFollow;
    private variable flt_EndLocation;
    private variable i;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable flt_FixHeight;
    private variable strFunctionName_Cut;
    private variable int_TotalParams;
    private variable int_Count;
    private variable str_ChannelValue;
    private variable flt_PullOut;
    private variable int_Value;
    private variable str_ChPattern;
    private variable str_Value;
    private variable arr_Params[];
    private variable arr_PullOutDistance[];
    private variable arr_LiquidFollowing[];
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0AS");
    str_Value = StrConcat2(Translate("at"), Translate("2&"));
    arr_Params.AddAsLast(str_Value);
    str_ChPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    str_Value = Translate("tm");
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        str_ChannelValue = StrLeft(str_ChPattern, i);
        str_ChannelValue = StrRight(str_ChannelValue, 1);
        str_Value = StrConcat2(str_Value, str_ChannelValue);
        if (i < G_FW_PIP_COM_TotalChannels)
        {
          str_Value = StrConcat2(str_Value, Translate(" "));
        }
      }
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("xp"), i_arr_XCoord, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("yp"), i_arr_YCoord, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("th"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("te"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("lp"), 245.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("zl"), i_arr_FixedHeights, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_PullOutDistance.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_LiquidFollow = i_arr_AspirateDistance.ElementAt( i -1);
        flt_EndLocation = i_arr_FixedHeights.ElementAt( i -1) - 0.0;
        flt_EndLocation = flt_EndLocation - flt_LiquidFollow;
        if (flt_EndLocation < i_flt_MinimumHeight)
        {
          flt_EndLocation = i_flt_MinimumHeight + 0.5;
        }
        flt_LiquidFollow = i_arr_AspirateDistance.ElementAt( i -1) - flt_LiquidFollow;
        if (flt_LiquidFollow < 0.0)
        {
          flt_LiquidFollow = 0.0;
        }
        flt_PullOut = flt_LiquidFollow + i_flt_PullOutDistance;
        arr_PullOutDistance.AddAsLast(flt_PullOut);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("po"), arr_PullOutDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zx"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ip"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_LiquidFollowing.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_LiquidFollow = i_arr_AspirateDistance.ElementAt( i -1);
        flt_FixHeight = i_arr_FixedHeights.ElementAt( i -1) + i_flt_ZBottom;
        flt_EndLocation = flt_FixHeight - flt_LiquidFollow;
        if (flt_EndLocation < i_flt_MinimumHeight)
        {
          flt_EndLocation = i_flt_MinimumHeight + 0.0;
        }
        flt_LiquidFollow = flt_FixHeight - flt_EndLocation;
        if (flt_LiquidFollow < 0.0)
        {
          flt_LiquidFollow = 0.0;
        }
        arr_LiquidFollowing.AddAsLast(flt_LiquidFollow);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("fp"), arr_LiquidFollowing, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("av"), i_arr_AspirateVolume, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("as"), i_flt_AspirateSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ta"), i_flt_TransportAirGap, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ba"), i_flt_BlowoutVolume, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("oa"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("lm"), Translate(""));
    int_Value = StrConcat2(0, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ll"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("de"), i_flt_SwapSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("wt"), i_int_SettlingTime, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mc"), 0, 1, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ms"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mh"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gi"), Translate("000&"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
  }

  function PIPDispenseFromFixedHeight_ArrayVolumes( device & ML_STAR, variable i_str_ChannelPattern, variable i_int_DispenseMode, variable & i_arr_XCoord[], variable & i_arr_YCoord[], variable & i_arr_FixedHeights[], variable & i_arr_DispenseDistance[], variable i_flt_StartTraverseHeight, variable i_flt_EndTranverseHeight, variable i_flt_MinimumHeight, variable i_flt_ZBottom, variable & i_arr_DispenseVolume[], variable i_flt_DispenseSpeed, variable i_flt_CutOffSpeed, variable i_flt_StopBackVolume, variable i_flt_TransportAirGap, variable i_flt_BlowoutVolume, variable i_int_SettlingTime, variable i_flt_SwapSpeed, variable i_flt_PullOutDistance, variable i_flt_MaximumHeight ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable str_Params;
    private variable i;
    private variable flt_EndLocation;
    private variable flt_LiquidFollow;
    private variable str_FirmwareCommand;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_DispenseMode;
    private variable int_TotalParams;
    private variable int_Count;
    private variable str_ChannelValue;
    private variable flt_PullOut;
    private variable int_Value;
    private variable str_ChPattern;
    private variable str_Value;
    private variable arr_Params[];
    private variable arr_PullOutDistance[];
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    arr_Params.SetSize(0);
    str_FirmwareCommand = Translate("C0DS");
    int_DispenseMode = 1;
    if (i_int_DispenseMode == 0)
    {
      int_DispenseMode = 0;
    }
    if (i_int_DispenseMode == 1)
    {
      int_DispenseMode = 2;
    }
    if (i_int_DispenseMode == 2)
    {
      int_DispenseMode = 0;
    }
    if (i_int_DispenseMode == 3)
    {
      int_DispenseMode = 1;
    }
    if (i_int_DispenseMode == 4)
    {
      int_DispenseMode = 2;
    }
    if (i_int_DispenseMode == 5)
    {
      int_DispenseMode = 3;
    }
    if (i_int_DispenseMode == 6)
    {
      int_DispenseMode = 4;
    }
    str_Value = StrConcat4(Translate("dm"), int_DispenseMode, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_ChPattern = StrConcat2(i_str_ChannelPattern, Translate(""));
    str_ChPattern = StrFillRight(str_ChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    str_Value = Translate("tm");
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        str_ChannelValue = StrLeft(str_ChPattern, i);
        str_ChannelValue = StrRight(str_ChannelValue, 1);
        str_Value = StrConcat2(str_Value, str_ChannelValue);
        if (i < G_FW_PIP_COM_TotalChannels)
        {
          str_Value = StrConcat2(str_Value, Translate(" "));
        }
      }
    }
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("xp"), i_arr_XCoord, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("yp"), i_arr_YCoord, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("zx"), i_flt_MinimumHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("th"), i_flt_StartTraverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParameter(Translate("te"), i_flt_EndTranverseHeight, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("lp"), 245.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("zl"), i_arr_FixedHeights, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    arr_PullOutDistance.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        flt_LiquidFollow = i_arr_DispenseDistance.ElementAt( i -1);
        flt_EndLocation = i_arr_FixedHeights.ElementAt( i -1) - 0.0;
        flt_EndLocation = flt_EndLocation + flt_LiquidFollow;
        flt_EndLocation = flt_EndLocation + i_flt_PullOutDistance;
        if (flt_EndLocation > i_flt_MaximumHeight)
        {
          flt_EndLocation = i_flt_MaximumHeight - 0.5;
        }
        flt_PullOut = flt_EndLocation + 0.0;
        flt_PullOut = flt_PullOut - flt_LiquidFollow;
        flt_PullOut = flt_PullOut - i_arr_FixedHeights.ElementAt( i -1);
        if (flt_PullOut < 0.0)
        {
          flt_PullOut = 0.0;
        }
        arr_PullOutDistance.AddAsLast(flt_PullOut);
      }
    }
    FW_HELPERLIBRARY::SetParametersArr(Translate("po"), arr_PullOutDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ip"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("fp"), i_arr_DispenseDistance, 10.0, 4, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersArr(Translate("dv"), i_arr_DispenseVolume, 10.0, 5, G_FW_PIP_COM_TotalChannels, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ds"), i_flt_DispenseSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ss"), i_flt_CutOffSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("rv"), i_flt_StopBackVolume, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ta"), i_flt_TransportAirGap, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ba"), i_flt_BlowoutVolume, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("lm"), Translate(""));
    int_Value = StrConcat2(0, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("ll"), Translate(""));
    int_Value = StrConcat2(1, Translate(""));
    str_Value = StrConcat4(str_Value, int_Value, Translate("&"), Translate(""));
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("de"), i_flt_SwapSpeed, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("wt"), i_int_SettlingTime, 10.0, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mv"), 0.0, 10.0, 5, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mc"), 0, 1, 2, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mp"), 0.0, 10.0, 3, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("ms"), 10.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    FW_HELPERLIBRARY::SetParametersAll(Translate("mh"), 0.0, 10.0, 4, str_Value);
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gi"), Translate("000&"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gj"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    str_Value = StrConcat2(Translate("gk"), Translate("0"));
    arr_Params.AddAsLast(str_Value);
    int_TotalParams=arr_Params.GetSize();
    str_Params = Translate("");
    {
      for(i = 0; i < int_TotalParams;)
      {
        i = i + 1;
        str_Params = StrConcat2(str_Params, arr_Params.ElementAt( i -1));
      }
    }
    TRACE::TRACE06(Translate("Firmware Command:  "), str_FirmwareCommand, Translate("  :  "), str_Params, Translate(""), Translate(""));
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	str_ReturnValue = arrRetValues[3];
      }
      FW_HELPERLIBRARY::CheckForError(str_FirmwareCommand, str_ReturnValue, BOOLEON::TRUE);
    }
  }

  function GetChannelNumber5mL( device & ML_STAR, variable & o_int_ChannelCount ) void {
    o_int_ChannelCount = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_int_ChannelCount = G_FW_XL_COM_TotalChannels;
  }

  function GetChannelRaster5mL( device & ML_STAR, variable & o_flt_ChannelRaster ) void {
    o_flt_ChannelRaster = 0;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_flt_ChannelRaster = G_FW_XL_COM_Raster;
  }

  function Get_Tip_Volume_5mL( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable int_CutNum;
    private variable int_Length;
    private variable bol_ParameterFound;
    private variable strFunctionName;
    private variable strFunctionName_Cut;
    private variable int_TotalFound;
    private variable flt_Resolution;
    private variable int_Count;
    private variable str_Firmware;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    int_Count = StrReverseFind(strFunctionName, Translate(":"));
    int_Count = int_Count + 1;
    int_Length = StrGetLength(strFunctionName);
    int_CutNum = int_Length - int_Count;
    strFunctionName_Cut = StrMid(strFunctionName, int_Count, int_CutNum);
    strFunctionName = strFunctionName_Cut;
    FW_HELPERLIBRARY::GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::FALSE)
    {
      if (G_FW_PIP_COM_FirmwareType == 1)
      {
        flt_Resolution = 0.044711063;
        str_Firmware = StrConcat4(Translate("L"), i_int_CurrentChannel, Translate("QC"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      else
      {
        flt_Resolution = 0.044741106;
        str_Firmware = StrConcat4(Translate("A1L"), i_int_CurrentChannel, Translate("QC"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	str_ReturnValue = arrRetValues[3];
        }
      }
      FW_HELPERLIBRARY::CheckForError(strFunctionName, str_ReturnValue, 0);
      FW_HELPERLIBRARY::Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
      int_TotalFound=arr_Values.GetSize();
      if (int_TotalFound >= 1)
      {
        if (bol_ParameterFound == 1)
        {
          o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
          FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_MaxTipVolume);
        }
      }
      if (int_TotalFound >= 2)
      {
        if (bol_ParameterFound == 1)
        {
          o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
          FW_HELPERLIBRARY::RemoveExcessDigits(o_flt_CurrentVolumeInTip);
        }
      }
    }
    if(0){
      Trace("     ","Channel Number:  ",i_int_CurrentChannel);
      Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
      Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
    }
  }
} // library namespace
