#pragma once
#include "HSLStrLib.hsl"
#include "Alpha Numeric Conversion\\Alpha Numeric Conversion.hs_"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLStatistics.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HELPERLIBRARY {
  function AdjustSequence( device & ML_STAR, sequence i_seq_SequenceToAdjust, variable i_int_StartingPosition, variable i_int_EndingPosition, sequence & o_seq_AdjustedSequence ) void ;
  function CalculateVolumeToHeight( device & ML_STAR, variable iLabwareID, variable iLiquidVolume, variable iStartHeight ) variable ;
  function CalculateXYFromDiameterAndAngle( variable iDiameter, variable iPhi_Degree, variable & oDelta_X, variable & oDelta_Y ) void ;
  function ConvertToFloat( variable iVariable, variable & oVariable ) void ;
  function ConvertToInteger( variable iVariable, variable & oVariable ) void ;
  private function FindLiquidHeight( device & ML_STAR, variable i_str_LiquidLevelReturn, sequence i_seq_Labware, variable i_int_Channel, variable & o_flt_LiquidHeight ) void ;
  function GetCarrierAndSiteID( device & Instrument, variable i_str_Labware, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void ;
  function GetCenterSpotContainer( variable & o_str_CenterSpotContainerPath ) void ;
  function GetCenterSpotLabware( variable & o_str_CenterSpotLabwarePath ) void ;
  function GetChannelLimits( device & ML_STAR, variable i_Channel_Type, variable & o_Y_Max[], variable & o_Y_Min[], variable & o_Raster ) variable ;
  function GetConfigurationFile( device & i_Instrument, variable i_LabwareID, variable & o_ConfigFile ) void ;
  function GetConnectedContainer( device & ML_STAR, variable i_str_LabID, variable & o_bool_ConnectedContainer ) void ;
  function GetContainerBaseOffset( device & io_instrument, variable i_str_Labware, variable i_str_PosID, variable & o_containerBaseOffset ) void ;
  function GetContainerBaseThickness( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_containerBaseThickness ) void ;
  function GetContainerConfigurationFile( device & io_instrument, variable i_str_Labware, variable i_str_PosID, variable & o_str_ContainerFileName ) void ;
  function GetContainerDepth( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_ContainerDepth, variable & o_ContainerClearanceHeight ) void ;
  function GetContainerGeometry( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_str_ContainerGeometry ) void ;
  function GetContainerShape( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_int_ContainerShape ) void ;
  function GetContainerWidth( device & ML_STAR, variable i_str_LabID, variable & o_flt_ContainerWidth ) void ;
  function GetDefaultSequence( device & ML_STAR, variable i_str_LabID, variable i_bool_SortByColumn, sequence & o_seq_DefaultSequence ) void ;
  function GetDefinitionFileValue( variable & i_str_ConfigFilePath, variable i_str_ValueToSearch, variable & o_str_Value ) variable ;
  function GetFirstPosition( device & ML_STAR, variable i_str_LabID, variable & o_str_PosID ) void ;
  function GetIndexingFormat( device & io_instrument, variable i_str_Labware, variable & o_positionIndexingFormat ) void ;
  function GetLabwareCenter2( device & ML_STAR, variable i_str_LabID, variable & o_flt_X_Center, variable & o_flt_Y_Center ) void ;
  private function GetLabwareCenter2_OLD( device & ML_STAR, variable i_str_LabID, variable & o_flt_X_Center, variable & o_flt_Y_Center ) void ;
  private function GetLabwareCenter_OLD( device & ML_STAR, variable i_str_LabID, variable & o_flt_Center_X, variable & o_flt_Center_Y ) void ;
  function GetLabwareFileName( device & ML_STAR, variable i_str_LabID, variable & o_str_LabwareFileName ) void ;
  function GetLabwareLW( device & Instrument, variable i_str_LabID, variable & o_flt_Labware_L, variable & o_flt_Labware_W ) void ;
  function GetLabwareName( device & ML_STAR, variable i_str_LabID, variable & o_str_ViewName ) void ;
  function GetLabwareOrigin( device & Instrument, variable i_str_LabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  private function GetLabwareOrigin_OLD( device & ML_STAR, variable i_str_LabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  function GetLabwareType( device & ML_STAR, variable i_str_LabID, variable & o_str_LabwareType ) void ;
  function GetLabwareVisibility( device & ML_STAR, variable i_str_LabID, variable & o_int_LabwareVisibility ) void ;
  private function GetProbeAdjustment( device & ML_STAR, variable i_str_LabID, variable & o_flt_XProbeAdjustment, variable & o_flt_YProbeAdjustment, variable & o_flt_ZProbeAdjustment ) void ;
  function GetRackHeight( device & ML_STAR, variable i_str_LabID, variable & o_flt_RackHeight, variable & o_flt_RackClearanceHeight ) void ;
  function GetRowColumnNumber( device & Instrument, variable i_str_LabwareID, variable & o_int_RowCount, variable & o_int_ColumnCount, variable & o_bool_AlphaNumeric, variable & o_bool_IncrementContainer ) void ;
  function GetTempSortingFilePath( variable & o_str_TempSortingFilePath ) void ;
  function GetTipName( device & ML_STAR, variable i_str_TipLabware, variable & o_str_TipName, variable & o_int_TipType ) void ;
  function GetTransportSequence( device & ML_STAR, variable i_str_LabID, sequence & o_seq_TransportSequence ) void ;
  function GetZTranslate( device & ML_STAR, variable i_str_LabID, variable & o_flt_ZTranslate, variable & o_flt_ZTransValue ) void ;
  function Lookup( variable & array[], variable item ) variable ;
  function RemoveTruncatedSequencePositions( device & Instrument, sequence & io_Sequence ) void ;
  private function RemoveTruncatedSequencePositionsOLD( device & ML_STAR, sequence & io_Sequence ) void ;
  function ReplaceLabware( device & ML_STAR, variable i_str_LabID, variable i_str_NewConfigFile ) void ;
  function SetAbsolutePositionForLabwareID( device & io_devDevice, variable i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void ;
  function Set_Channel_Pattern( variable & io_Channel_Pattern, variable i_Channel_Number, variable i_Value ) void ;
  function Set_Relative_Position_for_LabwareID( device & io_devDevice, variable & i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void ;
  function SortSequence( device & Instrument, sequence & io_Sequence, variable i_bln_ByLabID ) void ;
  function SortSequenceRaster( device & Instrument, sequence & io_Sequence, variable i_bln_ByLabID, variable i_flt_YRaster ) void ;
  function SortSequences( device & Instrument, sequence & io_Sequence1, sequence & io_Sequence2, variable i_bln_ByLabID ) void ;
  function SplitString( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void ;
  function TipCapacityCheck( device & Instrument, variable i_str_TipLabware, variable & o_flt_TipCapacity ) void ;
  function TipCheck( device & Instrument, sequence & i_seq_Tips, variable i_str_TipCounter, variable i_int_TipsNeeded ) void ;
  function _ConvertToFloat( variable & io_Variable ) void ;
  function _ConvertToInt( variable & io_Variable ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ANC::_InitLibrary();
  }
  function _ExitLibrary() {
    ANC::_ExitLibrary();
  }

  private function GetLabwareCenter_OLD( device & ML_STAR, variable i_str_LabID, variable & o_flt_Center_X, variable & o_flt_Center_Y ) void {
    private variable flt_BoundaryX;
    private variable flt_BoundaryY;
    private variable flt_RackWidthX;
    private variable flt_RackWidthY;
    private variable flt_HalfRackWidthX;
    private variable flt_HalfRackWidthY;
    private variable flt_Angle;
    o_flt_Center_X = 0;
    o_flt_Center_Y = 0;
    o_flt_Center_X = 0.0;
    o_flt_Center_Y = 0.0;
    flt_BoundaryX = 0.0;
    flt_BoundaryY = 0.0;
    flt_RackWidthX = 0.0;
    flt_RackWidthY = 0.0;
    flt_Angle = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_BoundaryX = objRackDataParams.Item1("Labwr_Bndry1X");
      flt_BoundaryY = objRackDataParams.Item1("Labwr_Bndry1Y");
      flt_RackWidthX = objRackDataParams.Item1("Labwr_XDim");
      flt_RackWidthY = objRackDataParams.Item1("Labwr_YDim");
      flt_Angle = objEditLabware5.Angle();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (flt_Angle == 0.0)
    {
      flt_HalfRackWidthX = flt_RackWidthX / (2 * 1.0);
      flt_HalfRackWidthY = flt_RackWidthY / (2 * 1.0);
      o_flt_Center_X = flt_BoundaryX + flt_HalfRackWidthX;
      o_flt_Center_Y = flt_BoundaryY + flt_HalfRackWidthY;
    }
    if (flt_Angle == 180.0)
    {
      flt_HalfRackWidthX = flt_RackWidthX / (2 * 1.0);
      flt_HalfRackWidthY = flt_RackWidthY / (2 * 1.0);
      o_flt_Center_X = flt_BoundaryX - flt_HalfRackWidthX;
      o_flt_Center_Y = flt_BoundaryY - flt_HalfRackWidthY;
    }
    if (flt_Angle == 270.0)
    {
      flt_HalfRackWidthX = flt_RackWidthX / (2 * 1.0);
      flt_HalfRackWidthY = flt_RackWidthY / (2 * 1.0);
      o_flt_Center_X = flt_BoundaryX - flt_HalfRackWidthY;
      o_flt_Center_Y = flt_BoundaryY + flt_HalfRackWidthX;
    }
    if (flt_Angle == 90.0)
    {
      flt_HalfRackWidthX = flt_RackWidthX / (2 * 1.0);
      flt_HalfRackWidthY = flt_RackWidthY / (2 * 1.0);
      o_flt_Center_X = flt_BoundaryX + flt_HalfRackWidthY;
      o_flt_Center_Y = flt_BoundaryY - flt_HalfRackWidthX;
    }
  }

  function GetFirstPosition( device & ML_STAR, variable i_str_LabID, variable & o_str_PosID ) void {
    private variable int_TotalColumns;
    private variable int_Index;
    private variable int_TotalRows;
    private variable int_Increment;
    o_str_PosID = 0;
    int_TotalRows = 0;
    int_TotalColumns = 0;
    int_Index = 0;
    int_Increment = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      int_TotalRows = objRack4.Rows();
      int_TotalColumns = objRack4.Columns();
      int_Index = objRack4.Index();
      int_Increment = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    if (int_Index == 1)
    {
      ANC::Convert_Numbers_to_Alpha_Numeric(int_Increment, 1, int_TotalRows, int_TotalColumns, o_str_PosID);
    }
    else
    {
      o_str_PosID = StrConcat2(1, Translate(""));
    }
  }

  function GetDefaultSequence( device & ML_STAR, variable i_str_LabID, variable i_bool_SortByColumn, sequence & o_seq_DefaultSequence ) void {
    private variable int_Increment;
    private variable int_TotalColumns;
    private variable int_Index;
    private variable int_TotalRows;
    private variable i;
    private variable str_PosID;
    private variable int_TotalPositions;
    SeqRemoveAll(o_seq_DefaultSequence);
    int_TotalRows = 0;
    int_TotalColumns = 0;
    int_Index = 0;
    int_Increment = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      int_TotalRows = objRack4.Rows();
      int_TotalColumns = objRack4.Columns();
      int_Index = objRack4.Index();
      int_Increment = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    int_TotalPositions = int_TotalColumns * int_TotalRows;
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        if (int_Index == 1)
        {
          ANC::Convert_Numbers_to_Alpha_Numeric(i_bool_SortByColumn, i, int_TotalRows, int_TotalColumns, str_PosID);
        }
        else
        {
          str_PosID = StrConcat2(i, Translate(""));
        }
        SeqAdd(o_seq_DefaultSequence, i_str_LabID, str_PosID);
      }
    }
    o_seq_DefaultSequence.SetCurrentPosition(1);
    if(0){
      Util2::Debug::TraceSequence(o_seq_DefaultSequence);
    }
  }

  function GetChannelLimits( device & ML_STAR, variable i_Channel_Type, variable & o_Y_Max[], variable & o_Y_Min[], variable & o_Raster ) variable {
    private variable y_value;
    private variable raster_labhand_channels;
    private variable minimum_y;
    private variable chan_index;
    private variable num_labhand_channels;
    private variable num_camera_channels;
    private variable raster_1mL_channels;
    private variable num_1mL_channels;
    private variable raster_5mL_channels;
    private variable raster_camera_channels;
    private variable maximum_y;
    private variable num_5mL_channels;
    private variable ret_Num_Channels;
    private variable chan_offset;
    private variable arr_max_y_5mL[];
    private variable arr_min_y_labhand[];
    private variable arr_min_y_1mL[];
    private variable arr_min_y_5mL[];
    private variable arr_max_y_labhand[];
    private variable arr_max_y_1mL[];
    private variable type_labhand_channels;
    o_Y_Max.SetSize( 0);
    o_Y_Min.SetSize( 0);
    o_Raster = 0;
    ret_Num_Channels = 0;
    o_Raster = 0;
    o_Y_Max.SetSize(0);
    o_Y_Min.SetSize(0);
    i_Channel_Type = StrConcat2(i_Channel_Type, Translate(""));
    i_Channel_Type = StrIVal(i_Channel_Type);
    if (i_Channel_Type < 0)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      return (ret_Num_Channels);
    }
    if (i_Channel_Type > 2)
    {
      TrcTrace4(Translate("***************  Channel type of "), i_Channel_Type, Translate(" is not recognized by this library!!!!"), Translate(""));
      return (ret_Num_Channels);
    }
    num_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 1);
    num_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 43);
    num_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 47);
    num_camera_channels = DevGetCfgValueWithKey(ML_STAR, 45);
    if(0){
      Trace("Total Camera Channels:  ",num_camera_channels);
    }
    raster_1mL_channels = DevGetCfgValueWithKey(ML_STAR, 26);
    raster_5mL_channels = DevGetCfgValueWithKey(ML_STAR, 42);
    raster_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 48);
    type_labhand_channels = DevGetCfgValueWithKey(ML_STAR, 58);
    if (type_labhand_channels == 4)
    {
      num_labhand_channels = 0;
    }
    if (type_labhand_channels == 5)
    {
      num_labhand_channels = 0;
    }
    if(0){
      raster_camera_channels = 18;
      raster_camera_channels = 22.5;
    }
    raster_camera_channels = 29.5;
    maximum_y = 613.5;
    maximum_y = 614.5;
    y_value = maximum_y;
    arr_max_y_1mL.SetSize(0);
    {
      for(chan_index = 0; chan_index < num_1mL_channels;)
      {
        chan_index = chan_index + 1;
        y_value = chan_index * raster_1mL_channels;
        y_value = maximum_y - y_value;
        arr_max_y_1mL.AddAsLast(y_value);
      }
    }
    maximum_y = maximum_y - (num_1mL_channels * raster_1mL_channels);
    arr_max_y_5mL.SetSize(0);
    {
      for(chan_index = 0; chan_index < num_5mL_channels;)
      {
        chan_index = chan_index + 1;
        y_value = chan_index * raster_5mL_channels;
        y_value = maximum_y - y_value;
        arr_max_y_5mL.AddAsLast(y_value);
      }
    }
    maximum_y = maximum_y - (num_5mL_channels * raster_5mL_channels);
    arr_max_y_labhand.SetSize(0);
    {
      for(chan_index = 0; chan_index < num_labhand_channels;)
      {
        chan_index = chan_index + 1;
        y_value = chan_index * raster_labhand_channels;
        y_value = maximum_y - y_value;
        arr_max_y_labhand.AddAsLast(y_value);
      }
    }
    minimum_y = -1.0;
    if(0){
      minimum_y = 6.0;
      minimum_y = -0.5;
    }
    y_value = 0.0;
    minimum_y = minimum_y + (num_camera_channels * raster_camera_channels);
    arr_min_y_labhand.SetSize(0);
    {
      for(chan_offset = 0; chan_offset < num_labhand_channels;)
      {
        chan_offset = chan_offset + 1;
        chan_index = num_labhand_channels - chan_offset;
        chan_index = chan_index + 1;
        y_value = chan_index * raster_labhand_channels;
        y_value = minimum_y + y_value;
        arr_min_y_labhand.AddAsLast(y_value);
      }
    }
    minimum_y = minimum_y + (num_labhand_channels * raster_labhand_channels);
    arr_min_y_5mL.SetSize(0);
    {
      for(chan_offset = 0; chan_offset < num_5mL_channels;)
      {
        chan_offset = chan_offset + 1;
        chan_index = num_5mL_channels - chan_offset;
        chan_index = chan_index + 1;
        y_value = chan_index * raster_5mL_channels;
        y_value = minimum_y + y_value;
        arr_min_y_5mL.AddAsLast(y_value);
      }
    }
    minimum_y = minimum_y + (num_5mL_channels * raster_5mL_channels);
    arr_min_y_1mL.SetSize(0);
    {
      for(chan_offset = 0; chan_offset < num_1mL_channels;)
      {
        chan_offset = chan_offset + 1;
        chan_index = num_1mL_channels - chan_offset;
        chan_index = chan_index + 1;
        y_value = chan_index * raster_1mL_channels;
        y_value = minimum_y + y_value;
        arr_min_y_1mL.AddAsLast(y_value);
      }
    }
    if (i_Channel_Type == 0)
    {
      o_Y_Max=arr_max_y_1mL;
      o_Y_Min=arr_min_y_1mL;
      o_Raster = raster_1mL_channels;
      return (num_1mL_channels);
    }
    if (i_Channel_Type == 1)
    {
      o_Y_Max=arr_max_y_5mL;
      o_Y_Min=arr_min_y_5mL;
      o_Raster = raster_5mL_channels;
      return (num_5mL_channels);
    }
    if (i_Channel_Type == 2)
    {
      o_Y_Max=arr_max_y_labhand;
      o_Y_Min=arr_min_y_labhand;
      o_Raster = raster_labhand_channels;
      return (num_labhand_channels);
    }
  }

  function SetAbsolutePositionForLabwareID( device & io_devDevice, variable i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void {
    // Set Absolute Position
    {
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
            variable PosVals[];
            object   objDecklayout;
            variable strFunctionName("");
            //strFunctionName = ExtractFunctionName(GetFunctionName());
            // check input variables
            //if (!CheckString(i_strLabwareID, "i_strLabwareID", strFunctionName)) return(hslFalse);
            //StatusTrace(CMD_START, TRACE_LEVEL_DEBUG, "i_strLabwareID = " + i_strLabwareID + ", i_fltPositionX = " + FStr(i_fltPositionX) + ", i_fltPositionY = " + FStr(i_fltPositionY) + ", i_fltPositionZ = " + FStr(i_fltPositionZ) + ", i_fltPositionR = " + FStr(i_fltPositionR), strFunctionName);
            //EnterSemaphore();
            objDecklayout = io_devDevice.GetDeckLayoutObject();
            //LeaveSemaphore();
            if (!objDecklayout.IsNull())
            {
                object objLabware;
                onerror goto HandleLabwareError;
                objLabware = objDecklayout.Labware(i_strLabwareID);
                onerror goto 0;
                err.Clear();
                if (!objLabware.IsNull())
                {
                    object Decklayout5;
                    object MoveParameters;
                    objDecklayout.GetObject("IDeckLayout5", Decklayout5);
                    //EnterSemaphore();
                    //io_devDevice.GetLabwarePosition(i_strLabwareID, PosVals);
                    //LeaveSemaphore();
                    //StatusTrace(CMD_PROGRESS, TRACE_LEVEL_DEBUG, "Current position: (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                    MoveParameters.CreateObject("HXPARAMSLib.HxPars");
                    MoveParameters.Add(i_strLabwareID, P_LABWARE_ID);
                    MoveParameters.Add(i_fltPositionX, P_XCOORD);
                    MoveParameters.Add(i_fltPositionY, P_YCOORD);
                    MoveParameters.Add(i_fltPositionZ, P_ZCOORD);
                    MoveParameters.Add(i_fltPositionR, P_RZCOORD);
                    Decklayout5.MoveLabware(objLabware, MoveParameters);
                    // Trace new position
                    //EnterSemaphore();
                    //io_devDevice.GetLabwarePosition(i_strLabwareID, PosVals);
                    //LeaveSemaphore();
                    objLabware.ReleaseObject();
                    objDecklayout.ReleaseObject();
                    Decklayout5.ReleaseObject();
                    MoveParameters.ReleaseObject();
                    //StatusTrace(CMD_COMPLETE, TRACE_LEVEL_DEBUG, "New position:     (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                    //return(hslTrue);
                }
                //else
                //{
                  //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find labware.", strFunctionName);
                  //objDecklayout.ReleaseObject();
                  //return(hslFalse);
                //}
             // }
              //else
              //{
                //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find decklayout.", strFunctionName);
                //return(hslFalse);
            }
            // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
        //Trace(errorID);
                if (errorID==-1574764487)
                {
                    Trace("LabwareID is  unknown.");
                    //return(hslFalse);
                }
                else
                {
                    //Trace("Unknown error occured.");
                    //return(hslFalse);
                }
            }
    }
  }

  function SplitString( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void {
    private variable strEdit;
    private variable posLast;
    private variable strToAdd;
    private variable posCurrent;
    arrTokens.SetSize( 0);
    posCurrent = -1;
    posLast = -1;
    strToAdd = "";
    strEdit = strIn;
    if( StrGetLength(strEdit) == 0 || StrGetLength(strDelimiter) == 0 )
       return;
    posLast = StrGetLength(strEdit);
    posCurrent = StrFind(strEdit, strDelimiter);
    while (-1 != posCurrent && posLast > 0)
    {
         //get tokens before next delimiter char
         strToAdd = StrLeft(strEdit, posCurrent);
         StrTrimRight(strToAdd, "");
         StrTrimLeft (strToAdd, "");
         //add token to our output list
         if( StrGetLength(strToAdd) > 0 )
         {
              arrTokens.AddAsLast(strToAdd);
              //Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
         }
         else
         {
              if( bAttendEmptyTokens )// empty string should also be added
              {
                   arrTokens.AddAsLast(strToAdd);
                   //Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
              }
         }
         //prepare next loop by removing obsolete characters
         strEdit = StrRight(strEdit, posLast - posCurrent - StrGetLength(strDelimiter) );
         //Trace(GetFunctionName(), " next string = ", strEdit );
         //find next "non-delimiter"
         posCurrent = StrFind(strEdit, strDelimiter);
         posLast = StrGetLength(strEdit);
         //Trace(GetFunctionName(), " next pos = ", posCurrent );
    }//end while
    //no delimiter left
    //add the last part of the string to our output list
    if (-1 == posCurrent)// && posLast > 0
    {
         if( posLast == 0 && !bAttendEmptyTokens )
            return;
         StrTrimRight(strEdit, "");
         StrTrimLeft (strEdit, "");
         //Trace(GetFunctionName(), " no delimiter left - adding string to output list: $", strEdit, "$", "" );
         arrTokens.AddAsLast(strEdit);
    }
  }

  function GetConfigurationFile( device & i_Instrument, variable i_LabwareID, variable & o_ConfigFile ) void {
    o_ConfigFile = 0;
    o_ConfigFile = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = i_Instrument.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(i_LabwareID);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                   o_ConfigFile = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
  }

  function ConvertToFloat( variable iVariable, variable & oVariable ) void {
    private variable str_Variable;
    oVariable = 0;
    str_Variable = StrConcat2(iVariable, Translate(""));
    oVariable = StrFVal(str_Variable);
  }

  function GetContainerWidth( device & ML_STAR, variable i_str_LabID, variable & o_flt_ContainerWidth ) void {
    private variable flt_ContainerDiameter;
    private variable str_PosID;
    o_flt_ContainerWidth = 0;
    flt_ContainerDiameter = 0.0;
    GetFirstPosition(ML_STAR, i_str_LabID, str_PosID);
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_ContainerDiameter = objEditLabware5.CntrDiameter(str_PosID);
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_ContainerWidth = flt_ContainerDiameter;
  }

  function GetCenterSpotLabware( variable & o_str_CenterSpotLabwarePath ) void {
    private variable str_CenterSpot;
    private variable str_FileName;
    o_str_CenterSpotLabwarePath = 0;
    o_str_CenterSpotLabwarePath = Translate("");
    str_CenterSpot = Translate("");
    str_CenterSpot = GetFileName();
    str_FileName = HSLExtensions::File::GetFileName(str_CenterSpot);
    StrReplace(str_CenterSpot, str_FileName, Translate(""));
    str_CenterSpot = StrConcat8(str_CenterSpot, Translate("\\"), Translate("CenterSpot"), Translate(".rck"), Translate(""), Translate(""), Translate(""), Translate(""));
    StrReplace(str_CenterSpot, Translate("\\"), Translate("\\\\"));
    o_str_CenterSpotLabwarePath = str_CenterSpot;
  }

  function GetCenterSpotContainer( variable & o_str_CenterSpotContainerPath ) void {
    private variable str_CenterSpot;
    private variable str_FileName;
    o_str_CenterSpotContainerPath = 0;
    o_str_CenterSpotContainerPath = Translate("");
    str_CenterSpot = Translate("");
    str_CenterSpot = GetFileName();
    str_FileName = HSLExtensions::File::GetFileName(str_CenterSpot);
    StrReplace(str_CenterSpot, str_FileName, Translate(""));
    str_CenterSpot = StrConcat8(str_CenterSpot, Translate("\\"), Translate("CenterSpot"), Translate(".ctr"), Translate(""), Translate(""), Translate(""), Translate(""));
    StrReplace(str_CenterSpot, Translate("\\"), Translate("\\\\"));
    o_str_CenterSpotContainerPath = str_CenterSpot;
  }

  function ConvertToInteger( variable iVariable, variable & oVariable ) void {
    private variable str_Variable;
    oVariable = 0;
    str_Variable = StrConcat2(iVariable, Translate(""));
    oVariable = StrIVal(str_Variable);
  }

  function GetIndexingFormat( device & io_instrument, variable i_str_Labware, variable & o_positionIndexingFormat ) void {
    o_positionIndexingFormat = 0;
    o_positionIndexingFormat = 0;
    {
      object rack;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject("IRectRack2", rack);
      o_positionIndexingFormat = rack.index;
    }
  }

  function GetTipName( device & ML_STAR, variable i_str_TipLabware, variable & o_str_TipName, variable & o_int_TipType ) void {
    private variable int_Length;
    private variable str_TipType;
    private variable int_TipType;
    o_str_TipName = 0;
    o_int_TipType = 0;
    o_str_TipName = Translate("");
    str_TipType = DevGetLabwareData(ML_STAR, i_str_TipLabware, Translate("MlStarTipRack"));
    int_Length = StrGetLength(str_TipType);
    if (int_Length > 0)
    {
      int_TipType = StrIVal(str_TipType);
    }
    else
    {
      int_TipType = -1;
    }
    o_int_TipType = int_TipType;
    if (int_TipType == 0)
    {
      o_str_TipName = Translate("300uL Tips");
    }
    if (int_TipType == 1)
    {
      o_str_TipName = Translate("300uL Tips");
    }
    if (int_TipType == 30)
    {
      o_str_TipName = Translate("300uL Tips");
    }
    if (int_TipType == 2)
    {
      o_str_TipName = Translate("10uL Tips");
    }
    if (int_TipType == 3)
    {
      o_str_TipName = Translate("10uL Tips");
    }
    if (int_TipType == 32)
    {
      o_str_TipName = Translate("10uL Tips");
    }
    if (int_TipType == 4)
    {
      o_str_TipName = Translate("1000uL Tips");
    }
    if (int_TipType == 5)
    {
      o_str_TipName = Translate("1000uL Tips");
    }
    if (int_TipType == 10)
    {
      o_str_TipName = Translate("Teaching Needles");
    }
    if (int_TipType == 22)
    {
      o_str_TipName = Translate("50uL Tips");
    }
    if (int_TipType == 23)
    {
      o_str_TipName = Translate("50uL Tips");
    }
    if (int_TipType == 31)
    {
      o_str_TipName = Translate("50uL Tips");
    }
    if (int_TipType == 36)
    {
      o_str_TipName = Translate("300uL Slim Tips");
    }
    if (int_TipType == 45)
    {
      o_str_TipName = Translate("300uL Slim Tips");
    }
  }

  private function FindLiquidHeight( device & ML_STAR, variable i_str_LiquidLevelReturn, sequence i_seq_Labware, variable i_int_Channel, variable & o_flt_LiquidHeight ) void {
    private variable flt_LiquidLevelDeck;
    private variable NotUsed;
    private variable flt_ZBottom;
    private variable str_LabID;
    private variable bool_Simulation;
    o_flt_LiquidHeight = 0;
    bool_Simulation = Util::GetSimulationMode();
    str_LabID = SeqGetLabwareId(i_seq_Labware);
    flt_LiquidLevelDeck = StepReturn::GetLastLiquidLevel(i_int_Channel, i_str_LiquidLevelReturn);
    DevGetLabwarePosition(ML_STAR, str_LabID, NotUsed, NotUsed, flt_ZBottom, NotUsed);
    if (bool_Simulation == 1)
    {
      MECC::TraceComment(Translate("---------------- SIMULATED ADD 5mm TO LIQUID HEIGHT"));
      flt_LiquidLevelDeck = flt_ZBottom + 5.0;
    }
    o_flt_LiquidHeight = flt_LiquidLevelDeck - flt_ZBottom;
    if (o_flt_LiquidHeight < 0)
    {
      o_flt_LiquidHeight = 0;
    }
    Trace("******** Liquid Level Height for ",str_LabID," is ",o_flt_LiquidHeight);
  }

  function TipCheck( device & Instrument, sequence & i_seq_Tips, variable i_str_TipCounter, variable i_int_TipsNeeded ) void {
    private dialog customDialog_1;
    private variable int_CurrentPosition;
    private variable flt_TipCapacity;
    private variable int_NumLabIDs;
    private variable str_TipMessage;
    private variable int_EndPosition;
    private variable int_PositionsRemaining;
    private variable str_TipLabware;
    private variable str_TipName;
    private variable arr_LabIDs[];
    MECC::TraceComment(Translate("=========  Check tip sequence"));
    SeqGetLabwareIds(i_seq_Tips, arr_LabIDs);
    int_NumLabIDs=arr_LabIDs.GetSize();
    if(0){
      if (int_NumLabIDs == 0)
      {
        MECC::TraceComment(Translate("------------------  No labware detected in sequence"));
        return;
      }
    }
    if (int_NumLabIDs > 0)
    {
      str_TipLabware=arr_LabIDs.GetAt(1-1);
      TipCapacityCheck(Instrument, str_TipLabware, flt_TipCapacity);
    }
    else
    {
      flt_TipCapacity = Translate("Unknown");
    }
    str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
    str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
    {
      while (1 == 1)
      {
        int_CurrentPosition = i_seq_Tips.GetCurrentPosition();
        int_EndPosition = i_seq_Tips.GetCount();
        if (int_CurrentPosition == 0)
        {
          int_CurrentPosition = int_EndPosition + 1;
        }
        int_PositionsRemaining = int_EndPosition - int_CurrentPosition;
        int_PositionsRemaining = int_PositionsRemaining + 1;
        Trace("     ","Positions Remaining:  ",int_PositionsRemaining,"  Tips Needed:  ",i_int_TipsNeeded);
        if (int_PositionsRemaining >= i_int_TipsNeeded)
        {
          MECC::TraceComment(Translate("------------------  Sufficient tips found"));
          break;
        }
        MECC::TraceComment(Translate("------------------  Insufficient tips found"));
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
        customDialog_1.ShowCustomDialog();
        i_seq_Tips.SetCurrentPosition(1);
        TipCount::Edit2(i_seq_Tips, i_str_TipCounter, Instrument, 99999);
      }
    }
  }

  function TipCapacityCheck( device & Instrument, variable i_str_TipLabware, variable & o_flt_TipCapacity ) void {
    private variable str_TipType;
    private variable int_TipType;
    o_flt_TipCapacity = 0;
    onerror goto errLabel_2 ;
    err.Clear();
    str_TipType = DevGetLabwareData(Instrument, i_str_TipLabware, Translate("MlStarTipRack"));
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    int_TipType = StrIVal(str_TipType);
    o_flt_TipCapacity = 0.0;
    if (int_TipType == 2)
    {
      o_flt_TipCapacity = 10;
    }
    if (int_TipType == 32)
    {
      o_flt_TipCapacity = 10;
    }
    if (int_TipType == 3)
    {
      o_flt_TipCapacity = 10;
    }
    if (int_TipType == 22)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 31)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 23)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 0)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 30)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 1)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 4)
    {
      o_flt_TipCapacity = 1000;
    }
    if (int_TipType == 5)
    {
      o_flt_TipCapacity = 1000;
    }
  }

  function GetConnectedContainer( device & ML_STAR, variable i_str_LabID, variable & o_bool_ConnectedContainer ) void {
    private variable bool_ConectedCarrier;
    o_bool_ConnectedContainer = 0;
    bool_ConectedCarrier = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      //objRack4.GetRackData(objRackDataParams);
      //bool_ConectedCarrier = objRackDataParams.Item1("ConnectedCtr");
      bool_ConectedCarrier = objRack4.ConnectedCtr();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_bool_ConnectedContainer = bool_ConectedCarrier;
  }

  function GetLabwareVisibility( device & ML_STAR, variable i_str_LabID, variable & o_int_LabwareVisibility ) void {
    private variable int_LabwareVisibility;
    o_int_LabwareVisibility = 0;
    int_LabwareVisibility = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware6", objEditLabware5);
      int_LabwareVisibility = objEditLabware5.Visible();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_int_LabwareVisibility = int_LabwareVisibility;
  }

  function GetLabwareFileName( device & ML_STAR, variable i_str_LabID, variable & o_str_LabwareFileName ) void {
    private variable str_LabwareFileName;
    o_str_LabwareFileName = 0;
    str_LabwareFileName = Translate("");
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware6", objEditLabware5);
      str_LabwareFileName = objEditLabware5.FileName();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_str_LabwareFileName = str_LabwareFileName;
  }

  function GetLabwareName( device & ML_STAR, variable i_str_LabID, variable & o_str_ViewName ) void {
    private variable str_Name;
    private variable str_ViewName;
    o_str_ViewName = 0;
    str_ViewName = Translate("");
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware6", objEditLabware5);
      str_ViewName = objEditLabware5.DisplayName();
      str_Name = objEditLabware5.Name();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_str_ViewName = str_ViewName;
  }

  function GetLabwareType( device & ML_STAR, variable i_str_LabID, variable & o_str_LabwareType ) void {
    private variable str_LabwareType;
    o_str_LabwareType = 0;
    str_LabwareType = Translate("");
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware6", objEditLabware5);
      str_LabwareType = objEditLabware5.Type();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_str_LabwareType = str_LabwareType;
  }

  private function GetLabwareOrigin_OLD( device & ML_STAR, variable i_str_LabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_BoundaryX;
    private variable flt_BoundaryY;
    private variable flt_RackWidthX;
    private variable flt_RackWidthY;
    private variable flt_RackBase;
    private variable flt_BaseOffset;
    private variable flt_ContainerBaseThickness;
    private variable flt_ContainerOffset;
    private variable str_FirstPosition;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    flt_BoundaryX = 0.0;
    flt_BoundaryY = 0.0;
    flt_RackWidthX = 0.0;
    flt_RackWidthY = 0.0;
    flt_RackBase = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_BoundaryX = objRackDataParams.Item1("Labwr_Bndry1X");
      flt_BoundaryY = objRackDataParams.Item1("Labwr_Bndry1Y");
      flt_RackWidthX = objRackDataParams.Item1("Labwr_XDim");
      flt_RackWidthY = objRackDataParams.Item1("Labwr_YDim");
      flt_RackBase = objRack4.RackBase();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    GetFirstPosition(ML_STAR, i_str_LabID, str_FirstPosition);
    o_flt_X_Coord = flt_BoundaryX;
    o_flt_Y_Coord = flt_BoundaryY;
    o_flt_Z_Coord = flt_RackBase;
    GetContainerBaseThickness(ML_STAR, i_str_LabID, str_FirstPosition, flt_ContainerBaseThickness);
    GetContainerBaseOffset(ML_STAR, i_str_LabID, str_FirstPosition, flt_BaseOffset);
    if(0){
      flt_ContainerOffset = flt_ContainerBaseThickness + flt_BaseOffset;
      o_flt_Z_Coord = flt_RackBase - flt_ContainerBaseThickness;
    }
    o_flt_Z_Coord = MthRound(o_flt_Z_Coord, 1);
  }

  function GetZTranslate( device & ML_STAR, variable i_str_LabID, variable & o_flt_ZTranslate, variable & o_flt_ZTransValue ) void {
    o_flt_ZTranslate = 0;
    o_flt_ZTransValue = 0;
    o_flt_ZTranslate = 0.0;
    o_flt_ZTransValue = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      //flt_RackHeight = objRackDataParams.Item1("Labwr_ZDim");
      //o_flt_RackClearanceHeight = objEditLabware5.Clearance(str_PosID);
      //flt_RackBase = objRack4.RackBase();
      o_flt_ZTranslate = objRack4.ZTranslate();
      o_flt_ZTransValue = objRack4.ZTransValue();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_ZTranslate = MthRound(o_flt_ZTranslate, 1);
    o_flt_ZTransValue = MthRound(o_flt_ZTransValue, 1);
  }

  function GetContainerBaseThickness( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_containerBaseThickness ) void {
    o_containerBaseThickness = 0;
    o_containerBaseThickness = 0;
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,i_str_PositionID);
      o_containerBaseThickness = ctr.ContainerBaseDepth;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_containerBaseThickness = MthRound(o_containerBaseThickness, 1);
  }

  function GetContainerBaseOffset( device & io_instrument, variable i_str_Labware, variable i_str_PosID, variable & o_containerBaseOffset ) void {
    o_containerBaseOffset = 0;
    o_containerBaseOffset = 0;
    {
      object rack;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject("IRectRack2", rack); //  IEditLabware6
      o_containerBaseOffset = rack.ContainerBaseOffset(i_str_PosID);
      rack.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_containerBaseOffset = MthRound(o_containerBaseOffset, 1);
  }

  function GetContainerDepth( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_ContainerDepth, variable & o_ContainerClearanceHeight ) void {
    o_ContainerDepth = 0;
    o_ContainerClearanceHeight = 0;
    o_ContainerDepth = 0;
    o_ContainerClearanceHeight = 0.0;
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,i_str_PositionID);
      o_ContainerDepth = ctr.Depth;
      o_ContainerClearanceHeight = ctr.Clearance;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
    o_ContainerClearanceHeight = MthRound(o_ContainerClearanceHeight, 1);
    o_ContainerDepth = MthRound(o_ContainerDepth, 1);
  }

  function GetContainerConfigurationFile( device & io_instrument, variable i_str_Labware, variable i_str_PosID, variable & o_str_ContainerFileName ) void {
    o_str_ContainerFileName = 0;
    o_str_ContainerFileName = Translate("");
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,i_str_PosID);
      o_str_ContainerFileName = ctr.FileName;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
  }

  function GetContainerGeometry( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_str_ContainerGeometry ) void {
    o_str_ContainerGeometry = 0;
    o_str_ContainerGeometry = Translate("");
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,i_str_PositionID);
      o_str_ContainerGeometry = ctr.geometry;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
  }

  function GetContainerShape( device & io_instrument, variable i_str_Labware, variable i_str_PositionID, variable & o_int_ContainerShape ) void {
    o_int_ContainerShape = 0;
    o_int_ContainerShape = 0.0;
    {
      object rack;
      object ctr;
      object labware;
      object m_decklayout;
      variable labwareId;
      m_decklayout = io_instrument.GetDeckLayoutObject();
      //labwareId = SeqGetLabwareId(i_sequenceLabware);
      labware = m_decklayout.Labware(i_str_Labware);
      labware.GetObject2("{3E5213CF-57C9-4911-B33E-05E77130E4DB}", rack); //  IEditLabware6
      rack.CntrAtPosition(ctr,i_str_PositionID);
      o_int_ContainerShape = ctr.Shape;
      rack.ReleaseObject();
      ctr.ReleaseObject();
      labware.ReleaseObject();
      m_decklayout.ReleaseObject();
    }
  }

  private function GetProbeAdjustment( device & ML_STAR, variable i_str_LabID, variable & o_flt_XProbeAdjustment, variable & o_flt_YProbeAdjustment, variable & o_flt_ZProbeAdjustment ) void {
    o_flt_XProbeAdjustment = 0;
    o_flt_YProbeAdjustment = 0;
    o_flt_ZProbeAdjustment = 0;
    o_flt_XProbeAdjustment = 0.0;
    o_flt_YProbeAdjustment = 0.0;
    o_flt_ZProbeAdjustment = 0.0;
    if(0){
      {
        object objRackDataParams;
        object objDecklayout;
        object objLabware;
        object objTemplate;
        object objRack;
        object objRack4;
        object objEditLabware5;
        objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
        objDecklayout = ML_STAR.GetDeckLayoutObject();
        objLabware = objDecklayout.Labware(i_str_LabID);
        objLabware.GetObject("ITemplateDeckData", objTemplate);
        objLabware.GetObject("IRectRack4", objRack4);
        objLabware.GetObject("IRectRack", objRack);
        objLabware.GetObject("IEditLabware3", objEditLabware5);
        o_flt_XProbeAdjustment = objEditLabware5.XProbeAdjustment;
        o_flt_YProbeAdjustment = objEditLabware5.YProbeAdjustment;
        o_flt_ZProbeAdjustment = objEditLabware5.ZProbeAdjustment;
        objRackDataParams.ReleaseObject();
        objDecklayout.ReleaseObject();
        objLabware.ReleaseObject();
        objTemplate.ReleaseObject();
        objRack.ReleaseObject();
        objRack4.ReleaseObject();
        objEditLabware5.ReleaseObject();
      }
    }
  }

  function AdjustSequence( device & ML_STAR, sequence i_seq_SequenceToAdjust, variable i_int_StartingPosition, variable i_int_EndingPosition, sequence & o_seq_AdjustedSequence ) void {
    private variable i;
    private variable int_TotalSequencePositions;
    private variable str_LabID;
    private variable str_PosID;
    { sequence __temp; o_seq_AdjustedSequence = __temp; }
    int_TotalSequencePositions = SeqGetTotal(i_seq_SequenceToAdjust);
    i_seq_SequenceToAdjust.SetCurrentPosition(i_int_StartingPosition);
    i_seq_SequenceToAdjust.SetCount(i_int_EndingPosition);
    SeqRemoveAll(o_seq_AdjustedSequence);
    {
      for(i = 0; i < int_TotalSequencePositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(i_seq_SequenceToAdjust);
        str_PosID = SeqGetPositionId(i_seq_SequenceToAdjust);
        SeqIncrement(i_seq_SequenceToAdjust, 1);
        if (str_PosID != "")
        {
          SeqAdd(o_seq_AdjustedSequence, str_LabID, str_PosID);
        }
      }
    }
    o_seq_AdjustedSequence.SetCurrentPosition(1);
  }

  private function RemoveTruncatedSequencePositionsOLD( device & ML_STAR, sequence & io_Sequence ) void {
    private variable i;
    private variable int_TotalSequencePositions;
    private variable str_LabID;
    private variable str_PosID;
    private sequence seq_AdjustedSequence;
    int_TotalSequencePositions = SeqGetTotal(io_Sequence);
    SeqRemoveAll(seq_AdjustedSequence);
    {
      for(i = 0; i < int_TotalSequencePositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(io_Sequence);
        str_PosID = SeqGetPositionId(io_Sequence);
        SeqIncrement(io_Sequence, 1);
        if (str_LabID != "")
        {
          if (str_PosID != "")
          {
            SeqAdd(seq_AdjustedSequence, str_LabID, str_PosID);
          }
        }
      }
    }
    seq_AdjustedSequence.SetCurrentPosition(1);
    SeqCopySequence(io_Sequence, seq_AdjustedSequence);
  }

  function ReplaceLabware( device & ML_STAR, variable i_str_LabID, variable i_str_NewConfigFile ) void {
    private variable flt_Current_Z;
    private variable int_LabwareVisibility;
    private variable flt_Current_A;
    private variable flt_Current_X;
    private variable flt_Current_Y;
    private variable str_CurrentTemplateID;
    private variable str_CurrentTemplateSiteID;
    private variable arr_LabID[];
    private variable arr_LabID_Vis[];
    GetLabwareVisibility(ML_STAR, i_str_LabID, int_LabwareVisibility);
    arr_LabID.SetSize(0);
    arr_LabID.AddAsLast(i_str_LabID);
    arr_LabID_Vis.SetSize(0);
    arr_LabID_Vis.AddAsLast(int_LabwareVisibility);
    SetAbsolutePositionForLabwareID(ML_STAR, i_str_LabID, flt_Current_X, flt_Current_Y, flt_Current_Z, flt_Current_A);
    GetCarrierAndSiteID(ML_STAR, i_str_LabID, str_CurrentTemplateID, str_CurrentTemplateSiteID);
    DevRemoveLabware(ML_STAR, i_str_LabID);
    if (str_CurrentTemplateID == "default")
    {
      DevAddLabware(ML_STAR, i_str_LabID, i_str_NewConfigFile, flt_Current_X, flt_Current_Y, flt_Current_Z, flt_Current_A);
    }
    else
    {
      DevAddLabwareToTemplate(ML_STAR, i_str_LabID, i_str_NewConfigFile, str_CurrentTemplateID, str_CurrentTemplateSiteID);
    }
    DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_LabID, arr_LabID_Vis, Translate(""));
  }

  function GetCarrierAndSiteID( device & Instrument, variable i_str_Labware, variable & o_str_TemplateID, variable & o_str_TemplateSiteID ) void {
    o_str_TemplateID = 0;
    o_str_TemplateSiteID = 0;
    o_str_TemplateID = Translate("");
    o_str_TemplateSiteID = Translate("");
    {
        object obj_Decklayout;
        obj_Decklayout = Instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == i_str_Labware)
                      {
                          //var_return = 1;
                          o_str_TemplateSiteID = LabwareNames.Item1("Labwr_DkSiteId");
                          o_str_TemplateID = LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
                  LabwareObjects.ReleaseObject();
                  LabwareNames.ReleaseObject();
           }
    }
  }

  function GetRowColumnNumber( device & Instrument, variable i_str_LabwareID, variable & o_int_RowCount, variable & o_int_ColumnCount, variable & o_bool_AlphaNumeric, variable & o_bool_IncrementContainer ) void {
    o_int_RowCount = 0;
    o_int_ColumnCount = 0;
    o_bool_AlphaNumeric = 0;
    o_bool_IncrementContainer = 0;
    o_bool_AlphaNumeric = 0;
    o_int_ColumnCount = 0;
    o_int_RowCount = 0;
    o_bool_IncrementContainer = 0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabwareID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      o_int_RowCount = objRack4.Rows();
      o_int_ColumnCount = objRack4.Columns();
      o_bool_AlphaNumeric = objRack4.Index();
      o_bool_IncrementContainer = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
  }

  function GetLabwareLW( device & Instrument, variable i_str_LabID, variable & o_flt_Labware_L, variable & o_flt_Labware_W ) void {
    o_flt_Labware_L = 0;
    o_flt_Labware_W = 0;
    o_flt_Labware_W = 0.0;
    o_flt_Labware_L = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      o_flt_Labware_W = objRackDataParams.Item1("Labwr_XDim");
      o_flt_Labware_L = objRackDataParams.Item1("Labwr_YDim");
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
  }

  private function GetLabwareCenter2_OLD( device & ML_STAR, variable i_str_LabID, variable & o_flt_X_Center, variable & o_flt_Y_Center ) void {
    private variable int_Increment;
    private variable int_TotalColumns;
    private variable int_Index;
    private variable int_TotalRows;
    private variable str_PosID;
    private variable flt_X_Coord;
    private variable flt_NotUsed;
    private variable flt_Y_Coord;
    private variable int_EndPosition;
    private variable arr_Y_Coordinate[];
    private variable arr_X_Coordinate[];
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    int_TotalRows = 0;
    int_TotalColumns = 0;
    int_Index = 0;
    int_Increment = 0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      int_TotalRows = objRack4.Rows();
      int_TotalColumns = objRack4.Columns();
      int_Index = objRack4.Index();
      int_Increment = objRack4.Increment();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    arr_X_Coordinate.SetSize(0);
    arr_Y_Coordinate.SetSize(0);
    int_EndPosition = int_TotalColumns * int_TotalRows;
    if (int_Index == 1)
    {
      ANC::Convert_Numbers_to_Alpha_Numeric(int_Increment, 1, int_TotalRows, int_TotalColumns, str_PosID);
    }
    else
    {
      str_PosID = StrConcat2(1, Translate(""));
    }
    DevGetLabwarePositionEx(ML_STAR, i_str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_NotUsed, flt_NotUsed);
    arr_X_Coordinate.AddAsLast(flt_X_Coord);
    arr_Y_Coordinate.AddAsLast(flt_Y_Coord);
    if (int_Index == 1)
    {
      ANC::Convert_Numbers_to_Alpha_Numeric(int_Increment, int_EndPosition, int_TotalRows, int_TotalColumns, str_PosID);
    }
    else
    {
      str_PosID = StrConcat2(int_EndPosition, Translate(""));
    }
    DevGetLabwarePositionEx(ML_STAR, i_str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_NotUsed, flt_NotUsed);
    arr_X_Coordinate.AddAsLast(flt_X_Coord);
    arr_Y_Coordinate.AddAsLast(flt_Y_Coord);
    o_flt_X_Center = HSLStatisitics::Stat_Average(arr_X_Coordinate);
    o_flt_Y_Center = HSLStatisitics::Stat_Average(arr_Y_Coordinate);
  }

  function Set_Relative_Position_for_LabwareID( device & io_devDevice, variable & i_strLabwareID, variable i_fltPositionX, variable i_fltPositionY, variable i_fltPositionZ, variable i_fltPositionR ) void {
    {
          // HxPars keys
          static string P_XCOORD("Labwr_XCoord");
          static string P_YCOORD("Labwr_YCoord");
          static string P_ZCOORD("Labwr_ZCoord");
          static string P_RZCOORD("Labwr_Rotation");
          static string P_LABWARE_ID("Labwr_Id");
          // Helper functions
          //private function ConvertToFloat(variable iVariable, variable& oVariable) variable;
          //private function CheckBool(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function CheckInteger(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function CheckIntegerRange(variable iVariable, variable iTraceEntry, variable iMin, variable iMax, variable iFunctionName) variable;
          //private function CheckString(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function CheckFloat(variable iVariable, variable iTraceEntry, variable iFunctionName) variable;
          //private function StatusTrace(variable i_intState, variable i_intTraceLevel, variable i_strTraceString, variable i_strFunctionName) void;
          //private function EnterSemaphore();
          //private function LeaveSemaphore();
          //private function ExtractFunctionName(variable i_strFunctionName) variable;
          //private function ReverseFind(string i_strString, string i_strSubString) variable;
          ////////////////////////////////////////////////////////////////////////////
          // RelativePositionValuesSetForLabwareID
          ////////////////////////////////////////////////////////////////////////////
          //function RelativePositionValuesSetForLabwareID(device& io_devDevice,
                                                        // variable i_strLabwareID,
                                                        // variable i_fltPositionX,
                                                        // variable i_fltPositionY,
                                                        // variable i_fltPositionZ,
                                                        // variable i_fltPositionR) variable
          {
              variable PosVals[];
              variable myValue;
              object   objDecklayout;
              variable strFunctionName("");
             // strFunctionName = ExtractFunctionName(GetFunctionName());
              // check input variables
             // if(!CheckString(i_strLabwareID, "i_strLabwareID", strFunctionName)) return(hslFalse);
              //StatusTrace(CMD_START, TRACE_LEVEL_DEBUG, "i_strLabwareID = " + i_strLabwareID, strFunctionName);
              //EnterSemaphore();
              objDecklayout = io_devDevice.GetDeckLayoutObject();
              //LeaveSemaphore();
              if(!objDecklayout.IsNull())
              {
                  object objLabware;
                  variable strPos("");
                  onerror goto HandleLabwareError;
                  objLabware = objDecklayout.Labware(i_strLabwareID);
                  onerror goto 0;
                  err.Clear();
                  if(!objLabware.IsNull())
                  {
                      object Decklayout5;
                      object MoveParameters;
                      variable fltPos, fltPosShift;
                      objDecklayout.GetObject("IDeckLayout5", Decklayout5);
                      MoveParameters.CreateObject("HXPARAMSLib.HxPars");
                      MoveParameters.Add(i_strLabwareID, P_LABWARE_ID);
                      //EnterSemaphore();
                      io_devDevice.GetLabwarePosition(i_strLabwareID, PosVals);
                      //LeaveSemaphore();
                      //StatusTrace(CMD_PROGRESS, TRACE_LEVEL_DEBUG, "Current position: (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                      ConvertToFloat(PosVals[0],fltPos);
                      ConvertToFloat(i_fltPositionX,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_XCOORD);
                      ConvertToFloat(PosVals[1],fltPos);
                      ConvertToFloat(i_fltPositionY,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_YCOORD);
                      ConvertToFloat(PosVals[2],fltPos);
                      ConvertToFloat(i_fltPositionZ,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_ZCOORD);
                      ConvertToFloat(PosVals[3],fltPos);
                      ConvertToFloat(i_fltPositionR,fltPosShift);
                      MoveParameters.Add(fltPos+fltPosShift, P_RZCOORD);
                      Decklayout5.MoveLabware(objLabware, MoveParameters);
                      //EnterSemaphore();
                      io_devDevice.GetLabwarePosition(i_strLabwareID, PosVals);
                      //LeaveSemaphore();
                      objLabware.ReleaseObject();
                      objDecklayout.ReleaseObject();
                      Decklayout5.ReleaseObject();
                      MoveParameters.ReleaseObject();
                      //StatusTrace(CMD_COMPLETE, TRACE_LEVEL_DEBUG, "New position:     (" + FStr(PosVals[0]) + "/" + FStr(PosVals[1]) + "/" + FStr(PosVals[2]) + "/" + FStr(PosVals[3]) + ")", strFunctionName);
                      //return(hslTrue);
                  }
                  else
                  {
                      //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find labware.", strFunctionName);
                      objDecklayout.ReleaseObject();
                      //return(hslFalse);
                  }
              }
              else
              {
                  //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find decklayout.", strFunctionName);
                  //return(hslFalse);
              }
              // runtime error handling
              HandleLabwareError :
              {
                  variable errorID;
                  errorID=err.GetId();
                  err.Clear();
                  if (errorID==-1574764487)
                  {
                      Trace("LabwareID is  unknown.");
                      //return(hslFalse);
                  }
                  else
                  {
                      //Trace("Unknown error occured.");
                      //return(hslFalse);
                  }
              }
          }
          //////////////////////////////////////////////////////////////////////////
          // private function ConvertToFloat
          //////////////////////////////////////////////////////////////////////////
    }
  }

  function Set_Channel_Pattern( variable & io_Channel_Pattern, variable i_Channel_Number, variable i_Value ) void {
    private variable current_channel;
    private variable total_channels;
    private variable channel_index;
    private variable loopCounter1;
    private variable additional_channels;
    private variable str_parse;
    private variable arr_channel_pattern[];
    total_channels = StrGetLength(io_Channel_Pattern);
    i_Channel_Number = StrConcat2(i_Channel_Number, Translate(""));
    i_Channel_Number = StrIVal(i_Channel_Number);
    i_Value = StrConcat2(i_Value, Translate(""));
    if (i_Value != "0")
    {
      if (i_Value != "1")
      {
        TrcTrace4(Translate("********************* Value of "), i_Value, Translate(" is not recognized as a valid channel value.  A value of 0 will be added at channel index "), i_Channel_Number);
        i_Value = Translate("0");
      }
    }
    if (i_Channel_Number > total_channels)
    {
      additional_channels = i_Channel_Number - total_channels;
      {
        for(loopCounter1 = 0; loopCounter1 < additional_channels;)
        {
          loopCounter1 = loopCounter1 + 1;
          io_Channel_Pattern = StrConcat2(io_Channel_Pattern, Translate("0"));
        }
      }
      total_channels = i_Channel_Number;
    }
    str_parse = total_channels;
    arr_channel_pattern.SetSize(total_channels);
    {
      for(channel_index = 0; channel_index < total_channels;)
      {
        channel_index = channel_index + 1;
        current_channel = StrRight(io_Channel_Pattern, str_parse);
        current_channel = StrLeft(current_channel, 1);
        arr_channel_pattern.SetAt(channel_index-1, current_channel);
        str_parse = str_parse - 1;
      }
    }
    arr_channel_pattern.SetAt(i_Channel_Number-1, i_Value);
    io_Channel_Pattern = Translate("");
    {
      for(channel_index = 0; channel_index < total_channels;)
      {
        channel_index = channel_index + 1;
        current_channel=arr_channel_pattern.GetAt(channel_index-1);
        io_Channel_Pattern = StrConcat2(io_Channel_Pattern, current_channel);
      }
    }
  }

  function GetTempSortingFilePath( variable & o_str_TempSortingFilePath ) void {
    private variable str_FileName;
    private variable str_SubFileName;
    private variable bln_FileExists;
    o_str_TempSortingFilePath = 0;
    o_str_TempSortingFilePath = Translate("");
    str_SubFileName = Translate("");
    str_SubFileName = GetFileName();
    str_FileName = HSLExtensions::File::GetFileName(str_SubFileName);
    if(0){
      Trace("File name:  ",str_FileName);
    }
    StrReplace(str_SubFileName, str_FileName, Translate(""));
    o_str_TempSortingFilePath = StrConcat8(str_SubFileName, Translate(""), Translate("TEMP_SORT_FILE"), Translate(".xls"), Translate(""), Translate(""), Translate(""), Translate(""));
    StrReplace(o_str_TempSortingFilePath, Translate("\\"), Translate("\\\\"));
    if(0){
      Trace("Temp File name:  ",o_str_TempSortingFilePath);
    }
    bln_FileExists = HSLExtensions::File::Exists(o_str_TempSortingFilePath);
    if (bln_FileExists == 1)
    {
      HSLExtensions::File::Delete(o_str_TempSortingFilePath);
    }
  }

  function GetTransportSequence( device & ML_STAR, variable i_str_LabID, sequence & o_seq_TransportSequence ) void {
    private variable str_PosID;
    { sequence __temp; o_seq_TransportSequence = __temp; }
    GetFirstPosition(ML_STAR, i_str_LabID, str_PosID);
    SeqRemoveAll(o_seq_TransportSequence);
    SeqAdd(o_seq_TransportSequence, i_str_LabID, str_PosID);
    o_seq_TransportSequence.SetCurrentPosition(1);
  }

  function GetDefinitionFileValue( variable & i_str_ConfigFilePath, variable i_str_ValueToSearch, variable & o_str_Value ) variable {
    private variable str_DataDefinition;
    private variable strFunctionName;
    private variable bool_FileExists;
    private variable str_Instance;
    private variable bool_ReturnValue;
    private variable str_Extension;
    o_str_Value = 0;
    o_str_Value = Translate("");
    bool_ReturnValue = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    bool_FileExists = HSLExtensions::File::Exists(i_str_ConfigFilePath);
    if (bool_FileExists == 0)
    {
      Trace(i_str_ConfigFilePath," - File doesn't exist!");
      return (bool_ReturnValue);
    }
    i_str_ValueToSearch = StrConcat2(i_str_ValueToSearch, Translate(""));
    str_Extension = HSLExtensions::File::GetFileExtension(i_str_ConfigFilePath);
    str_DataDefinition = Translate("");
    str_Instance = Translate("");
    if (str_Extension == "rck")
    {
      str_DataDefinition = Translate("RECTRACK");
      str_Instance = Translate("default");
    }
    if (str_Extension == "ctr")
    {
      str_DataDefinition = Translate("CONTAINER");
      str_Instance = Translate("default");
    }
    if (str_Extension == "tml")
    {
      str_DataDefinition = Translate("TEMPLATE");
      str_Instance = Translate("default");
    }
    if (str_Extension == "lid")
    {
      str_DataDefinition = Translate("COVER");
      str_Instance = Translate("default");
    }
    if (str_Extension == "lay")
    {
      str_DataDefinition = Translate("DECKLAY");
      str_Instance = Translate("ML_STAR");
    }
    if(0){
      Trace("Data definition:  ",str_DataDefinition);
    }
    if (str_DataDefinition != "")
    {
      {
           object objCfgFile;
           objCfgFile.CreateObject("HXCFGFILLIB.HxCfgFile");
           objCfgFile.LoadFile(i_str_ConfigFilePath);
           onerror goto HandleError;
           if(objCfgFile.ExistDataDef(str_DataDefinition,str_Instance) == 1)
           {
                //o_str_Value = objCfgFile.GetDataDefValueAsString(str_DataDefinition,"default",i_str_ValueToSearch);
                objCfgFile.LookupDataDefValueAsString(str_DataDefinition,str_Instance,i_str_ValueToSearch,o_str_Value);
           }
           onerror goto 0;
           err.Clear();
           objCfgFile.ReleaseObject();
           HandleError:
           {
             objCfgFile.ReleaseObject();
           }
      }
      if (o_str_Value != "")
      {
        bool_ReturnValue = 1;
      }
      else
      {
        bool_ReturnValue = 0;
      }
    }
    else
    {
      Trace("File type:  ",str_Extension," unknown!");
      bool_ReturnValue = 0;
    }
    return (bool_ReturnValue);
  }

  function _ConvertToFloat( variable & io_Variable ) void {
    io_Variable = StrConcat2(io_Variable, Translate(""));
    io_Variable = StrFVal(io_Variable);
  }

  function _ConvertToInt( variable & io_Variable ) void {
    io_Variable = StrConcat2(io_Variable, Translate(""));
    io_Variable = StrIVal(io_Variable);
  }

  function GetLabwareOrigin( device & Instrument, variable i_str_LabID, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_RackBase;
    private variable str_LabID;
    private variable flt_BoundaryX;
    private variable flt_BoundaryY;
    private variable flt_RackWidthX;
    private variable flt_RackWidthY;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    str_LabID = i_str_LabID;
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    flt_BoundaryX = 0.0;
    flt_BoundaryY = 0.0;
    flt_RackWidthX = 0.0;
    flt_RackWidthY = 0.0;
    flt_RackBase = 0.0;
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = Instrument.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_BoundaryX = objRackDataParams.Item1("Labwr_Bndry1X");
      flt_BoundaryY = objRackDataParams.Item1("Labwr_Bndry1Y");
      flt_RackWidthX = objRackDataParams.Item1("Labwr_XDim");
      flt_RackWidthY = objRackDataParams.Item1("Labwr_YDim");
      flt_RackBase = objRack4.RackBase();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_X_Coord = flt_BoundaryX;
    o_flt_Y_Coord = flt_BoundaryY;
    o_flt_Z_Coord = flt_RackBase;
    o_flt_X_Coord = MthRound(o_flt_X_Coord, 1);
    o_flt_Y_Coord = MthRound(o_flt_Y_Coord, 1);
    o_flt_Z_Coord = MthRound(o_flt_Z_Coord, 1);
  }

  function GetLabwareCenter2( device & ML_STAR, variable i_str_LabID, variable & o_flt_X_Center, variable & o_flt_Y_Center ) void {
    private variable flt_NotUsed;
    private variable flt_Offset_X;
    private variable flt_Width;
    private variable flt_Offset_Y;
    private variable flt_Origin_X;
    private variable str_ConfigFilePath;
    private variable flt_Origin_Y;
    private variable flt_HalfHyp;
    private variable flt_HalfLength;
    private variable flt_Center_X;
    private variable str_X;
    private variable flt_Origin_Z;
    private variable flt_Radians;
    private variable flt_Center_Y;
    private variable str_Y;
    private variable flt_Calculation;
    private variable flt_HalfWidth;
    private variable flt_Hypotenuse;
    private variable flt_Pi;
    private variable flt_Length;
    private variable flt_AdjustedPlateAngle;
    private variable flt_PlateAngle;
    private variable flt_CosineCalculation;
    private variable flt_LabwareAngle;
    private variable flt_SineCalculation;
    o_flt_X_Center = 0;
    o_flt_Y_Center = 0;
    o_flt_X_Center = 0.0;
    o_flt_Y_Center = 0.0;
    flt_Pi = 3.14159265359;
    str_ConfigFilePath = Translate("");
    //Get Config File
    {
         object objDeckLayout;
         objDeckLayout = ML_STAR.GetDeckLayoutObject();
         if(!objDeckLayout.IsNull())
         {
              object objLabware;
              onerror goto HandleLabwareError;
              objLabware = objDeckLayout.Labware(i_str_LabID);
              onerror goto 0;
              err.Clear();
              if(!objLabware.IsNull())
              {
                   object objEditLabware5;
                   objLabware.GetObject("IEditLabware5", objEditLabware5);
                  str_ConfigFilePath = objEditLabware5.Filename;
                   objEditLabware5.ReleaseObject();
                   objDeckLayout.ReleaseObject();
                   objLabware.ReleaseObject();
              }
         }
               // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                 if(errorID != 0)
                 {
                      if (errorID==-1574764487)
                      {
                            Trace("LabwareID is  unknown.");
                      }
                      else
                      {
                            Trace("Unknown error occured.");
                      }
                 }
            }
    }
    GetDefinitionFileValue(str_ConfigFilePath, Translate("Dim.Dx"), str_X);
    GetDefinitionFileValue(str_ConfigFilePath, Translate("Dim.Dy"), str_Y);
    flt_Width = StrFVal(str_X);
    flt_Length = StrFVal(str_Y);
    GetLabwareOrigin(ML_STAR, i_str_LabID, flt_Origin_X, flt_Origin_Y, flt_Origin_Z);
    flt_Hypotenuse = 0.0;
    flt_Hypotenuse = flt_Length^2 + flt_Width^2;
    flt_Hypotenuse = MthPow(flt_Hypotenuse, 0.5);
    flt_Hypotenuse = MthRound(flt_Hypotenuse, 1);
    flt_HalfHyp = flt_Hypotenuse / (2 * 1.0);
    flt_HalfLength = flt_Length / (2 * 1.0);
    flt_HalfWidth = flt_Width / (2 * 1.0);
    DevGetLabwarePosition(ML_STAR, i_str_LabID, flt_NotUsed, flt_NotUsed, flt_NotUsed, flt_LabwareAngle);
    flt_Calculation = flt_HalfLength / (flt_HalfWidth * 1.0);
    flt_PlateAngle = MthATan(flt_Calculation);
    flt_PlateAngle = flt_PlateAngle * (180.0 / flt_Pi);
    flt_PlateAngle = MthRound(flt_PlateAngle, 1);
    flt_LabwareAngle = flt_LabwareAngle * -1;
    flt_AdjustedPlateAngle = flt_LabwareAngle + flt_PlateAngle;
    flt_Radians = flt_AdjustedPlateAngle * (flt_Pi / 180);
    flt_CosineCalculation = MthCos(flt_Radians);
    flt_SineCalculation = MthSin(flt_Radians);
    flt_Offset_X = flt_CosineCalculation * flt_HalfHyp;
    flt_Offset_X = MthRound(flt_Offset_X, 1);
    flt_Offset_Y = flt_SineCalculation * flt_HalfHyp;
    flt_Offset_Y = MthRound(flt_Offset_Y, 1);
    flt_Center_X = flt_Origin_X + flt_Offset_X;
    flt_Center_Y = flt_Origin_Y + flt_Offset_Y;
    o_flt_X_Center = MthRound(flt_Center_X, 1);
    o_flt_Y_Center = MthRound(flt_Center_Y, 1);
  }

  function GetRackHeight( device & ML_STAR, variable i_str_LabID, variable & o_flt_RackHeight, variable & o_flt_RackClearanceHeight ) void {
    private variable flt_RackHeight;
    private variable flt_RackBase;
    private variable str_ConfigFile;
    private variable bln_ValueFound;
    private variable str_PosID;
    private variable str_Value;
    o_flt_RackHeight = 0;
    o_flt_RackClearanceHeight = 0;
    o_flt_RackClearanceHeight = 0.0;
    o_flt_RackHeight = 0.0;
    flt_RackBase = 0.0;
    flt_RackHeight = 0.0;
    GetFirstPosition(ML_STAR, i_str_LabID, str_PosID);
    GetConfigurationFile(ML_STAR, i_str_LabID, str_ConfigFile);
    {
      object objRackDataParams;
      object objDecklayout;
      object objLabware;
      object objTemplate;
      object objRack;
      object objRack4;
      object objEditLabware5;
      objRackDataParams.CreateObject("HXPARAMSLib.HxPars");
      objDecklayout = ML_STAR.GetDeckLayoutObject();
      objLabware = objDecklayout.Labware(i_str_LabID);
      objLabware.GetObject("ITemplateDeckData", objTemplate);
      objLabware.GetObject("IRectRack4", objRack4);
      objLabware.GetObject("IRectRack", objRack);
      objLabware.GetObject("IEditLabware5", objEditLabware5);
      objRack4.GetRackData(objRackDataParams);
      flt_RackHeight = objRackDataParams.Item1("Labwr_ZDim");
      //o_flt_RackClearanceHeight = objEditLabware5.Clearance(str_PosID);
      flt_RackBase = objRack4.RackBase();
      objRackDataParams.ReleaseObject();
      objDecklayout.ReleaseObject();
      objLabware.ReleaseObject();
      objTemplate.ReleaseObject();
      objRack.ReleaseObject();
      objRack4.ReleaseObject();
      objEditLabware5.ReleaseObject();
    }
    o_flt_RackHeight = flt_RackBase + flt_RackHeight;
    bln_ValueFound = GetDefinitionFileValue(str_ConfigFile, Translate("Clearance"), str_Value);
    if (bln_ValueFound == 1)
    {
      o_flt_RackClearanceHeight = StrFVal(str_Value);
      o_flt_RackClearanceHeight = flt_RackBase + o_flt_RackClearanceHeight;
    }
    else
    {
      o_flt_RackClearanceHeight = o_flt_RackHeight;
    }
    if(0){
      Trace("Rack Base:  ",flt_RackBase);
      Trace("Rack Dimension Z:  ",flt_RackHeight);
      Trace("Rack Height:  ",o_flt_RackHeight);
      Trace("Rack Clearance Height:  ",o_flt_RackClearanceHeight);
    }
  }

  function RemoveTruncatedSequencePositions( device & Instrument, sequence & io_Sequence ) void {
    {
         variable int_CurrentPosition;
         variable int_TotalSequencePositions;
         sequence seq_AdjustedSequence;
         variable i;
         int_CurrentPosition = io_Sequence.GetCurrentPosition();
         seq_AdjustedSequence.CopySequence(io_Sequence);
         int_TotalSequencePositions = io_Sequence.GetTotal();
         SeqRemoveAll(io_Sequence);
         for(i = int_CurrentPosition; i <= int_TotalSequencePositions;)
         {
              if(int_CurrentPosition == 0) break;
              seq_AdjustedSequence.SetCurrentPosition(i);
              if(seq_AdjustedSequence.GetLabwareId() != "" && seq_AdjustedSequence.GetPositionId() != "")
              {
                   io_Sequence.Add(seq_AdjustedSequence.GetLabwareId(), seq_AdjustedSequence.GetPositionId());
              }
              i = i + 1;
         }
         io_Sequence.SetCurrentPosition(1);
    }
  }

  function SortSequence( device & Instrument, sequence & io_Sequence, variable i_bln_ByLabID ) void {
    private variable str_TempSortingFilePath;
    private variable str_SQL_Sort;
    GetTempSortingFilePath(str_TempSortingFilePath);
    if (i_bln_ByLabID == 1)
    {
      str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY LAB_ID ASC, X_COORD ASC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY X_COORD ASC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    }
    {
         variable int_CurrentPosition;
         variable int_TotalSequencePositions;
         sequence seq_AdjustedSequence;
         variable i;
         file WriteFile;
         file ReadFile;
         variable str_LabID;
         variable str_PosID;
         variable flt_X;
         variable flt_Y;
         variable arr_Coordinates[];
         int_CurrentPosition = io_Sequence.GetCurrentPosition();
         seq_AdjustedSequence.CopySequence(io_Sequence);
         int_TotalSequencePositions = io_Sequence.GetTotal();
         SeqRemoveAll(io_Sequence);
         WriteFile.RemoveFields();
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y, hslFloat);
         if(WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite))
         {
              for(i = int_CurrentPosition; i <= int_TotalSequencePositions;)
              {
                   if(int_CurrentPosition == 0) break;
                   seq_AdjustedSequence.SetCurrentPosition(i);
                   if(seq_AdjustedSequence.GetLabwareId() != "" && seq_AdjustedSequence.GetPositionId() != "")
                   {
                        str_LabID = seq_AdjustedSequence.GetLabwareId();
                        str_PosID = seq_AdjustedSequence.GetPositionId();
                        Instrument.GetLabwarePosition(str_LabID, arr_Coordinates, str_PosID);
                        flt_X = arr_Coordinates[0];
                        flt_Y = arr_Coordinates[1];
                        WriteFile.WriteRecord();
                   }
                   i = i + 1;
              }
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
         ReadFile.RemoveFields();
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y, hslFloat);
         if(ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead, str_SQL_Sort))
         {
              while(ReadFile.Eof() == 0)
              {
                   ReadFile.ReadRecord();
                   io_Sequence.Add(str_LabID,str_PosID);
              }
         }
         else
         {
              Trace("ERROR OCCURRED DURING SORT");
              io_Sequence.CopySequence(seq_AdjustedSequence);
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
         io_Sequence.SetCurrentPosition(1);
    }
  }

  function Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  function SortSequences( device & Instrument, sequence & io_Sequence1, sequence & io_Sequence2, variable i_bln_ByLabID ) void {
    private variable str_TempSortingFilePath;
    private variable str_SQL_Sort;
    GetTempSortingFilePath(str_TempSortingFilePath);
    if (i_bln_ByLabID == 1)
    {
      str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY LAB_ID ASC, X_COORD ASC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY X_COORD ASC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    }
    {
         variable int_CurrentPosition;
         variable int_TotalSequencePositions;
         sequence seq_AdjustedSequence1;
         sequence seq_AdjustedSequence2;
         variable i;
         file WriteFile;
         file ReadFile;
         variable str_LabID;
         variable str_PosID;
         variable str_LabID2;
         variable str_PosID2;
         variable flt_X;
         variable flt_Y;
         variable arr_Coordinates[];
         int_CurrentPosition = io_Sequence1.GetCurrentPosition();
         seq_AdjustedSequence1.CopySequence(io_Sequence1);
         seq_AdjustedSequence2.CopySequence(io_Sequence2);
         int_TotalSequencePositions = io_Sequence1.GetTotal();
         SeqRemoveAll(io_Sequence1);
         SeqRemoveAll(io_Sequence2);
         WriteFile.RemoveFields();
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y, hslFloat);
         WriteFile.AddField("LAB_ID_2", str_LabID2, hslString, 255);
         WriteFile.AddField("POS_ID_2", str_PosID2, hslString, 255);
         if(WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite))
         {
              for(i = int_CurrentPosition; i <= int_TotalSequencePositions;)
              {
                   if(int_CurrentPosition == 0) break;
                   seq_AdjustedSequence1.SetCurrentPosition(i);
                   seq_AdjustedSequence2.SetCurrentPosition(i);
                   if(seq_AdjustedSequence1.GetLabwareId() != "" && seq_AdjustedSequence1.GetPositionId() != "")
                   {
                        str_LabID = seq_AdjustedSequence1.GetLabwareId();
                        str_PosID = seq_AdjustedSequence1.GetPositionId();
                        Instrument.GetLabwarePosition(str_LabID, arr_Coordinates, str_PosID);
                        flt_X = arr_Coordinates[0];
                        flt_Y = arr_Coordinates[1];
                        str_LabID2 = seq_AdjustedSequence2.GetLabwareId();
                        str_PosID2 = seq_AdjustedSequence2.GetPositionId();
                        WriteFile.WriteRecord();
                   }
                   i = i + 1;
              }
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
         ReadFile.RemoveFields();
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y, hslFloat);
         ReadFile.AddField("LAB_ID_2", str_LabID2, hslString, 255);
         ReadFile.AddField("POS_ID_2", str_PosID2, hslString, 255);
         if(ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead, str_SQL_Sort))
         {
              while(ReadFile.Eof() == 0)
              {
                   ReadFile.ReadRecord();
                   io_Sequence1.Add(str_LabID,str_PosID);
                   io_Sequence2.Add(str_LabID2,str_PosID2);
              }
         }
         else
         {
              Trace("ERROR OCCURRED DURING SORT");
              io_Sequence1.CopySequence(seq_AdjustedSequence1);
              io_Sequence2.CopySequence(seq_AdjustedSequence2);
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
         io_Sequence1.SetCurrentPosition(1);
         io_Sequence2.SetCurrentPosition(1);
    }
  }

  function CalculateXYFromDiameterAndAngle( variable iDiameter, variable iPhi_Degree, variable & oDelta_X, variable & oDelta_Y ) void {
    private variable tmp_Phi;
    private variable tmp_SinPhi;
    private variable iRadius;
    private variable tmp_CosPhi;
    oDelta_X = 0;
    oDelta_Y = 0;
    iRadius = iDiameter;
    tmp_Phi = iPhi_Degree * 3.1415926;
    tmp_Phi = tmp_Phi / (180.0 * 1.0);
    tmp_CosPhi = MthCos(tmp_Phi);
    oDelta_X = iRadius * tmp_CosPhi;
    tmp_SinPhi = MthSin(tmp_Phi);
    oDelta_Y = iRadius * tmp_SinPhi;
    oDelta_X = MthRound(oDelta_X, 1);
    oDelta_Y = MthRound(oDelta_Y, 1);
  }

  function CalculateVolumeToHeight( device & ML_STAR, variable iLabwareID, variable iLiquidVolume, variable iStartHeight ) variable {
    private variable tmp_TubeDiameter;
    private variable tmp_TubeRadius;
    private variable tmp_Height;
    GetContainerWidth(ML_STAR, iLabwareID, tmp_TubeDiameter);
    tmp_TubeRadius = tmp_TubeDiameter / (2.0 * 1.0);
    tmp_Height = 0.0;
    {
         variable SphericVolumeOfTubeBottom;
         variable VolumeBetweenStartAndConeSegment;
         SphericVolumeOfTubeBottom=tmp_TubeRadius*3.1415926/3.0*MthPow(tmp_TubeRadius,2)*7/4;
         VolumeBetweenStartAndConeSegment=3.1415926*MthPow(tmp_TubeRadius,2)*(iStartHeight-tmp_TubeRadius);
         if (iLiquidVolume<=VolumeBetweenStartAndConeSegment)   //Volumen oberhalb BottomCone ist ausreichend also Zylinder rechnen
         {
              tmp_Height = (iLiquidVolume) / (3.1415926 * MthPow(tmp_TubeRadius, 2));
         }
         else
         {
             if (iLiquidVolume > SphericVolumeOfTubeBottom)
             {
               //height above Cone
                tmp_Height = (iLiquidVolume-SphericVolumeOfTubeBottom)  / (3.1415926 * MthPow(tmp_TubeRadius, 2));
                //+ height in zylinder
                tmp_Height = tmp_Height + (tmp_TubeRadius);
             }
             else
             {      //Cutted ConeVol Pi/3*(R*R+R*r+r*r) with r=R/2 gives Pi/3*R*R*7/4
                   tmp_Height = iLiquidVolume  / (3.1415926/3.0*MthPow(tmp_TubeRadius,2)*7/4);
             }
         }
    }
    return (tmp_Height);
  }

  function SortSequenceRaster( device & Instrument, sequence & io_Sequence, variable i_bln_ByLabID, variable i_flt_YRaster ) void {
    private variable str_TempSortingFilePath;
    private variable str_SQL_Sort;
    GetTempSortingFilePath(str_TempSortingFilePath);
    if (i_bln_ByLabID == 1)
    {
      str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY LAB_ID ASC, X_COORD ASC, RASTER_CHECK DESC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY X_COORD ASC, RASTER_CHECK DESC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    }
    {
         variable int_CurrentPosition;
         variable int_TotalSequencePositions;
         sequence seq_AdjustedSequence;
         variable i;
         file WriteFile;
         file ReadFile;
         variable str_LabID;
         variable str_PosID;
         variable flt_X;
         variable flt_Y;
         variable int_R;
         variable flt_CurrentY;
         variable flt_CurrentX;
         variable arr_Coordinates[];
         int_CurrentPosition = io_Sequence.GetCurrentPosition();
         seq_AdjustedSequence.CopySequence(io_Sequence);
         int_TotalSequencePositions = io_Sequence.GetTotal();
         SeqRemoveAll(io_Sequence);
         WriteFile.RemoveFields();
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y, hslFloat);
         WriteFile.AddField("RASTER_CHECK",int_R, hslInteger);
         if(WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite))
         {
              for(i = int_CurrentPosition; i <= int_TotalSequencePositions;)
              {
                   if(int_CurrentPosition == 0) break;
                   seq_AdjustedSequence.SetCurrentPosition(i);
                   if(seq_AdjustedSequence.GetLabwareId() != "" && seq_AdjustedSequence.GetPositionId() != "")
                   {
                        str_LabID = seq_AdjustedSequence.GetLabwareId();
                        str_PosID = seq_AdjustedSequence.GetPositionId();
                        Instrument.GetLabwarePosition(str_LabID, arr_Coordinates, str_PosID);
                        flt_X = arr_Coordinates[0];
                        flt_Y = arr_Coordinates[1];
                        if(i == int_CurrentPosition)
                        {
                             int_R = 1;
                             flt_CurrentY = flt_Y;
                             flt_CurrentX = flt_X;
                        }
                        else if(flt_X != flt_CurrentX)
                        {
                             int_R = 1;
                             flt_CurrentY = flt_Y;
                             flt_CurrentX = flt_X;
                        }
                        else
                        {
                             int_R = (flt_CurrentY - flt_Y) / i_flt_YRaster;
                        }
                        if(int_R >= 1.0)
                        {
                             int_R = 1;
                             flt_CurrentY = flt_Y;
                        }
                        else int_R = 0;
                        WriteFile.WriteRecord();
                   }
                   i = i + 1;
              }
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
         ReadFile.RemoveFields();
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y, hslFloat);
         ReadFile.AddField("RASTER_CHECK",int_R, hslInteger);
         if(ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead, str_SQL_Sort))
         {
              while(ReadFile.Eof() == 0)
              {
                   ReadFile.ReadRecord();
                   io_Sequence.Add(str_LabID,str_PosID);
              }
         }
         else
         {
              Trace("ERROR OCCURRED DURING SORT");
              io_Sequence.CopySequence(seq_AdjustedSequence);
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
         io_Sequence.SetCurrentPosition(1);
    }
    if(0){
      Util2::Debug::TraceSequence(io_Sequence);
    }
  }
} // library namespace
