#pragma once
#include "HSLStrLib.hsl"
#include "HSLSeqLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\Firmware Pipetting Commands.hs_"
#include "HSL_MethodHelper.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLUtilLib2.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "HSLUtilLib.hsl"
#include "HSLMthLib.hsl"
#include "SMT\\MLSTARLiquidClassLib.hsl"
#include "HSLStatistics.hsl"
#include "HSLErrLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLDevLib.hsl"
#include "STAR Tools\\Resources\\SubMethods\\Liquid Level Check.hs_"
#include "STAR Tools\\Resources\\SubMethods\\FW_HelperLibrary.hs_"
#include "HSLLabwareStateLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "STAR Tools\\Resources\\SubMethods\\STAR Channel Movement Tools.hs_"
#include "STAR Tools\\Resources\\SubMethods\\VANTAGE Channel Movement Tools.hs_"
#include "HSLVectorDbTracking.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SPT {
  variable T_PIP_TOOLS_LIQUID_CLASS_INIT;
  variable T_PIP_TOOLS_LIQUID_CLASS;
  variable T_PIP_TOOLS_ASP_CLOT_RETRACT;
  variable T_PIP_TOOLS_ASP_AIR_TRANSPORT;
  variable T_PIP_TOOLS_DISP_SETTLING;
  variable T_PIP_TOOLS_DISP_AIR_TRANSPORT;
  variable T_PIP_TOOLS_DISP_STOP_FLOW;
  variable T_PIP_TOOLS_ASP_BLOWOUT;
  variable T_PIP_TOOLS_DISP_BLOWOUT;
  variable T_PIP_TOOLS_DISP_SWAP;
  variable T_PIP_TOOLS_ASP_MIX_FLOW_RATE;
  variable T_PIP_TOOLS_ASP_FLOW_RATE;
  variable T_PIP_TOOLS_DISP_MIX_FLOW_RATE;
  variable T_PIP_TOOLS_ASP_OVERASPIRATE;
  variable T_PIP_TOOLS_DISP_STOP_BACK;
  variable T_PIP_TOOLS_ASP_SWAP;
  variable T_PIP_TOOLS_DISP_FLOW_RATE;
  variable T_PIP_TOOLS_ASP_SETTLING;
  variable T_PIP_TOOLS_MAX_VOLUME;
  variable T_PIP_TOOLS_ARR_CORRECTION_X[];
  variable T_PIP_TOOLS_ARR_CORRECTION_Y[];
  variable T_PIP_TOOLS_DISPENSE_MODE;
  function MPH_AspirateFromFixedHeight( device & ML_STAR, sequence i_seq_AspirationPositions, variable i_flt_AspHeight, variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_str_LiquidClass, variable i_flt_AspirationVolume, variable i_flt_PullOutDistance ) void ;
  function MPH_DispenseToFixedHeight( device & ML_STAR, sequence i_seq_DispensePositions, variable i_flt_DispenseHeight, variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_flt_DispenseVolume, variable i_flt_PullOutDistance ) void ;
  function PIP_AspirateFromFixedHeight( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_AspirationPositions, variable & i_arr_FixedHeights[], variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_str_LiquidClass, variable i_flt_AspirationVolume, variable i_flt_PullOutDistance ) void ;
  function PIP_BuildChannelPatternFromSequence( device & ML_STAR, sequence i_seq_ControllingSequence, variable & o_str_ChPattern ) void ;
  function PIP_DispenseToFixedHeight( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_DispensePositions, variable & i_arr_FixedHeights[], variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_flt_DispenseVolume, variable i_flt_PullOutDistance ) void ;
  function PIP_FindLiquidLevel( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_PositionsToCheck, variable i_int_End_Position, variable i_bln_UseCLLD, variable & o_arr_LiquidHeightsFound[] ) void ;
  function PIP_MixFromFixedHeight( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_MixPositions, variable & i_arr_FixedHeights[], variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_str_LiquidClass, variable i_flt_MixVolume, variable i_int_MixCycles ) void ;
  function PIP_PhaseAspiration( device & ML_STAR, variable & io_str_ChPattern, variable i_bln_ResetChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_bln_UseCLLD, variable i_flt_AspirationVolume, variable i_flt_DispenseBackVolume, variable i_flt_SubmergeDepth, variable i_flt_MaxVolumeToRemove, variable i_bln_DisableTADMFirst ) variable ;
  function PIP_PhaseAspirationParseReturnValue( variable i_strReturnFromPhaseAspiration, variable & o_arrAspirationReturns[], variable & o_arrDispenseReturns[] ) void ;
  function PIP_PhaseAspirationRemainder( device & ML_STAR, variable i_str_ChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_bln_UseCLLD, variable i_flt_SafeHeightAbovePhase, variable i_flt_AdditionalAspirationVolume, variable i_flt_SubmergeHeight ) variable ;
  function PIP_PhaseAspirationSmallLayer( device & ML_STAR, variable i_str_ChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_flt_AdditionalAspirationVolume, variable i_flt_OffsetBelowSecondPhase, variable i_int_TotalAspirationRounds, variable i_flt_DispenseHeight ) variable ;
  function PIP_PhaseAspirationWasteRemainder( device & ML_STAR, variable i_str_ChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_bln_UseCLLD, variable i_flt_SafeHeightAbovePhase, variable i_flt_AdditionalAspirationVolume, variable i_flt_DispenseHeight ) void ;
  function PIP_ProgressSequenceFromChannelPattern( variable i_str_ChPattern, variable i_bln_ProgressByUsedChannels, sequence & io_seq_SequenceToProgress ) void ;
  function TOOL_BuildArrayForChannels( device & ML_STAR, variable i_flt_ValueToSet, variable & o_arr_Values[] ) void ;
  function TOOL_CalculateHeightForVolume( device & ML_STAR, sequence i_seq_LabwareForCalculation, variable i_flt_VolumeInLabware, variable & o_flt_HeightOfVolume ) void ;
  function TOOL_CalculateVolumeForHeight( device & ML_STAR, sequence i_seq_LabwareForCalculation, variable i_flt_HeightOfVolume, variable & o_flt_Volume ) void ;
  function TOOL_OffsetArrayForChannels( device & ML_STAR, variable i_flt_ValueToOffset, variable & io_arr_Values[] ) void ;
  private function _ApplyOffsetToArrayofValues( variable & i_arr_Values[], variable i_flt_Offset, variable & o_arr_AdjustedValues[] ) void ;
  private function _CalculateLiquidFollowDistance( device & ML_STAR, variable i_str_LabID, variable i_str_PosID, variable i_flt_StartHeight, variable i_flt_VolumeToRemove, variable i_bln_AspirateMode, variable & o_flt_FollowDistance ) void ;
  private function _CheckForPressureErrors( device & ML_STAR, variable i_str_AspirationReturnValue, variable i_str_LiquidReturnValue, variable i_flt_DispenseBackVolume, variable i_str_LiquidClassDispenseBack, variable & o_str_NoErrorChPattern ) void ;
  private function _DetermineStartZHeight( device & ML_STAR, variable i_str_ChPattern, variable i_str_LabID, variable & i_arr_XCoords[], variable & i_arr_YCoords[], variable i_flt_ZMinimumCoord, variable i_flt_ZClearanceHeight, variable & o_flt_StartZHeight ) variable ;
  private function _DetermineStartZHeightMPH96( device & ML_STAR, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_ZMinimumCoord, variable & o_flt_StartZHeight ) variable ;
  private function _EnsureTipsAreLoaded( device & ML_STAR, variable i_str_ChannelPattern ) variable ;
  private function _GetChannelPatternValue( variable i_str_ChannelPattern, variable i_int_ChannelNumber, variable & o_int_Value ) void ;
  private function _GetCorrectedValueForVolume( variable i_flt_VolumeToConvert, variable & i_arr_CorrectionX[], variable & i_arr_CorrectionY[], variable & o_flt_CorrectedVolume ) void ;
  private function _GetHeightBasedOnVolume( variable i_str_ContainerFilePath, variable i_flt_VolumeToCalculate, variable & o_flt_HeightWithVolume ) void ;
  private function _GetHeightInfoFromLabware( device & ML_STAR, variable i_blnUpperHeights, sequence i_seqPositions, variable & o_arrHeights[] ) void ;
  private function _GetLabwareCoordinates( device & ML_STAR, sequence i_seq_Positions, variable i_str_ChPattern, variable & o_arr_XCoord[], variable & o_arr_YCoord[], variable & o_flt_ZBottom, variable & o_flt_ZMinimumHeight, variable & o_flt_ZMaximumHeight, variable & o_flt_ZClearanceHeight ) void ;
  private function _GetLabwareCoordinatesMPH96( device & ML_STAR, sequence i_seq_Positions, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZBottom, variable & o_flt_ZMinimumHeight, variable & o_flt_ZMaximumHeight, variable & o_flt_ZClearanceHeight ) void ;
  private function _GetLabwareLimits( device & ML_STAR, variable i_str_LabID, variable & o_flt_XMin, variable & o_flt_XMax, variable & o_flt_YMin, variable & o_flt_YMax ) void ;
  private function _GetLiquidClassParams( variable i_str_LiquidClass, variable i_bln_Asp, variable & o_flt_FlowRate, variable & o_flt_MixFlowRate, variable & o_flt_AirTransportVolume, variable & o_flt_BlowoutVolume, variable & o_flt_SwapSpeed, variable & o_int_SettlingTime, variable & o_flt_OverAspVolume, variable & o_flt_ClotRetractHeight, variable & o_flt_StopFlowRate, variable & o_flt_StopBackVolume, variable & o_flt_MaxVolume, variable & o_int_DispenseMode, variable & o_arr_CorrectionCurveX[], variable & o_arr_CorrectionCurveY[] ) void ;
  private function _GetLiquidFollowingForAllChannels( device & ML_STAR, variable & i_arr_FixedHeights[], sequence i_seq_PositionsToCalculate, variable i_bln_LiquidFollowingEnabled, variable i_bln_Aspirate, variable i_flt_VolumeToUse, variable i_str_ChPattern, variable & o_arr_LiquidFollowingDistance[] ) void ;
  private function _GetLiquidFollowingForMPH96( device & ML_STAR, variable i_flt_FixedHeights, sequence i_seq_PositionsToCalculate, variable i_bln_LiquidFollowingEnabled, variable i_bln_Aspirate, variable i_flt_VolumeToUse, variable & o_flt_LiquidFollowingDistance ) void ;
  private function _GetNextSequenceSet( sequence i_seq_Source, variable i_str_ChannelPattern, sequence & o_seq_TempSequence ) void ;
  private function _GetPartialChannelPatternForRepeatingPositions( device & ML_STAR, variable i_strChPattern, sequence i_seqPositions, variable & o_intLoopNumber, variable & o_arrChannelPatterns[] ) void ;
  private function _GetVolumeBasedOnHeight( variable i_str_ContainerFilePath, variable i_flt_HeightToCalculate, variable & o_flt_VolumeFromHeight ) void ;
  private function _GetVolumesInPositions( device & ML_STAR, sequence i_seqPositionsToGetVolume, variable & o_arrCurrentVolumes[] ) void ;
  private function _InitLiquidClassStorage(  ) void ;
  private function _ProbabilityCheck( device & ML_STAR, sequence i_seq_PositionsToCheck, variable i_str_ChannelPatternToCheck ) variable ;
  private function _ProbabilityCheckMPH96( device & ML_STAR, sequence i_seq_PositionsToCheck, variable i_str_ChannelPatternToCheck ) variable ;
  private function _SetHeightInfoToLabware( device & ML_STAR, variable i_blnUpperHeights, sequence i_seqPositions, variable & i_arrHeights[] ) void ;
  private function _SetPropertiesForLabwareID( device & Instrument, variable i_strLabwareID, variable i_strPropertyKey, variable i_strProperyValue ) void ;
  private function __GetVolumeForSegmentHeight( variable i_int_ShapeNumber, variable i_flt_DiameterTop, variable i_flt_DiameterBottom, variable i_flt_Height, variable & o_flt_CurrentVolume ) void ;
  function _InitLibrary() {
    FIRMWARE_PIPETTING_COMMANDS::_InitLibrary();
    HELPERLIBRARY::_InitLibrary();
    LIQUID_LEVEL_CHECK::_InitLibrary();
    FW_HELPERLIBRARY::_InitLibrary();
    STAR_CHANNEL_MOVEMENT_TOOLS::_InitLibrary();
    VANTAGE_CHANNEL_MOVEMENT_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    FIRMWARE_PIPETTING_COMMANDS::_ExitLibrary();
    HELPERLIBRARY::_ExitLibrary();
    LIQUID_LEVEL_CHECK::_ExitLibrary();
    FW_HELPERLIBRARY::_ExitLibrary();
    STAR_CHANNEL_MOVEMENT_TOOLS::_ExitLibrary();
    VANTAGE_CHANNEL_MOVEMENT_TOOLS::_ExitLibrary();
  }

  function PIP_FindLiquidLevel( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_PositionsToCheck, variable i_int_End_Position, variable i_bln_UseCLLD, variable & o_arr_LiquidHeightsFound[] ) void {
    private sequence seq_Temp;
    private variable int_TotalChannels;
    private variable _strFunctionName;
    private variable bln_ProbabilityPassed;
    private variable flt_ZMaximumHeight;
    private variable flt_ZClearanceHeight;
    private variable flt_ZMinimumHeight;
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable bln_TipsLoaded;
    private variable int_ChannelIndex;
    private variable flt_AdjustedCoordinates;
    private variable str_LabID;
    private variable str_PosID;
    private variable flt_ZCoord;
    private variable flt_NotUsed;
    private variable bln_SimulationMode;
    private variable bln_LabwareValid;
    private variable flt_ZBottom;
    private variable bln_ChannelsAtCoordinates;
    private variable flt_ZStartHeight;
    private variable flt_MovementEndHeight;
    o_arr_LiquidHeightsFound.SetSize( 0);
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    _GetNextSequenceSet(i_seq_PositionsToCheck, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      return;
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      return;
    }
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    o_arr_LiquidHeightsFound.SetSize(0);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 6, Translate("Processing"));
    str_LabID = SeqGetLabwareId(seq_Temp);
    bln_ChannelsAtCoordinates = _DetermineStartZHeight(ML_STAR, i_str_ChPattern, str_LabID, arr_XCoord, arr_YCoord, flt_ZMinimumHeight, flt_ZClearanceHeight, flt_ZStartHeight);
    flt_MovementEndHeight = 245.0;
    if (i_int_End_Position == 1)
    {
      flt_MovementEndHeight = flt_ZClearanceHeight;
    }
    if (i_int_End_Position == 2)
    {
      flt_MovementEndHeight = flt_ZMaximumHeight;
    }
    FIRMWARE_PIPETTING_COMMANDS::PIPFindLiquidLevel(ML_STAR, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZStartHeight, flt_MovementEndHeight, flt_ZClearanceHeight, flt_ZMinimumHeight, i_bln_UseCLLD, o_arr_LiquidHeightsFound);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        seq_Temp.SetCurrentPosition(int_ChannelIndex);
        str_LabID = SeqGetLabwareId(seq_Temp);
        str_PosID = SeqGetPositionId(seq_Temp);
        bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_LabID);
        if (bln_LabwareValid == BOOLEON::TRUE)
        {
          DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_ZCoord, flt_NotUsed);
        }
        else
        {
          flt_ZCoord = 0.0;
        }
        flt_AdjustedCoordinates = o_arr_LiquidHeightsFound.ElementAt( int_ChannelIndex -1) - flt_ZCoord;
        if (flt_AdjustedCoordinates < 0.0)
        {
          flt_AdjustedCoordinates = 0.0;
        }
        if (bln_SimulationMode == BOOLEON::TRUE)
        {
          flt_AdjustedCoordinates = 20.0;
        }
        o_arr_LiquidHeightsFound.SetAt(int_ChannelIndex-1, flt_AdjustedCoordinates);
      }
    }
    seq_Temp.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate("Processed"));
    Util2::Debug::TraceArray(Translate("Liquid Level Heights"), o_arr_LiquidHeightsFound);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _ProbabilityCheck( device & ML_STAR, sequence i_seq_PositionsToCheck, variable i_str_ChannelPatternToCheck ) variable {
    private variable int_TotalChannels;
    private variable int_TotalPositionsInSeq;
    private variable int_ChannelIndex;
    private variable int_ChannelValue;
    private variable str_LabID;
    private variable str_PosID;
    private variable flt_NotUsed;
    private variable flt_ZCoord;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable bln_ProbabilityPass;
    private variable bln_FirstPositionFound;
    private variable flt_CurrentX;
    private variable flt_CurrentY;
    private variable flt_ChannelRaster;
    private variable int_Position;
    FIRMWARE_PIPETTING_COMMANDS::GetChannelRaster1mL(ML_STAR, flt_ChannelRaster);
    int_TotalChannels = StrGetLength(i_str_ChannelPatternToCheck);
    int_TotalPositionsInSeq = SeqGetTotal(i_seq_PositionsToCheck);
    bln_FirstPositionFound = BOOLEON::FALSE;
    bln_ProbabilityPass = BOOLEON::TRUE;
    flt_CurrentX = 0.0;
    flt_CurrentY = 0.0;
    int_Position = 1;
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        if (int_ChannelIndex > int_TotalPositionsInSeq)
        {
          break;
        }
        i_seq_PositionsToCheck.SetCurrentPosition(int_ChannelIndex);
        str_LabID = SeqGetLabwareId(i_seq_PositionsToCheck);
        str_PosID = SeqGetPositionId(i_seq_PositionsToCheck);
        _GetChannelPatternValue(i_str_ChannelPatternToCheck, int_ChannelIndex, int_ChannelValue);
        if (int_ChannelValue == 1)
        {
          DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_XCoord, flt_YCoord, flt_ZCoord, flt_NotUsed);
          if (flt_YCoord > G_ARR_FW_PIP_COM_YMax.ElementAt( int_ChannelIndex -1))
          {
            bln_ProbabilityPass = BOOLEON::FALSE;
            TRACE::TRACE12(str_LabID, Translate(" - "), str_PosID, Translate(" - "), Translate("Channel Number : "), int_ChannelIndex, Translate(" : "), Translate("Out of range for function! Y coordinate ["), flt_YCoord, Translate("] is outside the maximum of "), G_ARR_FW_PIP_COM_YMax.ElementAt( int_ChannelIndex -1), Translate(""));
          }
          if (flt_YCoord < G_ARR_FW_PIP_COM_YMin.ElementAt( int_ChannelIndex -1))
          {
            bln_ProbabilityPass = BOOLEON::FALSE;
            TRACE::TRACE12(str_LabID, Translate(" - "), str_PosID, Translate(" - "), Translate("Channel Number : "), int_ChannelIndex, Translate(" : "), Translate("Out of range for function! Y coordinate ["), flt_YCoord, Translate("] is outside the minimum of "), G_ARR_FW_PIP_COM_YMin.ElementAt( int_ChannelIndex -1), Translate(""));
          }
          if (bln_FirstPositionFound == BOOLEON::FALSE)
          {
            flt_CurrentX = flt_XCoord;
            flt_CurrentY = flt_YCoord;
            bln_FirstPositionFound = BOOLEON::TRUE;
          }
          else
          {
            if (flt_XCoord != flt_CurrentX)
            {
              bln_ProbabilityPass = BOOLEON::FALSE;
              TRACE::TRACE12(str_LabID, Translate(" - "), str_PosID, Translate(" - "), Translate("Channel Number : "), int_ChannelIndex, Translate(" : "), Translate(""), Translate(""), Translate(""), Translate(""), Translate("Out of range for function!  Positions MUST share the same X coord and have enough room for the raster of the channels."));
            }
            flt_CurrentY = flt_CurrentY - flt_ChannelRaster;
            if (flt_YCoord > flt_CurrentY)
            {
              bln_ProbabilityPass = BOOLEON::FALSE;
              TRACE::TRACE12(str_LabID, Translate(" - "), str_PosID, Translate(" - "), Translate("Channel Number : "), int_ChannelIndex, Translate(" : "), Translate(""), Translate(""), Translate(""), Translate(""), Translate("Out of range for function!  Positions MUST share the same X coord and have enough room for the raster of the channels."));
            }
            else
            {
              flt_CurrentY = flt_YCoord;
            }
          }
          int_Position = int_Position + 1;
        }
        else
        {
          flt_CurrentY = flt_CurrentY - flt_ChannelRaster;
        }
      }
    }
    return (bln_ProbabilityPass);
  }

  private function _GetChannelPatternValue( variable i_str_ChannelPattern, variable i_int_ChannelNumber, variable & o_int_Value ) void {
    private variable str_Value;
    o_int_Value = 0;
    str_Value = StrLeft(i_str_ChannelPattern, i_int_ChannelNumber);
    str_Value = StrRight(str_Value, 1);
    o_int_Value = StrIVal(str_Value);
  }

  private function _GetNextSequenceSet( sequence i_seq_Source, variable i_str_ChannelPattern, sequence & o_seq_TempSequence ) void {
    private variable i;
    private variable str_LabID;
    private variable str_PosID;
    private variable int_Length;
    private variable int_TotalPositions;
    private variable int_Value;
    { sequence __temp; o_seq_TempSequence = __temp; }
    SeqRemoveAll(o_seq_TempSequence);
    int_TotalPositions = StrGetLength(i_str_ChannelPattern);
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        str_LabID = SeqGetLabwareId(i_seq_Source);
        str_PosID = SeqGetPositionId(i_seq_Source);
        int_Length = StrGetLength(str_LabID);
        if (int_Length == 0)
        {
          break;
        }
        _GetChannelPatternValue(i_str_ChannelPattern, i, int_Value);
        if (int_Value == 1)
        {
          SeqAdd(o_seq_TempSequence, str_LabID, str_PosID);
        }
        else
        {
          SeqAdd(o_seq_TempSequence, str_LabID, Translate(""));
        }
        SeqIncrement(i_seq_Source, 1);
      }
    }
    o_seq_TempSequence.SetCurrentPosition(1);
  }

  private function _GetLabwareCoordinates( device & ML_STAR, sequence i_seq_Positions, variable i_str_ChPattern, variable & o_arr_XCoord[], variable & o_arr_YCoord[], variable & o_flt_ZBottom, variable & o_flt_ZMinimumHeight, variable & o_flt_ZMaximumHeight, variable & o_flt_ZClearanceHeight ) void {
    private variable int_TotalChannels;
    private variable int_ChannelIndex;
    private variable str_LabID;
    private variable int_TotalPositions;
    private variable str_PosID;
    private variable flt_NotUsed;
    private variable flt_ZCoord;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable str_ContainerConfig;
    private variable bln_ValueExists;
    private variable str_Value;
    private variable flt_MinimumPipHeight;
    private variable int_Value;
    private variable flt_ContainerClearance;
    private variable flt_ContainerDepth;
    o_arr_XCoord.SetSize( 0);
    o_arr_YCoord.SetSize( 0);
    o_flt_ZBottom = 0;
    o_flt_ZMinimumHeight = 0;
    o_flt_ZMaximumHeight = 0;
    o_flt_ZClearanceHeight = 0;
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    o_arr_XCoord.SetSize(0);
    o_arr_YCoord.SetSize(0);
    o_flt_ZClearanceHeight = 0.0;
    o_flt_ZMaximumHeight = 0.0;
    o_flt_ZMinimumHeight = 0.0;
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        o_arr_XCoord.AddAsLast(0.0);
        o_arr_YCoord.AddAsLast(0.0);
      }
    }
    int_TotalPositions = SeqGetTotal(i_seq_Positions);
    if (int_TotalPositions == 0)
    {
      return;
    }
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChannelIndex, int_Value);
        if (int_Value == 1)
        {
          i_seq_Positions.SetCurrentPosition(int_ChannelIndex);
          str_LabID = SeqGetLabwareId(i_seq_Positions);
          str_PosID = SeqGetPositionId(i_seq_Positions);
          break;
        }
      }
    }
    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_ZCoord, flt_NotUsed);
    if(0){
      HELPERLIBRARY::GetRackHeight(ML_STAR, str_LabID, o_flt_ZMaximumHeight, o_flt_ZClearanceHeight);
    }
    HELPERLIBRARY::GetContainerDepth(ML_STAR, str_LabID, str_PosID, flt_ContainerDepth, flt_ContainerClearance);
    o_flt_ZMaximumHeight = flt_ContainerDepth + flt_ZCoord;
    o_flt_ZClearanceHeight = flt_ContainerClearance + flt_ZCoord;
    HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabID, str_PosID, str_ContainerConfig);
    bln_ValueExists = HELPERLIBRARY::GetDefinitionFileValue(str_ContainerConfig, Translate("MaxDepth"), str_Value);
    flt_MinimumPipHeight = 0.0;
    if (bln_ValueExists == BOOLEON::TRUE)
    {
      flt_MinimumPipHeight = StrFVal(str_Value);
    }
    o_flt_ZMinimumHeight = flt_ZCoord + flt_MinimumPipHeight;
    o_flt_ZBottom = flt_ZCoord;
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        flt_XCoord = 0.0;
        flt_YCoord = 0.0;
        i_seq_Positions.SetCurrentPosition(int_ChannelIndex);
        if (int_ChannelIndex > int_TotalPositions)
        {
          break;
        }
        _GetChannelPatternValue(i_str_ChPattern, int_ChannelIndex, int_Value);
        if (int_Value == 1)
        {
          str_PosID = SeqGetPositionId(i_seq_Positions);
          DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_XCoord, flt_YCoord, flt_NotUsed, flt_NotUsed);
          flt_XCoord = MthRound(flt_XCoord, 1);
          flt_YCoord = MthRound(flt_YCoord, 1);
        }
        o_arr_XCoord.SetAt(int_ChannelIndex-1, flt_XCoord);
        o_arr_YCoord.SetAt(int_ChannelIndex-1, flt_YCoord);
      }
    }
    TRACE::TRACE02(Translate("Clearance Height:  "), o_flt_ZClearanceHeight);
    TRACE::TRACE02(Translate("Top Of Plate Height:  "), o_flt_ZMaximumHeight);
    TRACE::TRACE02(Translate("Minimum Height:  "), o_flt_ZMinimumHeight);
    TRACE::TRACE02(Translate("Z Bottom:  "), o_flt_ZBottom);
    if(0){
      Util2::Debug::TraceArray_2(Translate("X Coordinates                       Y Coordinates"), o_arr_XCoord, o_arr_YCoord);
    }
  }

  private function _EnsureTipsAreLoaded( device & ML_STAR, variable i_str_ChannelPattern ) variable {
    private variable bln_TipsMatch;
    private variable int_TotalToCheck;
    private variable int_ChannelIndex;
    private variable int_ChanValueNeeded;
    private variable str_TipsLoadedPattern;
    private variable bln_SimulationMode;
    private variable int_ChanValueLoaded;
    bln_SimulationMode = Util::GetSimulationMode();
    bln_TipsMatch = BOOLEON::TRUE;
    int_TotalToCheck = StrGetLength(i_str_ChannelPattern);
    FIRMWARE_PIPETTING_COMMANDS::GetChannelPatternWithTips(ML_STAR, BOOLEON::TRUE, str_TipsLoadedPattern);
    if (bln_SimulationMode == BOOLEON::TRUE)
    {
      str_TipsLoadedPattern = i_str_ChannelPattern;
    }
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalToCheck;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        _GetChannelPatternValue(i_str_ChannelPattern, int_ChannelIndex, int_ChanValueNeeded);
        if (int_ChanValueNeeded == 1)
        {
          _GetChannelPatternValue(str_TipsLoadedPattern, int_ChannelIndex, int_ChanValueLoaded);
          if (int_ChanValueLoaded == 0)
          {
            bln_TipsMatch = BOOLEON::FALSE;
          }
        }
      }
    }
    TRACE::TRACE02(Translate("Channel Pattern:  "), i_str_ChannelPattern);
    TRACE::TRACE02(Translate("Tips Loaded:  "), str_TipsLoadedPattern);
    TRACE::TRACE02(Translate("Necessary Tips On Channels:  "), bln_TipsMatch);
    return (bln_TipsMatch);
  }

  function TOOL_BuildArrayForChannels( device & ML_STAR, variable i_flt_ValueToSet, variable & o_arr_Values[] ) void {
    private variable i;
    o_arr_Values.SetSize( 0);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_arr_Values.SetSize(0);
    {
      for(i = 0; i < G_FW_PIP_COM_TotalChannels;)
      {
        i = i + 1;
        o_arr_Values.AddAsLast(i_flt_ValueToSet);
      }
    }
  }

  function PIP_AspirateFromFixedHeight( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_AspirationPositions, variable & i_arr_FixedHeights[], variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_str_LiquidClass, variable i_flt_AspirationVolume, variable i_flt_PullOutDistance ) void {
    private variable _strFunctionName;
    private variable bln_SimulationMode;
    private variable bln_TipsLoaded;
    private variable bln_ProbabilityPassed;
    private variable flt_ZMaximumHeight;
    private variable flt_ZClearanceHeight;
    private variable int_TotalChannels;
    private variable flt_ZMinimumHeight;
    private sequence seq_Temp;
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable flt_ZStartHeight;
    private variable arr_LiquidFollowingDistance[];
    private variable arr_AspirationHeights[];
    private variable flt_NotUsed;
    private variable flt_AspirationVolume;
    private variable flt_MovementStartHeight;
    private variable flt_MovementEndHeight;
    private variable bln_ChannelsAtCoordinates;
    private variable flt_ZBottom;
    private variable flt_ContainerDepth;
    private variable flt_DispenseHeight;
    private variable str_LabID;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    _InitLiquidClassStorage();
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    bln_SimulationMode = G_FW_PIP_COM_SimulationMode;
    int_TotalChannels = G_FW_PIP_COM_TotalChannels;
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    _GetNextSequenceSet(i_seq_AspirationPositions, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    flt_ContainerDepth = flt_ZMaximumHeight - flt_ZMinimumHeight;
    str_LabID = SeqGetLabwareId(seq_Temp);
    bln_ChannelsAtCoordinates = _DetermineStartZHeight(ML_STAR, i_str_ChPattern, str_LabID, arr_XCoord, arr_YCoord, flt_ZMinimumHeight, flt_ZClearanceHeight, flt_ZStartHeight);
    _ApplyOffsetToArrayofValues(i_arr_FixedHeights, flt_ZBottom, arr_AspirationHeights);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetCorrectedValueForVolume(i_flt_AspirationVolume, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_AspirationVolume);
    TRACE::TRACE04(Translate("Aspiration Volume:  "), i_flt_AspirationVolume, Translate("  Corrected Volume for Liquid Class:  "), flt_AspirationVolume);
    _GetLiquidFollowingForAllChannels(ML_STAR, i_arr_FixedHeights, seq_Temp, i_bln_UseLiquidFollowing, BOOLEON::TRUE, flt_AspirationVolume, i_str_ChPattern, arr_LiquidFollowingDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 0, Translate("Processing"));
    flt_MovementStartHeight = flt_ZStartHeight;
    flt_MovementEndHeight = 245.0;
    if (i_int_End_Position == 1)
    {
      flt_MovementEndHeight = flt_ZClearanceHeight;
    }
    if (i_int_End_Position == 2)
    {
      flt_MovementEndHeight = flt_ZMaximumHeight;
    }
    if (i_int_End_Position == 3)
    {
      if(0){
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
      flt_DispenseHeight = HSLStatisitics::Stat_Max(i_arr_FixedHeights);
      flt_MovementEndHeight = flt_DispenseHeight + flt_ZBottom;
      if (flt_MovementEndHeight < flt_ZMinimumHeight)
      {
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::PIPAspirateFromFixedHeight(ML_STAR, i_str_ChPattern, arr_XCoord, arr_YCoord, arr_AspirationHeights, arr_LiquidFollowingDistance, flt_MovementStartHeight, flt_MovementEndHeight, flt_ZMinimumHeight, flt_ZBottom, flt_ContainerDepth, flt_AspirationVolume, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_SWAP, i_flt_PullOutDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate("Processed"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _DetermineStartZHeight( device & ML_STAR, variable i_str_ChPattern, variable i_str_LabID, variable & i_arr_XCoords[], variable & i_arr_YCoords[], variable i_flt_ZMinimumCoord, variable i_flt_ZClearanceHeight, variable & o_flt_StartZHeight ) variable {
    private variable int_TotalCoords;
    private variable bln_ChannelsAtCoordinate;
    private variable flt_CurrentXCoord;
    private variable arr_CurrentYCoord[];
    private variable i;
    private variable bln_SimulationMode;
    private variable int_Value;
    private variable flt_YMaxNeeded;
    private variable flt_XMinNeeded;
    private variable flt_YMin;
    private variable flt_YMax;
    private variable flt_XMin;
    private variable flt_XMax;
    private variable flt_YMinNeeded;
    private variable flt_XMaxNeeded;
    private variable int_TotalX;
    private variable int_TotalY;
    private variable arr_AdjustedX[];
    private variable arr_AdjustedY[];
    private variable flt_YMinCurrent;
    private variable flt_YMaxCurrent;
    private variable arr_RelevantCurrentY[];
    private variable str_Coord1;
    private variable str_Coord2;
    private variable int_Coord1;
    private variable int_Coord2;
    private variable flt_Coord1;
    private variable flt_Coord2;
    o_flt_StartZHeight = 0;
    bln_SimulationMode = Util::GetSimulationMode();
    o_flt_StartZHeight = 0.0;
    bln_ChannelsAtCoordinate = BOOLEON::TRUE;
    FIRMWARE_PIPETTING_COMMANDS::GetChannelXCoordinate(ML_STAR, flt_CurrentXCoord);
    FIRMWARE_PIPETTING_COMMANDS::GetChannelYCoordinates(ML_STAR, BOOLEON::TRUE, arr_CurrentYCoord);
    arr_AdjustedX.SetSize(0);
    arr_AdjustedY.SetSize(0);
    arr_RelevantCurrentY.SetSize(0);
    int_TotalX=i_arr_XCoords.GetSize();
    {
      for(i = 0; i < int_TotalX;)
      {
        i = i + 1;
        if (i_arr_XCoords.ElementAt( i -1) > 0.0)
        {
          arr_AdjustedX.AddAsLast(i_arr_XCoords.ElementAt( i -1));
        }
      }
    }
    int_TotalY=i_arr_YCoords.GetSize();
    {
      for(i = 0; i < int_TotalY;)
      {
        i = i + 1;
        if (i_arr_YCoords.ElementAt( i -1) > 0.0)
        {
          arr_AdjustedY.AddAsLast(i_arr_YCoords.ElementAt( i -1));
          arr_RelevantCurrentY.AddAsLast(arr_CurrentYCoord.ElementAt( i -1));
        }
      }
    }
    if(0){
      Util2::Debug::TraceArray(Translate("Current Y Coords"), arr_CurrentYCoord);
    }
    int_TotalCoords=i_arr_XCoords.GetSize();
    {
      for(i = 0; i < int_TotalCoords;)
      {
        i = i + 1;
        _GetChannelPatternValue(i_str_ChPattern, i, int_Value);
        if (int_Value == 1)
        {
          flt_Coord1 = i_arr_XCoords.ElementAt( i -1) * 10;
          str_Coord1 = StrConcat2(flt_Coord1, Translate(""));
          int_Coord1 = StrIVal(str_Coord1);
          flt_Coord2 = flt_CurrentXCoord * 10;
          str_Coord2 = StrConcat2(flt_Coord2, Translate(""));
          int_Coord2 = StrIVal(str_Coord2);
          if (int_Coord1 != int_Coord2)
          {
            bln_ChannelsAtCoordinate = BOOLEON::FALSE;
          }
          if(0){
            TRACE::TRACE08(Translate("Needed X:  "), i_arr_XCoords.ElementAt( i -1), Translate("   Current X:  "), flt_CurrentXCoord, Translate("  Valid:  "), bln_ChannelsAtCoordinate, Translate(""), Translate(""));
          }
        }
      }
    }
    int_TotalCoords=i_arr_YCoords.GetSize();
    {
      for(i = 0; i < int_TotalCoords;)
      {
        i = i + 1;
        _GetChannelPatternValue(i_str_ChPattern, i, int_Value);
        if (int_Value == 1)
        {
          flt_Coord1 = i_arr_YCoords.ElementAt( i -1) * 10;
          str_Coord1 = StrConcat2(flt_Coord1, Translate(""));
          int_Coord1 = StrIVal(str_Coord1);
          flt_Coord2 = arr_CurrentYCoord.ElementAt( i -1) * 10;
          str_Coord2 = StrConcat2(flt_Coord2, Translate(""));
          int_Coord2 = StrIVal(str_Coord2);
          if (int_Coord1 != int_Coord2)
          {
            bln_ChannelsAtCoordinate = BOOLEON::FALSE;
          }
          if(0){
            TRACE::TRACE08(Translate("Needed Y:  "), str_Coord1, Translate("   Current Y:  "), str_Coord2, Translate("  Valid:  "), bln_ChannelsAtCoordinate, Translate(""), Translate(""));
          }
        }
      }
    }
    if (bln_SimulationMode == BOOLEON::TRUE)
    {
      bln_ChannelsAtCoordinate = BOOLEON::TRUE;
    }
    if (bln_ChannelsAtCoordinate == BOOLEON::TRUE)
    {
      o_flt_StartZHeight = i_flt_ZMinimumCoord;
    }
    else
    {
      _GetLabwareLimits(ML_STAR, i_str_LabID, flt_XMin, flt_XMax, flt_YMin, flt_YMax);
      flt_XMaxNeeded = HSLStatisitics::Stat_Max(arr_AdjustedX);
      flt_XMinNeeded = HSLStatisitics::Stat_Min(arr_AdjustedX);
      flt_YMaxNeeded = HSLStatisitics::Stat_Max(arr_AdjustedY);
      flt_YMinNeeded = HSLStatisitics::Stat_Min(arr_AdjustedY);
      flt_YMaxCurrent = HSLStatisitics::Stat_Max(arr_RelevantCurrentY);
      flt_YMinCurrent = HSLStatisitics::Stat_Min(arr_RelevantCurrentY);
      o_flt_StartZHeight = 245.0;
      {
        for(i = 0; i < 1;)
        {
          i = i + 1;
          if (flt_CurrentXCoord > flt_XMax)
          {
            break;
          }
          if (flt_CurrentXCoord < flt_XMin)
          {
            break;
          }
          if (flt_YMaxCurrent > flt_YMax)
          {
            break;
          }
          if (flt_YMinCurrent < flt_YMin)
          {
            break;
          }
          if(0){
            TRACE::TRACE04(Translate("X Max Needed: "), flt_XMaxNeeded, Translate("   X Max Limit: "), flt_XMax);
          }
          if (flt_XMaxNeeded <= flt_XMax)
          {
            if(0){
              TRACE::TRACE04(Translate("X Min Needed: "), flt_XMinNeeded, Translate("   X Min Limit: "), flt_XMin);
            }
            if (flt_XMinNeeded >= flt_XMin)
            {
              if(0){
                TRACE::TRACE04(Translate("Y Max Needed: "), flt_YMaxNeeded, Translate("   Y Max Limit: "), flt_YMax);
              }
              if (flt_YMaxNeeded <= flt_YMax)
              {
                if(0){
                  TRACE::TRACE04(Translate("Y Min Needed: "), flt_YMinNeeded, Translate("   Y Min Limit: "), flt_YMin);
                }
                if (flt_YMinNeeded >= flt_YMin)
                {
                  o_flt_StartZHeight = i_flt_ZClearanceHeight;
                }
              }
            }
          }
        }
      }
    }
    TRACE::TRACE04(Translate("     "), Translate("Z Start Height:  "), o_flt_StartZHeight, Translate(""));
    return (bln_ChannelsAtCoordinate);
  }

  private function __GetVolumeForSegmentHeight( variable i_int_ShapeNumber, variable i_flt_DiameterTop, variable i_flt_DiameterBottom, variable i_flt_Height, variable & o_flt_CurrentVolume ) void {
    private variable w;
    private variable l;
    private variable m;
    private variable n;
    private variable flt_Pi;
    private variable r;
    private variable R;
    o_flt_CurrentVolume = 0;
    flt_Pi = 3.14159265359;
    o_flt_CurrentVolume = 0.0;
    m = 0;
    n = 0;
    r = 0;
    R = 0;
    l = 0;
    w = 0;
    if(0){
      Trace("Shape number:  ",i_int_ShapeNumber,"  Top Diameter:  ",i_flt_DiameterTop,"  Bottom Diameter:  ",i_flt_DiameterBottom,"  Height:  ",i_flt_Height);
    }
    if (i_int_ShapeNumber == 0)
    {
      r = i_flt_DiameterTop / (2 * 1.0);
      m = r * r * flt_Pi;
      o_flt_CurrentVolume = m * i_flt_Height;
      o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 1);
    }
    if (i_int_ShapeNumber == 1)
    {
      m = i_flt_DiameterTop * i_flt_DiameterBottom;
      o_flt_CurrentVolume = m * i_flt_Height;
      o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 1);
    }
    if (i_int_ShapeNumber == 2)
    {
      r = i_flt_DiameterBottom / (2 * 1.0);
      R = i_flt_DiameterTop / (2 * 1.0);
      m  = (flt_Pi/3) * (R*R + r*r + R*r);
      o_flt_CurrentVolume = m * i_flt_Height;
      o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 1);
    }
    if (i_int_ShapeNumber == 3)
    {
      R = i_flt_DiameterTop / (2 * 1.0);
      r = i_flt_DiameterBottom / (2 * 1.0);
      m  = (flt_Pi/3) * (R*R + r*r + R*r);
      o_flt_CurrentVolume = m * i_flt_Height;
      o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 4);
    }
    if (i_int_ShapeNumber == 4)
    {
      r = i_flt_DiameterTop;
      m = (flt_Pi*r)/2;
      n = (flt_Pi/3);
      o_flt_CurrentVolume = i_flt_Height * i_flt_Height * m - n * i_flt_Height;
      o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 1);
    }
    if (i_int_ShapeNumber == 5)
    {
      r = i_flt_DiameterTop / (2 * 1.0);
      m = (flt_Pi * r * r) / 3;
      o_flt_CurrentVolume = m * i_flt_Height;
      o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 1);
    }
    o_flt_CurrentVolume = MthRound(o_flt_CurrentVolume, 1);
  }

  private function _GetHeightBasedOnVolume( variable i_str_ContainerFilePath, variable i_flt_VolumeToCalculate, variable & o_flt_HeightWithVolume ) void {
    private variable str_SearchValueMax;
    private variable flt_CurrentVolume;
    private variable flt_CheckHeight;
    private variable str_SearchValueShape;
    private variable i;
    private variable flt_Dx;
    private variable flt_Dy;
    private variable flt_MinimumVolume;
    private variable flt_TopDiameter;
    private variable flt_Dz;
    private variable int_SegmentNumber;
    private variable flt_BottomDiameter;
    private variable str_SearchValue1;
    private variable int_TotalSegments;
    private variable str_SearchValue2;
    private variable flt_CurrentMax;
    private variable str_SearchValue3;
    private variable bln_ValueFound;
    private variable a;
    private variable flt_CurrentHeight;
    private variable flt_Volume;
    private variable flt_Min;
    private variable flt_Max;
    private variable str_SearchValueMin;
    private variable str_Value;
    private variable int_Shape;
    private variable arr_BottomDiameter[];
    private variable arr_MinHeight[];
    private variable arr_TopDiameter[];
    private variable arr_MaxHeight[];
    private variable arr_Shape[];
    o_flt_HeightWithVolume = 0;
    o_flt_HeightWithVolume = 0.0;
    int_TotalSegments = 0;
    str_Value = Translate("");
    bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, Translate("Segments"), str_Value);
    if (bln_ValueFound == BOOLEON::TRUE)
    {
      int_TotalSegments = StrIVal(str_Value);
    }
    arr_TopDiameter.SetSize(0);
    arr_BottomDiameter.SetSize(0);
    arr_Shape.SetSize(0);
    arr_MinHeight.SetSize(0);
    arr_MaxHeight.SetSize(0);
    i = int_TotalSegments;
    {
      for(a = 0; a < int_TotalSegments;)
      {
        a = a + 1;
        int_Shape = -1;
        flt_Min = 0.0;
        flt_Max = 0.0;
        flt_Dx = 0.0;
        flt_Dy = 0.0;
        flt_Dz = 0.0;
        flt_TopDiameter = 0.0;
        flt_BottomDiameter = 0.0;
        str_SearchValueShape = StrConcat2(i, Translate(".Shape"));
        str_SearchValueMin = StrConcat2(i, Translate(".Min"));
        str_SearchValueMax = StrConcat2(i, Translate(".Max"));
        str_SearchValue1 = StrConcat2(i, Translate(".DX"));
        str_SearchValue2 = StrConcat2(i, Translate(".DY"));
        str_SearchValue3 = StrConcat2(i, Translate(".DZ"));
        bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValueShape, str_Value);
        if (bln_ValueFound == BOOLEON::TRUE)
        {
          int_Shape = StrIVal(str_Value);
        }
        if (int_Shape >= 0)
        {
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValueMin, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Min = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValueMax, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Max = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValue1, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Dx = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValue2, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Dy = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValue3, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Dz = StrFVal(str_Value);
          }
        }
        if (int_Shape == 0)
        {
          flt_TopDiameter = flt_Dz;
        }
        if (int_Shape == 1)
        {
          flt_TopDiameter = flt_Dx;
          flt_BottomDiameter = flt_Dy;
        }
        if (int_Shape == 2)
        {
          flt_TopDiameter = flt_Dx;
          flt_BottomDiameter = flt_Dy;
        }
        if (int_Shape == 3)
        {
          flt_TopDiameter = flt_Dx;
          flt_BottomDiameter = flt_Dy;
        }
        if (int_Shape == 4)
        {
          flt_TopDiameter = flt_Dz;
        }
        if (int_Shape == 5)
        {
          flt_TopDiameter = flt_Dz;
        }
        arr_Shape.AddAsLast(int_Shape);
        arr_MinHeight.AddAsLast(flt_Min);
        arr_MaxHeight.AddAsLast(flt_Max);
        arr_TopDiameter.AddAsLast(flt_TopDiameter);
        arr_BottomDiameter.AddAsLast(flt_BottomDiameter);
        i = i - 1;
      }
    }
    flt_CurrentVolume = 0.0;
    flt_MinimumVolume = 0.0;
    flt_CurrentHeight = 0.0;
    int_SegmentNumber = 0;
    flt_CurrentMax = 0.0;
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        if (flt_CurrentVolume >= i_flt_VolumeToCalculate)
        {
          break;
        }
        flt_CurrentHeight = flt_CurrentHeight + 0.1;
        if (flt_CurrentHeight > flt_CurrentMax)
        {
          int_SegmentNumber = int_SegmentNumber + 1;
          flt_MinimumVolume = flt_CurrentVolume;
          if (int_SegmentNumber > int_TotalSegments)
          {
            break;
          }
        }
        flt_CurrentMax=arr_MaxHeight.GetAt(int_SegmentNumber-1);
        flt_CheckHeight = flt_CurrentHeight - arr_MinHeight.ElementAt( int_SegmentNumber -1);
        __GetVolumeForSegmentHeight(arr_Shape.ElementAt( int_SegmentNumber -1), arr_TopDiameter.ElementAt( int_SegmentNumber -1), arr_BottomDiameter.ElementAt( int_SegmentNumber -1), flt_CheckHeight, flt_Volume);
        flt_CurrentVolume = flt_MinimumVolume + flt_Volume;
        if(0){
          Trace("Current Height:  ",flt_CurrentHeight,"  Current Volume:  ",flt_CurrentVolume);
        }
      }
    }
    o_flt_HeightWithVolume = flt_CurrentHeight;
    o_flt_HeightWithVolume = MthRound(o_flt_HeightWithVolume, 1);
  }

  private function _CalculateLiquidFollowDistance( device & ML_STAR, variable i_str_LabID, variable i_str_PosID, variable i_flt_StartHeight, variable i_flt_VolumeToRemove, variable i_bln_AspirateMode, variable & o_flt_FollowDistance ) void {
    private variable flt_StartVolume;
    private variable flt_VolumeRemaining;
    private variable flt_EndHeight;
    private variable str_ConfigFile;
    o_flt_FollowDistance = 0;
    HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, i_str_LabID, i_str_PosID, str_ConfigFile);
    o_flt_FollowDistance = 0.0;
    if(0){
      flt_StartVolume = flt_StartVolume * 1000.0;
    }
    if (i_bln_AspirateMode == BOOLEON::TRUE)
    {
      if(0){
        flt_StartVolume = DevComputeContainerVolume(ML_STAR, i_str_LabID, i_str_PosID, i_flt_StartHeight, BOOLEON::FALSE);
      }
      _GetVolumeBasedOnHeight(str_ConfigFile, i_flt_StartHeight, flt_StartVolume);
      if (i_flt_VolumeToRemove > flt_StartVolume)
      {
        o_flt_FollowDistance = i_flt_StartHeight;
        return;
      }
      flt_VolumeRemaining = flt_StartVolume + i_flt_VolumeToRemove;
      _GetHeightBasedOnVolume(str_ConfigFile, flt_VolumeRemaining, flt_EndHeight);
      o_flt_FollowDistance = i_flt_StartHeight - flt_EndHeight;
    }
    else
    {
      if(0){
        flt_StartVolume = DevComputeContainerVolume(ML_STAR, i_str_LabID, i_str_PosID, i_flt_StartHeight, BOOLEON::FALSE);
      }
      _GetVolumeBasedOnHeight(str_ConfigFile, i_flt_StartHeight, flt_StartVolume);
      flt_VolumeRemaining = flt_StartVolume + i_flt_VolumeToRemove;
      _GetHeightBasedOnVolume(str_ConfigFile, flt_VolumeRemaining, flt_EndHeight);
      o_flt_FollowDistance = flt_EndHeight - i_flt_StartHeight;
    }
    if(0){
      TRACE::TRACE04(Translate("     "), Translate("Start Volume:  "), flt_StartVolume, Translate(" uL"));
      TRACE::TRACE04(Translate("     "), Translate("Start Height:  "), i_flt_StartHeight, Translate(" mm"));
      TRACE::TRACE04(Translate("     "), Translate("End Volume:  "), flt_VolumeRemaining, Translate(" uL"));
      TRACE::TRACE04(Translate("     "), Translate("End Height:  "), flt_EndHeight, Translate(" mm"));
    }
    if (o_flt_FollowDistance < 0.0)
    {
      o_flt_FollowDistance = 0.0;
    }
    if(0){
      TRACE::TRACE04(Translate("     "), Translate("Follow distance:  "), o_flt_FollowDistance, Translate(" mm"));
    }
  }

  private function _GetVolumeBasedOnHeight( variable i_str_ContainerFilePath, variable i_flt_HeightToCalculate, variable & o_flt_VolumeFromHeight ) void {
    private variable str_SearchValueMax;
    private variable flt_CurrentVolume;
    private variable flt_CheckHeight;
    private variable str_SearchValueShape;
    private variable flt_Dx;
    private variable i;
    private variable flt_Dy;
    private variable flt_TopDiameter;
    private variable flt_MinimumVolume;
    private variable flt_Dz;
    private variable flt_BottomDiameter;
    private variable int_SegmentNumber;
    private variable str_SearchValue1;
    private variable int_TotalSegments;
    private variable str_SearchValue2;
    private variable flt_CurrentMax;
    private variable str_SearchValue3;
    private variable a;
    private variable bln_ValueFound;
    private variable flt_CurrentHeight;
    private variable flt_Volume;
    private variable flt_Min;
    private variable str_SearchValueMin;
    private variable flt_Max;
    private variable int_Shape;
    private variable str_Value;
    private variable arr_BottomDiameter[];
    private variable arr_MinHeight[];
    private variable arr_TopDiameter[];
    private variable arr_MaxHeight[];
    private variable arr_Shape[];
    o_flt_VolumeFromHeight = 0;
    o_flt_VolumeFromHeight = 0.0;
    int_TotalSegments = 0;
    str_Value = Translate("");
    bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, Translate("Segments"), str_Value);
    if (bln_ValueFound == BOOLEON::TRUE)
    {
      int_TotalSegments = StrIVal(str_Value);
    }
    arr_TopDiameter.SetSize(0);
    arr_BottomDiameter.SetSize(0);
    arr_Shape.SetSize(0);
    arr_MinHeight.SetSize(0);
    arr_MaxHeight.SetSize(0);
    i = int_TotalSegments;
    {
      for(a = 0; a < int_TotalSegments;)
      {
        a = a + 1;
        int_Shape = -1;
        flt_Min = 0.0;
        flt_Max = 0.0;
        flt_Dx = 0.0;
        flt_Dy = 0.0;
        flt_Dz = 0.0;
        flt_TopDiameter = 0.0;
        flt_BottomDiameter = 0.0;
        str_SearchValueShape = StrConcat2(i, Translate(".Shape"));
        str_SearchValueMin = StrConcat2(i, Translate(".Min"));
        str_SearchValueMax = StrConcat2(i, Translate(".Max"));
        str_SearchValue1 = StrConcat2(i, Translate(".DX"));
        str_SearchValue2 = StrConcat2(i, Translate(".DY"));
        str_SearchValue3 = StrConcat2(i, Translate(".DZ"));
        if(0){
          Trace("Search Values:  ",str_SearchValue1,"   ",str_SearchValue2,"   ",str_SearchValue3);
        }
        bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValueShape, str_Value);
        if (bln_ValueFound == BOOLEON::TRUE)
        {
          int_Shape = StrIVal(str_Value);
        }
        if (int_Shape >= 0)
        {
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValueMin, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Min = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValueMax, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Max = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValue1, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Dx = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValue2, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Dy = StrFVal(str_Value);
          }
          bln_ValueFound = HELPERLIBRARY::GetDefinitionFileValue(i_str_ContainerFilePath, str_SearchValue3, str_Value);
          if (bln_ValueFound == BOOLEON::TRUE)
          {
            flt_Dz = StrFVal(str_Value);
          }
        }
        if (int_Shape == 0)
        {
          flt_TopDiameter = flt_Dz;
        }
        if (int_Shape == 1)
        {
          flt_TopDiameter = flt_Dx;
          flt_BottomDiameter = flt_Dy;
        }
        if (int_Shape == 2)
        {
          flt_TopDiameter = flt_Dx;
          flt_BottomDiameter = flt_Dy;
        }
        if (int_Shape == 3)
        {
          flt_TopDiameter = flt_Dx;
          flt_BottomDiameter = flt_Dy;
        }
        if (int_Shape == 4)
        {
          flt_TopDiameter = flt_Dz;
        }
        if (int_Shape == 5)
        {
          flt_TopDiameter = flt_Dz;
        }
        arr_Shape.AddAsLast(int_Shape);
        arr_MinHeight.AddAsLast(flt_Min);
        arr_MaxHeight.AddAsLast(flt_Max);
        arr_TopDiameter.AddAsLast(flt_TopDiameter);
        arr_BottomDiameter.AddAsLast(flt_BottomDiameter);
        i = i - 1;
      }
    }
    flt_CurrentVolume = 0.0;
    flt_MinimumVolume = 0.0;
    flt_CurrentHeight = 0.0;
    int_SegmentNumber = 0;
    flt_CurrentMax = 0.0;
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        if (flt_CurrentHeight >= i_flt_HeightToCalculate)
        {
          break;
        }
        flt_CurrentHeight = flt_CurrentHeight + 0.1;
        if (flt_CurrentHeight > flt_CurrentMax)
        {
          int_SegmentNumber = int_SegmentNumber + 1;
          flt_MinimumVolume = flt_CurrentVolume;
          if (int_SegmentNumber > int_TotalSegments)
          {
            break;
          }
        }
        flt_CurrentMax=arr_MaxHeight.GetAt(int_SegmentNumber-1);
        flt_CheckHeight = flt_CurrentHeight - arr_MinHeight.ElementAt( int_SegmentNumber -1);
        __GetVolumeForSegmentHeight(arr_Shape.ElementAt( int_SegmentNumber -1), arr_TopDiameter.ElementAt( int_SegmentNumber -1), arr_BottomDiameter.ElementAt( int_SegmentNumber -1), flt_CheckHeight, flt_Volume);
        flt_CurrentVolume = flt_MinimumVolume + flt_Volume;
        if(0){
          Trace("Current Height:  ",flt_CurrentHeight,"  Current Volume:  ",flt_CurrentVolume);
        }
      }
    }
    o_flt_VolumeFromHeight = flt_CurrentVolume;
    o_flt_VolumeFromHeight = MthRound(o_flt_VolumeFromHeight, 1);
  }

  private function _GetLiquidFollowingForAllChannels( device & ML_STAR, variable & i_arr_FixedHeights[], sequence i_seq_PositionsToCalculate, variable i_bln_LiquidFollowingEnabled, variable i_bln_Aspirate, variable i_flt_VolumeToUse, variable i_str_ChPattern, variable & o_arr_LiquidFollowingDistance[] ) void {
    private variable flt_LiquidFollow;
    private variable str_LabID;
    private variable int_TotalChannels;
    private variable int_ChannelIndex;
    private variable str_PosID;
    private variable int_TotalInSeq;
    private variable int_Value;
    o_arr_LiquidFollowingDistance.SetSize( 0);
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    if (i_bln_Aspirate == BOOLEON::TRUE)
    {
      i_flt_VolumeToUse = i_flt_VolumeToUse * -1;
    }
    o_arr_LiquidFollowingDistance.SetSize(0);
    int_TotalInSeq = SeqGetTotal(i_seq_PositionsToCalculate);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        i_seq_PositionsToCalculate.SetCurrentPosition(int_ChannelIndex);
        _GetChannelPatternValue(i_str_ChPattern, int_ChannelIndex, int_Value);
        if (int_Value == 1)
        {
          if (int_ChannelIndex <= int_TotalInSeq)
          {
            str_LabID = SeqGetLabwareId(i_seq_PositionsToCalculate);
            str_PosID = SeqGetPositionId(i_seq_PositionsToCalculate);
            if (i_bln_LiquidFollowingEnabled == BOOLEON::TRUE)
            {
              _CalculateLiquidFollowDistance(ML_STAR, str_LabID, str_PosID, i_arr_FixedHeights.ElementAt( int_ChannelIndex -1), i_flt_VolumeToUse, i_bln_Aspirate, flt_LiquidFollow);
            }
            else
            {
              flt_LiquidFollow = 0.0;
            }
          }
          else
          {
            flt_LiquidFollow = 0.0;
          }
          flt_LiquidFollow = MthRound(flt_LiquidFollow, 1);
        }
        else
        {
          flt_LiquidFollow = 0.0;
        }
        o_arr_LiquidFollowingDistance.AddAsLast(flt_LiquidFollow);
      }
    }
  }

  private function _ApplyOffsetToArrayofValues( variable & i_arr_Values[], variable i_flt_Offset, variable & o_arr_AdjustedValues[] ) void {
    private variable int_TotalChannels;
    private variable int_ChannelIndex;
    private variable flt_NewValue;
    o_arr_AdjustedValues.SetSize( 0);
    o_arr_AdjustedValues.SetSize(0);
    int_TotalChannels=i_arr_Values.GetSize();
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        flt_NewValue = i_arr_Values.ElementAt( int_ChannelIndex -1) + i_flt_Offset;
        o_arr_AdjustedValues.AddAsLast(flt_NewValue);
      }
    }
  }

  private function _GetLiquidClassParams( variable i_str_LiquidClass, variable i_bln_Asp, variable & o_flt_FlowRate, variable & o_flt_MixFlowRate, variable & o_flt_AirTransportVolume, variable & o_flt_BlowoutVolume, variable & o_flt_SwapSpeed, variable & o_int_SettlingTime, variable & o_flt_OverAspVolume, variable & o_flt_ClotRetractHeight, variable & o_flt_StopFlowRate, variable & o_flt_StopBackVolume, variable & o_flt_MaxVolume, variable & o_int_DispenseMode, variable & o_arr_CorrectionCurveX[], variable & o_arr_CorrectionCurveY[] ) void {
    private variable str_LiquidName;
    private variable int_TipType;
    private variable str_DispenseMode;
    o_flt_FlowRate = 0;
    o_flt_MixFlowRate = 0;
    o_flt_AirTransportVolume = 0;
    o_flt_BlowoutVolume = 0;
    o_flt_SwapSpeed = 0;
    o_int_SettlingTime = 0;
    o_flt_OverAspVolume = 0;
    o_flt_ClotRetractHeight = 0;
    o_flt_StopFlowRate = 0;
    o_flt_StopBackVolume = 0;
    o_flt_MaxVolume = 0;
    o_int_DispenseMode = 0;
    o_arr_CorrectionCurveX.SetSize( 0);
    o_arr_CorrectionCurveY.SetSize( 0);
    o_flt_AirTransportVolume = 0.0;
    o_flt_BlowoutVolume = 0.0;
    o_flt_ClotRetractHeight = 0.0;
    TRACE::TRACE02(Translate("Liquid Class:  "), i_str_LiquidClass);
    o_flt_FlowRate = 0.0;
    o_flt_MixFlowRate = 0.0;
    o_flt_OverAspVolume = 0.0;
    o_flt_StopBackVolume = 0.0;
    o_flt_StopFlowRate = 0.0;
    o_flt_SwapSpeed = 0.0;
    o_int_SettlingTime = 0;
    o_flt_MaxVolume = 0.0;
    o_arr_CorrectionCurveX.SetSize(0);
    o_arr_CorrectionCurveY.SetSize(0);
    MLSTAR_LIQUIDCLASSLib::Initialize(BOOLEON::TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_str_LiquidClass);
    MLSTAR_LIQUIDCLASSLib::GetCorrectionCurve(o_arr_CorrectionCurveX, o_arr_CorrectionCurveY);
    o_flt_MaxVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::MaxAspirateVolume);
    str_LiquidName = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::LiquidName);
    int_TipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    str_DispenseMode = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::DispenseMode);
    HELPERLIBRARY::ConvertToInteger(str_DispenseMode, o_int_DispenseMode);
    if (i_bln_Asp == BOOLEON::TRUE)
    {
      TRACE::TRACE02(Translate("Max volume for tip:  "), o_flt_MaxVolume);
      TRACE::TRACE02(Translate("Liquid Name:  "), str_LiquidName);
      TRACE::TRACE02(Translate("Tip Type:  "), int_TipType);
      TRACE::TRACE02(Translate("Dispense Mode:  "), str_DispenseMode);
      o_flt_AirTransportVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
      o_flt_BlowoutVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
      o_flt_ClotRetractHeight = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::ClotRetractHeight);
      o_flt_FlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
      o_flt_MixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
      o_flt_OverAspVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
      o_flt_SwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
      o_int_SettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    }
    else
    {
      o_flt_AirTransportVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
      o_flt_BlowoutVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
      o_flt_FlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
      o_flt_MixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
      o_int_SettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
      o_flt_StopBackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
      o_flt_StopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
      o_flt_SwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    }
    T_PIP_TOOLS_LIQUID_CLASS = i_str_LiquidClass;
  }

  private function _InitLiquidClassStorage(  ) void {
    if (T_PIP_TOOLS_LIQUID_CLASS_INIT == BOOLEON::FALSE)
    {
      T_PIP_TOOLS_LIQUID_CLASS_INIT = BOOLEON::TRUE;
      T_PIP_TOOLS_LIQUID_CLASS = Translate("");
      T_PIP_TOOLS_ASP_FLOW_RATE = 0.0;
      T_PIP_TOOLS_ASP_MIX_FLOW_RATE = 0.0;
      T_PIP_TOOLS_ASP_AIR_TRANSPORT = 0.0;
      T_PIP_TOOLS_ASP_BLOWOUT = 0.0;
      T_PIP_TOOLS_ASP_SWAP = 0.0;
      T_PIP_TOOLS_ASP_SETTLING = 0.0;
      T_PIP_TOOLS_ASP_OVERASPIRATE = 0.0;
      T_PIP_TOOLS_ASP_CLOT_RETRACT = 0.0;
      T_PIP_TOOLS_DISP_FLOW_RATE = 0.0;
      T_PIP_TOOLS_DISP_MIX_FLOW_RATE = 0.0;
      T_PIP_TOOLS_DISP_AIR_TRANSPORT = 0.0;
      T_PIP_TOOLS_DISP_BLOWOUT = 0.0;
      T_PIP_TOOLS_DISP_SWAP = 0.0;
      T_PIP_TOOLS_DISP_SETTLING = 0.0;
      T_PIP_TOOLS_DISP_STOP_FLOW = 0.0;
      T_PIP_TOOLS_DISP_STOP_BACK = 0.0;
      T_PIP_TOOLS_MAX_VOLUME = 0.0;
      T_PIP_TOOLS_DISPENSE_MODE = -1;
      T_PIP_TOOLS_ARR_CORRECTION_X.SetSize(0);
      T_PIP_TOOLS_ARR_CORRECTION_Y.SetSize(0);
    }
  }

  private function _GetCorrectedValueForVolume( variable i_flt_VolumeToConvert, variable & i_arr_CorrectionX[], variable & i_arr_CorrectionY[], variable & o_flt_CorrectedVolume ) void {
    private variable arr_TempX[];
    private variable arr_TempY[];
    private variable int_TotalCorrectionPoints;
    private variable i;
    private variable int_Index;
    private variable flt_Slope;
    private variable flt_Check;
    private variable flt_Intercept;
    o_flt_CorrectedVolume = 0;
    i_flt_VolumeToConvert = MthRound(i_flt_VolumeToConvert, 1);
    o_flt_CorrectedVolume = i_flt_VolumeToConvert;
    arr_TempX.SetSize(0);
    arr_TempY.SetSize(0);
    int_TotalCorrectionPoints=i_arr_CorrectionX.GetSize();
    flt_Check = 0.0;
    {
      for(i = 0; i < int_TotalCorrectionPoints;)
      {
        i = i + 1;
        int_Index = int_TotalCorrectionPoints + 1;
        int_Index = int_Index - i;
        if (i_arr_CorrectionX.ElementAt( int_Index -1) == i_flt_VolumeToConvert)
        {
          arr_TempX.AddAsLast(i_arr_CorrectionX.ElementAt( int_Index -1));
          arr_TempY.AddAsLast(i_arr_CorrectionY.ElementAt( int_Index -1));
          flt_Check = i_arr_CorrectionY.ElementAt( int_Index -1);
          break;
        }
        else
        {
          if (i_arr_CorrectionX.ElementAt( int_Index -1) < i_flt_VolumeToConvert)
          {
            arr_TempX.AddAsLast(i_arr_CorrectionX.ElementAt( int_Index -1));
            arr_TempY.AddAsLast(i_arr_CorrectionY.ElementAt( int_Index -1));
            break;
          }
        }
        if (i == int_TotalCorrectionPoints)
        {
          MECC::TraceComment(Translate("TARGET VOLUME IS BELOW THE CORRECTION CURVE FOR THE LIQUID CLASS!"));
          TRACE::TRACE02(Translate("Minimum correction value:  "), i_arr_CorrectionX.ElementAt( int_Index -1));
          TRACE::TRACE02(Translate("Required Volume:  "), i_flt_VolumeToConvert);
          ErrRaise(101, Translate("TARGET VOLUME IS BELOW THE CORRECTION CURVE FOR THE LIQUID CLASS!"));
        }
      }
    }
    {
      for(int_Index = 0; int_Index < int_TotalCorrectionPoints;)
      {
        int_Index = int_Index + 1;
        if (i_arr_CorrectionX.ElementAt( int_Index -1) == i_flt_VolumeToConvert)
        {
          arr_TempX.AddAsLast(i_arr_CorrectionX.ElementAt( int_Index -1));
          arr_TempY.AddAsLast(i_arr_CorrectionY.ElementAt( int_Index -1));
          flt_Check = i_arr_CorrectionY.ElementAt( int_Index -1);
          break;
        }
        else
        {
          if (i_arr_CorrectionX.ElementAt( int_Index -1) > i_flt_VolumeToConvert)
          {
            arr_TempX.AddAsLast(i_arr_CorrectionX.ElementAt( int_Index -1));
            arr_TempY.AddAsLast(i_arr_CorrectionY.ElementAt( int_Index -1));
            break;
          }
        }
        if (int_Index == int_TotalCorrectionPoints)
        {
          MECC::TraceComment(Translate("TARGET VOLUME IS ABOVE THE CORRECTION CURVE FOR THE LIQUID CLASS!"));
          TRACE::TRACE02(Translate("Maximum correction value:  "), i_arr_CorrectionX.ElementAt( int_Index -1));
          TRACE::TRACE02(Translate("Required Volume:  "), i_flt_VolumeToConvert);
          ErrRaise(101, Translate("TARGET VOLUME IS ABOVE THE CORRECTION CURVE FOR THE LIQUID CLASS!"));
        }
      }
    }
    if (flt_Check == 0.0)
    {
      flt_Slope = HSLStatisitics::Stat_Slope(arr_TempX, arr_TempY);
      flt_Intercept = HSLStatisitics::Stat_Intercept(arr_TempX, arr_TempY);
      o_flt_CorrectedVolume = i_flt_VolumeToConvert * flt_Slope;
      o_flt_CorrectedVolume = o_flt_CorrectedVolume + flt_Intercept;
    }
    else
    {
      o_flt_CorrectedVolume = flt_Check;
    }
    o_flt_CorrectedVolume = MthRound(o_flt_CorrectedVolume, 1);
  }

  function TOOL_CalculateHeightForVolume( device & ML_STAR, sequence i_seq_LabwareForCalculation, variable i_flt_VolumeInLabware, variable & o_flt_HeightOfVolume ) void {
    private variable _strFunctionName;
    private variable str_LabID;
    private variable str_PosID;
    private variable str_ConfigFile;
    o_flt_HeightOfVolume = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    str_LabID = SeqGetLabwareId(i_seq_LabwareForCalculation);
    str_PosID = SeqGetPositionId(i_seq_LabwareForCalculation);
    TRACE::TRACE04(Translate("     LabID:  "), str_LabID, Translate("   Position ID:  "), str_PosID);
    HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabID, str_PosID, str_ConfigFile);
    _GetHeightBasedOnVolume(str_ConfigFile, i_flt_VolumeInLabware, o_flt_HeightOfVolume);
    TRACE::TRACE04(Translate("     Volume:  "), i_flt_VolumeInLabware, Translate("   Height:  "), o_flt_HeightOfVolume);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function PIP_ProgressSequenceFromChannelPattern( variable i_str_ChPattern, variable i_bln_ProgressByUsedChannels, sequence & io_seq_SequenceToProgress ) void {
    private variable _strFunctionName;
    private variable int_Length;
    private variable int_TotalProgression;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    TRACE::TRACE04(Translate("     "), Translate("Channel Pattern:  "), i_str_ChPattern, Translate(""));
    if (i_bln_ProgressByUsedChannels == BOOLEON::TRUE)
    {
      int_TotalProgression = StrReplace(i_str_ChPattern, Translate("1"), Translate("1"));
    }
    else
    {
      int_Length = StrGetLength(i_str_ChPattern);
      int_TotalProgression = int_Length;
    }
    TRACE::TRACE04(Translate("     "), Translate("Sequence progress number:  "), int_TotalProgression, Translate(""));
    SeqIncrement(io_seq_SequenceToProgress, int_TotalProgression);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function PIP_BuildChannelPatternFromSequence( device & ML_STAR, sequence i_seq_ControllingSequence, variable & o_str_ChPattern ) void {
    private variable _strFunctionName;
    private variable int_TotalPositions;
    private variable i;
    private variable str_LabID;
    private variable str_PosID;
    private variable flt_NotUsed;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable flt_CurrentX;
    private variable int_TotalChannels;
    private variable flt_ChannelRaster;
    private variable flt_CurrentY;
    o_str_ChPattern = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    o_str_ChPattern = Translate("");
    int_TotalChannels = G_FW_PIP_COM_TotalChannels;
    flt_ChannelRaster = G_FW_PIP_COM_Raster;
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, i_seq_ControllingSequence);
    int_TotalPositions = SeqGetTotal(i_seq_ControllingSequence);
    flt_CurrentX = 0.0;
    flt_CurrentY = 0.0;
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        if (i > int_TotalChannels)
        {
          break;
        }
        i_seq_ControllingSequence.SetCurrentPosition(i);
        str_LabID = SeqGetLabwareId(i_seq_ControllingSequence);
        str_PosID = SeqGetPositionId(i_seq_ControllingSequence);
        DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_XCoord, flt_YCoord, flt_NotUsed, flt_NotUsed);
        if (i == 1)
        {
          flt_CurrentX = flt_XCoord;
          flt_CurrentY = flt_YCoord;
          o_str_ChPattern = StrConcat2(o_str_ChPattern, Translate("1"));
        }
        else
        {
          if (flt_XCoord != flt_CurrentX)
          {
            break;
          }
          if (flt_YCoord > flt_CurrentY)
          {
            break;
          }
          if (flt_YCoord > G_ARR_FW_PIP_COM_YMax.ElementAt( i -1))
          {
            break;
          }
          if (flt_YCoord < G_ARR_FW_PIP_COM_YMin.ElementAt( i -1))
          {
            break;
          }
          o_str_ChPattern = StrConcat2(o_str_ChPattern, Translate("1"));
        }
        flt_CurrentY = flt_CurrentY - flt_ChannelRaster;
      }
    }
    o_str_ChPattern = StrFillRight(o_str_ChPattern, Translate("0"), int_TotalChannels);
    TRACE::TRACE04(Translate("     "), Translate("Channel Pattern:  "), o_str_ChPattern, Translate(""));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function PIP_DispenseToFixedHeight( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_DispensePositions, variable & i_arr_FixedHeights[], variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_flt_DispenseVolume, variable i_flt_PullOutDistance ) void {
    private variable bln_SimulationMode;
    private variable bln_ProbabilityPassed;
    private variable bln_TipsLoaded;
    private variable flt_MovementStartHeight;
    private variable flt_ZBottom;
    private variable flt_ZMaximumHeight;
    private variable bln_ChannelsAtCoordinates;
    private variable _strFunctionName;
    private variable flt_ZStartHeight;
    private variable flt_ZClearanceHeight;
    private variable int_TotalChannels;
    private variable flt_ZMinimumHeight;
    private variable flt_MovementEndHeight;
    private sequence seq_Temp;
    private variable arr_LiquidFollowingDistance[];
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable flt_DispenseVolume;
    private variable flt_DispenseHeight;
    private variable str_LabID;
    private variable arr_DispenseHeights[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    _InitLiquidClassStorage();
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    bln_SimulationMode = G_FW_PIP_COM_SimulationMode;
    int_TotalChannels = G_FW_PIP_COM_TotalChannels;
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    _GetNextSequenceSet(i_seq_DispensePositions, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    str_LabID = SeqGetLabwareId(seq_Temp);
    bln_ChannelsAtCoordinates = _DetermineStartZHeight(ML_STAR, i_str_ChPattern, str_LabID, arr_XCoord, arr_YCoord, flt_ZMinimumHeight, flt_ZClearanceHeight, flt_ZStartHeight);
    if (T_PIP_TOOLS_LIQUID_CLASS == "")
    {
      MECC::TraceComment(Translate("LIQUID CLASS IS NOT SET! ASPIRATE COMMAND MUST BE SET PRIOR TO DISPENSE!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetCorrectedValueForVolume(i_flt_DispenseVolume, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_DispenseVolume);
    TRACE::TRACE04(Translate("Dispense Volume:  "), i_flt_DispenseVolume, Translate("  Corrected Volume for Liquid Class:  "), flt_DispenseVolume);
    _ApplyOffsetToArrayofValues(i_arr_FixedHeights, flt_ZBottom, arr_DispenseHeights);
    _GetLiquidFollowingForAllChannels(ML_STAR, i_arr_FixedHeights, seq_Temp, i_bln_UseLiquidFollowing, BOOLEON::FALSE, flt_DispenseVolume, i_str_ChPattern, arr_LiquidFollowingDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 0, Translate("Processing"));
    flt_MovementStartHeight = flt_ZStartHeight;
    flt_MovementEndHeight = 245.0;
    if (i_int_End_Position == 1)
    {
      flt_MovementEndHeight = flt_ZClearanceHeight;
    }
    if (i_int_End_Position == 2)
    {
      flt_MovementEndHeight = flt_ZMaximumHeight;
    }
    if (i_int_End_Position == 3)
    {
      if(0){
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
      flt_DispenseHeight = HSLStatisitics::Stat_Max(i_arr_FixedHeights);
      flt_MovementEndHeight = flt_DispenseHeight + flt_ZBottom;
      if (flt_MovementEndHeight < flt_ZMinimumHeight)
      {
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::PIPDispenseFromFixedHeight(ML_STAR, i_str_ChPattern, T_PIP_TOOLS_DISPENSE_MODE, arr_XCoord, arr_YCoord, arr_DispenseHeights, arr_LiquidFollowingDistance, flt_MovementStartHeight, flt_MovementEndHeight, flt_ZMinimumHeight, flt_ZBottom, flt_DispenseVolume, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SETTLING, T_PIP_TOOLS_DISP_SWAP, i_flt_PullOutDistance, flt_ZMaximumHeight);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate("Processed"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function MPH_AspirateFromFixedHeight( device & ML_STAR, sequence i_seq_AspirationPositions, variable i_flt_AspHeight, variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_str_LiquidClass, variable i_flt_AspirationVolume, variable i_flt_PullOutDistance ) void {
    private variable bln_SimulationMode;
    private variable _strFunctionName;
    private variable int_MPHExists;
    private variable str_TempChPattern;
    private sequence seq_Temp;
    private variable bln_ProbabilityPassed;
    private variable bln_TipsLoaded;
    private variable flt_ZBottom;
    private variable flt_ZMaximumHeight;
    private variable flt_ZClearanceHeight;
    private variable flt_ZMinimumHeight;
    private variable flt_YCoord;
    private variable flt_XCoord;
    private variable flt_ZStartHeight;
    private variable bln_MPH96AtCoordinates;
    private variable flt_NotUsed;
    private variable flt_AspirationVolume;
    private variable flt_LiquidFollowingDistance;
    private variable flt_MovementStartHeight;
    private variable flt_MovementEndHeight;
    private variable flt_EndHeight;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetMPHExist(ML_STAR, int_MPHExists);
    if (int_MPHExists == 0)
    {
      MECC::TraceComment(Translate("MPH96 IS NOT LOADED IN THE CONFIGURATION OF THIS INSTRUMENT!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    str_TempChPattern = Translate("");
    str_TempChPattern = StrFillRight(str_TempChPattern, Translate("1"), 96);
    _GetNextSequenceSet(i_seq_AspirationPositions, str_TempChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheckMPH96(ML_STAR, seq_Temp, str_TempChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    FIRMWARE_PIPETTING_COMMANDS::MPH96GetTipPresence(ML_STAR, bln_TipsLoaded);
    if (bln_SimulationMode == BOOLEON::TRUE)
    {
      bln_TipsLoaded = BOOLEON::TRUE;
    }
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS NOT PICKED UP!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetLabwareCoordinatesMPH96(ML_STAR, seq_Temp, flt_XCoord, flt_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    bln_MPH96AtCoordinates = _DetermineStartZHeightMPH96(ML_STAR, flt_XCoord, flt_YCoord, flt_ZMinimumHeight, flt_ZStartHeight);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetCorrectedValueForVolume(i_flt_AspirationVolume, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_AspirationVolume);
    TRACE::TRACE04(Translate("Aspiration Volume:  "), i_flt_AspirationVolume, Translate("  Corrected Volume for Liquid Class:  "), flt_AspirationVolume);
    TRACE::TRACE04(Translate("Aspiration Height:  "), i_flt_AspHeight, Translate(""), Translate(""));
    if (i_flt_AspirationVolume > T_PIP_TOOLS_MAX_VOLUME)
    {
      TRACE::TRACE04(Translate("     "), Translate("Max Volume:  "), T_PIP_TOOLS_MAX_VOLUME, Translate(" uL"));
      MECC::TraceComment(Translate("REQUESTED VOLUME IS HIGHER THAN THE LIQUID CLASS MAX VOLUME"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetLiquidFollowingForMPH96(ML_STAR, i_flt_AspHeight, seq_Temp, i_bln_UseLiquidFollowing, BOOLEON::TRUE, i_flt_AspirationVolume, flt_LiquidFollowingDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 0, Translate("Processing"));
    flt_MovementStartHeight = flt_ZStartHeight;
    flt_MovementEndHeight = 245.0;
    if (i_int_End_Position == 1)
    {
      flt_MovementEndHeight = flt_ZClearanceHeight;
    }
    if (i_int_End_Position == 2)
    {
      flt_MovementEndHeight = flt_ZMaximumHeight;
    }
    if (i_int_End_Position == 3)
    {
      flt_EndHeight = i_flt_AspHeight - flt_LiquidFollowingDistance;
      flt_EndHeight = flt_EndHeight + flt_ZBottom;
      flt_MovementEndHeight = flt_EndHeight;
      if (flt_MovementEndHeight < flt_ZMinimumHeight)
      {
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::MPH96AspirateFromFixedHeight(ML_STAR, flt_XCoord, flt_YCoord, i_flt_AspHeight, flt_LiquidFollowingDistance, flt_MovementStartHeight, flt_MovementEndHeight, flt_ZMinimumHeight, flt_ZBottom, 0.0, flt_AspirationVolume, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_SWAP, i_flt_PullOutDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate("Processed"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _ProbabilityCheckMPH96( device & ML_STAR, sequence i_seq_PositionsToCheck, variable i_str_ChannelPatternToCheck ) variable {
    private variable bln_ProbabilityPass;
    private variable int_TotalTipsToUse;
    private variable int_TotalChannels;
    private variable int_TotalPositions;
    private variable int_RemainingPositionsForLabware;
    private sequence seq_TempCompare;
    private variable str_PosIDSort;
    private variable str_PosIDOriginal;
    bln_ProbabilityPass = BOOLEON::TRUE;
    int_TotalChannels = StrGetLength(i_str_ChannelPatternToCheck);
    int_TotalTipsToUse = StrReplace(i_str_ChannelPatternToCheck, Translate("1"), Translate("1"));
    int_TotalPositions = SeqGetTotal(i_seq_PositionsToCheck);
    if (int_TotalPositions != int_TotalTipsToUse)
    {
      bln_ProbabilityPass = BOOLEON::FALSE;
      MECC::TraceComment(Translate("SEQUENCE POSITIONS DO NOT MATCH TIP CHANNEL PATTERN"));
      return (bln_ProbabilityPass);
    }
    int_RemainingPositionsForLabware = SeqGetPositionCountForCurrLabware(i_seq_PositionsToCheck);
    if (int_RemainingPositionsForLabware != int_TotalTipsToUse)
    {
      bln_ProbabilityPass = BOOLEON::FALSE;
      MECC::TraceComment(Translate("SEQUENCE POSITIONS ARE NOT FOR THE SAME LABWARE!  MPH96 CANNOT SPLIT THE SEQUENCE OVER MULTIPLE LABWARE!"));
      return (bln_ProbabilityPass);
    }
    SeqCopySequence(seq_TempCompare, i_seq_PositionsToCheck);
    HELPERLIBRARY::SortSequence(ML_STAR, seq_TempCompare, BOOLEON::FALSE);
    seq_TempCompare.SetCurrentPosition(1);
    i_seq_PositionsToCheck.SetCurrentPosition(1);
    str_PosIDOriginal = SeqGetPositionId(i_seq_PositionsToCheck);
    str_PosIDSort = SeqGetPositionId(seq_TempCompare);
    if(0){
      TRACE::TRACE04(Translate("     Original:  "), str_PosIDOriginal, Translate("     Sorted:  "), str_PosIDSort);
    }
    if (str_PosIDOriginal != str_PosIDSort)
    {
      bln_ProbabilityPass = BOOLEON::FALSE;
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED FOR THE MPH96"));
    }
    return (bln_ProbabilityPass);
  }

  private function _GetLabwareCoordinatesMPH96( device & ML_STAR, sequence i_seq_Positions, variable & o_flt_XCoord, variable & o_flt_YCoord, variable & o_flt_ZBottom, variable & o_flt_ZMinimumHeight, variable & o_flt_ZMaximumHeight, variable & o_flt_ZClearanceHeight ) void {
    private variable flt_NotUsed;
    private variable flt_ZCoord;
    private variable flt_YCoord;
    private variable flt_MinimumPipHeight;
    private variable flt_XCoord;
    private variable str_ContainerConfig;
    private variable str_LabID;
    private variable bln_ValueExists;
    private variable str_PosID;
    private variable int_TotalPositions;
    private variable str_Value;
    o_flt_XCoord = 0;
    o_flt_YCoord = 0;
    o_flt_ZBottom = 0;
    o_flt_ZMinimumHeight = 0;
    o_flt_ZMaximumHeight = 0;
    o_flt_ZClearanceHeight = 0;
    o_flt_ZClearanceHeight = 0.0;
    o_flt_ZMaximumHeight = 0.0;
    o_flt_ZMinimumHeight = 0.0;
    int_TotalPositions = SeqGetTotal(i_seq_Positions);
    if (int_TotalPositions == 0)
    {
      return;
    }
    str_LabID = SeqGetLabwareId(i_seq_Positions);
    str_PosID = SeqGetPositionId(i_seq_Positions);
    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_ZCoord, flt_NotUsed);
    HELPERLIBRARY::GetRackHeight(ML_STAR, str_LabID, o_flt_ZMaximumHeight, o_flt_ZClearanceHeight);
    HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabID, str_PosID, str_ContainerConfig);
    bln_ValueExists = HELPERLIBRARY::GetDefinitionFileValue(str_ContainerConfig, Translate("MaxDepth"), str_Value);
    flt_MinimumPipHeight = 0.0;
    if (bln_ValueExists == BOOLEON::TRUE)
    {
      flt_MinimumPipHeight = StrFVal(str_Value);
    }
    o_flt_ZMinimumHeight = flt_ZCoord + flt_MinimumPipHeight;
    o_flt_ZBottom = flt_ZCoord;
    str_PosID = SeqGetPositionId(i_seq_Positions);
    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_XCoord, flt_YCoord, flt_NotUsed, flt_NotUsed);
    o_flt_XCoord = MthRound(flt_XCoord, 1);
    o_flt_YCoord = MthRound(flt_YCoord, 1);
    TRACE::TRACE02(Translate("Clearance Height:  "), o_flt_ZClearanceHeight);
    TRACE::TRACE02(Translate("Top Of Plate Height:  "), o_flt_ZMaximumHeight);
    TRACE::TRACE02(Translate("Minimum Height:  "), o_flt_ZMinimumHeight);
    TRACE::TRACE02(Translate("X Coordinate:  "), o_flt_XCoord);
    TRACE::TRACE02(Translate("Y Coordinate:  "), o_flt_YCoord);
    TRACE::TRACE02(Translate("Z Bottom:  "), o_flt_ZBottom);
  }

  private function _DetermineStartZHeightMPH96( device & ML_STAR, variable i_flt_XCoord, variable i_flt_YCoord, variable i_flt_ZMinimumCoord, variable & o_flt_StartZHeight ) variable {
    private variable bln_SimulationMode;
    private variable flt_CurrentXCoord;
    private variable flt_CurrentZCoord;
    private variable flt_CurrentYCoord;
    private variable bln_MPHAtCoordinate;
    private variable flt_XDifference;
    private variable flt_YDifference;
    o_flt_StartZHeight = 0;
    bln_SimulationMode = Util::GetSimulationMode();
    o_flt_StartZHeight = 0.0;
    bln_MPHAtCoordinate = BOOLEON::TRUE;
    FIRMWARE_PIPETTING_COMMANDS::MPH96GetCoordinates(ML_STAR, flt_CurrentXCoord, flt_CurrentYCoord, flt_CurrentZCoord);
    i_flt_XCoord = i_flt_XCoord * 10;
    i_flt_YCoord = i_flt_YCoord * 10;
    i_flt_XCoord = MthFloor(i_flt_XCoord);
    i_flt_YCoord = MthFloor(i_flt_YCoord);
    flt_CurrentXCoord = flt_CurrentXCoord * 10;
    flt_CurrentYCoord = flt_CurrentYCoord * 10;
    flt_CurrentXCoord = MthFloor(flt_CurrentXCoord);
    flt_CurrentYCoord = MthFloor(flt_CurrentYCoord);
    flt_XDifference = flt_CurrentXCoord - i_flt_XCoord;
    if (flt_XDifference < 0.0)
    {
      flt_XDifference = flt_XDifference * -1;
    }
    flt_YDifference = flt_CurrentYCoord - i_flt_YCoord;
    if (flt_YDifference < 0.0)
    {
      flt_YDifference = flt_YDifference * -1;
    }
    if (flt_XDifference > 1)
    {
      bln_MPHAtCoordinate = BOOLEON::FALSE;
      TRACE::TRACE04(i_flt_XCoord, Translate(" IS NOT EQUAL TO "), flt_CurrentXCoord, Translate(""));
    }
    if (flt_YDifference > 1)
    {
      bln_MPHAtCoordinate = BOOLEON::FALSE;
      TRACE::TRACE04(i_flt_YCoord, Translate(" IS NOT EQUAL TO "), flt_CurrentYCoord, Translate(""));
    }
    if (bln_SimulationMode == BOOLEON::TRUE)
    {
      bln_MPHAtCoordinate = BOOLEON::TRUE;
    }
    if (bln_MPHAtCoordinate == BOOLEON::TRUE)
    {
      o_flt_StartZHeight = i_flt_ZMinimumCoord;
    }
    else
    {
      o_flt_StartZHeight = 245.0;
      MECC::TraceComment(Translate("NOT AT CORRECT COORDINATES!"));
    }
    TRACE::TRACE04(Translate("     "), Translate("Z Start height:  "), o_flt_StartZHeight, Translate(""));
    return (bln_MPHAtCoordinate);
  }

  private function _GetLiquidFollowingForMPH96( device & ML_STAR, variable i_flt_FixedHeights, sequence i_seq_PositionsToCalculate, variable i_bln_LiquidFollowingEnabled, variable i_bln_Aspirate, variable i_flt_VolumeToUse, variable & o_flt_LiquidFollowingDistance ) void {
    private variable flt_LiquidFollow;
    private variable str_LabID;
    private variable str_PosID;
    o_flt_LiquidFollowingDistance = 0;
    if (i_bln_Aspirate == BOOLEON::TRUE)
    {
      i_flt_VolumeToUse = i_flt_VolumeToUse * -1;
    }
    o_flt_LiquidFollowingDistance = 0.0;
    str_LabID = SeqGetLabwareId(i_seq_PositionsToCalculate);
    str_PosID = SeqGetPositionId(i_seq_PositionsToCalculate);
    if (i_bln_LiquidFollowingEnabled == BOOLEON::TRUE)
    {
      _CalculateLiquidFollowDistance(ML_STAR, str_LabID, str_PosID, i_flt_FixedHeights, i_flt_VolumeToUse, i_bln_Aspirate, flt_LiquidFollow);
    }
    else
    {
      flt_LiquidFollow = 0.0;
    }
    o_flt_LiquidFollowingDistance = MthRound(flt_LiquidFollow, 1);
  }

  function MPH_DispenseToFixedHeight( device & ML_STAR, sequence i_seq_DispensePositions, variable i_flt_DispenseHeight, variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_flt_DispenseVolume, variable i_flt_PullOutDistance ) void {
    private variable bln_SimulationMode;
    private variable _strFunctionName;
    private variable bln_ProbabilityPassed;
    private variable bln_TipsLoaded;
    private variable flt_DispenseVolume;
    private variable flt_ZBottom;
    private variable flt_YCoord;
    private variable flt_ZMaximumHeight;
    private variable flt_XCoord;
    private variable flt_ZStartHeight;
    private variable flt_ZClearanceHeight;
    private variable str_TempChPattern;
    private variable flt_ZMinimumHeight;
    private variable bln_MPH96AtCoordinates;
    private variable int_MPHExists;
    private sequence seq_Temp;
    private variable flt_LiquidFollowingDistance;
    private variable flt_MovementStartHeight;
    private variable flt_MovementEndHeight;
    private variable flt_EndHeight;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetMPHExist(ML_STAR, int_MPHExists);
    if (int_MPHExists == 0)
    {
      MECC::TraceComment(Translate("MPH96 IS NOT LOADED IN THE CONFIGURATION OF THIS INSTRUMENT!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    str_TempChPattern = Translate("");
    str_TempChPattern = StrFillRight(str_TempChPattern, Translate("1"), 96);
    _GetNextSequenceSet(i_seq_DispensePositions, str_TempChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheckMPH96(ML_STAR, seq_Temp, str_TempChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    FIRMWARE_PIPETTING_COMMANDS::MPH96GetTipPresence(ML_STAR, bln_TipsLoaded);
    if (bln_SimulationMode == BOOLEON::TRUE)
    {
      bln_TipsLoaded = BOOLEON::TRUE;
    }
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS NOT PICKED UP!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetLabwareCoordinatesMPH96(ML_STAR, seq_Temp, flt_XCoord, flt_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    bln_MPH96AtCoordinates = _DetermineStartZHeightMPH96(ML_STAR, flt_XCoord, flt_YCoord, flt_ZMinimumHeight, flt_ZStartHeight);
    if (T_PIP_TOOLS_LIQUID_CLASS == "")
    {
      MECC::TraceComment(Translate("LIQUID CLASS IS NOT SET! ASPIRATE COMMAND MUST BE SET PRIOR TO DISPENSE!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetCorrectedValueForVolume(i_flt_DispenseVolume, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_DispenseVolume);
    TRACE::TRACE04(Translate("Dispense Volume:  "), i_flt_DispenseVolume, Translate("  Corrected Volume for Liquid Class:  "), flt_DispenseVolume);
    TRACE::TRACE04(Translate("Dispense Height:  "), i_flt_DispenseHeight, Translate(""), Translate(""));
    _GetLiquidFollowingForMPH96(ML_STAR, i_flt_DispenseHeight, seq_Temp, i_bln_UseLiquidFollowing, BOOLEON::FALSE, i_flt_DispenseVolume, flt_LiquidFollowingDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 0, Translate("Processing"));
    flt_MovementStartHeight = flt_ZStartHeight;
    flt_MovementEndHeight = 245.0;
    if (i_int_End_Position == 1)
    {
      flt_MovementEndHeight = flt_ZClearanceHeight;
    }
    if (i_int_End_Position == 2)
    {
      flt_MovementEndHeight = flt_ZMaximumHeight;
    }
    if (i_int_End_Position == 3)
    {
      flt_EndHeight = i_flt_DispenseHeight + flt_LiquidFollowingDistance;
      flt_EndHeight = flt_EndHeight + flt_ZBottom;
      flt_MovementEndHeight = flt_EndHeight;
      if (flt_MovementEndHeight < flt_ZMinimumHeight)
      {
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::MPH96DispenseFromFixedHeight(ML_STAR, T_PIP_TOOLS_DISPENSE_MODE, flt_XCoord, flt_YCoord, i_flt_DispenseHeight, flt_LiquidFollowingDistance, flt_MovementStartHeight, flt_MovementEndHeight, flt_ZMinimumHeight, flt_ZBottom, 0.0, flt_DispenseVolume, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SETTLING, T_PIP_TOOLS_DISP_SWAP, i_flt_PullOutDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate("Processed"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _CheckForPressureErrors( device & ML_STAR, variable i_str_AspirationReturnValue, variable i_str_LiquidReturnValue, variable i_flt_DispenseBackVolume, variable i_str_LiquidClassDispenseBack, variable & o_str_NoErrorChPattern ) void {
    private variable int_TotalReturnValues;
    private variable int_Pos;
    private variable flt_NotUsed;
    private variable flt_ZBottom;
    private variable i;
    private variable int_Recovery;
    private variable flt_LiquidLevelHeight;
    private variable int_ChannelUsed;
    private variable str_ReturnValueLiquidLevel;
    private variable str_LabID;
    private variable int_DispenseCount;
    private variable int_TotalErrorChannels;
    private variable int_TotalChannels;
    private variable int_ChannelIndex;
    private variable str_PosID;
    private variable flt_DispenseHeight;
    private variable str_ChPattern;
    private sequence seq_Dispense;
    private variable arr_DispenseHeights[];
    private variable arr_ChannelPattern[];
    private variable arr_ChannelPatternNoError[];
    o_str_NoErrorChPattern = 0;
    if (i_str_AspirationReturnValue == "")
    {
      return;
    }
    MECC::TraceComment(Translate("-----------------------------------------CheckForTADMErrors - START"));
    int_TotalChannels = DevGetCfgValueWithKey(ML_STAR, 1);
    arr_ChannelPattern.SetSize(0);
    arr_ChannelPatternNoError.SetSize(0);
    arr_DispenseHeights.SetSize(0);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        arr_DispenseHeights.AddAsLast(0.0);
        arr_ChannelPattern.AddAsLast(0);
        arr_ChannelPatternNoError.AddAsLast(0);
      }
    }
    SeqRemoveAll(seq_Dispense);
    str_ReturnValueLiquidLevel = i_str_LiquidReturnValue;
    int_TotalReturnValues = StepReturn::GetNumberOfPositions(i_str_AspirationReturnValue);
    Trace(i_str_AspirationReturnValue);
    int_DispenseCount = 1;
    {
      for(i = 0; i < int_TotalReturnValues;)
      {
        i = i + 1;
        flt_ZBottom = 0.0;
        int_Pos = StepReturn::GetPositionFromNum(i, i_str_AspirationReturnValue);
        str_LabID = StepReturn::GetLabwareId(int_Pos, i_str_AspirationReturnValue);
        str_PosID = StepReturn::GetPositionId(int_Pos, i_str_AspirationReturnValue);
        int_Recovery = StepReturn::GetRecoveryButton(int_Pos, i_str_AspirationReturnValue);
        int_ChannelUsed = StepReturn::GetPosition(int_Pos, i_str_AspirationReturnValue);
        flt_LiquidLevelHeight = StepReturn::GetLastLiquidLevel(int_ChannelUsed, str_ReturnValueLiquidLevel);
        if (int_Recovery == 9)
        {
          if (str_LabID != "")
          {
            if (str_PosID != "")
            {
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_NotUsed, flt_NotUsed, flt_ZBottom, flt_NotUsed);
            }
          }
          flt_DispenseHeight = flt_LiquidLevelHeight - flt_ZBottom;
          if (flt_DispenseHeight < 5.0)
          {
            flt_DispenseHeight = 5.0;
          }
          SeqAdd(seq_Dispense, str_LabID, str_PosID);
          arr_ChannelPattern.SetAt(int_ChannelUsed-1, 1);
          arr_DispenseHeights.SetAt(int_ChannelUsed-1, flt_DispenseHeight);
        }
        else
        {
          arr_ChannelPatternNoError.SetAt(int_ChannelUsed-1, 1);
        }
      }
    }
    seq_Dispense.SetCurrentPosition(1);
    str_ChPattern = Translate("");
    o_str_NoErrorChPattern = Translate("");
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        str_ChPattern = StrConcat2(str_ChPattern, arr_ChannelPattern.ElementAt( int_ChannelIndex -1));
        o_str_NoErrorChPattern = StrConcat2(o_str_NoErrorChPattern, arr_ChannelPatternNoError.ElementAt( int_ChannelIndex -1));
      }
    }
    Trace("Channel Pattern no error:  ",o_str_NoErrorChPattern);
    int_TotalErrorChannels = StrReplace(str_ChPattern, Translate("1"), Translate("1"));
    if (int_TotalErrorChannels == 0)
    {
      MECC::TraceComment(Translate("======================================================================\nNO PRESSURE ERRORS\n======================================================================"));
    }
    else
    {
      if (i_str_LiquidClassDispenseBack != "")
      {
        if (i_flt_DispenseBackVolume > 0.0)
        {
          MECC::TraceComment(Translate("================================================================\nSAMPLE DISPENSE BACK TO SOURCE REQUIRED!\n"));
          Trace("Channel Pattern of channels that need to dispense back to source:  ",str_ChPattern);
          Util2::Debug::TraceSequence(seq_Dispense);
          Util2::Debug::TraceArray(Translate("Dispense Heights"), arr_DispenseHeights);
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          MECC::TraceComment(Translate("\n================================================================"));
        }
      }
    }
    MECC::TraceComment(Translate("-----------------------------------------CheckForTADMErrors - END"));
  }

  function TOOL_CalculateVolumeForHeight( device & ML_STAR, sequence i_seq_LabwareForCalculation, variable i_flt_HeightOfVolume, variable & o_flt_Volume ) void {
    private variable _strFunctionName;
    private variable str_LabID;
    private variable str_ConfigFile;
    private variable str_PosID;
    o_flt_Volume = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    str_LabID = SeqGetLabwareId(i_seq_LabwareForCalculation);
    str_PosID = SeqGetPositionId(i_seq_LabwareForCalculation);
    TRACE::TRACE04(Translate("     LabID:  "), str_LabID, Translate("   Position ID:  "), str_PosID);
    HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabID, str_PosID, str_ConfigFile);
    _GetVolumeBasedOnHeight(str_ConfigFile, i_flt_HeightOfVolume, o_flt_Volume);
    TRACE::TRACE04(Translate("     Height:  "), i_flt_HeightOfVolume, Translate("   Volume:  "), o_flt_Volume);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _GetLabwareLimits( device & ML_STAR, variable i_str_LabID, variable & o_flt_XMin, variable & o_flt_XMax, variable & o_flt_YMin, variable & o_flt_YMax ) void {
    private variable flt_Angle;
    private variable flt_NotUsed;
    private variable flt_LabwareYDim;
    private variable flt_LabwareXDim;
    private variable flt_OriginX;
    private variable flt_OriginY;
    private variable flt_OriginZ;
    private variable i;
    o_flt_XMin = 0;
    o_flt_XMax = 0;
    o_flt_YMin = 0;
    o_flt_YMax = 0;
    DevGetLabwarePosition(ML_STAR, i_str_LabID, flt_NotUsed, flt_NotUsed, flt_NotUsed, flt_Angle);
    HELPERLIBRARY::GetLabwareOrigin(ML_STAR, i_str_LabID, flt_OriginX, flt_OriginY, flt_OriginZ);
    HELPERLIBRARY::GetLabwareLW(ML_STAR, i_str_LabID, flt_LabwareYDim, flt_LabwareXDim);
    {
      for(i = 0; i < 1;)
      {
        i = i + 1;
        o_flt_XMin = flt_OriginX;
        o_flt_YMin = flt_OriginY;
        o_flt_XMax = flt_OriginX + flt_LabwareXDim;
        o_flt_YMax = flt_OriginY + flt_LabwareYDim;
        if (flt_Angle == 90)
        {
          o_flt_XMin = flt_OriginX;
          o_flt_YMax = flt_OriginY;
          o_flt_XMax = flt_OriginX + flt_LabwareYDim;
          o_flt_YMin = flt_OriginY - flt_LabwareXDim;
          break;
        }
        if (flt_Angle == 180)
        {
          o_flt_XMax = flt_OriginX;
          o_flt_YMax = flt_OriginY;
          o_flt_XMin = flt_OriginX - flt_LabwareXDim;
          o_flt_YMin = flt_OriginY - flt_LabwareYDim;
          break;
        }
        if (flt_Angle == 270)
        {
          o_flt_XMax = flt_OriginX;
          o_flt_YMin = flt_OriginY;
          o_flt_XMin = flt_OriginX - flt_LabwareYDim;
          o_flt_YMax = flt_OriginY + flt_LabwareXDim;
          break;
        }
      }
    }
    TRACE::TRACE08(Translate("     "), Translate("X Min:  "), o_flt_XMin, Translate("     X Max:  "), o_flt_XMax, Translate(""), Translate(""), Translate(""));
    TRACE::TRACE08(Translate("     "), Translate("Y Min:  "), o_flt_YMin, Translate("     Y Max:  "), o_flt_YMax, Translate(""), Translate(""), Translate(""));
  }

  function PIP_MixFromFixedHeight( device & ML_STAR, variable i_str_ChPattern, sequence i_seq_MixPositions, variable & i_arr_FixedHeights[], variable i_int_End_Position, variable i_bln_UseLiquidFollowing, variable i_str_LiquidClass, variable i_flt_MixVolume, variable i_int_MixCycles ) void {
    private variable bln_SimulationMode;
    private variable bln_ProbabilityPassed;
    private variable bln_TipsLoaded;
    private variable flt_NotUsed;
    private variable flt_ContainerDepth;
    private variable flt_MovementStartHeight;
    private variable flt_ZBottom;
    private variable flt_ZMaximumHeight;
    private variable bln_ChannelsAtCoordinates;
    private variable _strFunctionName;
    private variable str_LabID;
    private variable flt_ZStartHeight;
    private variable flt_ZClearanceHeight;
    private variable flt_AspirationVolume;
    private variable int_TotalChannels;
    private variable flt_ZMinimumHeight;
    private variable flt_DispenseHeight;
    private variable flt_MovementEndHeight;
    private sequence seq_Temp;
    private variable arr_LiquidFollowingDistance[];
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable arr_AspirationHeights[];
    private variable flt_MixVolume;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    _GetNextSequenceSet(i_seq_MixPositions, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    flt_ContainerDepth = flt_ZMaximumHeight - flt_ZMinimumHeight;
    str_LabID = SeqGetLabwareId(seq_Temp);
    bln_ChannelsAtCoordinates = _DetermineStartZHeight(ML_STAR, i_str_ChPattern, str_LabID, arr_XCoord, arr_YCoord, flt_ZMinimumHeight, flt_ZClearanceHeight, flt_ZStartHeight);
    _ApplyOffsetToArrayofValues(i_arr_FixedHeights, flt_ZBottom, arr_AspirationHeights);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetCorrectedValueForVolume(i_flt_MixVolume, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_MixVolume);
    TRACE::TRACE04(Translate("Mix Volume:  "), i_flt_MixVolume, Translate("  Corrected Volume for Liquid Class:  "), flt_MixVolume);
    _GetLiquidFollowingForAllChannels(ML_STAR, i_arr_FixedHeights, seq_Temp, i_bln_UseLiquidFollowing, BOOLEON::TRUE, flt_AspirationVolume, i_str_ChPattern, arr_LiquidFollowingDistance);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 0, Translate("Processing"));
    flt_MovementStartHeight = flt_ZStartHeight;
    flt_MovementEndHeight = 245.0;
    if (i_int_End_Position == 1)
    {
      flt_MovementEndHeight = flt_ZClearanceHeight;
    }
    if (i_int_End_Position == 2)
    {
      flt_MovementEndHeight = flt_ZMaximumHeight;
    }
    if (i_int_End_Position == 3)
    {
      if(0){
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
      flt_DispenseHeight = HSLStatisitics::Stat_Max(i_arr_FixedHeights);
      flt_MovementEndHeight = flt_DispenseHeight + flt_ZBottom;
      if (flt_MovementEndHeight < flt_ZMinimumHeight)
      {
        flt_MovementEndHeight = flt_ZMinimumHeight;
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::PIPMixFromFixedHeight(ML_STAR, i_str_ChPattern, arr_XCoord, arr_YCoord, arr_AspirationHeights, arr_LiquidFollowingDistance, flt_MovementStartHeight, flt_MovementEndHeight, flt_ZMinimumHeight, flt_ZBottom, i_int_MixCycles, flt_MixVolume, T_PIP_TOOLS_ASP_MIX_FLOW_RATE);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate("Processed"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function PIP_PhaseAspirationWasteRemainder( device & ML_STAR, variable i_str_ChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_bln_UseCLLD, variable i_flt_SafeHeightAbovePhase, variable i_flt_AdditionalAspirationVolume, variable i_flt_DispenseHeight ) void {
    private variable bln_SimulationMode;
    private variable _strFunctionName;
    private variable int_TotalChannels;
    private variable int_PLLD;
    private variable flt_ZBottomDispesne;
    private variable bln_TipsLoaded;
    private variable bln_ProbabilityPassed;
    private variable flt_NotUsed;
    private variable flt_ZBottom;
    private variable flt_ZClearanceHeightDispense;
    private variable flt_ZMaximumHeight;
    private variable flt_ZMinimumHeightDispense;
    private variable flt_ZClearanceHeight;
    private variable flt_ZMaximumHeightDispense;
    private variable flt_ZMinimumHeight;
    private variable int_CLLD;
    private variable int_Value;
    private variable str_ReturnChPattern;
    private variable flt_MaxTipVolume;
    private variable int_ChIndex;
    private sequence seq_Temp;
    private sequence seq_TempDispense;
    private variable arr_MaxVolumes[];
    private variable arr_XCoordDispense[];
    private variable arr_YCoordDispense[];
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable arr_LiquidLevelHeights[];
    private variable flt_VolumeToAspirate;
    private variable flt_ContainerDepth;
    private variable str_ContainerConfig;
    private variable flt_TopHeight;
    private variable flt_BottomHeight;
    private variable str_LabID;
    private variable flt_BottomVolume;
    private variable flt_TopVolume;
    private variable flt_LiquidFollowingDistance;
    private variable str_PosID;
    private variable arr_LiquidFollowingDistances[];
    private variable arr_AspirationVolumes[];
    private variable arr_AspirationHeights[];
    private variable str_PosIDDisp;
    private variable str_LabIDDisp;
    private variable str_ContainerConfigDisp;
    private variable arr_DispenseHeights[];
    private variable arr_LiquidFollowingDistancesDisp[];
    private variable flt_TopHeightContainer;
    private variable flt_BottomHeightContainer;
    private variable flt_AspirationHeight;
    private variable flt_DispenseHeight;
    private variable int_TotalActiveChannels;
    private variable arr_TopPhaseHeight[];
    private variable arr_SecondPhaseHeights[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    arr_TopPhaseHeight.SetSize(0);
    str_ReturnChPattern = Translate("");
    str_ReturnChPattern = StrFillRight(str_ReturnChPattern, Translate("0"), int_TotalChannels);
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    int_TotalActiveChannels = StrReplace(i_str_ChPattern, Translate("1"), Translate("1"));
    if (int_TotalActiveChannels == 0)
    {
      MECC::TraceComment(Translate("CHANNEL PATTERN CONTAINS NO ACTIVE CHANNELS!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetNextSequenceSet(i_seq_AspirationPosition, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("ASPIRATE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetNextSequenceSet(i_seq_DispensePosition, i_str_ChPattern, seq_TempDispense);
    if(0){
      bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_TempDispense, i_str_ChPattern);
      if (bln_ProbabilityPassed == BOOLEON::FALSE)
      {
        MECC::TraceComment(Translate("DISPENSE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
        TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
        return;
      }
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return;
    }
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::FALSE, seq_Temp, arr_SecondPhaseHeights);
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::TRUE, seq_Temp, arr_TopPhaseHeight);
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    _GetLabwareCoordinates(ML_STAR, seq_TempDispense, i_str_ChPattern, arr_XCoordDispense, arr_YCoordDispense, flt_ZBottomDispesne, flt_ZMinimumHeightDispense, flt_ZMaximumHeightDispense, flt_ZClearanceHeightDispense);
    flt_ContainerDepth = flt_ZMaximumHeight - flt_ZMinimumHeight;
    if (i_bln_UseCLLD == BOOLEON::TRUE)
    {
      int_CLLD = 1;
      int_PLLD = 0;
    }
    else
    {
      int_CLLD = 0;
      int_PLLD = 1;
    }
    arr_MaxVolumes.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          FIRMWARE_PIPETTING_COMMANDS::Get_Tip_Volume_1mL(ML_STAR, int_ChIndex, flt_MaxTipVolume, flt_NotUsed);
          arr_MaxVolumes.AddAsLast(flt_MaxTipVolume);
        }
        else
        {
          arr_MaxVolumes.AddAsLast(0.0);
        }
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::PIPFindLiquidLevel(ML_STAR, i_str_ChPattern, arr_XCoord, arr_YCoord, 245.0, flt_ZMaximumHeight, flt_ZClearanceHeight, flt_ZMinimumHeight, i_bln_UseCLLD, arr_LiquidLevelHeights);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    arr_AspirationVolumes.SetSize(0);
    arr_LiquidFollowingDistances.SetSize(0);
    arr_DispenseHeights.SetSize(0);
    arr_LiquidFollowingDistancesDisp.SetSize(0);
    arr_AspirationHeights.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          seq_Temp.SetCurrentPosition(int_ChIndex);
          seq_TempDispense.SetCurrentPosition(int_ChIndex);
          str_LabID = SeqGetLabwareId(seq_Temp);
          str_PosID = SeqGetPositionId(seq_Temp);
          str_LabIDDisp = SeqGetLabwareId(seq_TempDispense);
          str_PosIDDisp = SeqGetPositionId(seq_TempDispense);
          HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabID, str_PosID, str_ContainerConfig);
          HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabIDDisp, str_PosIDDisp, str_ContainerConfigDisp);
          flt_TopHeight=arr_LiquidLevelHeights.GetAt(int_ChIndex-1);
          flt_BottomHeightContainer=arr_SecondPhaseHeights.GetAt(int_ChIndex-1);
          flt_BottomHeightContainer = flt_BottomHeightContainer + i_flt_SafeHeightAbovePhase;
          flt_AspirationHeight = flt_BottomHeightContainer;
          arr_TopPhaseHeight.SetAt(int_ChIndex-1, flt_AspirationHeight);
          flt_BottomHeight = flt_BottomHeightContainer + flt_ZBottom;
          flt_TopHeightContainer = flt_TopHeight - flt_ZBottom;
          flt_LiquidFollowingDistance = flt_TopHeight - flt_BottomHeight;
          if (flt_LiquidFollowingDistance > 0.0)
          {
            if(0){
              flt_LiquidFollowingDistance = flt_LiquidFollowingDistance + 1.0;
            }
            TRACE::TRACE12(Translate("    "), Translate("Top Height:  "), flt_TopHeightContainer, Translate("    Bottom Height:  "), flt_BottomHeightContainer, Translate("  Liquid Following Distance:  "), flt_LiquidFollowingDistance, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            _GetVolumeBasedOnHeight(str_ContainerConfig, flt_TopHeightContainer, flt_TopVolume);
            _GetVolumeBasedOnHeight(str_ContainerConfig, flt_BottomHeightContainer, flt_BottomVolume);
            flt_VolumeToAspirate = flt_TopVolume - flt_BottomVolume;
            flt_VolumeToAspirate = flt_VolumeToAspirate + i_flt_AdditionalAspirationVolume;
            if (flt_VolumeToAspirate > T_PIP_TOOLS_MAX_VOLUME)
            {
              flt_VolumeToAspirate = T_PIP_TOOLS_MAX_VOLUME;
            }
            if (flt_VolumeToAspirate < 0.0)
            {
              flt_VolumeToAspirate = 0.0;
            }
            TRACE::TRACE12(Translate("    "), Translate("Top Volume:  "), flt_TopVolume, Translate("    Bottom Volume:  "), flt_BottomVolume, Translate("  Aspiration Volume:  "), flt_VolumeToAspirate, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            if(0){
              _GetCorrectedValueForVolume(flt_VolumeToAspirate, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_VolumeToAspirate);
            }
            if (flt_VolumeToAspirate > T_PIP_TOOLS_MAX_VOLUME)
            {
              flt_VolumeToAspirate = T_PIP_TOOLS_MAX_VOLUME;
            }
            arr_AspirationVolumes.AddAsLast(flt_VolumeToAspirate);
          }
          else
          {
            arr_AspirationVolumes.AddAsLast(0.0);
          }
          if (flt_BottomHeightContainer < 0.0)
          {
            flt_BottomHeightContainer = 0.0;
          }
          arr_AspirationHeights.AddAsLast(flt_BottomHeightContainer);
        }
        else
        {
          arr_AspirationVolumes.AddAsLast(0.0);
          arr_AspirationHeights.AddAsLast(0.0);
        }
        arr_LiquidFollowingDistances.AddAsLast(0.0);
        flt_DispenseHeight = i_flt_DispenseHeight + flt_ZBottomDispesne;
        arr_DispenseHeights.AddAsLast(flt_DispenseHeight);
        arr_LiquidFollowingDistancesDisp.AddAsLast(0.0);
      }
    }
    seq_Temp.SetCurrentPosition(1);
    seq_TempDispense.SetCurrentPosition(1);
    Util2::Debug::TraceArray(Translate("Aspiration Volumes"), arr_AspirationVolumes);
    Util2::Debug::TraceArray(Translate("Aspiration Heights"), arr_AspirationHeights);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 1, Translate(""));
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 1, Translate(""));
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 4, Translate(""));
    Util2::Debug::TraceArray(Translate("Top Phase Liquid Levels"), arr_TopPhaseHeight);
    _SetHeightInfoToLabware(ML_STAR, BOOLEON::TRUE, seq_Temp, arr_TopPhaseHeight);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function PIP_PhaseAspirationSmallLayer( device & ML_STAR, variable i_str_ChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_flt_AdditionalAspirationVolume, variable i_flt_OffsetBelowSecondPhase, variable i_int_TotalAspirationRounds, variable i_flt_DispenseHeight ) variable {
    private variable bln_SimulationMode;
    private variable flt_Angle;
    private variable flt_ZBottomDispesne;
    private variable bln_TipsLoaded;
    private variable bln_ProbabilityPassed;
    private variable flt_NotUsed;
    private variable flt_ContainerDepth;
    private variable flt_ZClearanceHeightDispense;
    private variable flt_ZBottom;
    private variable flt_ZMaximumHeight;
    private variable str_LabIDAsp;
    private variable flt_ZMinimumHeightDispense;
    private variable flt_TopHeight;
    private variable _strFunctionName;
    private variable flt_LiquidFollowDistance;
    private variable int_LoopIndex;
    private variable flt_ZClearanceHeight;
    private variable flt_ZMaximumHeightDispense;
    private variable int_TotalChannels;
    private variable flt_ContainerDiameter;
    private variable flt_AngleProgression;
    private variable flt_ZMinimumHeight;
    private variable int_Value;
    private variable str_ReturnChPattern;
    private variable flt_OffsetDiameter;
    private variable flt_MaxTipVolume;
    private variable int_ChIndex;
    private sequence seq_Temp;
    private sequence seq_TempDispense;
    private variable arr_DispenseHeights[];
    private variable arr_OffsetCalculationAngle[];
    private variable arr_LiquidFollowingDistancesDisp[];
    private variable arr_MaxVolumes[];
    private variable arr_XCoordDispense[];
    private variable arr_LiquidFollowingDistances[];
    private variable arr_AspirationVolumes[];
    private variable arr_YCoordDispense[];
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable arr_AspirationHeights[];
    private variable flt_VolumeTop;
    private variable str_PosIDAsp;
    private variable flt_VolumeAspirate;
    private variable str_ContainerFile;
    private variable flt_VolumeBottom;
    private variable flt_TopHeightContainer;
    private variable flt_BottomHeightContainer;
    private variable flt_CoordR;
    private variable flt_CoordX;
    private variable flt_CoordY;
    private variable flt_CoordZ;
    private variable str_ContainerFileDsp;
    private variable str_PosIDDsp;
    private variable str_LabIDDsp;
    private variable flt_VolumeAspirateTotal;
    private variable flt_DispenseHeight;
    private variable flt_DeltaX;
    private variable flt_DeltaY;
    private variable flt_CurrentAngle;
    private variable arr_DispenseVolumes[];
    private variable flt_BlowoutVolume;
    private variable flt_TransportAirGap;
    private variable flt_MaxHeight;
    private variable flt_MaxHeightEnd;
    private variable int_TotalActiveChannels;
    private variable ret_strAllPipettingReturn;
    private variable str_AspReturn;
    private variable str_DispReturn;
    private variable arr_TopPhaseHeights[];
    private variable arr_SecondPhaseHeights[];
    private variable flt_CurrentVolume;
    private variable i_flt_SubmergeHeight;
    private variable flt_VolumeAspirated;
    private variable str_LabID;
    private variable str_CurrentDispChPattern;
    private variable flt_NewVolume;
    private variable int_DispenseCount;
    private variable int_DispenseLoops;
    private variable flt_CurrentHeight;
    private variable str_PosID;
    private sequence seq_VolumeUpdateSequence;
    private variable arr_CurrentDestVolumes[];
    private variable arr_DispenseChPatterns[];
    private variable arr_TotalAspirationVolumes[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    ret_strAllPipettingReturn = Translate("");
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    str_ReturnChPattern = Translate("");
    str_ReturnChPattern = StrFillRight(str_ReturnChPattern, Translate("0"), int_TotalChannels);
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    int_TotalActiveChannels = StrReplace(i_str_ChPattern, Translate("1"), Translate("1"));
    if (int_TotalActiveChannels == 0)
    {
      MECC::TraceComment(Translate("CHANNEL PATTERN CONTAINS NO ACTIVE CHANNELS!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetNextSequenceSet(i_seq_AspirationPosition, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("ASPIRATE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetNextSequenceSet(i_seq_DispensePosition, i_str_ChPattern, seq_TempDispense);
    if(0){
      bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_TempDispense, i_str_ChPattern);
      if (bln_ProbabilityPassed == BOOLEON::FALSE)
      {
        MECC::TraceComment(Translate("DISPENSE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
        TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
        return (ret_strAllPipettingReturn);
      }
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::TRUE, seq_Temp, arr_TopPhaseHeights);
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::FALSE, seq_Temp, arr_SecondPhaseHeights);
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    _GetLabwareCoordinates(ML_STAR, seq_TempDispense, i_str_ChPattern, arr_XCoordDispense, arr_YCoordDispense, flt_ZBottomDispesne, flt_ZMinimumHeightDispense, flt_ZMaximumHeightDispense, flt_ZClearanceHeightDispense);
    flt_ContainerDepth = flt_ZMaximumHeight - flt_ZMinimumHeight;
    arr_MaxVolumes.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          FIRMWARE_PIPETTING_COMMANDS::Get_Tip_Volume_1mL(ML_STAR, int_ChIndex, flt_MaxTipVolume, flt_NotUsed);
          arr_MaxVolumes.AddAsLast(flt_MaxTipVolume);
        }
        else
        {
          arr_MaxVolumes.AddAsLast(0.0);
        }
      }
    }
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    arr_OffsetCalculationAngle.SetSize(0);
    flt_AngleProgression = 360.0 / (i_int_TotalAspirationRounds * 1.0);
    {
      for(int_LoopIndex = 0; int_LoopIndex < i_int_TotalAspirationRounds;)
      {
        int_LoopIndex = int_LoopIndex + 1;
        if (int_LoopIndex == 1)
        {
          flt_Angle = 0.0;
        }
        else
        {
          flt_Angle = flt_Angle + flt_AngleProgression;
        }
        arr_OffsetCalculationAngle.AddAsLast(flt_Angle);
      }
    }
    arr_AspirationVolumes.SetSize(0);
    arr_DispenseVolumes.SetSize(0);
    arr_LiquidFollowingDistances.SetSize(0);
    arr_DispenseHeights.SetSize(0);
    arr_LiquidFollowingDistancesDisp.SetSize(0);
    arr_AspirationHeights.SetSize(0);
    arr_TotalAspirationVolumes.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          seq_Temp.SetCurrentPosition(int_ChIndex);
          str_LabIDAsp = SeqGetLabwareId(seq_Temp);
          str_PosIDAsp = SeqGetPositionId(seq_Temp);
          DevGetLabwarePositionEx(ML_STAR, str_LabIDAsp, str_PosIDAsp, flt_CoordX, flt_CoordY, flt_CoordZ, flt_CoordR);
          HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabIDAsp, str_PosIDAsp, str_ContainerFile);
          seq_TempDispense.SetCurrentPosition(int_ChIndex);
          str_LabIDDsp = SeqGetLabwareId(seq_TempDispense);
          str_PosIDDsp = SeqGetPositionId(seq_TempDispense);
          HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabIDDsp, str_PosIDDsp, str_ContainerFileDsp);
          flt_TopHeightContainer=arr_TopPhaseHeights.GetAt(int_ChIndex-1);
          flt_BottomHeightContainer=arr_SecondPhaseHeights.GetAt(int_ChIndex-1);
          flt_BottomHeightContainer = flt_BottomHeightContainer - i_flt_OffsetBelowSecondPhase;
          flt_LiquidFollowDistance = flt_TopHeightContainer - flt_BottomHeightContainer;
          TRACE::TRACE12(Translate("    "), Translate("Top Height:  "), flt_TopHeightContainer, Translate("    Bottom Height:  "), flt_BottomHeightContainer, Translate("  Liquid Following Distance:  "), flt_LiquidFollowDistance, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          _GetVolumeBasedOnHeight(str_ContainerFile, flt_TopHeightContainer, flt_VolumeTop);
          _GetVolumeBasedOnHeight(str_ContainerFile, flt_BottomHeightContainer, flt_VolumeBottom);
          flt_VolumeAspirateTotal = flt_VolumeTop - flt_VolumeBottom;
          arr_TotalAspirationVolumes.AddAsLast(flt_VolumeAspirateTotal);
          if(0){
            flt_VolumeAspirateTotal = flt_VolumeAspirate + i_flt_AdditionalAspirationVolume;
          }
          flt_VolumeAspirate = flt_VolumeAspirateTotal / (i_int_TotalAspirationRounds * 1.0);
          flt_VolumeAspirate = flt_VolumeAspirate + i_flt_AdditionalAspirationVolume;
          _GetHeightBasedOnVolume(str_ContainerFileDsp, flt_VolumeAspirateTotal, flt_DispenseHeight);
          flt_DispenseHeight = flt_DispenseHeight - 2.0;
          if (flt_DispenseHeight < 0.0)
          {
            flt_DispenseHeight = flt_DispenseHeight + 2.0;
          }
          if (flt_LiquidFollowDistance < 0.0)
          {
            flt_VolumeAspirate = 0.0;
          }
          TRACE::TRACE12(Translate("    "), Translate("Top Volume:  "), flt_VolumeTop, Translate("    Bottom Volume:  "), flt_VolumeBottom, Translate("  Aspiration Volume:  "), flt_VolumeAspirate, Translate(" X "), i_int_TotalAspirationRounds, Translate("  Dispense Height: "), flt_DispenseHeight, Translate(""));
          if (flt_VolumeAspirate > 0.0)
          {
            flt_TopHeight = flt_TopHeightContainer + flt_ZBottom;
            arr_AspirationVolumes.AddAsLast(flt_VolumeAspirate);
            arr_AspirationHeights.AddAsLast(flt_TopHeight);
            arr_LiquidFollowingDistances.AddAsLast(flt_LiquidFollowDistance);
            arr_DispenseVolumes.AddAsLast(flt_VolumeAspirateTotal);
          }
          else
          {
            arr_AspirationVolumes.AddAsLast(0.0);
            arr_AspirationHeights.AddAsLast(0.0);
            arr_LiquidFollowingDistances.AddAsLast(0.0);
            arr_DispenseVolumes.AddAsLast(0.0);
          }
        }
        else
        {
          arr_AspirationVolumes.AddAsLast(0.0);
          arr_AspirationHeights.AddAsLast(0.0);
          arr_LiquidFollowingDistances.AddAsLast(0.0);
          arr_DispenseVolumes.AddAsLast(0.0);
        }
        if(0){
          flt_DispenseHeight = i_flt_DispenseHeight + flt_ZBottomDispesne;
        }
        arr_DispenseHeights.AddAsLast(flt_DispenseHeight);
        arr_LiquidFollowingDistancesDisp.AddAsLast(0.0);
        arr_TotalAspirationVolumes.AddAsLast(0.0);
      }
    }
    seq_Temp.SetCurrentPosition(1);
    seq_TempDispense.SetCurrentPosition(1);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          seq_Temp.SetCurrentPosition(int_ChIndex);
          str_LabIDAsp = SeqGetLabwareId(seq_Temp);
          break;
        }
      }
    }
    seq_Temp.SetCurrentPosition(1);
    HELPERLIBRARY::GetContainerWidth(ML_STAR, str_LabIDAsp, flt_ContainerDiameter);
    flt_OffsetDiameter = flt_ContainerDiameter / (4.0 * 1.0);
    if (i_int_TotalAspirationRounds == 1)
    {
      flt_OffsetDiameter = 0.0;
    }
    {
      for(int_LoopIndex = 0; int_LoopIndex < i_int_TotalAspirationRounds;)
      {
        int_LoopIndex = int_LoopIndex + 1;
        flt_CurrentAngle=arr_OffsetCalculationAngle.GetAt(int_LoopIndex-1);
        HELPERLIBRARY::CalculateXYFromDiameterAndAngle(flt_OffsetDiameter, flt_CurrentAngle, flt_DeltaX, flt_DeltaY);
        HELPERLIBRARY::Set_Relative_Position_for_LabwareID(ML_STAR, str_LabIDAsp, flt_DeltaX, flt_DeltaY, 0.0, 0.0);
        _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
        _GetLabwareCoordinates(ML_STAR, seq_TempDispense, i_str_ChPattern, arr_XCoordDispense, arr_YCoordDispense, flt_ZBottomDispesne, flt_ZMinimumHeightDispense, flt_ZMaximumHeightDispense, flt_ZClearanceHeightDispense);
        Util2::Debug::TraceArray(Translate("Aspiration Volumes"), arr_AspirationVolumes);
        Util2::Debug::TraceArray(Translate("Aspiration Heights"), arr_AspirationHeights);
        if (int_LoopIndex == i_int_TotalAspirationRounds)
        {
          flt_TransportAirGap = T_PIP_TOOLS_ASP_AIR_TRANSPORT;
          flt_MaxHeightEnd = 245.0;
        }
        else
        {
          flt_TransportAirGap = 0.0;
          flt_MaxHeightEnd = flt_ZMaximumHeight;
        }
        if (int_LoopIndex == 1)
        {
          flt_BlowoutVolume = T_PIP_TOOLS_ASP_BLOWOUT;
          flt_MaxHeight = 245.0;
        }
        else
        {
          flt_BlowoutVolume = 0.0;
          flt_MaxHeight = flt_ZMaximumHeight;
        }
        DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 1, Translate(""));
        FIRMWARE_PIPETTING_COMMANDS::PIPAspirateFromFixedHeight_ArrayVolumes(ML_STAR, i_str_ChPattern, arr_XCoord, arr_YCoord, arr_AspirationHeights, arr_LiquidFollowingDistances, flt_MaxHeight, flt_MaxHeightEnd, flt_ZMinimumHeight, flt_ZBottom, flt_ContainerDepth, arr_AspirationVolumes, T_PIP_TOOLS_ASP_FLOW_RATE, flt_TransportAirGap, flt_BlowoutVolume, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_SWAP, 5.0);
        DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate(""));
        flt_DeltaX = flt_DeltaX * -1;
        flt_DeltaY = flt_DeltaY * -1;
        HELPERLIBRARY::Set_Relative_Position_for_LabwareID(ML_STAR, str_LabIDAsp, flt_DeltaX, flt_DeltaY, 0.0, 0.0);
      }
    }
    str_AspReturn = Translate("");
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 1, Translate(""));
    _GetPartialChannelPatternForRepeatingPositions(ML_STAR, i_str_ChPattern, seq_TempDispense, int_DispenseLoops, arr_DispenseChPatterns);
    {
      for(int_DispenseCount = 0; int_DispenseCount < int_DispenseLoops;)
      {
        int_DispenseCount = int_DispenseCount + 1;
        _GetVolumesInPositions(ML_STAR, seq_TempDispense, arr_CurrentDestVolumes);
        arr_DispenseHeights.SetSize(0);
        str_CurrentDispChPattern=arr_DispenseChPatterns.GetAt(int_DispenseCount-1);
        TRACE::TRACE02(str_CurrentDispChPattern, Translate(""));
        {
          for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
          {
            int_ChIndex = int_ChIndex + 1;
            _GetChannelPatternValue(str_CurrentDispChPattern, int_ChIndex, int_Value);
            if (int_Value == 1)
            {
              seq_TempDispense.SetCurrentPosition(int_ChIndex);
              flt_CurrentVolume=arr_CurrentDestVolumes.GetAt(int_ChIndex-1);
              flt_VolumeAspirated=arr_TotalAspirationVolumes.GetAt(int_ChIndex-1);
              flt_NewVolume = flt_CurrentVolume + flt_VolumeAspirated;
              if (flt_NewVolume < 0.0)
              {
                flt_NewVolume = 0.0;
              }
              TRACE::TRACE08(Translate("    "), Translate("Current Volume in well:  "), flt_CurrentVolume, Translate("     Volume aspirated:  "), flt_VolumeAspirated, Translate("    Added Volume:  "), flt_NewVolume, Translate(""));
              str_LabID = SeqGetLabwareId(seq_TempDispense);
              str_PosID = SeqGetPositionId(seq_TempDispense);
              VectorDb_Labware::LoadLabware(ML_STAR, str_LabID, str_PosID);
              SeqRemoveAll(seq_VolumeUpdateSequence);
              SeqAdd(seq_VolumeUpdateSequence, str_LabID, str_PosID);
              seq_VolumeUpdateSequence.SetCurrentPosition(1);
              HSLLabwState::SetLabwareVolume(ML_STAR, seq_VolumeUpdateSequence, flt_NewVolume);
              _GetHeightBasedOnVolume(str_ContainerFileDsp, flt_CurrentVolume, flt_CurrentHeight);
              flt_DispenseHeight = flt_CurrentHeight - i_flt_SubmergeHeight;
              if (flt_DispenseHeight <= 0.0)
              {
                flt_DispenseHeight = 2.0;
              }
              arr_DispenseHeights.AddAsLast(flt_DispenseHeight);
            }
            else
            {
              arr_DispenseHeights.AddAsLast(0.0);
            }
          }
        }
        seq_TempDispense.SetCurrentPosition(1);
        Util2::Debug::TraceArray(Translate("Dispense Heights"), arr_DispenseHeights);
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 4, Translate(""));
    ret_strAllPipettingReturn = StrConcat4(ret_strAllPipettingReturn, str_AspReturn, Translate("&"), str_DispReturn);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
    return (ret_strAllPipettingReturn);
  }

  function PIP_PhaseAspirationParseReturnValue( variable i_strReturnFromPhaseAspiration, variable & o_arrAspirationReturns[], variable & o_arrDispenseReturns[] ) void {
    private variable _strFunctionName;
    private variable l_intTotalRounds;
    private variable l_intRoundIndex;
    private variable l_arrAspDispReturns[];
    private variable l_arrRoundReturns[];
    o_arrAspirationReturns.SetSize( 0);
    o_arrDispenseReturns.SetSize( 0);
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    o_arrAspirationReturns.SetSize(0);
    o_arrDispenseReturns.SetSize(0);
    onerror goto errLabel_1 ;
    err.Clear();
    l_arrRoundReturns = HSLExtensions::String::Split(i_strReturnFromPhaseAspiration, Translate("*"), 1);
    l_intTotalRounds=l_arrRoundReturns.GetSize();
    {
      for(l_intRoundIndex = 0; l_intRoundIndex < l_intTotalRounds;)
      {
        l_intRoundIndex = l_intRoundIndex + 1;
        l_arrAspDispReturns = HSLExtensions::String::Split(l_arrRoundReturns.ElementAt( l_intRoundIndex -1), Translate("&"), 1);
        o_arrAspirationReturns.AddAsLast(l_arrAspDispReturns.ElementAt( 1 -1));
        o_arrDispenseReturns.AddAsLast(l_arrAspDispReturns.ElementAt( 2 -1));
      }
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function PIP_PhaseAspiration( device & ML_STAR, variable & io_str_ChPattern, variable i_bln_ResetChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_bln_UseCLLD, variable i_flt_AspirationVolume, variable i_flt_DispenseBackVolume, variable i_flt_SubmergeDepth, variable i_flt_MaxVolumeToRemove, variable i_bln_DisableTADMFirst ) variable {
    private variable bln_SimulationMode;
    private variable flt_CurrentVolume;
    private variable str_ErrorReturn;
    private variable flt_ZBottomDispesne;
    private variable bln_TipsLoaded;
    private variable ret_strAllPipettingReturn;
    private variable bln_ProbabilityPassed;
    private variable str_LiquidReturn;
    private variable int_PLLD;
    private variable flt_CorrectedDispenseBack;
    private variable flt_CorrectedBlowout;
    private variable flt_NotUsed;
    private variable flt_DispenseVolume;
    private variable flt_ZClearanceHeightDispense;
    private variable int_TotalActiveChannels;
    private variable int_RemainingChannels;
    private variable int_MaxLoop;
    private variable flt_ZBottom;
    private variable i;
    private variable int_DispenseCheck;
    private variable flt_ZMaximumHeight;
    private variable flt_TotalAirGap;
    private variable flt_VolumeAspirated;
    private variable flt_ZMinimumHeightDispense;
    private variable str_Volume;
    private variable flt_Offset;
    private variable str_DispenseLabID;
    private variable flt_CorrectedAirGap;
    private variable flt_MaxVolume;
    private variable _strFunctionName;
    private variable str_LabID;
    private variable flt_LiquidFollowDistance;
    private variable str_ContainerConfigFile;
    private variable int_DispenseBackCheck;
    private variable flt_ZClearanceHeight;
    private variable int_Position;
    private variable str_DispenseChPattern;
    private variable flt_ZMaximumHeightDispense;
    private variable str_StartingChannelPattern;
    private variable str_DispenseLocation;
    private variable flt_LiquidHeight;
    private variable str_AspReturn;
    private variable str_DispReturn;
    private variable str_NewChPattern;
    private variable int_TotalChannels;
    private variable str_DispensePosID;
    private variable flt_ZMinimumHeight;
    private variable flt_CurrentHeight;
    private variable str_PosID;
    private variable bln_UseLLD;
    private variable int_CLLD;
    private variable str_ReturnChPattern;
    private variable flt_DispenseHeight;
    private variable int_Value;
    private variable int_TotalPositions;
    private variable int_ReturnErrorCode;
    private variable int_ChIndex;
    private sequence seq_Temp;
    private sequence seq_TempDispense;
    private variable arr_DispenseHeights[];
    private variable arr_VolumesAspirated[];
    private variable arr_LiquidFollowingDistance[];
    private variable arr_XCoordDispense[];
    private variable arr_YCoordDispense[];
    private variable arr_LiquidHeights[];
    private variable arr_DispenseVolumes[];
    private variable arr_YCoord[];
    private variable arr_LiquidFollowingDispense[];
    private variable arr_XCoord[];
    private variable int_AspirationMode;
    private variable arr_SecondPhaseHeights[];
    private variable arr_ZTravelHeight[];
    private variable int_DispenseCount;
    private variable int_DispenseLoops;
    private variable arr_CurrentDestVolumes[];
    private variable arr_DispenseChPatterns[];
    private variable str_CurrentDispChPattern;
    private variable flt_NewVolume;
    private sequence seq_VolumeUpdateSequence;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    ret_strAllPipettingReturn = Translate("");
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    arr_SecondPhaseHeights.SetSize(0);
    arr_VolumesAspirated.SetSize(0);
    arr_ZTravelHeight.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        arr_ZTravelHeight.AddAsLast(245.0);
      }
    }
    str_ReturnChPattern = Translate("");
    str_ReturnChPattern = StrFillRight(str_ReturnChPattern, Translate("0"), int_TotalChannels);
    io_str_ChPattern = StrConcat2(io_str_ChPattern, Translate(""));
    io_str_ChPattern = StrFillRight(io_str_ChPattern, Translate("0"), int_TotalChannels);
    int_TotalActiveChannels = StrReplace(io_str_ChPattern, Translate("1"), Translate("1"));
    if (int_TotalActiveChannels == 0)
    {
      MECC::TraceComment(Translate("CHANNEL PATTERN CONTAINS NO ACTIVE CHANNELS!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetNextSequenceSet(i_seq_AspirationPosition, io_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, io_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("ASPIRATE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetNextSequenceSet(i_seq_DispensePosition, io_str_ChPattern, seq_TempDispense);
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, io_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::FALSE, seq_Temp, arr_SecondPhaseHeights);
    _GetLabwareCoordinates(ML_STAR, seq_Temp, io_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    _GetLabwareCoordinates(ML_STAR, seq_TempDispense, io_str_ChPattern, arr_XCoordDispense, arr_YCoordDispense, flt_ZBottomDispesne, flt_ZMinimumHeightDispense, flt_ZMaximumHeightDispense, flt_ZClearanceHeightDispense);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetCorrectedValueForVolume(i_flt_DispenseBackVolume, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_CorrectedDispenseBack);
    if(0){
      int_TotalChannels = StrReplace(io_str_ChPattern, Translate("1"), Translate("1"));
    }
    if (i_bln_UseCLLD == BOOLEON::TRUE)
    {
      int_CLLD = 1;
      int_PLLD = 0;
    }
    else
    {
      int_CLLD = 0;
      int_PLLD = 1;
    }
    arr_LiquidHeights.SetSize(0);
    arr_VolumesAspirated.SetSize(0);
    int_MaxLoop = i_flt_MaxVolumeToRemove / (i_flt_AspirationVolume * 1.0);
    int_MaxLoop = MthCeiling(int_MaxLoop);
    seq_Temp.SetCurrentPosition(1);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(io_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          seq_TempDispense.SetCurrentPosition(int_ChIndex);
          str_DispenseLabID = SeqGetLabwareId(seq_TempDispense);
          str_DispensePosID = SeqGetPositionId(seq_TempDispense);
          break;
        }
      }
    }
    seq_TempDispense.SetCurrentPosition(1);
    HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_DispenseLabID, str_DispensePosID, str_ContainerConfigFile);
    bln_UseLLD = BOOLEON::TRUE;
    str_StartingChannelPattern = io_str_ChPattern;
    {
      i = 0;
      while (int_TotalChannels > 0)
      {
        i = i + 1;
        int_RemainingChannels = StrReplace(io_str_ChPattern, Translate("1"), Translate("1"));
        if (int_RemainingChannels == 0)
        {
          break;
        }
        if (i > int_MaxLoop)
        {
          MECC::TraceComment(Translate("MAX VOLUME REMOVED!"));
          break;
        }
        if (bln_SimulationMode == BOOLEON::TRUE)
        {
          if (i == 3)
          {
            break;
          }
        }
        if (i_bln_UseCLLD == BOOLEON::FALSE)
        {
          if (i > 1)
          {
            bln_UseLLD = BOOLEON::FALSE;
          }
        }
        int_AspirationMode = 0;
        if (i_bln_DisableTADMFirst == BOOLEON::TRUE)
        {
          if (i == 1)
          {
            int_AspirationMode = 2;
          }
        }
        if (i > 1)
        {
          if (G_FW_PIP_COM_InstrumentType <= 2)
          {
            STAR_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_StartingChannelPattern, 245.0, arr_XCoord, arr_YCoord, arr_ZTravelHeight);
          }
          else
          {
            VANTAGE_CHANNEL_MOVEMENT_TOOLS::Move_Channels_To_Absolute_Position_1mL(ML_STAR, str_StartingChannelPattern, 245.0, arr_XCoord, arr_YCoord, arr_ZTravelHeight);
          }
        }
        if (bln_UseLLD == BOOLEON::TRUE)
        {
          onerror goto errLabel_2 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	str_AspReturn = arrRetValues[2];
          }
          str_ErrorReturn = Translate("");
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            str_ErrorReturn = ErrGetDataAt(3);
            str_AspReturn = str_ErrorReturn;
          }   /* end if from skip handler if no error */
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
            	str_LiquidReturn = arrRetValues[2];
          }
          {
            for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
            {
              int_ChIndex = int_ChIndex + 1;
              flt_CurrentHeight = 0.0;
              flt_VolumeAspirated = 0.0;
              seq_Temp.SetCurrentPosition(int_ChIndex);
              _GetChannelPatternValue(io_str_ChPattern, int_ChIndex, int_Value);
              if (int_Value == 1)
              {
                if (str_ErrorReturn != "")
                {
                  int_Position = StepReturn::GetPositionFromNum(int_ChIndex, str_ErrorReturn);
                  int_ReturnErrorCode = StepReturn::GetSlaveError(int_Position, str_ErrorReturn);
                }
                else
                {
                  int_ReturnErrorCode = 0;
                }
                str_LabID = SeqGetLabwareId(seq_Temp);
                str_PosID = SeqGetPositionId(seq_Temp);
                LIQUID_LEVEL_CHECK::FindLiquidHeight(ML_STAR, str_LiquidReturn, seq_Temp, int_ChIndex, flt_LiquidHeight);
                FIRMWARE_PIPETTING_COMMANDS::Get_Tip_Volume_1mL(ML_STAR, int_ChIndex, flt_MaxVolume, flt_CurrentVolume);
                if (bln_SimulationMode == BOOLEON::TRUE)
                {
                  flt_CurrentVolume = i_flt_AspirationVolume;
                }
                if (T_PIP_TOOLS_ASP_BLOWOUT > 0.0)
                {
                  flt_CorrectedBlowout = T_PIP_TOOLS_ASP_BLOWOUT;
                }
                else
                {
                  flt_CorrectedBlowout = 0.0;
                }
                if (int_ReturnErrorCode == 0)
                {
                  if (T_PIP_TOOLS_ASP_AIR_TRANSPORT > 0.0)
                  {
                    flt_CorrectedAirGap = T_PIP_TOOLS_ASP_AIR_TRANSPORT;
                  }
                  else
                  {
                    flt_CorrectedAirGap = 0.0;
                  }
                }
                else
                {
                  MECC::TraceComment(Translate("ASPIRATION STOPPED EARLY!"));
                  flt_CorrectedAirGap = 0.0;
                }
                flt_TotalAirGap = flt_CorrectedBlowout + flt_CorrectedAirGap;
                flt_VolumeAspirated = flt_CurrentVolume - flt_TotalAirGap;
                TRACE::TRACE04(Translate("     "), Translate("Total Air Gap:  "), flt_TotalAirGap, Translate(" uL"));
                TRACE::TRACE04(Translate("     "), Translate("Volume Aspirated Adjusted:  "), flt_VolumeAspirated, Translate(" uL"));
                if (flt_VolumeAspirated < 0.0)
                {
                  flt_VolumeAspirated = 0.0;
                }
                else
                {
                  _GetCorrectedValueForVolume(flt_VolumeAspirated, T_PIP_TOOLS_ARR_CORRECTION_Y, T_PIP_TOOLS_ARR_CORRECTION_X, flt_VolumeAspirated);
                }
                TRACE::TRACE04(Translate("     "), Translate("Volume Aspirated:  "), flt_VolumeAspirated, Translate(" uL"));
                TRACE::TRACE04(Translate("     "), Translate("Liquid Level Start :  "), flt_LiquidHeight, Translate(" mm"));
                flt_VolumeAspirated = flt_VolumeAspirated * -1;
                _CalculateLiquidFollowDistance(ML_STAR, str_LabID, str_PosID, flt_LiquidHeight, flt_VolumeAspirated, BOOLEON::TRUE, flt_LiquidFollowDistance);
                flt_VolumeAspirated = flt_VolumeAspirated * -1;
                flt_CurrentHeight = flt_LiquidHeight - flt_LiquidFollowDistance;
                if (flt_CurrentHeight < 0.0)
                {
                  flt_CurrentHeight = 0.0;
                }
                if (G_FW_PIP_COM_SimulationMode == BOOLEON::TRUE)
                {
                  flt_CurrentHeight = 25.0;
                }
                TRACE::TRACE04(Translate("     "), Translate("Liquid Level End :  "), flt_CurrentHeight, Translate(" mm"));
              }
              if (i == 1)
              {
                arr_LiquidHeights.AddAsLast(flt_CurrentHeight);
                arr_VolumesAspirated.AddAsLast(flt_VolumeAspirated);
              }
              else
              {
                arr_LiquidHeights.SetAt(int_ChIndex-1, flt_CurrentHeight);
                arr_VolumesAspirated.SetAt(int_ChIndex-1, flt_VolumeAspirated);
              }
            }
          }
          seq_Temp.SetCurrentPosition(1);
        }
        else
        {
          onerror goto errLabel_3 ;
          err.Clear();
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	str_AspReturn = arrRetValues[2];
          }
          str_ErrorReturn = Translate("");
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            str_ErrorReturn = ErrGetDataAt(3);
            str_AspReturn = str_ErrorReturn;
          }   /* end if from skip handler if no error */
          {
            for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
            {
              int_ChIndex = int_ChIndex + 1;
              flt_CurrentHeight = 0.0;
              flt_VolumeAspirated = 0.0;
              seq_Temp.SetCurrentPosition(int_ChIndex);
              _GetChannelPatternValue(io_str_ChPattern, int_ChIndex, int_Value);
              if (int_Value == 1)
              {
                if (str_ErrorReturn != "")
                {
                  int_Position = StepReturn::GetPositionFromNum(int_ChIndex, str_ErrorReturn);
                  int_ReturnErrorCode = StepReturn::GetSlaveError(int_Position, str_ErrorReturn);
                }
                else
                {
                  int_ReturnErrorCode = 0;
                }
                str_LabID = SeqGetLabwareId(seq_Temp);
                str_PosID = SeqGetPositionId(seq_Temp);
                flt_LiquidHeight=arr_LiquidHeights.GetAt(int_ChIndex-1);
                FIRMWARE_PIPETTING_COMMANDS::Get_Tip_Volume_1mL(ML_STAR, int_ChIndex, flt_MaxVolume, flt_CurrentVolume);
                if (bln_SimulationMode == BOOLEON::TRUE)
                {
                  flt_CurrentVolume = i_flt_AspirationVolume;
                }
                if (T_PIP_TOOLS_ASP_BLOWOUT > 0.0)
                {
                  flt_CorrectedBlowout = T_PIP_TOOLS_ASP_BLOWOUT;
                }
                else
                {
                  flt_CorrectedBlowout = 0.0;
                }
                if (int_ReturnErrorCode == 0)
                {
                  if (T_PIP_TOOLS_ASP_AIR_TRANSPORT > 0.0)
                  {
                    flt_CorrectedAirGap = T_PIP_TOOLS_ASP_AIR_TRANSPORT;
                  }
                  else
                  {
                    flt_CorrectedAirGap = 0.0;
                  }
                }
                else
                {
                  MECC::TraceComment(Translate("ASPIRATION STOPPED EARLY!"));
                  flt_CorrectedAirGap = 0.0;
                }
                flt_TotalAirGap = flt_CorrectedBlowout + flt_CorrectedAirGap;
                flt_VolumeAspirated = flt_CurrentVolume - flt_TotalAirGap;
                if(0){
                  flt_VolumeAspirated = flt_CurrentVolume;
                }
                TRACE::TRACE04(Translate("     "), Translate("Total Air Gap:  "), flt_TotalAirGap, Translate(" uL"));
                TRACE::TRACE04(Translate("     "), Translate("Volume Aspirated Adjusted:  "), flt_VolumeAspirated, Translate(" uL"));
                if (flt_VolumeAspirated < 0.0)
                {
                  flt_VolumeAspirated = 0.0;
                }
                else
                {
                  _GetCorrectedValueForVolume(flt_VolumeAspirated, T_PIP_TOOLS_ARR_CORRECTION_Y, T_PIP_TOOLS_ARR_CORRECTION_X, flt_VolumeAspirated);
                }
                TRACE::TRACE04(Translate("     "), Translate("Volume Aspirated :  "), flt_VolumeAspirated, Translate(" uL"));
                TRACE::TRACE04(Translate("     "), Translate("Liquid Level Start :  "), flt_LiquidHeight, Translate(" mm"));
                flt_VolumeAspirated = flt_VolumeAspirated * -1;
                _CalculateLiquidFollowDistance(ML_STAR, str_LabID, str_PosID, flt_LiquidHeight, flt_VolumeAspirated, BOOLEON::TRUE, flt_LiquidFollowDistance);
                flt_LiquidFollowDistance = flt_LiquidFollowDistance + i_flt_SubmergeDepth;
                flt_VolumeAspirated = flt_VolumeAspirated * -1;
                flt_CurrentHeight = flt_LiquidHeight - flt_LiquidFollowDistance;
                if (flt_CurrentHeight < 0.0)
                {
                  flt_CurrentHeight = 0.0;
                }
                if (G_FW_PIP_COM_SimulationMode == BOOLEON::TRUE)
                {
                  flt_CurrentHeight = 25.0;
                }
                TRACE::TRACE04(Translate("     "), Translate("Liquid Level End :  "), flt_CurrentHeight, Translate(" mm"));
              }
              arr_LiquidHeights.SetAt(int_ChIndex-1, flt_CurrentHeight);
              arr_VolumesAspirated.SetAt(int_ChIndex-1, flt_VolumeAspirated);
            }
          }
          seq_Temp.SetCurrentPosition(1);
        }
        Util2::Debug::TraceArray_2(Translate("Current Liquid Heights                        Volumes Aspirated"), arr_LiquidHeights, arr_VolumesAspirated);
        if (str_ErrorReturn != "")
        {
          TRACE::TRACE04(Translate("     "), Translate("Error Return Value:  "), str_ErrorReturn, Translate(""));
          str_DispenseChPattern = Translate("");
          int_TotalPositions = StepReturn::GetNumberOfPositions(str_ErrorReturn);
          arr_LiquidFollowingDistance.SetSize(0);
          arr_DispenseVolumes.SetSize(0);
          _GetLiquidFollowingForAllChannels(ML_STAR, arr_LiquidHeights, seq_Temp, BOOLEON::TRUE, BOOLEON::FALSE, i_flt_DispenseBackVolume, io_str_ChPattern, arr_LiquidFollowingDistance);
          {
            for(int_ChIndex = 0; int_ChIndex < int_TotalPositions;)
            {
              int_ChIndex = int_ChIndex + 1;
              int_Position = StepReturn::GetPositionFromNum(int_ChIndex, str_ErrorReturn);
              int_ReturnErrorCode = StepReturn::GetSlaveError(int_Position, str_ErrorReturn);
              if (int_ReturnErrorCode == 0)
              {
                str_DispenseChPattern = StrConcat2(str_DispenseChPattern, Translate("0"));
                arr_DispenseVolumes.AddAsLast(0.0);
              }
              else
              {
                flt_CurrentHeight=arr_LiquidHeights.GetAt(int_ChIndex-1);
                arr_SecondPhaseHeights.SetAt(int_ChIndex-1, flt_CurrentHeight);
                FIRMWARE_PIPETTING_COMMANDS::Get_Tip_Volume_1mL(ML_STAR, int_ChIndex, flt_MaxVolume, flt_CurrentVolume);
                if (T_PIP_TOOLS_ASP_BLOWOUT > 0.0)
                {
                  flt_CorrectedBlowout = T_PIP_TOOLS_ASP_BLOWOUT;
                }
                else
                {
                  flt_CorrectedBlowout = 0.0;
                }
                flt_VolumeAspirated = flt_CurrentVolume - flt_CorrectedBlowout;
                if (flt_VolumeAspirated < 0.0)
                {
                  flt_VolumeAspirated = 0.0;
                }
                else
                {
                  if(0){
                    _GetCorrectedValueForVolume(flt_VolumeAspirated, T_PIP_TOOLS_ARR_CORRECTION_Y, T_PIP_TOOLS_ARR_CORRECTION_X, flt_VolumeAspirated);
                  }
                }
                TRACE::TRACE04(int_ChIndex, Translate("     Volume currently in channel:  "), flt_VolumeAspirated, Translate(""));
                flt_DispenseVolume = i_flt_DispenseBackVolume;
                if (flt_VolumeAspirated < i_flt_DispenseBackVolume)
                {
                  flt_DispenseVolume = flt_VolumeAspirated;
                  flt_VolumeAspirated = 0.0;
                  if (flt_DispenseVolume < 0.0)
                  {
                    flt_DispenseVolume = 0.0;
                  }
                }
                else
                {
                  if (flt_DispenseVolume < 0.0)
                  {
                    flt_DispenseVolume = 0.0;
                  }
                  if (flt_VolumeAspirated < 0.0)
                  {
                    flt_VolumeAspirated = 0.0;
                  }
                  flt_VolumeAspirated = flt_VolumeAspirated - flt_DispenseVolume;
                }
                TRACE::TRACE04(Translate("     "), Translate("Volume dispensed in channel:  "), flt_DispenseVolume, Translate(""));
                arr_DispenseVolumes.AddAsLast(flt_DispenseVolume);
                if (flt_VolumeAspirated <= 0.0)
                {
                  flt_VolumeAspirated = 0.0;
                }
                else
                {
                  _GetCorrectedValueForVolume(flt_VolumeAspirated, T_PIP_TOOLS_ARR_CORRECTION_Y, T_PIP_TOOLS_ARR_CORRECTION_X, flt_VolumeAspirated);
                }
                TRACE::TRACE04(Translate("     "), Translate("Remaining volume in channel:  "), flt_VolumeAspirated, Translate(""));
                arr_VolumesAspirated.SetAt(int_ChIndex-1, flt_VolumeAspirated);
                if (flt_DispenseVolume > 0.0)
                {
                  str_DispenseChPattern = StrConcat2(str_DispenseChPattern, Translate("1"));
                }
                else
                {
                  str_DispenseChPattern = StrConcat2(str_DispenseChPattern, Translate("0"));
                }
              }
            }
          }
          TRACE::TRACE04(Translate("     "), Translate("Dispense Back Channel Pattern:  "), str_DispenseChPattern, Translate(""));
          if (i_flt_DispenseBackVolume > 0.0)
          {
            int_DispenseBackCheck = StrReplace(str_DispenseChPattern, Translate("1"), Translate("1"));
            if (int_DispenseBackCheck > 0)
            {
              Util2::Debug::TraceArray(Translate("Dispense Back Volumes"), arr_DispenseVolumes);
              flt_Offset = flt_ZBottom - 1.0;
              _ApplyOffsetToArrayofValues(arr_LiquidHeights, flt_Offset, arr_DispenseHeights);
              FIRMWARE_PIPETTING_COMMANDS::PIPDispenseFromFixedHeight_ArrayVolumes(ML_STAR, str_DispenseChPattern, 4, arr_XCoord, arr_YCoord, arr_DispenseHeights, arr_LiquidFollowingDistance, 245.0, 245.0, flt_ZMinimumHeight, flt_ZBottom, arr_DispenseVolumes, 40.0, 40.0, 0.0, T_PIP_TOOLS_DISP_AIR_TRANSPORT, 0.0, T_PIP_TOOLS_DISP_SETTLING, T_PIP_TOOLS_DISP_SWAP, 5.0, flt_ZMaximumHeight);
            }
          }
        }
        arr_DispenseHeights.SetSize(0);
        str_DispenseLocation = Translate("");
        str_DispenseChPattern = Translate("");
        {
          for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
          {
            int_ChIndex = int_ChIndex + 1;
            str_Volume = Translate("");
            str_DispenseLabID = Translate("");
            str_DispensePosID = Translate("");
            seq_TempDispense.SetCurrentPosition(int_ChIndex);
            flt_CurrentVolume=arr_VolumesAspirated.GetAt(int_ChIndex-1);
            _GetChannelPatternValue(io_str_ChPattern, int_ChIndex, int_Value);
            if (int_Value == 1)
            {
              if (flt_CurrentVolume > 0.0)
              {
                str_DispenseLabID = SeqGetLabwareId(seq_TempDispense);
                str_DispensePosID = SeqGetPositionId(seq_TempDispense);
                str_DispenseLocation = StrConcat12(str_DispenseLocation, Translate("> "), Translate("channel "), int_ChIndex, Translate(": "), str_DispenseLabID, Translate(", "), str_DispensePosID, Translate(", "), flt_CurrentVolume, Translate(" uL"), Translate(""));
                str_DispenseChPattern = StrConcat2(str_DispenseChPattern, Translate("1"));
              }
              else
              {
                str_DispenseChPattern = StrConcat2(str_DispenseChPattern, Translate("0"));
              }
            }
            else
            {
              str_DispenseChPattern = StrConcat2(str_DispenseChPattern, Translate("0"));
            }
          }
        }
        seq_TempDispense.SetCurrentPosition(1);
        TRACE::TRACE04(Translate("     "), str_DispenseLocation, Translate(""), Translate(""));
        if(0){
          _GetLiquidFollowingForAllChannels(ML_STAR, arr_DispenseHeights, seq_TempDispense, BOOLEON::TRUE, BOOLEON::FALSE, i_flt_AspirationVolume, io_str_ChPattern, arr_LiquidFollowingDispense);
        }
        int_DispenseCheck = StrReplace(str_DispenseChPattern, Translate("1"), Translate("1"));
        if (int_DispenseCheck > 0)
        {
          _GetPartialChannelPatternForRepeatingPositions(ML_STAR, str_DispenseChPattern, seq_TempDispense, int_DispenseLoops, arr_DispenseChPatterns);
          {
            for(int_DispenseCount = 0; int_DispenseCount < int_DispenseLoops;)
            {
              int_DispenseCount = int_DispenseCount + 1;
              _GetVolumesInPositions(ML_STAR, seq_TempDispense, arr_CurrentDestVolumes);
              arr_DispenseHeights.SetSize(0);
              str_CurrentDispChPattern=arr_DispenseChPatterns.GetAt(int_DispenseCount-1);
              TRACE::TRACE02(str_CurrentDispChPattern, Translate(""));
              {
                for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
                {
                  int_ChIndex = int_ChIndex + 1;
                  _GetChannelPatternValue(str_CurrentDispChPattern, int_ChIndex, int_Value);
                  if (int_Value == 1)
                  {
                    seq_TempDispense.SetCurrentPosition(int_ChIndex);
                    flt_CurrentVolume=arr_CurrentDestVolumes.GetAt(int_ChIndex-1);
                    flt_VolumeAspirated=arr_VolumesAspirated.GetAt(int_ChIndex-1);
                    flt_NewVolume = flt_CurrentVolume + flt_VolumeAspirated;
                    TRACE::TRACE08(Translate("    "), Translate("Current Volume in well:  "), flt_CurrentVolume, Translate("     Volume aspirated:  "), flt_VolumeAspirated, Translate("    Added Volume"), flt_NewVolume, Translate(""));
                    str_LabID = SeqGetLabwareId(seq_TempDispense);
                    str_PosID = SeqGetPositionId(seq_TempDispense);
                    SeqRemoveAll(seq_VolumeUpdateSequence);
                    SeqAdd(seq_VolumeUpdateSequence, str_LabID, str_PosID);
                    seq_VolumeUpdateSequence.SetCurrentPosition(1);
                    VectorDb_Labware::LoadLabware(ML_STAR, str_LabID, str_PosID);
                    HSLLabwState::SetLabwareVolume(ML_STAR, seq_VolumeUpdateSequence, flt_NewVolume);
                    _GetHeightBasedOnVolume(str_ContainerConfigFile, flt_CurrentVolume, flt_CurrentHeight);
                    flt_DispenseHeight = flt_CurrentHeight - i_flt_SubmergeDepth;
                    if (flt_DispenseHeight <= 0.0)
                    {
                      flt_DispenseHeight = 2.0;
                    }
                    arr_DispenseHeights.AddAsLast(flt_DispenseHeight);
                  }
                  else
                  {
                    arr_DispenseHeights.AddAsLast(0.0);
                  }
                }
              }
              seq_TempDispense.SetCurrentPosition(1);
              Util2::Debug::TraceArray(Translate("Dispense Heights"), arr_DispenseHeights);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                	str_DispReturn = arrRetValues[2];
              }
              if (ret_strAllPipettingReturn != "")
              {
                ret_strAllPipettingReturn = StrConcat2(ret_strAllPipettingReturn, Translate("*"));
              }
              ret_strAllPipettingReturn = StrConcat4(ret_strAllPipettingReturn, str_AspReturn, Translate("&"), str_DispReturn);
            }
          }
        }
        else
        {
          str_DispReturn = Translate("");
        }
        DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 1, Translate(""));
        DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 4, Translate(""));
        seq_TempDispense.SetCurrentPosition(1);
        if (str_ErrorReturn != "")
        {
          TRACE::TRACE04(Translate("     "), Translate("Error Return Value:  "), str_ErrorReturn, Translate(""));
          str_NewChPattern = Translate("");
          int_TotalPositions = StepReturn::GetNumberOfPositions(str_ErrorReturn);
          arr_LiquidFollowingDistance.SetSize(0);
          _GetLiquidFollowingForAllChannels(ML_STAR, arr_LiquidHeights, seq_Temp, BOOLEON::TRUE, BOOLEON::FALSE, i_flt_DispenseBackVolume, io_str_ChPattern, arr_LiquidFollowingDistance);
          {
            for(int_ChIndex = 0; int_ChIndex < int_TotalPositions;)
            {
              int_ChIndex = int_ChIndex + 1;
              int_Position = StepReturn::GetPositionFromNum(int_ChIndex, str_ErrorReturn);
              int_ReturnErrorCode = StepReturn::GetSlaveError(int_Position, str_ErrorReturn);
              _GetChannelPatternValue(io_str_ChPattern, int_ChIndex, int_Value);
              if (int_Value == 1)
              {
                if (int_ReturnErrorCode == 0)
                {
                  str_NewChPattern = StrConcat2(str_NewChPattern, Translate("1"));
                }
                else
                {
                  str_NewChPattern = StrConcat2(str_NewChPattern, Translate("0"));
                }
              }
              else
              {
                str_NewChPattern = StrConcat2(str_NewChPattern, Translate("0"));
              }
            }
          }
          TRACE::TRACE04(Translate("     "), Translate("New Channel Pattern:  "), str_NewChPattern, Translate(""));
          io_str_ChPattern = str_NewChPattern;
        }
      }
    }
    if (G_FW_PIP_COM_SimulationMode == BOOLEON::TRUE)
    {
      arr_SecondPhaseHeights.SetSize(0);
      {
        for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
        {
          int_ChIndex = int_ChIndex + 1;
          arr_SecondPhaseHeights.AddAsLast(25.0);
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Volumes Transferred"), arr_VolumesAspirated);
    Util2::Debug::TraceArray(Translate("Second Phase Heights"), arr_SecondPhaseHeights);
    _SetHeightInfoToLabware(ML_STAR, BOOLEON::FALSE, seq_Temp, arr_SecondPhaseHeights);
    if (i_bln_ResetChPattern == BOOLEON::TRUE)
    {
      io_str_ChPattern = str_StartingChannelPattern;
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
    return (ret_strAllPipettingReturn);
  }

  private function _SetHeightInfoToLabware( device & ML_STAR, variable i_blnUpperHeights, sequence i_seqPositions, variable & i_arrHeights[] ) void {
    private variable i;
    private variable int_TotalPositions;
    private variable bln_LabwareValid;
    private variable str_PropertyReplace;
    private variable str_Property;
    private variable str_LabID;
    private variable flt_Height;
    private variable str_PosID;
    private variable int_TotalArray;
    int_TotalPositions = SeqGetTotal(i_seqPositions);
    int_TotalArray=i_arrHeights.GetSize();
    if (i_blnUpperHeights == BOOLEON::TRUE)
    {
      str_Property = Translate("HEIGHT_TOP_#");
    }
    else
    {
      str_Property = Translate("HEIGHT_BOTTOM_#");
    }
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seqPositions.SetCurrentPosition(i);
        if (i > int_TotalArray)
        {
          break;
        }
        flt_Height=i_arrHeights.GetAt(i-1);
        str_LabID = SeqGetLabwareId(i_seqPositions);
        bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_LabID);
        if (bln_LabwareValid == BOOLEON::TRUE)
        {
          str_PosID = SeqGetPositionId(i_seqPositions);
          str_PropertyReplace = str_Property;
          StrReplace(str_PropertyReplace, Translate("#"), str_PosID);
          _SetPropertiesForLabwareID(ML_STAR, str_LabID, str_PropertyReplace, flt_Height);
        }
      }
    }
  }

  private function _SetPropertiesForLabwareID( device & Instrument, variable i_strLabwareID, variable i_strPropertyKey, variable i_strProperyValue ) void {
    private variable strLabwareID;
    private variable strProperyValue;
    private variable strPropertyKey;
    strPropertyKey = StrConcat2(i_strPropertyKey, Translate(""));
    strProperyValue = StrConcat2(i_strProperyValue, Translate(""));
    strLabwareID = StrConcat2(i_strLabwareID, Translate(""));
    Trace("Lab ID:  ",i_strLabwareID," Property Key:  ",strPropertyKey,"  Property Value:  ",strProperyValue);
        {
            object   objDecklayout;
            variable str_PropertyValue;
            str_PropertyValue = strProperyValue;
            //variable strFunctionName("");
            //strFunctionName = ExtractFunctionName(GetFunctionName());
            // check input variables
            //if (!CheckString(i_strPropertyValue, "i_strPropertyValue", strFunctionName)) return(hslFalse);
            //if (!CheckString(i_strPropertyKey, "i_strPropertyKey", strFunctionName)) return(hslFalse);
            //if (!CheckString(i_strLabwareID, "i_strLabwareID", strFunctionName)) return(hslFalse);
            //StatusTrace(CMD_START, TRACE_LEVEL_DEBUG, "i_strLabwareID = " + i_strLabwareID + ", i_strPropertyKey = " + i_strPropertyKey + ", i_strPropertyValue = " + i_strPropertyValue, strFunctionName);
            //EnterSemaphore();
            objDecklayout = Instrument.GetDeckLayoutObject();
            //LeaveSemaphore();
            if (!objDecklayout.IsNull())
            {
                object objLabware;
                onerror goto HandleLabwareError;
                objLabware = objDecklayout.Labware(i_strLabwareID);
                onerror goto 0;
                err.Clear();
                if (!objLabware.IsNull())
                {
                    object   objEditLabware5;
                    object   objPropertyParameters;
                    objLabware.GetObject("IEditLabware5", objEditLabware5);
                    // prepare a new Pars object for the labware properties
                    objPropertyParameters.CreateObject("HXPARAMSLib.HxPars");
                    objPropertyParameters.Add(str_PropertyValue, strPropertyKey);
                    // check data from the decklayout
                    objEditLabware5.SetLabwrProperties(objPropertyParameters);
                    str_PropertyValue = objPropertyParameters.Item1(strPropertyKey);
                    objPropertyParameters.ReleaseObject();
                    objEditLabware5.ReleaseObject();
                    objDecklayout.ReleaseObject();
                    objLabware.ReleaseObject();
                    //StatusTrace(CMD_COMPLETE, TRACE_LEVEL_DEBUG, "", strFunctionName);
                    //return(hslTrue);
                }
                else
                {
                    //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find labware.", strFunctionName);
                    objDecklayout.ReleaseObject();
                    //return(hslFalse);
                }
            }
            else
            {
                //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Could not find decklayout.", strFunctionName);
                //return(hslFalse);
            }
            // runtime error handling
            HandleLabwareError :
            {
                variable errorID;
                errorID=err.GetId();
                err.Clear();
                if (errorID==-1574764487)
                {
                    //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "LabwareID is  unknown.", strFunctionName);
                    //return(hslFalse);
                }
                else
                {
                    //StatusTrace(CMD_ERRCOMPLETE, TRACE_LEVEL_RELEASE, "Unknown error occured.", strFunctionName);
                    //return(hslFalse);
                }
            }
        }
  }

  private function _GetHeightInfoFromLabware( device & ML_STAR, variable i_blnUpperHeights, sequence i_seqPositions, variable & o_arrHeights[] ) void {
    private variable bln_LabwareValid;
    private variable str_PropertyReplace;
    private variable i;
    private variable str_Property;
    private variable str_LabID;
    private variable str_PosID;
    private variable int_TotalPositions;
    private variable flt_Value;
    private variable str_Value;
    private variable int_ChIndex;
    o_arrHeights.SetSize( 0);
    int_TotalPositions = SeqGetTotal(i_seqPositions);
    if (i_blnUpperHeights == BOOLEON::TRUE)
    {
      str_Property = Translate("HEIGHT_TOP_#");
    }
    else
    {
      str_Property = Translate("HEIGHT_BOTTOM_#");
    }
    {
      for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        o_arrHeights.AddAsLast(0.0);
      }
    }
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        i_seqPositions.SetCurrentPosition(i);
        if (i > G_FW_PIP_COM_TotalChannels)
        {
          break;
        }
        str_LabID = SeqGetLabwareId(i_seqPositions);
        bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_LabID);
        if (bln_LabwareValid == BOOLEON::TRUE)
        {
          str_PosID = SeqGetPositionId(i_seqPositions);
          str_PropertyReplace = str_Property;
          StrReplace(str_PropertyReplace, Translate("#"), str_PosID);
          str_Value = DevGetLabwareData(ML_STAR, str_LabID, str_PropertyReplace);
          flt_Value = StrFVal(str_Value);
          o_arrHeights.SetAt(i-1, flt_Value);
        }
      }
    }
  }

  function PIP_PhaseAspirationRemainder( device & ML_STAR, variable i_str_ChPattern, variable i_str_LiquidClass, sequence i_seq_AspirationPosition, sequence i_seq_DispensePosition, variable i_bln_UseCLLD, variable i_flt_SafeHeightAbovePhase, variable i_flt_AdditionalAspirationVolume, variable i_flt_SubmergeHeight ) variable {
    private variable str_PosIDDisp;
    private variable bln_SimulationMode;
    private variable flt_VolumeToAspirate;
    private variable ret_strAllPipettingReturn;
    private variable int_PLLD;
    private variable flt_ZBottomDispesne;
    private variable bln_TipsLoaded;
    private variable bln_ProbabilityPassed;
    private variable str_LabIDDisp;
    private variable flt_ContainerDepth;
    private variable flt_NotUsed;
    private variable flt_ZClearanceHeightDispense;
    private variable int_TotalActiveChannels;
    private variable flt_ZBottom;
    private variable flt_ZMaximumHeight;
    private variable flt_ZMinimumHeightDispense;
    private variable str_ContainerConfig;
    private variable flt_TopHeightContainer;
    private variable flt_BottomHeight;
    private variable flt_TopHeight;
    private variable _strFunctionName;
    private variable str_LabID;
    private variable flt_AspirationHeight;
    private variable flt_BottomHeightContainer;
    private variable flt_ZClearanceHeight;
    private variable flt_ZMaximumHeightDispense;
    private variable flt_TopVolume;
    private variable flt_BottomVolume;
    private variable str_AspReturn;
    private variable str_DispReturn;
    private variable int_TotalChannels;
    private variable str_ContainerConfigDisp;
    private variable flt_ZMinimumHeight;
    private variable str_PosID;
    private variable flt_LiquidFollowingDistance;
    private variable int_CLLD;
    private variable str_ReturnChPattern;
    private variable flt_DispenseHeight;
    private variable int_Value;
    private variable flt_MaxTipVolume;
    private variable int_ChIndex;
    private sequence seq_Temp;
    private sequence seq_TempDispense;
    private variable arr_DispenseHeights[];
    private variable arr_XCoordDispense[];
    private variable arr_LiquidFollowingDistancesDisp[];
    private variable arr_MaxVolumes[];
    private variable arr_YCoordDispense[];
    private variable arr_LiquidFollowingDistances[];
    private variable arr_LiquidLevelHeights[];
    private variable arr_AspirationVolumes[];
    private variable arr_YCoord[];
    private variable arr_XCoord[];
    private variable arr_AspirationHeights[];
    private variable arr_TopPhaseHeight[];
    private variable arr_SecondPhaseHeight[];
    private variable flt_CurrentVolume;
    private variable flt_VolumeAspirated;
    private variable str_CurrentDispChPattern;
    private variable flt_NewVolume;
    private variable int_DispenseCount;
    private variable int_DispenseLoops;
    private variable flt_CurrentHeight;
    private sequence seq_VolumeUpdateSequence;
    private variable arr_CurrentDestVolumes[];
    private variable arr_DispenseChPatterns[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    ret_strAllPipettingReturn = Translate("");
    _InitLiquidClassStorage();
    bln_SimulationMode = Util::GetSimulationMode();
    FIRMWARE_PIPETTING_COMMANDS::GetChannelNumber1mL(ML_STAR, int_TotalChannels);
    arr_TopPhaseHeight.SetSize(0);
    arr_SecondPhaseHeight.SetSize(0);
    str_ReturnChPattern = Translate("");
    str_ReturnChPattern = StrFillRight(str_ReturnChPattern, Translate("0"), int_TotalChannels);
    i_str_ChPattern = StrConcat2(i_str_ChPattern, Translate(""));
    i_str_ChPattern = StrFillRight(i_str_ChPattern, Translate("0"), int_TotalChannels);
    int_TotalActiveChannels = StrReplace(i_str_ChPattern, Translate("1"), Translate("1"));
    if (int_TotalActiveChannels == 0)
    {
      MECC::TraceComment(Translate("CHANNEL PATTERN CONTAINS NO ACTIVE CHANNELS!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetNextSequenceSet(i_seq_AspirationPosition, i_str_ChPattern, seq_Temp);
    bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_Temp, i_str_ChPattern);
    if (bln_ProbabilityPassed == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("ASPIRATE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetNextSequenceSet(i_seq_DispensePosition, i_str_ChPattern, seq_TempDispense);
    if(0){
      bln_ProbabilityPassed = _ProbabilityCheck(ML_STAR, seq_TempDispense, i_str_ChPattern);
      if (bln_ProbabilityPassed == BOOLEON::FALSE)
      {
        MECC::TraceComment(Translate("DISPENSE SEQUENCE IS NOT SORTED CORRECTLY FOR THE USE OF THIS FUNCITON!\nSEQUENCE MUST BE SUCH THAT THE CHANNEL PATTERN USED CAN BE DONE AT ONE TIME WITHOUT NEEDING TO MOVE CHANNELS OUT OF THE WAY!"));
        TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
        return (ret_strAllPipettingReturn);
      }
    }
    bln_TipsLoaded = _EnsureTipsAreLoaded(ML_STAR, i_str_ChPattern);
    if (bln_TipsLoaded == BOOLEON::FALSE)
    {
      MECC::TraceComment(Translate("TIPS PICKED UP DO NOT MATCH THE CHANNEL PATTERN!"));
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::FALSE);
      return (ret_strAllPipettingReturn);
    }
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::FALSE, seq_Temp, arr_SecondPhaseHeight);
    _GetHeightInfoFromLabware(ML_STAR, BOOLEON::TRUE, seq_Temp, arr_TopPhaseHeight);
    _GetLabwareCoordinates(ML_STAR, seq_Temp, i_str_ChPattern, arr_XCoord, arr_YCoord, flt_ZBottom, flt_ZMinimumHeight, flt_ZMaximumHeight, flt_ZClearanceHeight);
    _GetLabwareCoordinates(ML_STAR, seq_TempDispense, i_str_ChPattern, arr_XCoordDispense, arr_YCoordDispense, flt_ZBottomDispesne, flt_ZMinimumHeightDispense, flt_ZMaximumHeightDispense, flt_ZClearanceHeightDispense);
    flt_ContainerDepth = flt_ZMaximumHeight - flt_ZMinimumHeight;
    if (i_bln_UseCLLD == BOOLEON::TRUE)
    {
      int_CLLD = 1;
      int_PLLD = 0;
    }
    else
    {
      int_CLLD = 0;
      int_PLLD = 1;
    }
    arr_MaxVolumes.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          FIRMWARE_PIPETTING_COMMANDS::Get_Tip_Volume_1mL(ML_STAR, int_ChIndex, flt_MaxTipVolume, flt_NotUsed);
          arr_MaxVolumes.AddAsLast(flt_MaxTipVolume);
        }
        else
        {
          arr_MaxVolumes.AddAsLast(0.0);
        }
      }
    }
    FIRMWARE_PIPETTING_COMMANDS::PIPFindLiquidLevel(ML_STAR, i_str_ChPattern, arr_XCoord, arr_YCoord, 245.0, flt_ZMaximumHeight, flt_ZClearanceHeight, flt_ZMinimumHeight, i_bln_UseCLLD, arr_LiquidLevelHeights);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::TRUE, T_PIP_TOOLS_ASP_FLOW_RATE, T_PIP_TOOLS_ASP_MIX_FLOW_RATE, T_PIP_TOOLS_ASP_AIR_TRANSPORT, T_PIP_TOOLS_ASP_BLOWOUT, T_PIP_TOOLS_ASP_SWAP, T_PIP_TOOLS_ASP_SETTLING, T_PIP_TOOLS_ASP_OVERASPIRATE, T_PIP_TOOLS_ASP_CLOT_RETRACT, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    _GetLiquidClassParams(i_str_LiquidClass, BOOLEON::FALSE, T_PIP_TOOLS_DISP_FLOW_RATE, T_PIP_TOOLS_DISP_MIX_FLOW_RATE, T_PIP_TOOLS_DISP_AIR_TRANSPORT, T_PIP_TOOLS_DISP_BLOWOUT, T_PIP_TOOLS_DISP_SWAP, T_PIP_TOOLS_DISP_SETTLING, flt_NotUsed, flt_NotUsed, T_PIP_TOOLS_DISP_STOP_FLOW, T_PIP_TOOLS_DISP_STOP_BACK, T_PIP_TOOLS_MAX_VOLUME, T_PIP_TOOLS_DISPENSE_MODE, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y);
    arr_AspirationVolumes.SetSize(0);
    arr_LiquidFollowingDistances.SetSize(0);
    arr_DispenseHeights.SetSize(0);
    arr_LiquidFollowingDistancesDisp.SetSize(0);
    arr_AspirationHeights.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < int_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        _GetChannelPatternValue(i_str_ChPattern, int_ChIndex, int_Value);
        if (int_Value == 1)
        {
          seq_Temp.SetCurrentPosition(int_ChIndex);
          seq_TempDispense.SetCurrentPosition(int_ChIndex);
          str_LabID = SeqGetLabwareId(seq_Temp);
          str_PosID = SeqGetPositionId(seq_Temp);
          str_LabIDDisp = SeqGetLabwareId(seq_TempDispense);
          str_PosIDDisp = SeqGetPositionId(seq_TempDispense);
          HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabID, str_PosID, str_ContainerConfig);
          HELPERLIBRARY::GetContainerConfigurationFile(ML_STAR, str_LabIDDisp, str_PosIDDisp, str_ContainerConfigDisp);
          flt_TopHeight=arr_LiquidLevelHeights.GetAt(int_ChIndex-1);
          flt_BottomHeightContainer=arr_SecondPhaseHeight.GetAt(int_ChIndex-1);
          flt_BottomHeightContainer = flt_BottomHeightContainer + i_flt_SafeHeightAbovePhase;
          flt_AspirationHeight = flt_BottomHeightContainer;
          arr_TopPhaseHeight.SetAt(int_ChIndex-1, flt_AspirationHeight);
          flt_BottomHeight = flt_BottomHeightContainer + flt_ZBottom;
          flt_TopHeightContainer = flt_TopHeight - flt_ZBottom;
          if (G_FW_PIP_COM_SimulationMode == BOOLEON::TRUE)
          {
            flt_TopHeight = flt_BottomHeight + 3.0;
            flt_TopHeightContainer = flt_TopHeight - flt_ZBottom;
          }
          flt_LiquidFollowingDistance = flt_TopHeight - flt_BottomHeight;
          TRACE::TRACE12(Translate("    "), Translate("Top Height:  "), flt_TopHeightContainer, Translate("    Bottom Height:  "), flt_BottomHeightContainer, Translate("  Liquid Following Distance:  "), flt_LiquidFollowingDistance, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          if (flt_LiquidFollowingDistance > 0.0)
          {
            if(0){
              flt_LiquidFollowingDistance = flt_LiquidFollowingDistance + 1.0;
            }
            _GetVolumeBasedOnHeight(str_ContainerConfig, flt_TopHeightContainer, flt_TopVolume);
            _GetVolumeBasedOnHeight(str_ContainerConfig, flt_BottomHeightContainer, flt_BottomVolume);
            flt_VolumeToAspirate = flt_TopVolume - flt_BottomVolume;
            flt_VolumeToAspirate = flt_VolumeToAspirate + i_flt_AdditionalAspirationVolume;
            if (flt_VolumeToAspirate > T_PIP_TOOLS_MAX_VOLUME)
            {
              flt_VolumeToAspirate = T_PIP_TOOLS_MAX_VOLUME;
            }
            if (flt_VolumeToAspirate < 0.0)
            {
              flt_VolumeToAspirate = 0.0;
            }
            TRACE::TRACE12(Translate("    "), Translate("Top Volume:  "), flt_TopVolume, Translate("    Bottom Volume:  "), flt_BottomVolume, Translate("  Aspiration Volume:  "), flt_VolumeToAspirate, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            if(0){
              _GetCorrectedValueForVolume(flt_VolumeToAspirate, T_PIP_TOOLS_ARR_CORRECTION_X, T_PIP_TOOLS_ARR_CORRECTION_Y, flt_VolumeToAspirate);
            }
            if (flt_VolumeToAspirate > T_PIP_TOOLS_MAX_VOLUME)
            {
              flt_VolumeToAspirate = T_PIP_TOOLS_MAX_VOLUME;
            }
            arr_AspirationVolumes.AddAsLast(flt_VolumeToAspirate);
          }
          else
          {
            arr_AspirationVolumes.AddAsLast(0.0);
          }
          if (flt_BottomHeightContainer < 0.0)
          {
            flt_BottomHeightContainer = 0.0;
          }
          arr_AspirationHeights.AddAsLast(flt_BottomHeightContainer);
        }
        else
        {
          arr_AspirationVolumes.AddAsLast(0.0);
          arr_AspirationHeights.AddAsLast(0.0);
        }
        arr_LiquidFollowingDistances.AddAsLast(0.0);
        arr_LiquidFollowingDistancesDisp.AddAsLast(0.0);
      }
    }
    seq_Temp.SetCurrentPosition(1);
    seq_TempDispense.SetCurrentPosition(1);
    Util2::Debug::TraceArray(Translate("Aspiration Volumes"), arr_AspirationVolumes);
    Util2::Debug::TraceArray(Translate("Aspiration Heights"), arr_AspirationHeights);
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 1, Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      	str_AspReturn = arrRetValues[2];
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_Temp, 4, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 1, Translate(""));
    _GetPartialChannelPatternForRepeatingPositions(ML_STAR, i_str_ChPattern, seq_TempDispense, int_DispenseLoops, arr_DispenseChPatterns);
    {
      for(int_DispenseCount = 0; int_DispenseCount < int_DispenseLoops;)
      {
        int_DispenseCount = int_DispenseCount + 1;
        _GetVolumesInPositions(ML_STAR, seq_TempDispense, arr_CurrentDestVolumes);
        arr_DispenseHeights.SetSize(0);
        str_CurrentDispChPattern=arr_DispenseChPatterns.GetAt(int_DispenseCount-1);
        TRACE::TRACE02(str_CurrentDispChPattern, Translate(""));
        {
          for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
          {
            int_ChIndex = int_ChIndex + 1;
            _GetChannelPatternValue(str_CurrentDispChPattern, int_ChIndex, int_Value);
            if (int_Value == 1)
            {
              seq_TempDispense.SetCurrentPosition(int_ChIndex);
              flt_CurrentVolume=arr_CurrentDestVolumes.GetAt(int_ChIndex-1);
              flt_VolumeAspirated=arr_AspirationVolumes.GetAt(int_ChIndex-1);
              flt_NewVolume = flt_CurrentVolume + flt_VolumeAspirated;
              TRACE::TRACE08(Translate("    "), Translate("Current Volume in well:  "), flt_CurrentVolume, Translate("     Volume aspirated:  "), flt_VolumeAspirated, Translate("    Added Volume"), flt_NewVolume, Translate(""));
              str_LabID = SeqGetLabwareId(seq_TempDispense);
              str_PosID = SeqGetPositionId(seq_TempDispense);
              SeqRemoveAll(seq_VolumeUpdateSequence);
              SeqAdd(seq_VolumeUpdateSequence, str_LabID, str_PosID);
              seq_VolumeUpdateSequence.SetCurrentPosition(1);
              HSLLabwState::SetLabwareVolume(ML_STAR, seq_VolumeUpdateSequence, flt_NewVolume);
              _GetHeightBasedOnVolume(str_ContainerConfigDisp, flt_CurrentVolume, flt_CurrentHeight);
              flt_DispenseHeight = flt_CurrentHeight - i_flt_SubmergeHeight;
              if (flt_DispenseHeight <= 0.0)
              {
                flt_DispenseHeight = 2.0;
              }
              arr_DispenseHeights.AddAsLast(flt_DispenseHeight);
            }
            else
            {
              arr_DispenseHeights.AddAsLast(0.0);
            }
          }
        }
        seq_TempDispense.SetCurrentPosition(1);
        Util2::Debug::TraceArray(Translate("Dispense Heights"), arr_DispenseHeights);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	str_DispReturn = arrRetValues[2];
        }
        if (ret_strAllPipettingReturn != "")
        {
          ret_strAllPipettingReturn = StrConcat2(ret_strAllPipettingReturn, Translate("*"));
        }
        ret_strAllPipettingReturn = StrConcat4(ret_strAllPipettingReturn, str_AspReturn, Translate("&"), str_DispReturn);
      }
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TempDispense, 4, Translate(""));
    Util2::Debug::TraceArray(Translate("Top Phase Liquid Levels"), arr_TopPhaseHeight);
    _SetHeightInfoToLabware(ML_STAR, BOOLEON::TRUE, seq_Temp, arr_TopPhaseHeight);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
    return (ret_strAllPipettingReturn);
  }

  private function _GetVolumesInPositions( device & ML_STAR, sequence i_seqPositionsToGetVolume, variable & o_arrCurrentVolumes[] ) void {
    private variable int_PosIndex;
    private variable int_TotalPositions;
    private variable int_ChIndex;
    private variable bln_LabwareValid;
    private variable str_LabID;
    private variable flt_Volume;
    private variable int_LabwareID;
    private variable int_DeckID;
    o_arrCurrentVolumes.SetSize( 0);
    o_arrCurrentVolumes.SetSize(0);
    {
      for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        o_arrCurrentVolumes.AddAsLast(0.0);
      }
    }
    int_TotalPositions = SeqGetTotal(i_seqPositionsToGetVolume);
    {
      for(int_PosIndex = 0; int_PosIndex < int_TotalPositions;)
      {
        int_PosIndex = int_PosIndex + 1;
        if (int_PosIndex > G_FW_PIP_COM_TotalChannels)
        {
          break;
        }
        flt_Volume = 0.0;
        str_LabID = SeqGetLabwareId(i_seqPositionsToGetVolume);
        bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_LabID);
        if (bln_LabwareValid == BOOLEON::TRUE)
        {
          int_DeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
          int_LabwareID = VectorDb_Labware::IsLabwareLoadedByLabwareId(int_DeckID, str_LabID);
          if (int_LabwareID == 0)
          {
            VectorDb_Labware::LoadLabware(ML_STAR, str_LabID, Translate(""));
          }
          onerror goto errLabel_4 ;
          err.Clear();
          flt_Volume = HSLLabwState::GetLabwareVolume(ML_STAR, i_seqPositionsToGetVolume);
          errLabel_4 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            flt_Volume = 0.0;
          }   /* end if from skip handler if no error */
        }
        o_arrCurrentVolumes.SetAt(int_PosIndex-1, flt_Volume);
        SeqIncrement(i_seqPositionsToGetVolume, 1);
      }
    }
  }

  private function _GetPartialChannelPatternForRepeatingPositions( device & ML_STAR, variable i_strChPattern, sequence i_seqPositions, variable & o_intLoopNumber, variable & o_arrChannelPatterns[] ) void {
    private variable flt_CurrentX;
    private variable flt_CurrentY;
    private variable flt_PositionA;
    private variable str_LabID;
    private variable str_CurrentChPattern;
    private variable flt_PositionX;
    private variable flt_PositionY;
    private variable flt_PositionZ;
    private variable str_PosID;
    private variable int_Value;
    private variable int_ChIndex;
    private variable flt_YOffsetDistance;
    private variable int_BackFill;
    private variable bln_LabwareValid;
    o_intLoopNumber = 0;
    o_arrChannelPatterns.SetSize( 0);
    o_intLoopNumber = 0;
    o_arrChannelPatterns.SetSize(0);
    i_strChPattern = StrFillRight(i_strChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
    flt_CurrentX = 0.0;
    flt_CurrentY = 99999.9;
    str_CurrentChPattern = Translate("");
    {
      for(int_ChIndex = 0; int_ChIndex < G_FW_PIP_COM_TotalChannels;)
      {
        int_ChIndex = int_ChIndex + 1;
        str_LabID = SeqGetLabwareId(i_seqPositions);
        str_PosID = SeqGetPositionId(i_seqPositions);
        SeqIncrement(i_seqPositions, 1);
        bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_LabID);
        if (bln_LabwareValid == BOOLEON::TRUE)
        {
          DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_PositionX, flt_PositionY, flt_PositionZ, flt_PositionA);
          _GetChannelPatternValue(i_strChPattern, int_ChIndex, int_Value);
        }
        else
        {
          int_Value = 0;
        }
        if (flt_CurrentX == 0.0)
        {
          if (int_Value == 1)
          {
            flt_CurrentX = flt_PositionX;
            flt_CurrentY = flt_PositionY;
          }
          str_CurrentChPattern = StrConcat2(str_CurrentChPattern, int_Value);
          TRACE::TRACE02(Translate("Ch pattern Set 1:  "), str_CurrentChPattern);
        }
        else
        {
          if (int_Value == 1)
          {
            if (flt_PositionX != flt_CurrentX)
            {
              str_CurrentChPattern = StrFillRight(str_CurrentChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
              o_arrChannelPatterns.AddAsLast(str_CurrentChPattern);
              flt_CurrentX = flt_PositionX;
              str_CurrentChPattern = Translate("");
              int_BackFill = int_ChIndex - 1;
              if (int_BackFill > 0)
              {
                str_CurrentChPattern = StrFillRight(str_CurrentChPattern, Translate("0"), int_BackFill);
              }
              str_CurrentChPattern = StrConcat2(str_CurrentChPattern, int_Value);
            }
            else
            {
              flt_YOffsetDistance = flt_CurrentY - flt_PositionY;
              if (flt_YOffsetDistance < G_FW_PIP_COM_Raster)
              {
                str_CurrentChPattern = StrFillRight(str_CurrentChPattern, Translate("0"), G_FW_PIP_COM_TotalChannels);
                o_arrChannelPatterns.AddAsLast(str_CurrentChPattern);
                flt_CurrentY = flt_PositionY;
                str_CurrentChPattern = Translate("");
                int_BackFill = int_ChIndex - 1;
                if (int_BackFill > 0)
                {
                  str_CurrentChPattern = StrFillRight(str_CurrentChPattern, Translate("0"), int_BackFill);
                }
                str_CurrentChPattern = StrConcat2(str_CurrentChPattern, int_Value);
              }
              else
              {
                flt_CurrentY = flt_PositionY;
                str_CurrentChPattern = StrConcat2(str_CurrentChPattern, int_Value);
              }
            }
          }
          else
          {
            flt_CurrentY = flt_CurrentY - G_FW_PIP_COM_Raster;
            str_CurrentChPattern = StrConcat2(str_CurrentChPattern, int_Value);
          }
        }
        if (int_ChIndex == G_FW_PIP_COM_TotalChannels)
        {
          o_arrChannelPatterns.AddAsLast(str_CurrentChPattern);
        }
      }
    }
    o_intLoopNumber=o_arrChannelPatterns.GetSize();
    Util2::Debug::TraceArray(Translate("Channel Patterns"), o_arrChannelPatterns);
  }

  function TOOL_OffsetArrayForChannels( device & ML_STAR, variable i_flt_ValueToOffset, variable & io_arr_Values[] ) void {
    private variable i;
    private variable flt_AdjustedValue;
    private variable flt_CurrentValue;
    private variable int_TotalPositions;
    FW_HELPERLIBRARY::InitFunction(ML_STAR);
    int_TotalPositions=io_arr_Values.GetSize();
    {
      for(i = 0; i < int_TotalPositions;)
      {
        i = i + 1;
        flt_CurrentValue=io_arr_Values.GetAt(i-1);
        flt_AdjustedValue = flt_CurrentValue + i_flt_ValueToOffset;
        io_arr_Values.SetAt(i-1, flt_AdjustedValue);
      }
    }
  }
} // library namespace
