 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "STAR Tools\\STAR MPH96 Tools.hs_" }
 namespace _Method { #include "STAR Tools\\STAR Channel Tools.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Pipetting Tools.hs_" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
#include "STAR Tools\\Channel Tools Test.res"
variable int_TotalSamples;
variable int_RemainingSamples;
variable str_ChPattern;
sequence seq_SortedPositions;
variable str_TipCounter;
variable int_TotalColumns;
variable int_Remainder;
variable bln_TipLoaded;
sequence arr_seq_Reservoirs[];
variable arr_VolumesMeasured[];
variable flt_MeasuredVolume;
variable str_AspReturn;
variable str_LiquidReturn;
variable bln_LabwareFound;
sequence seq_ReagentTarget;
variable str_TipPickUpReturn;
variable str_IncorrectChannels;
variable bln_TipsRightType;
sequence seq_IncorrectPositions;
variable str_ChannelPattern;
variable str_TipCounter1000;
variable str_TipCounter300;
variable loopCounter1;
variable arr_DispenseHeights[];
variable arr_MixHeights[];
variable arr_AspirationHeights[];
variable str_ReturnValues;
variable arr_AspReturns[];
variable arr_DispReturns[];
variable arr_LiquidLevelHeights[];
global device ML_STAR ("STAR Tools\\Channel Tools Test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    STAR_TIP_TOOLS::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    SPT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    STAR_MPH96_TOOLS::MOVE_MPH96ToBack(ML_STAR);
    int_TotalSamples = 71;
    STAR_TIP_TOOLS::GetTipCounter(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, str_TipCounter);
    STAR_TIP_TOOLS::GetTipCounter(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, str_TipCounter300);
    STAR_TIP_TOOLS::GetTipCounter(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, str_TipCounter1000);
    ML_STAR.seq_SourceTubes.SetCount(int_TotalSamples);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, str_TipCounter, -1);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, str_TipCounter300, -1);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, str_TipCounter1000, -1);
    SeqCopySequence(seq_ReagentTarget, ML_STAR.Cos_96_DW_1mL_0001);
    seq_ReagentTarget.SetCount(int_TotalSamples);
    {
      while (
         (seq_ReagentTarget.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.rgt_cont_60ml_BC_A00_0001, 1, seq_ReagentTarget, 1);
        STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, seq_ReagentTarget, str_TipCounter, str_ChPattern);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_ReagentTarget.GetCurrentPosition() > 0 && seq_ReagentTarget.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetMax(ML_STAR.rgt_cont_60ml_BC_A00_0001.GetTotal());
      seq_ReagentTarget.SetMax(seq_ReagentTarget.GetTotal());
      ML_STAR.rgt_cont_60ml_BC_A00_0001.SetCurrentPosition(1);
      seq_ReagentTarget.SetCurrentPosition(1);
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    bln_LabwareFound = STAR_CHANNEL_TOOLS::MOVE_CheckPlateWithTwoChannels(ML_STAR, 8, ML_STAR.Cos_96_DW_1mL_0001, 71.0);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    arr_seq_Reservoirs.SetSize(0);
    arr_seq_Reservoirs.AddAsLast(ML_STAR.rgt_cont_60ml_BC_A00_0001);
    arr_seq_Reservoirs.AddAsLast(ML_STAR.rgt_cont_60ml_BC_A00_0002);
    arr_seq_Reservoirs.AddAsLast(ML_STAR.rgt_cont_60ml_BC_A00_0003);
    arr_seq_Reservoirs.AddAsLast(ML_STAR.rgt_cont_60ml_BC_A00_0004);
    arr_seq_Reservoirs.AddAsLast(ML_STAR.rgt_cont_60ml_BC_A00_0005);
    STAR_CHANNEL_TOOLS::LIQUID_LEVEL_MeasureLiquidMulti(ML_STAR, arr_seq_Reservoirs, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.Waste, Translate(""), 1, 1, arr_VolumesMeasured);
    STAR_CHANNEL_TOOLS::LIQUID_LEVEL_MeasureLiquidSingle(ML_STAR, ML_STAR.rgt_cont_60ml_BC_A00_0003, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar50ulTipWithFilter, Translate(""), 0, 1, 1, flt_MeasuredVolume);
    int_RemainingSamples = int_TotalSamples;
    {
      while (int_RemainingSamples > 0)
      {
        int_RemainingSamples = STAR_CHANNEL_TOOLS::CHAN_ACCESS_Sort1Sequence(ML_STAR, ML_STAR.seq_SourceTubes, 0, 0, 1, 1, 0, seq_SortedPositions, str_ChPattern);
        STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, str_TipCounter, str_ChPattern);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          	str_TipPickUpReturn = arrRetValues[2];
        }
        bln_TipsRightType = STAR_TIP_TOOLS::TipTypeCheck1mL(ML_STAR, str_TipPickUpReturn, seq_IncorrectPositions, str_IncorrectChannels);
        if (bln_TipsRightType == 0)
        {
          {
            while (bln_TipsRightType == 0)
            {
              MECC::TraceComment(Translate("WRONG TIPS PICKED UP!"));
              Trace("Incorrect Channel Pattern:  ",str_IncorrectChannels);
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, str_TipCounter, str_IncorrectChannels);
              {
                	variable arrRetValues[];
                	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                	str_TipPickUpReturn = arrRetValues[2];
              }
              bln_TipsRightType = STAR_TIP_TOOLS::TipTypeCheck1mL(ML_STAR, str_TipPickUpReturn, seq_IncorrectPositions, str_IncorrectChannels);
            }
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	str_AspReturn = arrRetValues[2];
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
          	str_LiquidReturn = arrRetValues[2];
        }
        STAR_CHANNEL_TOOLS::LIQUID_LEVEL_ReturnVolumesFromLiquidLevel(ML_STAR, str_AspReturn, str_LiquidReturn, 1, arr_VolumesMeasured);
      }
    }
    ML_STAR.Cos_96_DW_1mL_0001.SetCurrentPosition(1);
    ML_STAR.Cos_96_DW_1mL_0001.SetCount(96);
    STAR_MPH96_TOOLS::TOOL_PickUpNextMPH96Tips(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, str_TipCounter);
    STAR_MPH96_TOOLS::TOOL_GetTipPresence(ML_STAR, bln_TipLoaded);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    int_TotalColumns = int_TotalSamples / 8;
    int_Remainder = int_TotalSamples % 8;
    if (int_Remainder > 0)
    {
      int_TotalColumns = int_TotalColumns + 1;
    }
    STAR_MPH96_TOOLS::TIP_OFFSET_PickUpTips_Column(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.TipSupport_0001, int_TotalColumns, str_TipCounter, 1);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, ML_STAR.rgt_cont_60ml_BC_A00_0001, str_TipCounter1000, str_ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, str_TipCounter1000);
    SPT::PIP_FindLiquidLevel(ML_STAR, str_ChannelPattern, ML_STAR.rgt_cont_60ml_BC_A00_0001, 2, 1, arr_LiquidLevelHeights);
    SPT::TOOL_OffsetArrayForChannels(ML_STAR, -2.0, arr_LiquidLevelHeights);
    SPT::TOOL_BuildArrayForChannels(ML_STAR, 2.0, arr_MixHeights);
    SPT::PIP_AspirateFromFixedHeight(ML_STAR, str_ChannelPattern, ML_STAR.rgt_cont_60ml_BC_A00_0001, arr_MixHeights, 3, 0, Translate("HighVolume_Water_DispenseSurface_Empty"), 1000.0, 0.0);
    SPT::PIP_AspirateFromFixedHeight(ML_STAR, str_ChannelPattern, ML_STAR.rgt_cont_60ml_BC_A00_0001, arr_LiquidLevelHeights, 0, 1, Translate("HighVolume_Water_DispenseSurface_Empty"), 1000.0, 0.0);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.Cos_96_DW_1mL_0001, str_TipCounter300, str_ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, str_TipCounter300);
    SPT::TOOL_BuildArrayForChannels(ML_STAR, 1.0, arr_AspirationHeights);
    SPT::TOOL_BuildArrayForChannels(ML_STAR, 5.0, arr_DispenseHeights);
    SPT::TOOL_BuildArrayForChannels(ML_STAR, 1.0, arr_MixHeights);
    {
      for(loopCounter1 = 0; loopCounter1 < 11;)
      {
        loopCounter1 = loopCounter1 + 1;
        SPT::PIP_AspirateFromFixedHeight(ML_STAR, str_ChannelPattern, ML_STAR.Cos_96_DW_1mL_0001, arr_AspirationHeights, 1, 0, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty"), 100.0, 15.0);
        SPT::PIP_ProgressSequenceFromChannelPattern(str_ChannelPattern, 0, ML_STAR.Cos_96_DW_1mL_0001);
        SPT::PIP_DispenseToFixedHeight(ML_STAR, str_ChannelPattern, ML_STAR.Cos_96_DW_1mL_0001, arr_DispenseHeights, 3, 1, 100.0, 5.0);
        SPT::PIP_MixFromFixedHeight(ML_STAR, str_ChannelPattern, ML_STAR.Cos_96_DW_1mL_0001, arr_MixHeights, 3, 0, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty"), 100.0, 3);
      }
    }
    SPT::PIP_AspirateFromFixedHeight(ML_STAR, str_ChannelPattern, ML_STAR.Cos_96_DW_1mL_0001, arr_AspirationHeights, 0, 0, Translate("StandardVolumeFilter_Water_DispenseSurface_Empty"), 100.0, 15.0);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.Cos_96_DW_1mL_0001.SetCurrentPosition(1);
    ML_STAR.SMP_CAR_32_12x100_A00_0001.SetCurrentPosition(1);
    ML_STAR.SMP_CAR_32_12x100_A00_0002.SetCurrentPosition(1);
    ML_STAR.SMP_CAR_32_12x100_A00_0003.SetCurrentPosition(1);
    STAR_TIP_TOOLS::Optimized1mLTipPickup(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, ML_STAR.SMP_CAR_32_12x100_A00_0001, str_TipCounter1000, str_ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, str_TipCounter1000);
    str_ReturnValues = SPT::PIP_PhaseAspiration(ML_STAR, str_ChannelPattern, 1, Translate("PipettingTools_PhaseAspiration_HighVolume_Serum_DispenseSurface_Empty_PoolingPlasma_TADM"), ML_STAR.SMP_CAR_32_12x100_A00_0001, ML_STAR.SMP_CAR_32_12x100_A00_0002, 1, 1000.0, 100.0, 2.0, 5000.0, 1);
    SPT::PIP_PhaseAspirationParseReturnValue(str_ReturnValues, arr_AspReturns, arr_DispReturns);
    Util2::Debug::TraceArray_2(Translate("Returns from first Phase Aspiration"), arr_AspReturns, arr_DispReturns);
    SPT::PIP_PhaseAspirationRemainder(ML_STAR, str_ChannelPattern, Translate("PipettingTools_PhaseAspiration_HighVolume_Serum_DispenseSurface_Empty_LastStep"), ML_STAR.SMP_CAR_32_12x100_A00_0001, ML_STAR.SMP_CAR_32_12x100_A00_0002, 1, -0.5, 200.0, 2.0);
    SPT::PIP_PhaseAspirationSmallLayer(ML_STAR, str_ChannelPattern, Translate("PipettingTools_PhaseAspiration_HighVolume_BuffyCoat_DispenseSurface_Empty"), ML_STAR.SMP_CAR_32_12x100_A00_0001, ML_STAR.SMP_CAR_32_12x100_A00_0003, 100.0, 4.0, 3, 5.0);
    SPT::PIP_ProgressSequenceFromChannelPattern(str_ChannelPattern, 1, ML_STAR.SMP_CAR_32_12x100_A00_0001);
    SPT::PIP_ProgressSequenceFromChannelPattern(str_ChannelPattern, 1, ML_STAR.SMP_CAR_32_12x100_A00_0002);
    SPT::PIP_ProgressSequenceFromChannelPattern(str_ChannelPattern, 1, ML_STAR.SMP_CAR_32_12x100_A00_0003);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_MPH96_TOOLS::TIP_OFFSET_CleanUpTips_Column(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.TipSupport_0001, str_TipCounter);
    STAR_MPH96_TOOLS::MOVE_MPH96ToBack(ML_STAR);
    STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, ML_STAR.MlStar50ulTipWithFilter);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, str_TipCounter);
    STAR_TIP_TOOLS::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
    SPT::_ExitLibrary();
  } }
