#pragma once
#include "Hamilton MPE2\\HSLMPELib.hsl"
#include "BioNex HiG\\HSLHiGCentrifugeLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace STAR_OEM_TOOLKIT_MPE {
  function MPE2_ClampFilterPlate( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_ClearSourceConfiguration( variable i_intDeviceID, variable i_blnReset, variable & o_stepReturn ) void ;
  function MPE2_CollectionPlatePlaced( variable i_intDeviceID, variable i_floatCollectionPlateHeight, variable i_floatOffsetFromNozzles, variable & o_stepReturn ) void ;
  function MPE2_CollectionPlateRemoved( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_ConnectUsingCOM( variable i_intComPort, variable i_intBaudRate, variable i_blnSimulationMode, variable i_MpeOptions, variable & o_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_ConnectUsingIP( variable i_strInstrumentName, variable i_intPortNumber, variable i_blnSimulationMode, variable i_MpeOptions, variable & o_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_CustomDispense( variable i_intDeviceID, variable i_intSourceID, variable i_fltWellVolume, variable i_fltFlowRateAspirate, variable i_fltFlowRateDispense, variable i_fltNeedleOffset, variable i_fltEdgeToWellOffset, variable & i_ArrayWellToWellOffset[], variable i_intDelayBetweenAspirateAndDispense, variable i_intDelayBetweenDispense, variable & o_stepReturn ) void ;
  function MPE2_Disconnect( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_Dispense( variable i_intDeviceID, variable i_intSourceID, variable i_fltWellVolume, variable i_fltFlowRate, variable i_fltNeedleOffset, variable & o_stepReturn ) void ;
  function MPE2_Evaporate( variable i_intDeviceID, variable i_fltPlateHeight, variable i_fltNeedleOffset, variable i_fltWellDepth, variable i_intEvaporateTime, variable & o_stepReturn ) void ;
  function MPE2_EvaporateEnd( variable i_intDeviceID, variable i_intTimeOut, variable & o_stepReturn ) void ;
  function MPE2_EvaporatePrepare( variable i_intDeviceID, variable i_fltTemperature, variable i_fltPressure, variable i_intTimeOut, variable & o_stepReturn ) void ;
  function MPE2_EvaporateWithRate( variable i_intDeviceID, variable i_fltPlateHeight, variable i_fltNeedeOffset, variable i_fltEvaporatorTravelDistance, variable i_intEvaporateTime, variable i_fltFollowRate, variable & o_stepReturn ) void ;
  function MPE2_FilterPlatePlaced( variable i_intDeviceID, variable i_fltFilterHeight, variable i_fltNozzleHeight, variable & o_stepReturn ) void ;
  function MPE2_FilterPlateRemoved( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_Flush( variable i_intDeviceID, variable i_fltWellVolume, variable i_fltFlowRate, variable i_intWasteContainterID, variable & o_stepReturn ) void ;
  function MPE2_GetContainerCalibration( variable i_intDeviceID, variable i_intSourceID, variable & o_fltCapacityVolume, variable & o_intEmptyReading, variable & o_intFullReading, variable & o_strCalibrationDate, variable & o_stepReturn ) void ;
  function MPE2_GetCurrentHeaterStatus( variable i_intDeviceID, variable i_blnReset, variable & o_fltCurrentEvapTemperature, variable & o_fltCurrentGasTemp, variable & o_intHeating, variable & o_stepReturn ) void ;
  function MPE2_GetHeaterTemperatureRange( variable i_intDeviceID, variable i_blnReset, variable & o_fltMinEvapTemperature, variable & o_fltMaxEvapTemperature, variable & o_fltMinGasTemperature, variable & o_fltMaxGasTemperature, variable & o_fltTargetTemperature, variable & o_intHeating, variable & o_stepReturn ) void ;
  function MPE2_GetPressureSensorReadings( variable i_intDeviceID, variable & o_fltInputPressureSensor, variable & o_fltManifoldPressureSensor, variable & o_fltHighPressureSensor, variable & o_fltLowPressureSensor, variable & o_stepReturn ) void ;
  function MPE2_GetSourceConfiguration( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_GetTemperatureRange( variable i_intDeviceID, variable & o_fltIMinimumTemperature, variable & o_fltMaximumTemperature, variable & o_stepReturn ) void ;
  function MPE2_GetVacuumStatus( variable i_intDeviceID, variable & o_intVacuumActive, variable & o_stepReturn ) void ;
  function MPE2_Initialize( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_InitializeWithParameters( variable i_intDeviceID, variable i_blnSmart, variable i_intWasteContainerID, variable i_intVacuumRunTime, variable i_blnDisableVacuumCheck, variable & o_stepReturn ) void ;
  function MPE2_MeasureEmptyContainer( variable i_intDeviceID, variable i_intSourceID, variable & o_intSensorReading, variable & o_stepReturn ) void ;
  function MPE2_MeasureFullContainer( variable i_intDeviceID, variable i_intSourceID, variable & o_intSensorReading, variable & o_stepReturn ) void ;
  function MPE2_Prime( variable i_intDeviceID, variable i_intSourceID, variable i_fltWellVolume, variable i_fltFlowRate, variable i_intWasteContainerID, variable & o_stepReturn ) void ;
  function MPE2_ProcessFilterToCollectionPlate( variable i_intDeviceID, variable i_strControlPoints, variable i_blnReturnPlateToIntegrationArea, variable & o_stepReturn ) void ;
  function MPE2_ProcessFilterToWasteContainer( variable i_intDeviceID, variable i_strControlPoints, variable i_blnReturnPlateToIntegrationArea, variable i_intWasteContainerID, variable i_blnDisableVacuumCheck, variable & o_stepReturn ) void ;
  function MPE2_RetrieveFilterPlate( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_SaveContainerCalibration( variable i_intDeviceID, variable i_intSourceID, variable i_fltVolume, variable & o_stepReturn ) void ;
  function MPE2_SetSourceConfiguration( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function MPE2_StartContainerCalibration( variable i_intDeviceID, variable i_intSourceID, variable i_fltVolume, variable & o_stepReturn ) void ;
  function MPE2_StartVacuum( variable i_intDeviceID, variable i_intWasteContainerID, variable i_blnDisableVacuum, variable & o_stepReturn ) void ;
  function MPE2_StopVacuum( variable i_intDeviceID, variable & o_stepReturn ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function MPE2_ConnectUsingIP( variable i_strInstrumentName, variable i_intPortNumber, variable i_blnSimulationMode, variable i_MpeOptions, variable & o_intDeviceID, variable & o_stepReturn ) void {
    o_intDeviceID = 0;
    o_stepReturn = 0;
    onerror goto errLabel_1 ;
    err.Clear();
    o_stepReturn = HSLMPELib::ConnectUsingIP(i_strInstrumentName, i_intPortNumber, i_blnSimulationMode, o_intDeviceID, i_MpeOptions);
    o_stepReturn = Translate("1");
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_ConnectUsingCOM( variable i_intComPort, variable i_intBaudRate, variable i_blnSimulationMode, variable i_MpeOptions, variable & o_intDeviceID, variable & o_stepReturn ) void {
    o_intDeviceID = 0;
    o_stepReturn = 0;
    onerror goto errLabel_2 ;
    err.Clear();
    o_stepReturn = HSLMPELib::ConnectUsingCOM(i_intComPort, i_intBaudRate, i_blnSimulationMode, o_intDeviceID, i_MpeOptions);
    o_stepReturn = Translate("1");
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_ClampFilterPlate( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_3 ;
    err.Clear();
    o_stepReturn = HSLMPELib::ClampFilterPlate(i_intDeviceID);
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_ClearSourceConfiguration( variable i_intDeviceID, variable i_blnReset, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_4 ;
    err.Clear();
    o_stepReturn = HSLMPELib::ClearSourceConfiguration(i_intDeviceID, i_blnReset);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_CollectionPlatePlaced( variable i_intDeviceID, variable i_floatCollectionPlateHeight, variable i_floatOffsetFromNozzles, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_5 ;
    err.Clear();
    o_stepReturn = HSLMPELib::CollectionPlatePlaced(i_intDeviceID, i_floatCollectionPlateHeight, i_floatOffsetFromNozzles);
    o_stepReturn = Translate("1");
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_CollectionPlateRemoved( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_6 ;
    err.Clear();
    o_stepReturn = HSLMPELib::CollectionPlateRemoved(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_CustomDispense( variable i_intDeviceID, variable i_intSourceID, variable i_fltWellVolume, variable i_fltFlowRateAspirate, variable i_fltFlowRateDispense, variable i_fltNeedleOffset, variable i_fltEdgeToWellOffset, variable & i_ArrayWellToWellOffset[], variable i_intDelayBetweenAspirateAndDispense, variable i_intDelayBetweenDispense, variable & o_stepReturn ) void {
    private variable placeholder[];
    o_stepReturn = 0;
    onerror goto errLabel_7 ;
    err.Clear();
    o_stepReturn = HSLMPELib::CustomDispense(i_intDeviceID, i_intSourceID, i_fltWellVolume, i_fltFlowRateAspirate, i_fltFlowRateDispense, i_fltNeedleOffset, i_fltEdgeToWellOffset, placeholder, i_intDelayBetweenAspirateAndDispense, i_intDelayBetweenDispense);
    o_stepReturn = Translate("1");
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_Disconnect( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_8 ;
    err.Clear();
    o_stepReturn = HSLMPELib::Disconnect(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_Dispense( variable i_intDeviceID, variable i_intSourceID, variable i_fltWellVolume, variable i_fltFlowRate, variable i_fltNeedleOffset, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_9 ;
    err.Clear();
    o_stepReturn = HSLMPELib::Dispense(i_intDeviceID, i_intSourceID, i_fltWellVolume, i_fltFlowRate, i_fltNeedleOffset);
    o_stepReturn = Translate("1");
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_Evaporate( variable i_intDeviceID, variable i_fltPlateHeight, variable i_fltNeedleOffset, variable i_fltWellDepth, variable i_intEvaporateTime, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_10 ;
    err.Clear();
    o_stepReturn = HSLMPELib::Evaporate(i_intDeviceID, i_fltPlateHeight, i_fltNeedleOffset, i_fltWellDepth, i_intEvaporateTime);
    o_stepReturn = Translate("1");
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_EvaporateEnd( variable i_intDeviceID, variable i_intTimeOut, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_11 ;
    err.Clear();
    o_stepReturn = HSLMPELib::EvaporateEnd(i_intDeviceID, i_intTimeOut);
    o_stepReturn = Translate("1");
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_EvaporatePrepare( variable i_intDeviceID, variable i_fltTemperature, variable i_fltPressure, variable i_intTimeOut, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_12 ;
    err.Clear();
    o_stepReturn = HSLMPELib::EvaporatePrepare(i_intDeviceID, i_fltTemperature, i_fltPressure, i_intTimeOut);
    o_stepReturn = Translate("1");
    errLabel_12 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_EvaporateWithRate( variable i_intDeviceID, variable i_fltPlateHeight, variable i_fltNeedeOffset, variable i_fltEvaporatorTravelDistance, variable i_intEvaporateTime, variable i_fltFollowRate, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_13 ;
    err.Clear();
    o_stepReturn = HSLMPELib::EvaporateWithRate(i_intDeviceID, i_fltPlateHeight, i_fltNeedeOffset, i_fltEvaporatorTravelDistance, i_intEvaporateTime, i_fltFollowRate);
    o_stepReturn = Translate("1");
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_FilterPlatePlaced( variable i_intDeviceID, variable i_fltFilterHeight, variable i_fltNozzleHeight, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_14 ;
    err.Clear();
    o_stepReturn = HSLMPELib::FilterPlatePlaced(i_intDeviceID, i_fltFilterHeight, i_fltNozzleHeight);
    o_stepReturn = Translate("1");
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_FilterPlateRemoved( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_15 ;
    err.Clear();
    o_stepReturn = HSLMPELib::FilterPlateRemoved(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_15 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_Flush( variable i_intDeviceID, variable i_fltWellVolume, variable i_fltFlowRate, variable i_intWasteContainterID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_16 ;
    err.Clear();
    o_stepReturn = HSLMPELib::Flush(i_intDeviceID, i_fltWellVolume, i_fltFlowRate, i_intWasteContainterID);
    o_stepReturn = Translate("1");
    errLabel_16 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetContainerCalibration( variable i_intDeviceID, variable i_intSourceID, variable & o_fltCapacityVolume, variable & o_intEmptyReading, variable & o_intFullReading, variable & o_strCalibrationDate, variable & o_stepReturn ) void {
    o_fltCapacityVolume = 0;
    o_intEmptyReading = 0;
    o_intFullReading = 0;
    o_strCalibrationDate = 0;
    o_stepReturn = 0;
    onerror goto errLabel_17 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetContainerCalibration(i_intDeviceID, i_intSourceID, o_fltCapacityVolume, o_intEmptyReading, o_intFullReading, o_strCalibrationDate);
    o_stepReturn = Translate("1");
    errLabel_17 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetCurrentHeaterStatus( variable i_intDeviceID, variable i_blnReset, variable & o_fltCurrentEvapTemperature, variable & o_fltCurrentGasTemp, variable & o_intHeating, variable & o_stepReturn ) void {
    o_fltCurrentEvapTemperature = 0;
    o_fltCurrentGasTemp = 0;
    o_intHeating = 0;
    o_stepReturn = 0;
    onerror goto errLabel_18 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetCurrentHeaterStatus(i_intDeviceID, i_blnReset, o_fltCurrentEvapTemperature, o_fltCurrentGasTemp, o_intHeating);
    o_stepReturn = Translate("1");
    errLabel_18 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetHeaterTemperatureRange( variable i_intDeviceID, variable i_blnReset, variable & o_fltMinEvapTemperature, variable & o_fltMaxEvapTemperature, variable & o_fltMinGasTemperature, variable & o_fltMaxGasTemperature, variable & o_fltTargetTemperature, variable & o_intHeating, variable & o_stepReturn ) void {
    o_fltMinEvapTemperature = 0;
    o_fltMaxEvapTemperature = 0;
    o_fltMinGasTemperature = 0;
    o_fltMaxGasTemperature = 0;
    o_fltTargetTemperature = 0;
    o_intHeating = 0;
    o_stepReturn = 0;
    onerror goto errLabel_19 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetHeaterTemperatureRange(i_intDeviceID, i_blnReset, o_fltMinEvapTemperature, o_fltMaxEvapTemperature, o_fltMinGasTemperature, o_fltMaxGasTemperature, o_fltTargetTemperature, o_intHeating);
    o_stepReturn = Translate("1");
    errLabel_19 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetPressureSensorReadings( variable i_intDeviceID, variable & o_fltInputPressureSensor, variable & o_fltManifoldPressureSensor, variable & o_fltHighPressureSensor, variable & o_fltLowPressureSensor, variable & o_stepReturn ) void {
    o_fltInputPressureSensor = 0;
    o_fltManifoldPressureSensor = 0;
    o_fltHighPressureSensor = 0;
    o_fltLowPressureSensor = 0;
    o_stepReturn = 0;
    onerror goto errLabel_20 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetPressureSensorReadings(i_intDeviceID, o_fltInputPressureSensor, o_fltManifoldPressureSensor, o_fltHighPressureSensor, o_fltLowPressureSensor);
    o_stepReturn = Translate("1");
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetTemperatureRange( variable i_intDeviceID, variable & o_fltIMinimumTemperature, variable & o_fltMaximumTemperature, variable & o_stepReturn ) void {
    o_fltIMinimumTemperature = 0;
    o_fltMaximumTemperature = 0;
    o_stepReturn = 0;
    onerror goto errLabel_21 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetTemperatureRange(i_intDeviceID, o_fltIMinimumTemperature, o_fltMaximumTemperature);
    o_stepReturn = Translate("1");
    errLabel_21 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetVacuumStatus( variable i_intDeviceID, variable & o_intVacuumActive, variable & o_stepReturn ) void {
    o_intVacuumActive = 0;
    o_stepReturn = 0;
    onerror goto errLabel_22 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetVacuumStatus(i_intDeviceID, o_intVacuumActive);
    o_stepReturn = Translate("1");
    errLabel_22 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_Initialize( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_23 ;
    err.Clear();
    o_stepReturn = HSLMPELib::Initialize(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_23 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_InitializeWithParameters( variable i_intDeviceID, variable i_blnSmart, variable i_intWasteContainerID, variable i_intVacuumRunTime, variable i_blnDisableVacuumCheck, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_24 ;
    err.Clear();
    o_stepReturn = HSLMPELib::InitializeWithParameters(i_intDeviceID, i_blnSmart, i_intWasteContainerID, i_intVacuumRunTime, i_blnDisableVacuumCheck);
    o_stepReturn = Translate("1");
    errLabel_24 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_MeasureEmptyContainer( variable i_intDeviceID, variable i_intSourceID, variable & o_intSensorReading, variable & o_stepReturn ) void {
    o_intSensorReading = 0;
    o_stepReturn = 0;
    onerror goto errLabel_25 ;
    err.Clear();
    o_stepReturn = HSLMPELib::MeasureEmptyContainer(i_intDeviceID, i_intSourceID, o_intSensorReading);
    o_stepReturn = Translate("1");
    errLabel_25 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_MeasureFullContainer( variable i_intDeviceID, variable i_intSourceID, variable & o_intSensorReading, variable & o_stepReturn ) void {
    o_intSensorReading = 0;
    o_stepReturn = 0;
    onerror goto errLabel_26 ;
    err.Clear();
    o_stepReturn = HSLMPELib::MeasureFullContainer(i_intDeviceID, i_intSourceID, o_intSensorReading);
    o_stepReturn = Translate("1");
    errLabel_26 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_Prime( variable i_intDeviceID, variable i_intSourceID, variable i_fltWellVolume, variable i_fltFlowRate, variable i_intWasteContainerID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_27 ;
    err.Clear();
    o_stepReturn = HSLMPELib::Prime(i_intDeviceID, i_intSourceID, i_fltWellVolume, i_fltFlowRate, i_intWasteContainerID);
    o_stepReturn = Translate("1");
    errLabel_27 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_ProcessFilterToCollectionPlate( variable i_intDeviceID, variable i_strControlPoints, variable i_blnReturnPlateToIntegrationArea, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_28 ;
    err.Clear();
    o_stepReturn = HSLMPELib::ProcessFilterToCollectionPlate(i_intDeviceID, i_strControlPoints, i_blnReturnPlateToIntegrationArea);
    o_stepReturn = Translate("1");
    errLabel_28 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_ProcessFilterToWasteContainer( variable i_intDeviceID, variable i_strControlPoints, variable i_blnReturnPlateToIntegrationArea, variable i_intWasteContainerID, variable i_blnDisableVacuumCheck, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_29 ;
    err.Clear();
    o_stepReturn = HSLMPELib::ProcessFilterToWasteContainer(i_intDeviceID, i_strControlPoints, i_blnReturnPlateToIntegrationArea, i_intWasteContainerID, i_blnDisableVacuumCheck);
    o_stepReturn = Translate("1");
    errLabel_29 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_RetrieveFilterPlate( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_30 ;
    err.Clear();
    o_stepReturn = HSLMPELib::RetrieveFilterPlate(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_30 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_StartVacuum( variable i_intDeviceID, variable i_intWasteContainerID, variable i_blnDisableVacuum, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_31 ;
    err.Clear();
    o_stepReturn = HSLMPELib::StartMPEVacuum(i_intDeviceID, i_intWasteContainerID, i_blnDisableVacuum);
    o_stepReturn = Translate("1");
    errLabel_31 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_StopVacuum( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_32 ;
    err.Clear();
    o_stepReturn = HSLMPELib::StopVacuum(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_32 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_StartContainerCalibration( variable i_intDeviceID, variable i_intSourceID, variable i_fltVolume, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_33 ;
    err.Clear();
    o_stepReturn = HSLMPELib::StartContainerCalibration(i_intDeviceID, i_intSourceID, i_fltVolume);
    o_stepReturn = Translate("1");
    errLabel_33 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_SaveContainerCalibration( variable i_intDeviceID, variable i_intSourceID, variable i_fltVolume, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_34 ;
    err.Clear();
    o_stepReturn = HSLMPELib::SaveContainerCalibration(i_intDeviceID, i_intSourceID);
    o_stepReturn = Translate("1");
    errLabel_34 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_SetSourceConfiguration( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_35 ;
    err.Clear();
    o_stepReturn = HSLMPELib::SetSourceConfiguration(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_35 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPE2_GetSourceConfiguration( variable i_intDeviceID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_36 ;
    err.Clear();
    o_stepReturn = HSLMPELib::GetSourceConfiguration(i_intDeviceID);
    o_stepReturn = Translate("1");
    errLabel_36 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = Translate("0");
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }
} // library namespace
