#pragma once
#include "Hamilton pH Module\\Hamilton pH Module.hsl"
#include "HSLErrLib.hsl"
#include "Hamilton pH Module\\Hamilton pH Station Washer Module.hsl"
#include "Hamilton pH Module\\Hamilton pH Station Dryer Module.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace STAR_OEM_TOOLKIT_PH {
  function pH_Calibrate( variable i_intModuleID, variable i_intCalibrationLevel, variable i_fltCalibrationValue, variable i_fltCalibrationTemperature, variable i_strProbePattern, variable & o_stepReturn ) void ;
  function pH_Calibrate_Dynamically( variable i_intModuleID, variable i_intCalibrationLevel, variable i_intVariance, variable i_intTimeout, variable i_fltCalibrationValue, variable i_fltCalibrationTemperature, variable i_strProbePattern, variable & o_stepReturn ) void ;
  function pH_Dryer_Initialize( device & ML_STAR, variable i_intComport, variable i_strModuleName, variable i_blnSimulationMode, variable & o_intModuleID, variable & o_stepReturn ) void ;
  function pH_Dryer_Set_Trace( variable i_intModuleID, variable i_intTraceLevel, variable & o_stepReturn ) void ;
  function pH_Dryer_StartDrying( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Dryer_StopDrying( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Dryer_Terminate( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Enable_Extended_Log( variable & o_stepReturn ) void ;
  function pH_Get_Last_Error( variable i_intModuleID, variable & o_strLastError, variable & o_stepReturn ) void ;
  function pH_Initialize( variable i_intComport, variable i_blnSimulationMode, variable & o_intModuleID, variable & o_stepReturn ) void ;
  function pH_Measure( variable i_intModuleID, variable i_fltTemperature, variable i_strProbePattern, variable & o_fltpHProbe_1, variable & o_fltpHProbe_2, variable & o_fltpHProbe_3, variable & o_fltpHProbe_4, variable & o_stepReturn ) void ;
  function pH_Measure_Dynamically( variable i_intModuleID, variable i_fltTemperature, variable i_fltPrecision, variable i_intTimeout, variable i_strProbePattern, variable & o_fltpHProbe_1, variable & o_fltpHProbe_2, variable & o_fltpHProbe_3, variable & o_fltpHProbe_4, variable & o_stepReturn ) void ;
  function pH_Request_Battery_Data( variable i_intModuleID, variable & o_strReplacementDate, variable & o_intChargeCounter, variable & o_intBatteryCondition, variable & o_intActualCharge, variable & o_stepReturn ) void ;
  function pH_Request_Calibration_Values( variable i_intModuleID, variable i_intProbeNumber, variable & o_fltpHLowValue, variable & o_fltpHLowVoltage, variable & o_fltpHHighValue, variable & o_fltpHHighVoltage, variable & o_fltCalibrationTemperature, variable & o_fltCalibrationOffset, variable & o_fltCalibrationSlope, variable & o_intCalibrationSlopeRation, variable & o_stepReturn ) void ;
  function pH_Request_Probe_Data( variable i_intModuleID, variable & o_strReplacementDate, variable & o_intMeasurementCounter_Probe_1, variable & o_intMeasurementCounter_Probe_2, variable & o_intMeasurementCounter_Probe_3, variable & o_intMeasurementCounter_Probe_4, variable & o_stepReturn ) void ;
  function pH_Request_Technical_Data( variable i_intModuleID, variable i_intHardwareNumber, variable & o_intPartNumber, variable & o_intRevision, variable & o_intSerialNumber, variable & o_stepReturn ) void ;
  function pH_Request_Voltage_Data( variable i_intModuleID, variable i_intSelector, variable & o_varVoltageData, variable & o_stepReturn ) void ;
  function pH_Set_Battery_Replacement_Date( variable i_intModuleID, variable i_intYear, variable i_intMonth, variable i_intDay, variable & o_stepReturn ) void ;
  function pH_Set_Charge_Parameters( variable i_intModuleID, variable i_blnCharge, variable i_blnAutoCharge, variable i_intChargeLevel, variable & o_stepReturn ) void ;
  function pH_Set_Probe_Replacement_Date( variable i_intModuleID, variable i_intProbe, variable i_intYear, variable i_intMonth, variable i_intDay, variable & o_stepReturn ) void ;
  function pH_Set_Shutdown( variable i_intModuleID, variable i_intMode, variable & o_stepReturn ) void ;
  function pH_Set_Technical_Data( variable i_intModuleID, variable i_intHardwareNumber, variable i_intPartNumber, variable i_intRevision, variable i_intSerialNumber, variable & o_stepReturn ) void ;
  function pH_Set_Trace_Level( variable i_intModuleID, variable i_intTraceLevel, variable & o_stepReturn ) void ;
  function pH_Sleep( variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Template( variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Terminate( variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Wakeup( variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Washer_Initialize( device & ML_STAR, variable i_intComport, variable i_strModuleName, variable i_blnSimulationMode, variable o_intModuleID, variable & o_stepReturn ) void ;
  function pH_Washer_Set_Trace( variable i_intModuleID, variable i_intTraceLevel, variable & o_stepReturn ) void ;
  function pH_Washer_Terminate( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void ;
  function pH_Washer_Wash( device & ML_STAR, variable i_intModuleID, variable i_intCycleNumber, variable & o_stepReturn ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function pH_Measure( variable i_intModuleID, variable i_fltTemperature, variable i_strProbePattern, variable & o_fltpHProbe_1, variable & o_fltpHProbe_2, variable & o_fltpHProbe_3, variable & o_fltpHProbe_4, variable & o_stepReturn ) void {
    o_fltpHProbe_1 = 0;
    o_fltpHProbe_2 = 0;
    o_fltpHProbe_3 = 0;
    o_fltpHProbe_4 = 0;
    o_stepReturn = 0;
    onerror goto errLabel_1 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::Measure(i_intModuleID, i_fltTemperature, i_strProbePattern, o_fltpHProbe_1, o_fltpHProbe_2, o_fltpHProbe_3, o_fltpHProbe_4);
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Calibrate( variable i_intModuleID, variable i_intCalibrationLevel, variable i_fltCalibrationValue, variable i_fltCalibrationTemperature, variable i_strProbePattern, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_2 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::Calibrate(i_intModuleID, i_intCalibrationLevel, i_fltCalibrationValue, i_fltCalibrationTemperature, i_strProbePattern);
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Template( variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_3 ;
    err.Clear();
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Calibrate_Dynamically( variable i_intModuleID, variable i_intCalibrationLevel, variable i_intVariance, variable i_intTimeout, variable i_fltCalibrationValue, variable i_fltCalibrationTemperature, variable i_strProbePattern, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_4 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::CalibrateDynamically(i_intModuleID, i_intCalibrationLevel, i_intVariance, i_intTimeout, i_fltCalibrationValue, i_fltCalibrationTemperature, i_strProbePattern);
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Enable_Extended_Log( variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_5 ;
    err.Clear();
    Hamilton_pH_Module::EnableExtendedLog();
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Get_Last_Error( variable i_intModuleID, variable & o_strLastError, variable & o_stepReturn ) void {
    o_strLastError = 0;
    o_stepReturn = 0;
    onerror goto errLabel_6 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::GetLastError(i_intModuleID, o_strLastError);
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Initialize( variable i_intComport, variable i_blnSimulationMode, variable & o_intModuleID, variable & o_stepReturn ) void {
    o_intModuleID = 0;
    o_stepReturn = 0;
    onerror goto errLabel_7 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::Initialize(i_intComport, i_blnSimulationMode, o_intModuleID);
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Measure_Dynamically( variable i_intModuleID, variable i_fltTemperature, variable i_fltPrecision, variable i_intTimeout, variable i_strProbePattern, variable & o_fltpHProbe_1, variable & o_fltpHProbe_2, variable & o_fltpHProbe_3, variable & o_fltpHProbe_4, variable & o_stepReturn ) void {
    o_fltpHProbe_1 = 0;
    o_fltpHProbe_2 = 0;
    o_fltpHProbe_3 = 0;
    o_fltpHProbe_4 = 0;
    o_stepReturn = 0;
    onerror goto errLabel_8 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::MeasureDynamically(i_intModuleID, i_fltTemperature, i_fltPrecision, i_intTimeout, i_strProbePattern, o_fltpHProbe_1, o_fltpHProbe_2, o_fltpHProbe_3, o_fltpHProbe_4);
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Request_Battery_Data( variable i_intModuleID, variable & o_strReplacementDate, variable & o_intChargeCounter, variable & o_intBatteryCondition, variable & o_intActualCharge, variable & o_stepReturn ) void {
    o_strReplacementDate = 0;
    o_intChargeCounter = 0;
    o_intBatteryCondition = 0;
    o_intActualCharge = 0;
    o_stepReturn = 0;
    onerror goto errLabel_9 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::RequestBatteryData(i_intModuleID, o_strReplacementDate, o_intChargeCounter, o_intBatteryCondition, o_intActualCharge);
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Request_Calibration_Values( variable i_intModuleID, variable i_intProbeNumber, variable & o_fltpHLowValue, variable & o_fltpHLowVoltage, variable & o_fltpHHighValue, variable & o_fltpHHighVoltage, variable & o_fltCalibrationTemperature, variable & o_fltCalibrationOffset, variable & o_fltCalibrationSlope, variable & o_intCalibrationSlopeRation, variable & o_stepReturn ) void {
    o_fltpHLowValue = 0;
    o_fltpHLowVoltage = 0;
    o_fltpHHighValue = 0;
    o_fltpHHighVoltage = 0;
    o_fltCalibrationTemperature = 0;
    o_fltCalibrationOffset = 0;
    o_fltCalibrationSlope = 0;
    o_intCalibrationSlopeRation = 0;
    o_stepReturn = 0;
    onerror goto errLabel_10 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::RequestCalibrationValues(i_intModuleID, i_intProbeNumber, o_fltpHLowValue, o_fltpHLowVoltage, o_fltpHHighValue, o_fltpHHighVoltage, o_fltCalibrationTemperature, o_fltCalibrationOffset, o_fltCalibrationSlope, o_intCalibrationSlopeRation);
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Request_Probe_Data( variable i_intModuleID, variable & o_strReplacementDate, variable & o_intMeasurementCounter_Probe_1, variable & o_intMeasurementCounter_Probe_2, variable & o_intMeasurementCounter_Probe_3, variable & o_intMeasurementCounter_Probe_4, variable & o_stepReturn ) void {
    o_strReplacementDate = 0;
    o_intMeasurementCounter_Probe_1 = 0;
    o_intMeasurementCounter_Probe_2 = 0;
    o_intMeasurementCounter_Probe_3 = 0;
    o_intMeasurementCounter_Probe_4 = 0;
    o_stepReturn = 0;
    onerror goto errLabel_11 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::RequestProbeData(i_intModuleID, o_strReplacementDate, o_intMeasurementCounter_Probe_1, o_intMeasurementCounter_Probe_2, o_intMeasurementCounter_Probe_3, o_intMeasurementCounter_Probe_4);
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Request_Technical_Data( variable i_intModuleID, variable i_intHardwareNumber, variable & o_intPartNumber, variable & o_intRevision, variable & o_intSerialNumber, variable & o_stepReturn ) void {
    o_intPartNumber = 0;
    o_intRevision = 0;
    o_intSerialNumber = 0;
    o_stepReturn = 0;
    onerror goto errLabel_12 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::RequestTechnicalData(i_intModuleID, i_intHardwareNumber, o_intPartNumber, o_intRevision, o_intSerialNumber);
    errLabel_12 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Request_Voltage_Data( variable i_intModuleID, variable i_intSelector, variable & o_varVoltageData, variable & o_stepReturn ) void {
    o_varVoltageData = 0;
    o_stepReturn = 0;
    onerror goto errLabel_13 ;
    err.Clear();
    Hamilton_pH_Module::RequestVoltageData(i_intModuleID, i_intSelector, o_varVoltageData);
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Set_Battery_Replacement_Date( variable i_intModuleID, variable i_intYear, variable i_intMonth, variable i_intDay, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_14 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::SetBatteryReplacementDate(i_intModuleID, i_intDay, i_intMonth, i_intYear);
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Set_Charge_Parameters( variable i_intModuleID, variable i_blnCharge, variable i_blnAutoCharge, variable i_intChargeLevel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_15 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::SetChargeParameters(i_intModuleID, i_blnCharge, i_blnAutoCharge, i_intChargeLevel);
    errLabel_15 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Set_Probe_Replacement_Date( variable i_intModuleID, variable i_intProbe, variable i_intYear, variable i_intMonth, variable i_intDay, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_16 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::SetProbeReplacementDate(i_intModuleID, i_intProbe, i_intYear, i_intMonth, i_intDay);
    errLabel_16 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Set_Shutdown( variable i_intModuleID, variable i_intMode, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_17 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::SetShutdown(i_intModuleID, i_intMode);
    errLabel_17 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Set_Technical_Data( variable i_intModuleID, variable i_intHardwareNumber, variable i_intPartNumber, variable i_intRevision, variable i_intSerialNumber, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_18 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::SetTechnicalData(i_intModuleID, i_intHardwareNumber, i_intPartNumber, i_intRevision, i_intSerialNumber);
    errLabel_18 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Set_Trace_Level( variable i_intModuleID, variable i_intTraceLevel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_19 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::SetTraceLevel(i_intModuleID, i_intTraceLevel);
    errLabel_19 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Sleep( variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_20 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::Sleep(i_intModuleID);
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Terminate( variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_21 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::Terminate(i_intModuleID);
    errLabel_21 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Wakeup( variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_22 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::WakeUp(i_intModuleID);
    errLabel_22 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Washer_Initialize( device & ML_STAR, variable i_intComport, variable i_strModuleName, variable i_blnSimulationMode, variable o_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_23 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Washer_Module::Initialize(ML_STAR, i_intComport, i_strModuleName, i_blnSimulationMode, o_intModuleID);
    errLabel_23 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Washer_Set_Trace( variable i_intModuleID, variable i_intTraceLevel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_24 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Washer_Module::SetTraceLevel(i_intModuleID, i_intTraceLevel);
    errLabel_24 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Washer_Terminate( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_25 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Washer_Module::Terminate(ML_STAR, i_intModuleID);
    errLabel_25 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Washer_Wash( device & ML_STAR, variable i_intModuleID, variable i_intCycleNumber, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_26 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Washer_Module::Wash(ML_STAR, i_intModuleID, i_intCycleNumber);
    errLabel_26 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Dryer_Initialize( device & ML_STAR, variable i_intComport, variable i_strModuleName, variable i_blnSimulationMode, variable & o_intModuleID, variable & o_stepReturn ) void {
    o_intModuleID = 0;
    o_stepReturn = 0;
    onerror goto errLabel_27 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Dryer_Module::Initialize(ML_STAR, i_strModuleName, i_blnSimulationMode, o_intModuleID);
    errLabel_27 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Dryer_Set_Trace( variable i_intModuleID, variable i_intTraceLevel, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_28 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Dryer_Module::SetTraceLevel(i_intModuleID, i_intTraceLevel);
    errLabel_28 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Dryer_StartDrying( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_29 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Dryer_Module::StartDrying(ML_STAR, i_intModuleID);
    errLabel_29 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Dryer_StopDrying( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_30 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Dryer_Module::StopDrying(ML_STAR, i_intModuleID);
    errLabel_30 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Dryer_Terminate( device & ML_STAR, variable i_intModuleID, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_31 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Station_Dryer_Module::Terminate(ML_STAR, i_intModuleID);
    errLabel_31 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }
} // library namespace
