 namespace _Method { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "SchedulingDev\\HSLAppsLib.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit_pH.hs_" }
 namespace _Method { #include "Hamilton pH Module\\Hamilton pH Station Dryer Module.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit_centrifuge.hs_" }
 namespace _Method { #include "STAR_OEM_toolkit_MPE.hs_" }
 namespace _Method { #include "Hamilton pH Module Controller.hs_" }
#include "STAR_OEM_Test.res"
 namespace _Method { #include "HSL_LiquidClassLib.hsl" }
 namespace _Method { #include "Inheco ODTC\\Inheco ODTC.hsl" }
 namespace _Method { #include "Labware Properties\\Labware_Property_Query.hs_" }
 namespace _Method { #include "Hamilton MPE2\\HSLMPELib.hsl" }
 namespace _Method { #include "Hamilton Centrifuge\\Hamilton Centrifuge.hsl" }
 namespace _Method { #include "LiquidClassLibrary\\LiquidClassLibrary.hsl" }
variable loopCounterMain;
variable msg;
object objJSONFromServer;
variable commandFromServer;
variable initializeAlways;
variable o_stepReturn;
object objJSONToServer;
sequence seq;
variable tipSequence;
variable sequenceCounting;
variable channelVariable;
variable channelUse;
variable labwarePositions;
variable aspirateSequence;
variable v;
variable arrayOfVolumes[];
variable liquidClass;
variable aspirateMode;
variable capacitiveLLD;
variable pressureLLD;
variable liquidFollowing;
variable submergeDepth;
variable liquidHeight;
variable maxLLdDifference;
variable mixCycles;
variable mixPosition;
variable mixVolume;
variable airTransportRetractDist;
variable touchOff;
variable aspPosAboveTouch;
variable o_liquidLevels_mm[];
variable o_liquidLevels_mL[];
variable o_stepReturn2;
variable o_stepReturn3;
variable dispenseMode;
variable dispenseSequence;
variable dispPositionAboveTouch;
variable zMoveAfterStep;
variable sideTouch;
variable wasteSequence;
variable useDefaultWaste;
variable reducedPatternMode;
variable aspirateVolume;
variable o_stepReturn4;
variable dispenseVolume;
variable tipEjectToKnownPosition;
variable carrierName;
variable barcodeFileName;
variable barcodeReadPositions;
variable o_carrierBC;
variable o_carrierPositionsBCs[];
variable lidSequence;
variable plateSequence;
variable toolSequence;
variable transportMode;
variable widthBefore;
variable gripHeight;
variable gripWidth;
variable gripSpeed;
variable gripperToolChannel;
variable checkPlate;
variable zSpeed;
variable gripForce;
sequence lidSeq;
sequence toolSeq;
variable xAcceleration;
variable platePressOnDistance;
variable ejectToolWhenFinish;
object objHttp;
variable blnReturn;
variable blnSuccess;
variable usedNode;
variable deviceNumber;
variable action;
variable sampleInterval;
variable shakingToleranceRange;
variable id;
variable monitorResult;
variable firmwareVersion;
variable serialNumber;
variable command;
variable parameter;
variable plateLock;
variable shakingAccRamp;
variable shakingDirection;
variable simulate;
variable startTimeout;
variable toleranceRange;
variable securityRange;
variable intTrace;
variable shakingSpeed;
variable shakingTime;
variable temperature;
variable waitForTempReached;
variable inverseGrip;
variable liftUpHeight;
variable retractDistance;
variable tolerance;
variable labwareOrientation;
variable movementType;
variable collisionControl;
variable gripMode;
variable showCollisionCheckDialog;
//global device HxFan ("STAR_OEM_Test.lay", "HxFan", hslTrue);
variable refillAfterEmpty;
variable chamber1LiquidChange;
variable chamber2WashLiquid;
variable chamber1WashLiquid;
variable chamber2LiquidChange;
variable FirmwareCommand;
variable FirmwareParameter;
variable CommandListElement;
variable CommandListLength;
object FirmwareCmdDict;
variable yDisplacement;
variable zDisplacement;
variable xDisplacement;
variable yOrigin;
variable xOrigin;
variable zOrigin;
variable ControllerID;
variable SimulationMode;
variable ErrorCode;
variable DeviceID;
variable TargetTemperature;
variable StopAllDevices;
variable TraceLevel;
variable Comport;
variable Simulate;
variable ModuleName;
variable Angle;
variable inputSequence;
variable barcode;
variable seqFirstPosition;
variable seqSecondPosition;
global device ML_STAR ("STAR_OEM_Test.lay", "ML_STAR", hslTrue);
variable ModuleID;
variable probePattern;
variable pH_probe_1;
variable pH_probe_2;
variable pH_probe_3;
variable pH_probe_4;
variable Variance;
variable Timeout;
variable CalibrationLevel;
variable CalibrationValue;
variable CalibrationTemperature;
variable Precision;
variable Temperature;
variable ChargeCounter;
variable ReplacementDate;
variable BatteryCondition;
variable ActualCharge;
variable MeasurementCounter_Probe_1;
variable MeasurementCounter_Probe_2;
variable MeasurementCounter_Probe_3;
variable MeasurementCounter_Probe_4;
variable HardwareNumber;
variable Revision;
variable SerialNumber;
variable PartNumber;
variable Selector;
variable VoltageData;
variable Day;
variable Year;
variable Month;
variable Charge;
variable AutoCharge;
variable AutoChargeLevel;
variable Probe;
variable Mode;
variable ProbeNumber;
variable pHHighValue;
variable pHHighVoltage;
variable pHLowValue;
variable pHLowVoltage;
variable CalibrationSlopeRatio;
variable CalibrationOffset;
variable CalibrationSlope;
variable CycleNumber;
variable NodeName;
variable Label;
variable AlwaysInitialize;
variable intPresentPosition;
variable Direction;
variable CloseCoverAtEnd;
variable ArrSpeed;
variable ArrAcceleration;
variable ArrDuration;
variable i_ArrDuration[];
variable i_ArrAcceleration[];
variable i_ArrSpeed[];
variable Decelleration;
variable Speed;
variable Acceleration;
variable MaxRunTime;
variable SpeedSensorTrip;
variable TimeLeft;
variable GravitySensorTrip;
variable CurrentSpeed;
variable TemperatureSensorTrip;
variable ProfileStatus;
variable RotorDriveRunning;
variable Deceleration;
variable DeviceName;
variable AdapterDeviceID;
variable InstrumentName;
variable PortNumber;
variable MPEOptions;
variable ComPort;
variable BaudRate;
variable CollectionPlateHeight;
variable OffsetFromNozzles;
variable NeedleOffset;
variable WellVolume;
variable FlowRate;
variable SourceID;
variable Needleoffset;
variable PlateHeight;
variable WellDepth;
variable EvaporateTime;
variable FollowRate;
variable EvaporateTravelDistance;
variable NozzleHeight;
variable FilterHeight;
variable WasteContainerID;
variable FullReading;
variable CapacityVolume;
variable CalibrationDate;
variable EmptyReading;
variable blnReset;
variable CurrentGasTemperature;
variable Heating;
variable CurrentEvaporatorTemperature;
variable MinimumGasTemperature;
variable MinimumEvaporatorTemperature;
variable MaximumEvaporatorTemperature;
variable MaximumGasTemperature;
variable ManifoldPressureSensor;
variable HighPressureSensor;
variable InputPressureSensor;
variable LowPressureSensor;
variable MaximumTemperature;
variable MinimumTemperature;
variable VacuumActive;
variable VacuumRunTime;
variable DisableVacuumCheck;
variable Smart;
variable SensorReading;
variable ControlPoints;
variable ReturnPlate;
variable Volume;
variable Seconds;
variable DefaultTemperature;
variable MeasureTime;
variable MeasureHeight;
variable CalibrationValue1;
variable TempSoln1;
variable TempSoln2;
variable CalibrationValue2;
variable blnCalibrateDynamically;
variable CalibrationValueRef;
variable TempSolnRef;
variable Module;
variable Reference;
variable Calibration1;
variable Calibration2;
sequence seqModule;
sequence seqCalibration1;
sequence seqCalibration2;
sequence seqReference;
variable CalibrationTime;
variable arrCalibrationSlopeRatios[];
variable arrpHValuesReferenceSolution[];
variable CalibrationSlopeRatios;
variable pHValuesReferenceSolution;
variable BluetoothPort;
variable NumDryCycles;
variable NumWashCycles;
variable DryTime;
variable Gripper;
sequence seqGripper;
variable WashPosition;
sequence seqWashPosition;
variable DryPosition;
sequence seqDryPosition;
variable DryCycles;
variable TransportChannel;
variable WashCycles;
variable arrpHValues[];
variable flt_pHValues;
variable seqMeasure;
variable ProbePattern;
variable seqMeasurement;
variable MeasurePositions;
variable hssErrCode;
variable LiqClassParameterName;
variable LiqClassParameterValue;
variable LiquidClassName;
variable message;
variable devicePort;
variable deviceIP;
variable localIP;
variable simulationMode;
variable deviceID;
variable lockID;
variable protocolFile;
variable methodName;
variable requestID;
variable priority;
variable duration;
variable timeout;
variable selector;
variable controllerID;
variable propertyValue;
variable propertyName;
variable labwareID;
variable TemplateLiquidClassName;
variable tipType;
variable o_CorrectionCurveNominal[];
variable o_CorrectionCurveCorrected[];
variable DispenseMode;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    STAR_OEM_TOOLKIT::_InitLibrary();
    STAR_OEM_TOOLKIT_PH::_InitLibrary();
    STAR_OEM_TOOLKIT_CENTRIFUGE::_InitLibrary();
    STAR_OEM_TOOLKIT_MPE::_InitLibrary();
    HAMILTON_PH_MODULE_CONTROLLER::_InitLibrary();
    LPQ::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnReturn = HSLHttp::Initialize(objHttp);
    if (blnReturn != blnSuccess)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("HTTP Test Method"), Translate(" - "), Translate("Error Initializing HTTP Library"), Translate(""));
      return;
    }
    SendTextMessageToServer(Translate("Hi, I´m a VENUS method."));
    {
      loopCounterMain = 0;
      while (1 == 1)
      {
        loopCounterMain = loopCounterMain + 1;
        commandFromServer = Translate("");
        o_stepReturn = Translate("");
        o_stepReturn2 = Translate("");
        o_stepReturn3 = Translate("");
        o_stepReturn4 = Translate("");
        msg = waitForGUItoContinue();
        Trace("JSON received from Server:", msg);
        HSLJsonLib::Create(objJSONFromServer);
        HSLJsonLib::ParseJson(objJSONFromServer, msg);
        HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("command"), commandFromServer);
        HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("id"), id);
        if (commandFromServer == "initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("initializeAlways"), initializeAlways);
          STAR_OEM_TOOLKIT::Initialize(ML_STAR, initializeAlways, o_stepReturn);
          LiquidClassLib::Initialize(ML_STAR, 0);
          TrcTrace(Translate("Init step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ping")
        {
          SendStepReturnToServer(commandFromServer, Translate("0"), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "channelTipPickUp")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("tipSequence"), tipSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          if (tipSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, tipSequence, seq);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_TipPickUp(ML_STAR, seq, channelVariable, sequenceCounting, channelUse, o_stepReturn);
          TrcTrace(Translate("Tip pick up step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "channelAspirate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("aspirateSequence"), aspirateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          BuildArrayOfVolumesForChannels(channelVariable, arrayOfVolumes);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("aspirateMode"), aspirateMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("pressureLLD"), pressureLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          Trace("Bookstart");
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          Trace("Bookend");
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          JSON_GetFloatValue(Translate("maxLLdDifference"), maxLLdDifference);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          JSON_GetFloatValue(Translate("aspPosAboveTouch"), aspPosAboveTouch);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("touchOff"), touchOff);
          if (aspirateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, aspirateSequence, seq);
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          STAR_OEM_TOOLKIT::Channels_1ml_Aspirate(ML_STAR, seq, arrayOfVolumes, channelVariable, liquidClass, sequenceCounting, channelUse, aspirateMode, capacitiveLLD, pressureLLD, liquidFollowing, submergeDepth, liquidHeight, maxLLdDifference, mixCycles, mixPosition, mixVolume, airTransportRetractDist, touchOff, aspPosAboveTouch, o_stepReturn, o_liquidLevels_mm, o_liquidLevels_mL);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          ArrayToString(o_liquidLevels_mm, o_stepReturn2);
          ArrayToString(o_liquidLevels_mL, o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Liquid levels (mm):"), o_stepReturn2);
          TrcTrace(Translate("Liquid levels (mL):"), o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "channelDispense")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("dispenseSequence"), dispenseSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          BuildArrayOfVolumesForChannels(channelVariable, arrayOfVolumes);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("dispenseMode"), dispenseMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          JSON_GetFloatValue(Translate("dispPositionAboveTouch"), dispPositionAboveTouch);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("touchOff"), touchOff);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("zMoveAfterStep"), zMoveAfterStep);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sideTouch"), sideTouch);
          if (dispenseSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, dispenseSequence, seq);
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          STAR_OEM_TOOLKIT::Channels_1mL_Dispense(ML_STAR, seq, arrayOfVolumes, channelVariable, liquidClass, sequenceCounting, channelUse, dispenseMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, touchOff, zMoveAfterStep, sideTouch, dispPositionAboveTouch, o_stepReturn, o_liquidLevels_mm, o_liquidLevels_mL);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          ArrayToString(o_liquidLevels_mm, o_stepReturn2);
          ArrayToString(o_liquidLevels_mL, o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "channelTipEject")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("wasteSequence"), wasteSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("useDefaultWaste"), useDefaultWaste);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          if (useDefaultWaste == 0)
          {
            if (wasteSequence == "")
            {
              HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
            else
            {
              DevGetSequenceRef(ML_STAR, wasteSequence, seq);
            }
          }
          else
          {
            SeqCopySequence(seq, ML_STAR.Waste);
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          STAR_OEM_TOOLKIT::Channels_1mL_TipEject(ML_STAR, seq, channelVariable, sequenceCounting, channelUse, useDefaultWaste, o_stepReturn);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          TrcTrace(Translate("Tip eject step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "mph96TipPickUp")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("tipSequence"), tipSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("reducedPatternMode"), reducedPatternMode);
          if (tipSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, tipSequence, seq);
          }
          STAR_OEM_TOOLKIT::MPH96_TipPickUp(ML_STAR, seq, channelVariable, sequenceCounting, reducedPatternMode, o_stepReturn, o_stepReturn2);
          TrcTrace(Translate("Tip pick up step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "mph96Aspirate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("aspirateSequence"), aspirateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          JSON_GetFloatValue(Translate("aspirateVolume"), aspirateVolume);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("aspirateMode"), aspirateMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          if (aspirateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, aspirateSequence, seq);
          }
          STAR_OEM_TOOLKIT::MPH96_Aspirate(ML_STAR, seq, aspirateVolume, channelVariable, liquidClass, sequenceCounting, aspirateMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn4);
          o_stepReturn2 = StrFStr(o_stepReturn2);
          o_stepReturn3 = StrFStr(o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, id);
        }
        if (commandFromServer == "mph96Dispense")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("dispenseSequence"), dispenseSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          JSON_GetFloatValue(Translate("dispenseVolume"), dispenseVolume);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("dispenseMode"), dispenseMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("zMoveAfterStep"), zMoveAfterStep);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sideTouch"), sideTouch);
          if (dispenseSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, dispenseSequence, seq);
          }
          STAR_OEM_TOOLKIT::MPH96_Dispense(ML_STAR, seq, dispenseVolume, liquidClass, sequenceCounting, dispenseMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, zMoveAfterStep, sideTouch, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 4:"), o_stepReturn4);
          o_stepReturn2 = StrFStr(o_stepReturn2);
          o_stepReturn3 = StrFStr(o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, id);
        }
        if (commandFromServer == "mph96TipEject")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("wasteSequence"), wasteSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("tipEjectToKnownPosition"), tipEjectToKnownPosition);
          if (tipEjectToKnownPosition == 0)
          {
            if (wasteSequence == "")
            {
              HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
            else
            {
              DevGetSequenceRef(ML_STAR, wasteSequence, seq);
            }
          }
          else
          {
            SeqCopySequence(seq, ML_STAR.Waste);
          }
          STAR_OEM_TOOLKIT::MPH96_TipEject(ML_STAR, seq, sequenceCounting, tipEjectToKnownPosition, o_stepReturn, o_stepReturn2);
          TrcTrace(Translate("Tip eject MPH96 step return:"), o_stepReturn);
          TrcTrace(Translate("Tip eject MPH96 step return2:"), o_stepReturn2);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "loadCarrier")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("carrierName"), carrierName);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("barcodeFileName"), barcodeFileName);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("barcodeReadPositions"), barcodeReadPositions);
          STAR_OEM_TOOLKIT::Carrier_Load(ML_STAR, carrierName, barcodeFileName, barcodeReadPositions, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, o_carrierBC, o_carrierPositionsBCs);
          TrcTrace(Translate("Load carrier step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, id);
        }
        if (commandFromServer == "unloadCarrier")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("carrierName"), carrierName);
          STAR_OEM_TOOLKIT::Carrier_Unload(ML_STAR, carrierName, o_stepReturn);
          TrcTrace(Translate("Unload Carrier step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "gripGet")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripForce"), gripForce);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripperToolChannel"), gripperToolChannel);
          JSON_GetFloatValue(Translate("gripWidth"), gripWidth);
          JSON_GetFloatValue(Translate("gripHeight"), gripHeight);
          JSON_GetFloatValue(Translate("widthBefore"), widthBefore);
          JSON_GetFloatValue(Translate("gripSpeed"), gripSpeed);
          JSON_GetFloatValue(Translate("zSpeed"), zSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("checkPlate"), checkPlate);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
            TrcTraceSequence(seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          DevGetSequenceRef(ML_STAR, toolSequence, toolSeq);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Get(ML_STAR, seq, lidSeq, toolSeq, sequenceCounting, transportMode, gripForce, gripperToolChannel, gripWidth, gripHeight, widthBefore, gripSpeed, zSpeed, checkPlate, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Get - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "gripMove")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("xAcceleration"), xAcceleration);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
              TrcTraceSequence(seq);
              TrcTrace(Translate("wrong"), Translate("nowwrongere"));
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
            TrcTraceSequence(seq);
            TrcTrace(Translate("here"), Translate("now here"));
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Move(ML_STAR, seq, xAcceleration, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Move - step return:"), o_stepReturn);
          TrcTrace(Translate("here here"), Translate("nohhere"));
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "gripPlace")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ejectToolWhenFinish"), ejectToolWhenFinish);
          JSON_GetFloatValue(Translate("zSpeed"), zSpeed);
          JSON_GetFloatValue(Translate("platePressOnDistance"), platePressOnDistance);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("xAcceleration"), xAcceleration);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("checkPlate"), checkPlate);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          DevGetSequenceRef(ML_STAR, toolSequence, toolSeq);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Place(ML_STAR, seq, lidSeq, toolSeq, sequenceCounting, transportMode, ejectToolWhenFinish, zSpeed, platePressOnDistance, xAcceleration, checkPlate, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Place - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapGet")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("movementType"), movementType);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("labwareOrientation"), labwareOrientation);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripForce"), gripForce);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("inverseGrip"), inverseGrip);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("collisionControl"), collisionControl);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripMode"), gripMode);
          JSON_GetFloatValue(Translate("retractDistance"), retractDistance);
          JSON_GetFloatValue(Translate("liftUpHeight"), liftUpHeight);
          JSON_GetFloatValue(Translate("gripWidth"), gripWidth);
          JSON_GetFloatValue(Translate("tolerance"), tolerance);
          JSON_GetFloatValue(Translate("gripHeight"), gripHeight);
          JSON_GetFloatValue(Translate("widthBefore"), widthBefore);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, lidSeq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          STAR_OEM_TOOLKIT::iSWAP_Get(ML_STAR, seq, lidSeq, sequenceCounting, movementType, transportMode, labwareOrientation, gripForce, inverseGrip, collisionControl, gripMode, retractDistance, liftUpHeight, gripWidth, tolerance, gripHeight, widthBefore, o_stepReturn);
          TrcTrace(Translate("iSWAP Get - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapMove")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("collisionControl"), collisionControl);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripMode"), gripMode);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          STAR_OEM_TOOLKIT::iSWAP_Move(ML_STAR, seq, collisionControl, gripMode, o_stepReturn);
          TrcTrace(Translate("iSWAP Move - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapPlace")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("movementType"), movementType);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("labwareOrientation"), labwareOrientation);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("collisionControl"), collisionControl);
          JSON_GetFloatValue(Translate("retractDistance"), retractDistance);
          JSON_GetFloatValue(Translate("liftUpHeight"), liftUpHeight);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          STAR_OEM_TOOLKIT::iSWAP_Place(ML_STAR, seq, lidSeq, sequenceCounting, movementType, transportMode, labwareOrientation, collisionControl, retractDistance, liftUpHeight, o_stepReturn);
          TrcTrace(Translate("iSWAP Place - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapPark")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("showCollisionCheckDialog"), showCollisionCheckDialog);
          STAR_OEM_TOOLKIT::iSWAP_Park(ML_STAR, showCollisionCheckDialog, o_stepReturn);
          TrcTrace(Translate("iSWAP Park - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapGetFirst")
        {
          STAR_OEM_TOOLKIT::iSWAP_Park(ML_STAR, showCollisionCheckDialog, o_stepReturn);
          ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
          TrcTrace(Translate("iSWAP Park - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "FirmwareCommand")
        {
          CommandListLength = HSLJsonLib::GetArrayLength(objJSONFromServer, Translate("FirmwareCommandList"));
          {
            for(CommandListElement = 0; CommandListElement < CommandListLength;)
            {
              CommandListElement = CommandListElement + 1;
              HSLJsonLib::GetJsonArrayElement(objJSONFromServer, Translate("FirmwareCommandList"), CommandListElement, FirmwareCmdDict);
              HSLJsonLib::GetStringProperty(FirmwareCmdDict, Translate("FirmwareCommand"), FirmwareCommand);
              HSLJsonLib::GetStringProperty(FirmwareCmdDict, Translate("FirmwareParameter"), FirmwareParameter);
              STAR_OEM_TOOLKIT::SendFirmwareCommand(FirmwareCommand, ML_STAR, FirmwareParameter, o_stepReturn);
              TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
              SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
            }
          }
        }
        if (commandFromServer == "copyLiquidClass")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("TemplateLiquidClass"), TemplateLiquidClassName);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("NewLiquidClass"), LiquidClassName);
          onerror goto errLabel_1 ;
          err.Clear();
          LiquidClassLibrary::CopyLiquidClass(TemplateLiquidClassName, LiquidClassName);
          LiquidClassLibrary::SetStateOriginalLiquid(LiquidClassName, 0);
          LiquidClassLibrary::SetTadmMode(LiquidClassName, 1);
          o_stepReturn = Translate("1");
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("Liquid Class Set Parameter:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "setAspirateParam")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LiquidClass"), LiquidClassName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Parameter"), LiqClassParameterName);
          JSON_GetFloatValue(Translate("Value"), LiqClassParameterValue);
          onerror goto errLabel_2 ;
          err.Clear();
          LiquidClassLib::SelectLiquidClass(LiquidClassName);
          LiquidClassLib::SetLiquidClassAspirateParameter(LiqClassParameterName, LiqClassParameterValue);
          o_stepReturn = Translate("1");
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "setDispenseParam")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LiquidClass"), LiquidClassName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Parameter"), LiqClassParameterName);
          JSON_GetFloatValue(Translate("Value"), LiqClassParameterValue);
          onerror goto errLabel_3 ;
          err.Clear();
          LiquidClassLib::SelectLiquidClass(LiquidClassName);
          LiquidClassLib::SetLiquidClassDispenseParameter(LiqClassParameterName, LiqClassParameterValue);
          o_stepReturn = Translate("1");
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("Liquid Class Set Parameter:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "setTipType")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LiquidClass"), LiquidClassName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("TipType"), tipType);
          onerror goto errLabel_4 ;
          err.Clear();
          LiquidClassLib::SelectLiquidClass(LiquidClassName);
          LiquidClassLibrary::SetLiquidClassTipType(LiquidClassName, tipType);
          o_stepReturn = Translate("1");
          errLabel_4 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("Liquid Class Set Parameter:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "setDispenseMode")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LiquidClass"), LiquidClassName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DispenseMode"), dispenseMode);
          onerror goto errLabel_5 ;
          err.Clear();
          LiquidClassLib::SelectLiquidClass(LiquidClassName);
          LiquidClassLibrary::SetLiquidClassTipType(LiquidClassName, tipType);
          LiquidClassLibrary::SetLiquidClassDispenseMode(LiquidClassName, dispenseMode);
          o_stepReturn = Translate("1");
          errLabel_5 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("Liquid Class Set Parameter:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "setCorrectionCurve")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LiquidClass"), LiquidClassName);
          onerror goto errLabel_6 ;
          err.Clear();
          LiquidClassLib::SelectLiquidClass(LiquidClassName);
          BuildCorrectionCurve(o_CorrectionCurveNominal, o_CorrectionCurveCorrected);
          LiquidClassLibrary::SetCorrectionCurve(LiquidClassName, o_CorrectionCurveNominal, o_CorrectionCurveCorrected);
          o_stepReturn = Translate("1");
          errLabel_6 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("Liquid Class Set Parameter:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_ConnectIP")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("InstrumentName"), InstrumentName);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("PortNumber"), PortNumber);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("MPEOptions"), MPEOptions);
          STAR_OEM_TOOLKIT_MPE::MPE2_ConnectUsingIP(InstrumentName, PortNumber, SimulationMode, MPEOptions, DeviceID, o_stepReturn);
          DeviceID = StrIStr(DeviceID);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, DeviceID, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_ConnectCOM")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ComPort"), ComPort);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("BaudRate"), BaudRate);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("MPEOptions"), MPEOptions);
          STAR_OEM_TOOLKIT_MPE::MPE2_ConnectUsingCOM(ComPort, BaudRate, SimulationMode, MPEOptions, DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_ClampFilterPlate")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_ClampFilterPlate(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_CollectionPlatePlaced")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          JSON_GetFloatValue(Translate("CollectionPlateHeight"), CollectionPlateHeight);
          JSON_GetFloatValue(Translate("OffsetFromNozzles"), OffsetFromNozzles);
          STAR_OEM_TOOLKIT_MPE::MPE2_CollectionPlatePlaced(DeviceID, CollectionPlateHeight, OffsetFromNozzles, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_CollectionPlateRemoved")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_CollectionPlateRemoved(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Disconnect")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_Disconnect(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Dispense")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SourceID"), SourceID);
          JSON_GetFloatValue(Translate("WellVolume"), WellVolume);
          JSON_GetFloatValue(Translate("FlowRate"), FlowRate);
          JSON_GetFloatValue(Translate("NeedleOffset"), NeedleOffset);
          STAR_OEM_TOOLKIT_MPE::MPE2_Disconnect(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Evaporate")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          JSON_GetFloatValue(Translate("PlateHeight"), PlateHeight);
          JSON_GetFloatValue(Translate("NeedleOffset"), Needleoffset);
          JSON_GetFloatValue(Translate("WellDepth"), WellDepth);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("EvaporateTime"), EvaporateTime);
          STAR_OEM_TOOLKIT_MPE::MPE2_Evaporate(DeviceID, PlateHeight, NeedleOffset, WellDepth, EvaporateTime, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_EvaporatePrepare")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          JSON_GetFloatValue(Translate("PlateHeight"), PlateHeight);
          JSON_GetFloatValue(Translate("NeedleOffset"), Needleoffset);
          JSON_GetFloatValue(Translate("WellDepth"), WellDepth);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("EvaporateTime"), EvaporateTime);
          STAR_OEM_TOOLKIT_MPE::MPE2_Evaporate(DeviceID, PlateHeight, NeedleOffset, WellDepth, EvaporateTime, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_EvaporateEnd")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Timeout"), Timeout);
          STAR_OEM_TOOLKIT_MPE::MPE2_EvaporateEnd(DeviceID, Timeout, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_EvaporateWithRate")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          JSON_GetFloatValue(Translate("PlateHeight"), PlateHeight);
          JSON_GetFloatValue(Translate("NeedleOffset"), Needleoffset);
          JSON_GetFloatValue(Translate("EvaporateTravelDistance"), EvaporateTravelDistance);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("EvaporateTime"), EvaporateTime);
          JSON_GetFloatValue(Translate("FollowRate"), FollowRate);
          STAR_OEM_TOOLKIT_MPE::MPE2_Evaporate(DeviceID, PlateHeight, NeedleOffset, WellDepth, EvaporateTime, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_FilterPlatePlaced")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          JSON_GetFloatValue(Translate("FilterHeight"), FilterHeight);
          JSON_GetFloatValue(Translate("NozzleHeight"), NozzleHeight);
          STAR_OEM_TOOLKIT_MPE::MPE2_FilterPlatePlaced(DeviceID, FilterHeight, NozzleHeight, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_FilterPlateRemoved")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_FilterPlateRemoved(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Flush")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          JSON_GetFloatValue(Translate("WellVolume"), WellVolume);
          JSON_GetFloatValue(Translate("FlowRate"), FlowRate);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("WasteContainerID"), WasteContainerID);
          STAR_OEM_TOOLKIT_MPE::MPE2_Flush(DeviceID, WellVolume, FlowRate, WasteContainerID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetContainerCalibration")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SourceID"), SourceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetContainerCalibration(DeviceID, SourceID, CapacityVolume, EmptyReading, FullReading, CalibrationDate, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          CapacityVolume = StrFStr(CapacityVolume);
          EmptyReading = StrIStr(EmptyReading);
          FullReading = StrIStr(FullReading);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, CapacityVolume, EmptyReading, FullReading, CalibrationDate, Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetHeaterStatus")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("Reset"), blnReset);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetCurrentHeaterStatus(DeviceID, blnReset, CurrentEvaporatorTemperature, CurrentGasTemperature, Heating, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          CurrentEvaporatorTemperature = StrFStr(CurrentEvaporatorTemperature);
          CurrentGasTemperature = StrFStr(CurrentGasTemperature);
          Heating = StrIStr(Heating);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, CurrentEvaporatorTemperature, CurrentGasTemperature, Heating, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetHeaterRange")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("Reset"), blnReset);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetHeaterTemperatureRange(DeviceID, blnReset, MinimumEvaporatorTemperature, MaximumEvaporatorTemperature, MinimumGasTemperature, MaximumGasTemperature, TargetTemperature, Heating, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          MinimumEvaporatorTemperature = StrFStr(MinimumEvaporatorTemperature);
          MaximumEvaporatorTemperature = StrFStr(MaximumEvaporatorTemperature);
          MinimumGasTemperature = StrFStr(MinimumGasTemperature);
          MaximumGasTemperature = StrFStr(MaximumGasTemperature);
          TargetTemperature = StrFStr(TargetTemperature);
          Heating = StrIStr(Heating);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, MinimumEvaporatorTemperature, MaximumEvaporatorTemperature, MinimumGasTemperature, MaximumGasTemperature, TargetTemperature, Heating, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetPressureReadings")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetPressureSensorReadings(DeviceID, InputPressureSensor, ManifoldPressureSensor, HighPressureSensor, LowPressureSensor, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          InputPressureSensor = StrFStr(InputPressureSensor);
          ManifoldPressureSensor = StrFStr(ManifoldPressureSensor);
          HighPressureSensor = StrFStr(HighPressureSensor);
          LowPressureSensor = StrFStr(LowPressureSensor);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, InputPressureSensor, ManifoldPressureSensor, HighPressureSensor, LowPressureSensor, Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetTemperatureRange")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetTemperatureRange(DeviceID, MinimumTemperature, MaximumTemperature, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          MinimumTemperature = StrFStr(MinimumTemperature);
          MaximumTemperature = StrFStr(MaximumTemperature);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, MinimumTemperature, MaximumTemperature, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetVacuumStatus")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetVacuumStatus(DeviceID, VacuumActive, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          VacuumActive = StrIStr(VacuumActive);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, VacuumActive, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Initialize")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_Initialize(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_InitializeWithParameters")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("Smart"), Smart);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("WasteContainerID"), WasteContainerID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("VacuumRunTime"), VacuumRunTime);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("DisableVacuumCheck"), DisableVacuumCheck);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_SetSourceConfiguration")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_SetSourceConfiguration(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_GetSourceConfiguration")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_GetSourceConfiguration(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_MeasureEmptyContainer")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SourceID"), SourceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_MeasureEmptyContainer(DeviceID, SourceID, SensorReading, o_stepReturn);
          SensorReading = StrIStr(SensorReading);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, SensorReading, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_MeasureFullContainer")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SourceID"), SourceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_MeasureFullContainer(DeviceID, SourceID, SensorReading, o_stepReturn);
          SensorReading = StrIStr(SensorReading);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, SensorReading, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Prime")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SourceID"), SourceID);
          JSON_GetFloatValue(Translate("WellVolume"), WellVolume);
          JSON_GetFloatValue(Translate("FlowRate"), FlowRate);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("WasteContainerID"), WasteContainerID);
          STAR_OEM_TOOLKIT_MPE::MPE2_Prime(DeviceID, SourceID, WellVolume, FlowRate, WasteContainerID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_ProcessFilterToCollection")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ControlPoints"), ControlPoints);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("ReturnPlate"), ReturnPlate);
          STAR_OEM_TOOLKIT_MPE::MPE2_ProcessFilterToCollectionPlate(DeviceID, ControlPoints, ReturnPlate, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_ProcessFilterToWaste")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ControlPoints"), ControlPoints);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("ReturnPlate"), ReturnPlate);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("WasteContainerID"), WasteContainerID);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("DisableVacuumCheck"), DisableVacuumCheck);
          STAR_OEM_TOOLKIT_MPE::MPE2_ProcessFilterToWasteContainer(DeviceID, ControlPoints, ReturnPlate, WasteContainerID, DisableVacuumCheck, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_Disconnect")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_RetrieveFilterPlate(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_SaveContainerCalibration")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_RetrieveFilterPlate(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_StartContainerCalibration")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SourceID"), SourceID);
          JSON_GetFloatValue(Translate("Volume"), Volume);
          STAR_OEM_TOOLKIT_MPE::MPE2_StartContainerCalibration(DeviceID, SourceID, Volume, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_StartContainerCalibration")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("WasteContainerID"), WasteContainerID);
          JSON_GetFloatValue(Translate("Seconds"), Seconds);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("DisableVacuumCheck"), DisableVacuumCheck);
          STAR_OEM_TOOLKIT_MPE::MPE2_StartVacuum(DeviceID, WasteContainerID, Seconds, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "MPE2_StopVacuum")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT_MPE::MPE2_StopVacuum(DeviceID, o_stepReturn);
          TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TEC_Initialize")
        {
          ControllerID = HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ControllerID"), ControllerID);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          STAR_OEM_TOOLKIT::Inheco_TEC_Initialize(ControllerID, SimulationMode, o_stepReturn);
          TrcTrace(Translate("Inheco TEC Initialize: "), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TEC_StartTempControl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ControllerID"), ControllerID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT::Inheco_TEC_StartTemperatureControl(ControllerID, DeviceID, ErrorCode, o_stepReturn);
          TrcTrace(Translate("Inheco TEC Start Temperature Control:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TEC_SetTarget")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ControllerID"), ControllerID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetFloatProperty(objJSONFromServer, Translate("TargetTemperature"), TargetTemperature);
          STAR_OEM_TOOLKIT::Inheco_TEC_SetTarget(ControllerID, DeviceID, TargetTemperature, o_stepReturn);
          TrcTrace(Translate("Inheco TEC Set Target:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TEC_StopTemperatureControl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ControllerID"), ControllerID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          STAR_OEM_TOOLKIT::Inheco_TEC_StopTemperatureControl(ControllerID, DeviceID, o_stepReturn);
          TrcTrace(Translate("Inheco Stop Temperature Control:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TEC_GetTemp")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ControllerID"), ControllerID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), DeviceID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Selector"), selector);
          STAR_OEM_TOOLKIT::Inheco_TEC_GetTemperature(deviceID, controllerID, selector, temperature, o_stepReturn);
          TrcTrace(Translate("Inheco TEC Terminate:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, temperature, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TEC_Terminate")
        {
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("StopAllDevices"), StopAllDevices);
          STAR_OEM_TOOLKIT::Inheco_TEC_Terminate(StopAllDevices, o_stepReturn);
          TrcTrace(Translate("Inheco TEC Terminate:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TiltModule_Initialize")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ModuleName"), ModuleName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Comport"), Comport);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("TraceLevel"), TraceLevel);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("Simulate"), Simulate);
          STAR_OEM_TOOLKIT::TiltModule_Initialize(ModuleName, Comport, TraceLevel, Simulate, o_stepReturn);
          TrcTrace(Translate("Tilt Module Initialize:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "TiltModule_MoveToPosition")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ModuleName"), ModuleName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Angle"), Angle);
          STAR_OEM_TOOLKIT::TiltModule_MoveToPosition(ModuleName, Angle, o_stepReturn);
          TrcTrace(Translate("Tilt Module Move to Position:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "moveSequence")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("inputSequence"), inputSequence);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          DevGetSequenceRef(ML_STAR, inputSequence, seq);
          seqFirstPosition = SeqGetPositionId(seq);
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          o_stepReturn = Translate("1");
          seqSecondPosition = SeqGetPositionId(seq);
          TrcTrace(seqFirstPosition, seqSecondPosition);
          TrcTrace(Translate("First check"), Translate("Second check"));
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "setLabwareProperty")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LabwareID"), labwareID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("PropertyName"), propertyName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("PropertyValue"), propertyValue);
          LPQ::ADJUST_SetPropertiesForLabwareID(ML_STAR, labwareID, propertyName, propertyValue);
          o_stepReturn = Translate("1");
          TrcTrace(Translate("Set labware ID"), Translate(""));
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_measure")
        {
          JSON_GetFloatValue(Translate("Temperature"), Temperature);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("probePattern"), probePattern);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Measure(ModuleID, Temperature, probePattern, pH_probe_1, pH_probe_2, pH_probe_3, pH_probe_4, o_stepReturn);
          pH_probe_1 = StrFStr(pH_probe_1);
          pH_probe_2 = StrFStr(pH_probe_2);
          pH_probe_3 = StrFStr(pH_probe_3);
          pH_probe_4 = StrFStr(pH_probe_4);
          TrcTrace(Translate("pH Measure"), o_stepReturn);
          TrcTrace(Translate("pH Probe 1"), pH_probe_1);
          TrcTrace(Translate("pH Probe 2"), pH_probe_2);
          TrcTrace(Translate("pH Probe 3"), pH_probe_3);
          TrcTrace(Translate("pH Probe 4"), pH_probe_4);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, pH_probe_1, pH_probe_2, pH_probe_3, pH_probe_4, Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Calibrate_Dyn")
        {
          JSON_GetFloatValue(Translate("CalibrationValue"), CalibrationValue);
          JSON_GetFloatValue(Translate("CalibrationTemperature"), CalibrationTemperature);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("probePattern"), probePattern);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("CalibrationLevel"), CalibrationLevel);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Variance"), Variance);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Timeout"), Timeout);
          STAR_OEM_TOOLKIT_PH::pH_Calibrate_Dynamically(ModuleID, CalibrationLevel, Variance, Timeout, CalibrationValue, CalibrationTemperature, probePattern, o_stepReturn);
          TrcTrace(Translate("pH Calibrate Dynamically"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Calibrate")
        {
          JSON_GetFloatValue(Translate("CalibrationTemperature"), CalibrationTemperature);
          JSON_GetFloatValue(Translate("CalibrationValue"), CalibrationValue);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("probePattern"), probePattern);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("CalibrationLevel"), CalibrationLevel);
          STAR_OEM_TOOLKIT_PH::pH_Calibrate(ModuleID, CalibrationLevel, CalibrationValue, CalibrationTemperature, probePattern, o_stepReturn);
          TrcTrace(Translate("pH Calibrate"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Enable_Extended_Log")
        {
          STAR_OEM_TOOLKIT_PH::pH_Enable_Extended_Log(o_stepReturn);
          TrcTrace(Translate("pH Measure"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Get_Last_Error")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Get_Last_Error(ModuleID, o_stepReturn2, o_stepReturn);
          TrcTrace(Translate("pH Get Last Error"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Comport"), Comport);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          STAR_OEM_TOOLKIT_PH::pH_Initialize(Comport, SimulationMode, o_stepReturn2, o_stepReturn);
          o_stepReturn2 = StrIStr(o_stepReturn2);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("pH Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Measure_Dynamically")
        {
          JSON_GetFloatValue(Translate("Temperature"), Temperature);
          JSON_GetFloatValue(Translate("Precision"), Precision);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("probePattern"), probePattern);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Timeout"), Timeout);
          STAR_OEM_TOOLKIT_PH::pH_Measure_Dynamically(ModuleID, Temperature, Precision, Timeout, probePattern, pH_probe_1, pH_probe_2, pH_probe_3, pH_probe_4, o_stepReturn);
          pH_probe_1 = StrFStr(pH_probe_1);
          pH_probe_2 = StrFStr(pH_probe_2);
          pH_probe_3 = StrFStr(pH_probe_3);
          pH_probe_4 = StrFStr(pH_probe_4);
          TrcTrace(Translate("pH Measure"), o_stepReturn);
          TrcTrace(Translate("pH Probe 1"), pH_probe_1);
          TrcTrace(Translate("pH Probe 2"), pH_probe_2);
          TrcTrace(Translate("pH Probe 3"), pH_probe_3);
          TrcTrace(Translate("pH Probe 4"), pH_probe_4);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, pH_probe_1, pH_probe_2, pH_probe_3, pH_probe_4, Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Request_Battery")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Request_Battery_Data(ModuleID, ReplacementDate, ChargeCounter, BatteryCondition, ActualCharge, o_stepReturn);
          TrcTrace(Translate("pH Battery Data"), o_stepReturn);
          ChargeCounter = StrIStr(ChargeCounter);
          BatteryCondition = StrIStr(BatteryCondition);
          ActualCharge = StrIStr(ActualCharge);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, ReplacementDate, ChargeCounter, BatteryCondition, ActualCharge, Translate("0"), Translate("0"), Translate("0"), Translate("0"), id);
        }
        if (commandFromServer == "pH_Request_Calibration")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ProbeNumber"), ProbeNumber);
          STAR_OEM_TOOLKIT_PH::pH_Request_Calibration_Values(ModuleID, ProbeNumber, pHLowValue, pHLowVoltage, pHHighValue, pHHighVoltage, CalibrationTemperature, CalibrationOffset, CalibrationSlope, CalibrationSlopeRatio, o_stepReturn);
          pHLowValue = StrFStr(pHLowValue);
          pHLowVoltage = StrFStr(pHLowVoltage);
          pHHighValue = StrFStr(pHHighValue);
          pHHighVoltage = StrFStr(pHHighVoltage);
          CalibrationTemperature = StrFStr(CalibrationTemperature);
          CalibrationOffset = StrFStr(CalibrationOffset);
          CalibrationSlope = StrFStr(CalibrationSlope);
          CalibrationSlopeRatio = StrFStr(CalibrationSlopeRatio);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("pH Request Calibration Values"), o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, pHLowValue, pHLowVoltage, pHHighValue, pHHighVoltage, CalibrationTemperature, CalibrationOffset, CalibrationTemperature, CalibrationSlopeRatio, id);
        }
        if (commandFromServer == "pH_Request_Probe_Data")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Request_Probe_Data(ModuleID, ReplacementDate, MeasurementCounter_Probe_1, MeasurementCounter_Probe_2, MeasurementCounter_Probe_3, MeasurementCounter_Probe_4, o_stepReturn);
          MeasurementCounter_Probe_1 = StrIStr(MeasurementCounter_Probe_1);
          MeasurementCounter_Probe_2 = StrIStr(MeasurementCounter_Probe_2);
          MeasurementCounter_Probe_3 = StrIStr(MeasurementCounter_Probe_3);
          MeasurementCounter_Probe_4 = StrIStr(MeasurementCounter_Probe_4);
          TrcTrace(Translate("pH Probe Data"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, ReplacementDate, MeasurementCounter_Probe_1, MeasurementCounter_Probe_2, MeasurementCounter_Probe_3, MeasurementCounter_Probe_4, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Request_Technical_Data")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("HardwareNumber"), HardwareNumber);
          STAR_OEM_TOOLKIT_PH::pH_Request_Technical_Data(ModuleID, HardwareNumber, PartNumber, Revision, SerialNumber, o_stepReturn);
          HardwareNumber = StrIStr(HardwareNumber);
          PartNumber = StrIStr(PartNumber);
          Revision = StrIStr(Revision);
          SerialNumber = StrIStr(SerialNumber);
          TrcTrace(Translate("pH Technical Data"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, PartNumber, Revision, SerialNumber, id);
        }
        if (commandFromServer == "pH_Request_Voltage_Data")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Selector"), Selector);
          STAR_OEM_TOOLKIT_PH::pH_Request_Voltage_Data(ModuleID, Selector, VoltageData, o_stepReturn);
          TrcTrace(Translate("pH Voltage Data"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, VoltageData, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Battery_Replacement_Date")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Year"), Year);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Month"), Month);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Day"), Day);
          STAR_OEM_TOOLKIT_PH::pH_Set_Battery_Replacement_Date(ModuleID, Year, Month, Day, o_stepReturn);
          TrcTrace(Translate("Set Battery Replacement"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Charge_Parameters")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("Charge"), Charge);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("AutoCharge"), AutoCharge);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("AutoChargeLevel"), AutoChargeLevel);
          STAR_OEM_TOOLKIT_PH::pH_Set_Charge_Parameters(ModuleID, Charge, AutoCharge, AutoChargeLevel, o_stepReturn);
          TrcTrace(Translate("pH Set Charge Parameters"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Probe_Replacement_Date")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Probe"), Probe);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Year"), Year);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Month"), Month);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Day"), Day);
          STAR_OEM_TOOLKIT_PH::pH_Set_Probe_Replacement_Date(ModuleID, Probe, Year, Month, Day, o_stepReturn);
          TrcTrace(Translate("pH Set Probe Replacement Date"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Shutdown")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Mode"), Mode);
          STAR_OEM_TOOLKIT_PH::pH_Set_Shutdown(ModuleID, Mode, o_stepReturn);
          TrcTrace(Translate("pH Set Shutdown"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Technical_Data")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("HardwareNumber"), HardwareNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("PartNumber"), PartNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Revision"), Revision);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("SerialNumber"), SerialNumber);
          STAR_OEM_TOOLKIT_PH::pH_Set_Technical_Data(ModuleID, HardwareNumber, PartNumber, Revision, SerialNumber, o_stepReturn);
          TrcTrace(Translate("pH Set Technical Data"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Trace_Level")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("TraceLevel"), TraceLevel);
          STAR_OEM_TOOLKIT_PH::pH_Set_Trace_Level(ModuleID, TraceLevel, o_stepReturn);
          TrcTrace(Translate("pH Set Trace Level"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Sleep")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Sleep(ModuleID, o_stepReturn);
          TrcTrace(Translate("pH Sleep"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Terminate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Terminate(ModuleID, o_stepReturn);
          TrcTrace(Translate("pH Terminate"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Wakeup")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Wakeup(ModuleID, o_stepReturn);
          TrcTrace(Translate("pH Wakeup"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Washer_Initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Comport"), Comport);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ModuleName"), ModuleName);
          STAR_OEM_TOOLKIT_PH::pH_Washer_Initialize(ML_STAR, Comport, ModuleName, SimulationMode, ModuleID, o_stepReturn);
          ModuleID = StrIStr(ModuleID);
          TrcTrace(Translate("pH Wakeup"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, ModuleID, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Washer_Set_Trace")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("TraceLevel"), TraceLevel);
          STAR_OEM_TOOLKIT_PH::pH_Washer_Set_Trace(ModuleID, TraceLevel, o_stepReturn);
          TrcTrace(Translate("pH Wakeup"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Washer_Wash")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("CycleNumber"), CycleNumber);
          STAR_OEM_TOOLKIT_PH::pH_Washer_Wash(ML_STAR, ModuleID, CycleNumber, o_stepReturn);
          TrcTrace(Translate("pH Washer Wash"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Washer_Terminate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Washer_Terminate(ML_STAR, ModuleID, o_stepReturn);
          TrcTrace(Translate("pH Washer Terminate"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Dryer_Initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Comport"), Comport);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ModuleName"), ModuleName);
          STAR_OEM_TOOLKIT_PH::pH_Dryer_Initialize(ML_STAR, Comport, ModuleName, SimulationMode, ModuleID, o_stepReturn);
          ModuleID = StrIStr(ModuleID);
          TrcTrace(Translate("pH Dryer Initialize"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, ModuleID, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Dryer_Set_Trace")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("TraceLevel"), TraceLevel);
          STAR_OEM_TOOLKIT_PH::pH_Dryer_Set_Trace(ModuleID, TraceLevel, o_stepReturn);
          TrcTrace(Translate("pH Set Dryer Trace Level"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Start_Drying")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Dryer_StartDrying(ML_STAR, ModuleID, o_stepReturn);
          TrcTrace(Translate("pH Dryer Start Drying"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Stop_Drying")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          STAR_OEM_TOOLKIT_PH::pH_Dryer_StopDrying(ML_STAR, ModuleID, o_stepReturn);
          TrcTrace(Translate("pH Dryer Stop Drying"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Dryer_Terminate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          Hamilton_pH_Station_Dryer_Module::Terminate(ML_STAR, ModuleID);
          TrcTrace(Translate("pH Terminate"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("PortNumber"), PortNumber);
          onerror goto errLabel_7 ;
          err.Clear();
          HAMILTON_PH_MODULE_CONTROLLER::Initialize(ML_STAR, PortNumber, DefaultTemperature, ModuleID);
          o_stepReturn = Translate("1");
          errLabel_7 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          ModuleID = StrIStr(ModuleID);
          TrcTrace(Translate("pH Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, ModuleID, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_MeasureCycle")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqMeasurement"), seqMeasurement);
          if (seqMeasurement == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("MeasurePositions"), MeasurePositions);
            BuildTempSequenceFromPositions(MeasurePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, seqMeasure, seq);
          }
          JSON_GetFloatValue(Translate("MeasureHeight"), MeasureHeight);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ProbePattern"), ProbePattern);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("MeasureTime"), MeasureTime);
          JSON_GetFloatValue(Translate("Temperature"), Temperature);
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::MeasureCycle(ML_STAR, ModuleID, seq, MeasureHeight, ProbePattern, MeasureTime, Temperature, arrpHValues);
          ArrayToString(arrpHValues, flt_pHValues);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("Measure Cycle"), o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, flt_pHValues, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Calibrate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqModule"), Module);
          DevGetSequenceRef(ML_STAR, Module, seqModule);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqCalibration1"), Calibration1);
          DevGetSequenceRef(ML_STAR, Calibration1, seqCalibration1);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqCalibration2"), Calibration2);
          DevGetSequenceRef(ML_STAR, Calibration2, seqCalibration2);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqReference"), Reference);
          DevGetSequenceRef(ML_STAR, Reference, seqReference);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("CalibrationTime"), CalibrationTime);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("MeasureTime"), MeasureTime);
          JSON_GetFloatValue(Translate("MeasureHeight"), MeasureHeight);
          JSON_GetFloatValue(Translate("CalibrationValue1"), CalibrationValue1);
          JSON_GetFloatValue(Translate("CalibrationValue2"), CalibrationValue2);
          JSON_GetFloatValue(Translate("CalibrationValueRef"), CalibrationValueRef);
          JSON_GetFloatValue(Translate("TempSoln1"), TempSoln1);
          JSON_GetFloatValue(Translate("TempSoln2"), TempSoln2);
          JSON_GetFloatValue(Translate("TempSolnRef"), TempSolnRef);
          JSON_GetFloatValue(Translate("CalibrateDynamically"), blnCalibrateDynamically);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("probePattern"), probePattern);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("CalibrationLevel"), CalibrationLevel);
          onerror goto errLabel_8 ;
          err.Clear();
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::Calibrate(ML_STAR, ModuleID, seqModule, seqCalibration1, seqCalibration2, seqReference, CalibrationTime, MeasureTime, MeasureHeight, CalibrationValue1, CalibrationValue2, CalibrationValueRef, TempSoln1, TempSoln2, TempSolnRef, blnCalibrateDynamically, arrCalibrationSlopeRatios, arrpHValuesReferenceSolution);
          o_stepReturn = Translate("1");
          errLabel_8 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          ArrayToString(arrCalibrationSlopeRatios, CalibrationSlopeRatios);
          ArrayToString(arrpHValuesReferenceSolution, pHValuesReferenceSolution);
          TrcTrace(Translate("pH Calibrate"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Dry")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          onerror goto errLabel_9 ;
          err.Clear();
          HAMILTON_PH_MODULE_CONTROLLER::Dry(ML_STAR, ModuleID);
          o_stepReturn = Translate("1");
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("pH Measure"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Wash")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          onerror goto errLabel_10 ;
          err.Clear();
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::Wash(ML_STAR, ModuleID);
          o_stepReturn = Translate("1");
          errLabel_10 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("pH Measure"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_SetParameters")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqGripper"), Gripper);
          DevGetSequenceRef(ML_STAR, Gripper, seqGripper);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqWashPosition"), WashPosition);
          DevGetSequenceRef(ML_STAR, WashPosition, seqWashPosition);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqDryPosition"), DryPosition);
          DevGetSequenceRef(ML_STAR, DryPosition, seqDryPosition);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("TransportChannel"), TransportChannel);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("WashCycles"), WashCycles);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DryCycles"), DryCycles);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DryTime"), DryTime);
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::SetParameter(ML_STAR, seqGripper, seqWashPosition, seqDryPosition, TransportChannel, WashCycles, DryCycles, DryTime);
          TrcTrace(Translate("pH Measure"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Park")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqModule"), Module);
          DevGetSequenceRef(ML_STAR, Module, seqModule);
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::ParkModule(ML_STAR, ModuleID, seqModule);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("pH Battery Data"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Pickup")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("seqModule"), Module);
          DevGetSequenceRef(ML_STAR, Module, seqModule);
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::PickupModule(ML_STAR, ModuleID, seqModule);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("pH Battery Data"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_ExtendedLog")
        {
          HAMILTON_PH_MODULE_CONTROLLER::EnableExtendedLog();
          TrcTrace(Translate("pH Probe Data"), 1);
          SendStepReturnToServer_EightOutputs(commandFromServer, 1, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_LoadLastConfig")
        {
          onerror goto errLabel_11 ;
          err.Clear();
          HAMILTON_PH_MODULE_CONTROLLER::LastUsedConfigurationLoad(BluetoothPort, NumWashCycles, NumDryCycles, DryTime);
          o_stepReturn = Translate("1");
          errLabel_11 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          BluetoothPort = StrIStr(BluetoothPort);
          NumWashCycles = StrIStr(NumWashCycles);
          NumDryCycles = StrIStr(NumDryCycles);
          DryTime = StrIStr(DryTime);
          TrcTrace(Translate("pH Technical Data"), 1);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, BluetoothPort, NumWashCycles, NumDryCycles, DryTime, Translate(""), Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_SaveLastConfig")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("BluetoothPort"), BluetoothPort);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("NumWashCycles"), NumWashCycles);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("NumDryCycles"), NumDryCycles);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DryTime"), DryTime);
          onerror goto errLabel_12 ;
          err.Clear();
          HAMILTON_PH_MODULE_CONTROLLER::LastUsedConfigurationSave(BluetoothPort, NumWashCycles, NumDryCycles, DryTime);
          o_stepReturn = Translate("1");
          errLabel_12 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = Translate("0");
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("pH Voltage Data"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Set_Battery_Replacement_Date")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Year"), Year);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Month"), Month);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Day"), Day);
          STAR_OEM_TOOLKIT_PH::pH_Set_Battery_Replacement_Date(ModuleID, Year, Month, Day, o_stepReturn);
          TrcTrace(Translate("Set Battery Replacement"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "pH_Controller_Terminate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ModuleID"), ModuleID);
          o_stepReturn = HAMILTON_PH_MODULE_CONTROLLER::Terminate(ModuleID);
          TrcTrace(Translate("pH Terminate"), o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Initialize")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("DeviceName"), DeviceName);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("AdapterDeviceID"), AdapterDeviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("NodeName"), NodeName);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), SimulationMode);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("AlwaysInitialize"), AlwaysInitialize);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_Initialize(Label, NodeName, SimulationMode, AlwaysInitialize, o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Centrifuge")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("CloseCoverAtEnd"), CloseCoverAtEnd);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("PresentPosition"), intPresentPosition);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Direction"), Direction);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ArraySpeed"), ArrSpeed);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ArrayAcceleration"), ArrAcceleration);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ArrayDuration"), ArrDuration);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Deceleration"), Deceleration);
          StrTokenize(ArrDuration, Translate(","), i_ArrDuration, 0);
          StrTokenize(ArrSpeed, Translate(","), i_ArrSpeed, 0);
          StrTokenize(ArrAcceleration, Translate(","), i_ArrAcceleration, 0);
          StrArrayToInts(i_ArrAcceleration, i_ArrAcceleration);
          StrArrayToInts(i_ArrSpeed, i_ArrSpeed);
          StrArrayToInts(i_ArrDuration, i_ArrDuration);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_Centrifuge(Label, CloseCoverAtEnd, intPresentPosition, Direction, i_ArrSpeed, i_ArrAcceleration, i_ArrDuration, Deceleration, o_stepReturn);
          o_stepReturn = StrIStr(o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_GetStatus")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_GetRotationStatus(Label, RotorDriveRunning, ProfileStatus, TimeLeft, CurrentSpeed, SpeedSensorTrip, GravitySensorTrip, TemperatureSensorTrip, o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer_EightOutputs(commandFromServer, o_stepReturn, RotorDriveRunning, ProfileStatus, TimeLeft, CurrentSpeed, SpeedSensorTrip, GravitySensorTrip, TemperatureSensorTrip, Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Open")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_CoverOpen(Label, o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Close")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_CoverClose(Label, o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Start")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Direction"), Direction);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Speed"), Speed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Acceleration"), Acceleration);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("MaxRunTime"), MaxRunTime);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_StartCentrifuge(Label, Direction, Speed, Acceleration, MaxRunTime, o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Stop")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Decelleration"), Decelleration);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_StopCentrifuge(Label, Decelleration, o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "Centrifuge_Terminate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("Label"), Label);
          STAR_OEM_TOOLKIT_CENTRIFUGE::HamiltonCentrifuge_Terminate(Label, o_stepReturn);
          TrcTrace(Translate("Centrifuge Initialize"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "BarcodeReader_Initialize")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ComPort"), Comport);
          STAR_OEM_TOOLKIT::BarcodeReader_Initialize(Comport, o_stepReturn);
          TrcTrace(Translate("Barcode initialize:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "BarcodeReader_Read")
        {
          STAR_OEM_TOOLKIT::BarcodeReader_Read(barcode);
          TrcTrace(Translate("BarcodeReader_Read"), barcode);
          SendStepReturnToServer(commandFromServer, barcode, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ODTC_Connect")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LocalIP"), localIP);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("DeviceIP"), deviceIP);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("DevicePort"), devicePort);
          HSLJsonLib::GetBooleanProperty(objJSONFromServer, Translate("SimulationMode"), simulationMode);
          onerror goto errLabel_13 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::Connect(localIP, deviceIP, devicePort, simulationMode, deviceID, message);
          o_stepReturn = 1;
          errLabel_13 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceID, message, Translate(""), id);
        }
        if (commandFromServer == "ODTC_CloseDoor")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DevicePort"), devicePort);
          onerror goto errLabel_14 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::CloseDoor(deviceID, lockID, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_14 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceID, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ODTC_Terminate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          onerror goto errLabel_15 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::GetStatus(deviceID, Translate(""), o_stepReturn2, Translate(""), Translate(""), o_stepReturn3, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_15 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          o_stepReturn = 1;
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "ODTC_Abort")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DevicePort"), devicePort);
          onerror goto errLabel_16 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::Abort(deviceID, lockID, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_16 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceID, message, Translate(""), id);
        }
        if (commandFromServer == "ODTC_DownloadProtocol")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ProtocolFile"), protocolFile);
          onerror goto errLabel_17 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::DownloadProtocol(deviceID, lockID, protocolFile, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_17 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ODTC_ExecuteMethod")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("MethodName"), methodName);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("Priority"), priority);
          onerror goto errLabel_18 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::ExecuteMethod(deviceID, lockID, methodName, priority, duration, requestID, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_18 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, duration, requestID, Translate(""), id);
        }
        if (commandFromServer == "ODTC_Initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          onerror goto errLabel_19 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::Initialize(deviceID, lockID, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_19 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ODTC_OpenDoor")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          onerror goto errLabel_20 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::OpenDoor(deviceID, lockID, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_20 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ODTC_waitForEndOfExecuteMethod")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("LockID"), lockID);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("RequestID"), requestID);
          onerror goto errLabel_21 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(deviceID, timeout, requestID, o_stepReturn, Translate(""));
          o_stepReturn = 1;
          errLabel_21 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "ODTC_Terminate")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("DeviceID"), deviceID);
          onerror goto errLabel_22 ;
          err.Clear();
          o_stepReturn = 0;
          Inheco_ODTC::Standard::Terminate(deviceID, Translate(""));
          o_stepReturn = 1;
          errLabel_22 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          o_stepReturn = 1;
          TrcTrace(Translate("ODTC Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_BeginMonitoring")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingToleranceRange"), shakingToleranceRange);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sampleInterval"), sampleInterval);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("action"), action);
          o_stepReturn = 1;
          onerror goto errLabel_23 ;
          err.Clear();
          HSLHamHeaterShaker::BeginMonitoring(deviceNumber, shakingToleranceRange, sampleInterval, action);
          errLabel_23 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS create STAR device step return:"), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_CreateStarDevice")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("usedNode"), usedNode);
          onerror goto errLabel_24 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, usedNode, deviceNumber);
          o_stepReturn = 1;
          errLabel_24 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS create STAR device step return:"), o_stepReturn);
          TrcTrace(Translate("HHS create STAR device step return2 (device number):"), deviceNumber);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceNumber, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_CreateUSBDevice")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("usedNode"), usedNode);
          onerror goto errLabel_25 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::CreateUsbDevice(usedNode, deviceNumber);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_25 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS create USB device step return:"), o_stepReturn);
          TrcTrace(Translate("HHS create USB device step return2 (device number):"), deviceNumber);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceNumber, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_EndMonitoring")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_26 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::EndMonitoring(deviceNumber, monitorResult);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_26 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS End Monitoring step return:"), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, monitorResult, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetFirmwareVersion")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_27 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetFirmwareVersion(deviceNumber, firmwareVersion);
          errLabel_27 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, firmwareVersion, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetSerialNumber")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_28 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetSerialNumber(deviceNumber, serialNumber);
          errLabel_28 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, serialNumber, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetShakerParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_29 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetShakerParameter(deviceNumber, o_stepReturn2, o_stepReturn3);
          errLabel_29 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "HHS_GetShakerSpeed")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_30 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::GetShakerSpeed(deviceNumber, o_stepReturn2);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_30 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "HHS_GetTempParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_31 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetTempParameter(deviceNumber, o_stepReturn2, o_stepReturn3, o_stepReturn4);
          errLabel_31 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, id);
        }
        if (commandFromServer == "HHS_GetTemperature")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_32 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::GetTemperature(deviceNumber, o_stepReturn2);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_32 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetTemperatureState")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_33 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::GetTemperatureState(deviceNumber, o_stepReturn2);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_33 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SendFirmwareCommand")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("command"), command);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("parameter"), parameter);
          onerror goto errLabel_34 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::SendFirmwareCommand(deviceNumber, command, parameter);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_34 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetPlateLock")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("plateLock"), plateLock);
          onerror goto errLabel_35 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::SetPlateLock(deviceNumber, plateLock);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_35 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetShakerParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingDirection"), shakingDirection);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingAccRamp"), shakingAccRamp);
          onerror goto errLabel_36 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetShakerParameter(deviceNumber, shakingDirection, shakingAccRamp);
          errLabel_36 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetSimulation")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("simulate"), simulate);
          onerror goto errLabel_37 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetSimulation(simulate);
          errLabel_37 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetTempParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("startTimeout"), startTimeout);
          HSLJsonLib::GetFloatProperty(objJSONFromServer, Translate("toleranceRange"), toleranceRange);
          HSLJsonLib::GetFloatProperty(objJSONFromServer, Translate("securityRange"), securityRange);
          onerror goto errLabel_38 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetTempParameter(deviceNumber, startTimeout, toleranceRange, securityRange);
          errLabel_38 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetUSBTrace")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("trace"), intTrace);
          onerror goto errLabel_39 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetUSBTrace(intTrace);
          errLabel_39 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartAllShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          onerror goto errLabel_40 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StartAllShaker(shakingSpeed);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_40 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartAllShakerTimed")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingTime"), shakingTime);
          onerror goto errLabel_41 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StartAllShakerTimed(shakingSpeed, shakingTime);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_41 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          onerror goto errLabel_42 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StartShaker(deviceNumber, shakingSpeed);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_42 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartShakerTimed")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingTime"), shakingTime);
          onerror goto errLabel_43 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StartShakerTimed(deviceNumber, shakingSpeed, shakingTime);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_43 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartTempCtrl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("temperature"), temperature);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("waitForTempReached"), waitForTempReached);
          onerror goto errLabel_44 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StartTempCtrl(deviceNumber, temperature, waitForTempReached);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_44 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StopAllShaker")
        {
          onerror goto errLabel_45 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StopAllShaker();
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_45 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StopShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_46 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StopShaker(deviceNumber);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_46 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StopTempCtrl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_47 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::StopTempCtrl(deviceNumber);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_47 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_Terminate")
        {
          onerror goto errLabel_48 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::Terminate();
          errLabel_48 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_WaitForShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_49 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::WaitForShaker(deviceNumber);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_49 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_WaitForTempCtrl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_50 ;
          err.Clear();
          hssErrCode = HSLHamHeaterShaker::WaitForTempCtrl(deviceNumber);
          o_stepReturn = ConvertHSSErrCode(hssErrCode);
          errLabel_50 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "CORE96WashEmpty")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("refillAfterEmpty"), refillAfterEmpty);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("chamber1WashLiquid"), chamber1WashLiquid);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("chamber1LiquidChange"), chamber1LiquidChange);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("chamber2WashLiquid"), chamber2WashLiquid);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("chamber2LiquidChange"), chamber2LiquidChange);
          onerror goto errLabel_51 ;
          err.Clear();
          o_stepReturn = 0;
          ML_STAR._19AC7FF8_2C7A_4555_AE3B_3A8CB9466EF3("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"); // Head96EmptyWasher
          errLabel_51 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          o_stepReturn = 1;
          TrcTrace(Translate("Washer Return: "), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        HSLJsonLib::Release(objJSONFromServer);
        if (commandFromServer == "end")
        {
          SendTextMessageToServer(Translate("Good Bye!"));
          break;
        }
      }
    }
    HSLHttp::Release(objHttp);
    STAR_OEM_TOOLKIT::_ExitLibrary();
    STAR_OEM_TOOLKIT_PH::_ExitLibrary();
    STAR_OEM_TOOLKIT_CENTRIFUGE::_ExitLibrary();
    STAR_OEM_TOOLKIT_MPE::_ExitLibrary();
    HAMILTON_PH_MODULE_CONTROLLER::_ExitLibrary();
    LPQ::_ExitLibrary();
  } }
